<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p1="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>-7</Y>
          <Z>7</Z>
        </Eye>
        <Target>
          <X>-0</X>
          <Y>-0</Y>
          <Z>-1</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>-90</RangeMin>
        <RangeMax>90</RangeMax>
        <Count>10</Count>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:DegreeToRadian" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Variation">
          <p1:Count>5</p1:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>0</RangeMin>
        <RangeMax>180</RangeMax>
        <Count>10</Count>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:DegreeToRadian" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Variation">
          <p1:Count>5</p1:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as Latitude,
Item2 as Longitude)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item2 * Math.Cos(Item1.Longitude) * Math.Sin(Item1.Latitude) as X,
Item2 * Math.Sin(Item1.Longitude) * Math.Sin(Item1.Latitude) as Y,
Item2 * Math.Cos(Item1.Latitude) as Z)</scr:Expression>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="TranslationX" Selector="Item2.X" />
                <Property Name="TranslationY" Selector="Item2.Y" />
                <Property Name="TranslationZ" Selector="Item2.Z" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>1.91511106</TranslationX>
              <TranslationY>-3.31706977</TranslationY>
              <TranslationZ>3.213938</TranslationZ>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ScaleZ>1</ScaleZ>
              <MeshName>Plane</MeshName>
              <Ambient>
                <X>0.2</X>
                <Y>0.2</Y>
                <Z>0.2</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="17" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>