<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>raw_acq</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>video_file</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties>
            <cv:CapturePropertyAssignment>
              <cv:Property>Fps</cv:Property>
              <cv:Value>30</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameWidth</cv:Property>
              <cv:Value>640</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameHeight</cv:Property>
              <cv:Value>480</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Brightness</cv:Property>
              <cv:Value>100</cv:Value>
            </cv:CapturePropertyAssignment>
          </cv:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>12</cv:X>
            <cv:Y>84</cv:Y>
            <cv:Width>276</cv:Width>
            <cv:Height>258</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>video_file</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>timestamps_.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>raw_acq_timestamps_.avi</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>video_file</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>movie_.avi</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_{1}</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>raw_acq_movie_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>S32</dsp:Depth>
          <dsp:Scale>0.1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Buffer">
          <rx:Count>10</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>U16</dsp:Depth>
          <dsp:Scale>0.1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="13" Label="Source1" />
      <Edge From="6" To="12" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="24" Label="Source2" />
      <Edge From="13" To="19" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>