<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:CommandSubject.bonsai">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="HarpSavePath" Category="Logging" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\data\PZAH6.4b\S20220729\R134624_SpheresPermTubeReward\PZAH6.4b_S20220729_R134624_SpheresPermTubeReward_harpmessage.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:MulticastTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>Input</p1:Type>
        <p1:Mask>Port1</p1:Mask>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>LickDetection</Name>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>RegisterAnalogInput</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>photodiode</Name>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>QuadratureCounter</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalculateDistance</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Buffer">
                <rx:Count>2</rx:Count>
                <rx:Skip>1</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>diffence</scr:Name>
              <scr:Expression>it[0]-it[1]</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CutArtefact</scr:Name>
              <scr:Expression>new(
(it &gt; 60000)? (it-65536) : ((it&lt;-60000)? (it+65536) : it) as step
) </scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>step</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="GroupWorkflow">
              <Name>README&gt;&gt;</Name>
              <Description>Change the order in "difference" when putting rotary encoder at different side</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Mouse Distance</Name>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>Input</p1:Type>
        <p1:Mask>Port0</p1:Mask>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>SIFrameTrigger</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Int32">
        <Name>RewardDuration</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>250</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>PulsePeriod</p1:Type>
        <p1:Mask>Poke2Valve</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="PublishSubject" TypeArguments="sys:Boolean">
        <Name>Reward</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>false</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>ToggleOutput</p1:Type>
        <p1:Mask>Poke2Valve</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:TimestampSubject.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="PublishSubject" TypeArguments="sys:Boolean">
        <Name>DO0</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>false</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>ToggleOutput</p1:Type>
        <p1:Mask>Digital0</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="1" To="11" Label="Source1" />
      <Edge From="1" To="14" Label="Source1" />
      <Edge From="2" To="4" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>