<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="WindowState" />
        <Property Name="DisplayDevice" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>D:\code\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn1.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn2</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn2.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn3</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn3.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>fwn4</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\fwn4.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>grayEnd</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\grayEnd.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>horGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\horGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>plaid</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\plaid.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>vertGrat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Textures\vertGrat.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ScreenCalibFile" Category="Calibrations" />
        <Property Name="GammaCalibFile" Category="Calibrations" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalibrationFiles</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="ScreenCalibFile" Category="Calibration" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>D:\code\Calibrations\ScreenCalibration\calibration_data\Ronan_Cottage_2p\210406\monitor_calibration.csv</io:FileName>
              <io:ListSeparator>,</io:ListSeparator>
              <io:ScanPattern>%f</io:ScanPattern>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it[0] as Screen1_params,
it[1] as Screen2_params,
it[2] as Screen3_params,
it[3] as Screen4_params
)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Screen1_params</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it[0] as Height,
it[1] as Width,
it[2] as RotationX,
-it[3] as RotationY,
it[4] as RotationZ,
it[5] as TranslationX,
it[6] as TranslationY,
-it[7] as TranslationZ,
it[8] as ViewportWidth,
it[9] as ViewportX
)

</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Screen1pos</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Screen2_params</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it[0] as Height,
it[1] as Width,
it[2] as RotationX,
-it[3] as RotationY,
it[4] as RotationZ,
it[5] as TranslationX,
it[6] as TranslationY,
-it[7] as TranslationZ,
it[8] as ViewportWidth,
it[9] as ViewportX
)

</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Screen2pos</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Screen3_params</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it[0] as Height,
it[1] as Width,
it[2] as RotationX,
-it[3] as RotationY,
it[4] as RotationZ,
it[5] as TranslationX,
it[6] as TranslationY,
-it[7] as TranslationZ,
it[8] as ViewportWidth,
it[9] as ViewportX
)

</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Screen3pos</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Screen4_params</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it[0] as Height,
it[1] as Width,
it[2] as RotationX,
-it[3] as RotationY,
it[4] as RotationZ,
it[5] as TranslationX,
it[6] as TranslationY,
-it[7] as TranslationZ,
it[8] as ViewportWidth,
it[9] as ViewportX
)

</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Screen4pos</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="GammaCalibFile" Category="Calibration" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210305\gamma_calibration.csv</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%s</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it[0] as Screen1_gammalut,
it[1] as Screen2_gammalut,
it[2] as Screen3_gammalut,
it[3] as Screen4_gammalut
)</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>GammaLut</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="3" To="13" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetMouseZ</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Mouse Distance</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="EncoderCPR" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>4096</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="WheelDiameter" Description="in cm" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1 * (2*Math.PI*(Item3/2)) / Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZ</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>InitialDelaySphere</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>CloseLoopDuration</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="DueTime" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="gl:Timer">
                  <gl:DueTime>PT15S</gl:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ReplaySubject">
                <Name>MouseZClose</Name>
                <BufferSize xsi:nil="true" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZ</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PublishSubject">
                <Name>MouseZ Close&amp;Interval</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OpenLoopStartTime</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="DueTime" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="gl:Timer">
                  <gl:DueTime>PT20S</gl:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZ</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OpenLoopStartTime</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="DueTime" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="gl:Timer">
                  <gl:DueTime>PT20S</gl:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Sample" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="BehaviorSubject">
                <Name>MouseZOpenStart</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZClose</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OpenLoopStartTime</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="DueTime" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="gl:Delay">
                  <gl:DueTime>PT20S</gl:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZ Close&amp;Interval</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZOpenStart</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="BehaviorSubject">
                <Name>EyeZ</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="18" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="25" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="26" To="30" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="35" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="38" Label="Source1" />
            <Edge From="36" To="40" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>EyeZ</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Z" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Z>0</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ClearColor" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetViewports</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateViewportState">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Width>1</gl:Width>
                <gl:Height>1</gl:Height>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Screen1pos</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Screen2pos</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Screen3pos</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Screen4pos</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>GammaLut</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Screen1_gammalut</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>GammaLut</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Screen2_gammalut</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>GammaLut</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Screen3_gammalut</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>GammaLut</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Screen4_gammalut</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Screen1pos</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Screen2pos</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Screen3pos</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Screen4pos</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Eye" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Eye>
              <NearClip>0.1</NearClip>
              <FarClip>1000</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ClearColor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderCubemap">
                <gl:RenderState />
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:FaceSize xsi:nil="true" />
                <gl:InternalFormat>Rgb</gl:InternalFormat>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Item2.Width" />
                <Property Name="Height" Selector="Item2.Height" />
                <Property Name="Rotation" Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ" />
                <Property Name="Translation" Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>29.296875</Width>
              <Height>52.0833321</Height>
              <Rotation>
                <X>0.0360390469</X>
                <Y>-87.6625443</Y>
                <Z>0.4738361</Z>
              </Rotation>
              <Translation>
                <X>-27</X>
                <Y>-0.11900000274181366</Y>
                <Z>0.79100000858306885</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="GammaLut" Selector="Item2" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GammaCorrection</Name>
              <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateViewportState">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Width>1</gl:Width>
                      <gl:Height>1</gl:Height>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>ClearColor</MemberName>
                    <Name>ClearColor</Name>
                    <Category>Misc</Category>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderTexture">
                      <gl:RenderState />
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgb</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>GammaLut</Name>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:LoadImage,sys:String">
                    <MemberName>FileName</MemberName>
                    <Value>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp</Value>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LoadImage">
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp</gl:FileName>
                      <gl:ColorType>Unchanged</gl:ColorType>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture1</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:DrawMesh">
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:MeshName>ViewportQuad</gl:MeshName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="X" Selector="Item2.ViewportX" />
                  <Property Name="Width" Selector="Item2.ViewportWidth" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Item2.Width" />
                <Property Name="Height" Selector="Item2.Height" />
                <Property Name="Rotation" Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ" />
                <Property Name="Translation" Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>29.296875</Width>
              <Height>52.0833321</Height>
              <Rotation>
                <X>0.103132404</X>
                <Y>-27.1009026</Y>
                <Z>1.071431</Z>
              </Rotation>
              <Translation>
                <X>-13.300000190734863</X>
                <Y>0.29100000858306885</Y>
                <Z>23.5</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="GammaLut" Selector="Item2" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GammaCorrection</Name>
              <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateViewportState">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Width>1</gl:Width>
                      <gl:Height>1</gl:Height>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>ClearColor</MemberName>
                    <Name>ClearColor</Name>
                    <Category>Misc</Category>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderTexture">
                      <gl:RenderState />
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgb</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>GammaLut</Name>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:LoadImage,sys:String">
                    <MemberName>FileName</MemberName>
                    <Value>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp</Value>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LoadImage">
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp</gl:FileName>
                      <gl:ColorType>Unchanged</gl:ColorType>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture1</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:DrawMesh">
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:MeshName>ViewportQuad</gl:MeshName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="X" Selector="Item2.ViewportX" />
                  <Property Name="Width" Selector="Item2.ViewportWidth" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.25</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Item2.Width" />
                <Property Name="Height" Selector="Item2.Height" />
                <Property Name="Rotation" Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ" />
                <Property Name="Translation" Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>29.296875</Width>
              <Height>52.0833321</Height>
              <Rotation>
                <X>0.8307888</X>
                <Y>24.29341</Y>
                <Z>0.476700872</Z>
              </Rotation>
              <Translation>
                <X>16.200000762939453</X>
                <Y>0.51899999380111694</Y>
                <Z>21.299999237060547</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="GammaLut" Selector="Item2" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GammaCorrection</Name>
              <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateViewportState">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Width>1</gl:Width>
                      <gl:Height>1</gl:Height>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>ClearColor</MemberName>
                    <Name>ClearColor</Name>
                    <Category>Misc</Category>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderTexture">
                      <gl:RenderState />
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgb</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>GammaLut</Name>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:LoadImage,sys:String">
                    <MemberName>FileName</MemberName>
                    <Value>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp</Value>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LoadImage">
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp</gl:FileName>
                      <gl:ColorType>Unchanged</gl:ColorType>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture1</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:DrawMesh">
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:MeshName>ViewportQuad</gl:MeshName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="X" Selector="Item2.ViewportX" />
                  <Property Name="Width" Selector="Item2.ViewportWidth" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.5</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Item2.Width" />
                <Property Name="Height" Selector="Item2.Height" />
                <Property Name="Rotation" Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ" />
                <Property Name="Translation" Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>29.296875</Width>
              <Height>52.0833321</Height>
              <Rotation>
                <X>0.4698254</X>
                <Y>91.10029</Y>
                <Z>-0.10943494</Z>
              </Rotation>
              <Translation>
                <X>29.5</X>
                <Y>0.41800001263618469</Y>
                <Z>-0.65100002288818359</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="GammaLut" Selector="Item2" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GammaCorrection</Name>
              <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateViewportState">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Width>1</gl:Width>
                      <gl:Height>1</gl:Height>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>ClearColor</MemberName>
                    <Name>ClearColor</Name>
                    <Category>Misc</Category>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderTexture">
                      <gl:RenderState />
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgb</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>GammaLut</Name>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:LoadImage,sys:String">
                    <MemberName>FileName</MemberName>
                    <Value>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp</Value>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LoadImage">
                      <gl:Width xsi:nil="true" />
                      <gl:Height xsi:nil="true" />
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                      <gl:WrapS>ClampToEdge</gl:WrapS>
                      <gl:WrapT>ClampToEdge</gl:WrapT>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                      <gl:FileName>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp</gl:FileName>
                      <gl:ColorType>Unchanged</gl:ColorType>
                      <gl:FlipMode>Vertical</gl:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture1</gl:TextureSlot>
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:DrawMesh">
                      <gl:ShaderName>Gamma</gl:ShaderName>
                      <gl:MeshName>ViewportQuad</gl:MeshName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="X" Selector="Item2.ViewportX" />
                  <Property Name="Width" Selector="Item2.ViewportWidth" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.75</X>
              <Y>0</Y>
              <Width>0.25</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="19" Label="Source1" />
            <Edge From="2" To="23" Label="Source2" />
            <Edge From="3" To="32" Label="Source2" />
            <Edge From="4" To="41" Label="Source2" />
            <Edge From="5" To="50" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="26" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="35" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="44" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="53" Label="Source2" />
            <Edge From="14" To="29" Label="Source2" />
            <Edge From="15" To="38" Label="Source2" />
            <Edge From="16" To="47" Label="Source2" />
            <Edge From="17" To="56" Label="Source2" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="22" To="32" Label="Source1" />
            <Edge From="22" To="41" Label="Source1" />
            <Edge From="22" To="50" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="59" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="59" Label="Source2" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="59" Label="Source3" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source4" />
            <Edge From="59" To="60" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>