WorkflowBuilder(Version=2.6.2)
Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)
Bonsai.Osc.CreateUdpClient(Name=UdpSend_beh, Port=2324, RemoteHostName=10.0.250.44, RemotePort=2324)

GroupWorkflow PhotodiodeSequence
    ExternalizedMapping(FileName(DisplayName="Sequence File"))
    -> Bonsai.IO.CsvReader(FileName=Extensions\random_sequence_5values_alternate.csv, ScanPattern=%d, SkipRows=0)
    -> ToList
    -> BehaviorSubject sequence
    -> WorkflowOutput

PublishSubject<System.Int32> TrialNo

MetadataSource(ExpInfo(Animal=PZAG16.3b, RootDirectory=D:\data), Animal=PZAG16.3b, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

ExternalizedMapping
  InitialDelayReplay(Category="Exp Timings")
  TrialDuration(DisplayName=TrialDuration, Description="Duration of 1 depth", Category="Exp Timings")
  InterTrialDelay(Category="Exp Timings")
  RepeatNumber(DisplayName=RepeatNumber, Description="Number of repeating all depth values", Category="Exp Timings")
  DepthCount(Category="Exp Timings")
-> GroupWorkflow BasicSettings
    ExternalizedMapping(InitialDelayReplay, TrialDuration, InterTrialDelay, RepeatNumber, DepthCount)
    -> GroupWorkflow ExpTimings
        ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InitialDelayReplay => #3
        ExternalizedMapping(Value(DisplayName=TrialDuration, Description="Duration of 1 trial (1 fixed depth)", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject TrialDuration => #7
        ExternalizedMapping(Value(DisplayName=RepeatNumber, Description="Number of repeat of all the depth values", Category=Timings))
        -> IntProperty(Value=100)
        -> BehaviorSubject RepeatNumber => #10
        ExternalizedMapping(Value(DisplayName=InterTrialDelay, Description="Interval between 2 trials", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InterTrialDelay => #14
        #7, #14 -> Zip
        -> Add => #16
        ExternalizedMapping(Value(DisplayName=DepthCount))
        -> IntProperty(Value=8)
        -> BehaviorSubject DepthCount => #19
        #10, #19 -> Zip
        -> Multiply => #21
        #16, #21 -> Zip
        -> Multiply
        -> BehaviorSubject CloseLoopDuration => #24
        #24, #3 -> Zip
        -> Add
        -> BehaviorSubject OpenLoopStartTime
        -> WorkflowOutput

    ExternalizedMapping(WhichExp)
    -> GroupWorkflow ChooseExperiment
        ExternalizedMapping(Value(DisplayName=WhichExp))
        -> StringProperty(Value=SpheresPermTubeReward_multidepth)
        -> Take(Count=1)
        -> AsyncSubject WhichExp

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix => #2
        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate => #5
        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp => #8
        SubscribeSubject WhichExp => #9
        #2, #5, #8, #9 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}\, Selector="Item1,Item2,Item3,Item4")
        -> BehaviorSubject RootName

        SubscribeSubject SaveTimestamp => #13
        SubscribeSubject SaveDate => #14
        SubscribeSubject Metadata => #15
        SubscribeSubject WhichExp => #16
        #15, #14, #13, #16 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend_beh, Address=/beh_fname)

GroupWorkflow SetRandomSeed
    SubscribeSubject Metadata
    -> MemberSelector(Selector="Year,Month,Day")
    -> Format(Format={1}{2}, Selector="Item1,Item2,Item3")
    -> Str2Int
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=317)
    -> Take(Count=1)
    -> AsyncSubject Seed

GroupWorkflow SetHarpSavePath
    SubscribeSubject RootName
    -> Format(Format={0}\harpmessage.bin, Selector=it)
    -> WorkflowOutput
-> PropertyMapping(HarpSavePath)
-> GroupWorkflow harp_hardware
    IncludeWorkflow Command(Path=Bonsai.Harp:CommandSubject.bonsai)
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #1
    -> MemberSelector(Selector=MessageBytes) => #2
    ExternalizedMapping(Path(DisplayName=HarpSavePath, Category=Logging)) => #3
    #3, #2 -> Bonsai.Dsp.MatrixWriter(Path=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\harpmessage.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
    #1 -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1)
    -> PublishSubject LickDetection
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterAnalogInput, Mask=Port2)
    -> MemberSelector(Selector=Value)
    -> BehaviorSubject photodiode
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
    -> GroupWorkflow CalculateDistance
        WorkflowInput Source1
        -> Skip(Count=1)
        -> Buffer(Count=2, Skip=1)
        -> Bonsai.Scripting.ExpressionTransform diffence
          Expression: it[0]-it[1]
        -> Bonsai.Scripting.ExpressionTransform CutArtefact
          Expression:
            new(
            (it > 60000)? (it-65536) : ((it<-60000)? (it+65536) : it) as step
            )
        -> MemberSelector(Selector=step)
        -> Accumulate
        -> GroupWorkflow README>>(Description='Change the order in "difference" when putting rotary encoder at different side')
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> GroupWorkflow "Convert to cm"(Description="Convert to cm")
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #1
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #3
        WorkflowInput Source1 => #4
        #4, #1, #3 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> WorkflowOutput
    -> BehaviorSubject "Mouse Distance"
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
    -> PublishSubject SIFrameTrigger

    BehaviorSubject<System.Int32> RewardDuration
    -> Disable IntProperty(Value=250)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
    -> MulticastSubject Command

    PublishSubject<System.Boolean> Reward
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke2Valve)
    -> MulticastSubject Command

    IncludeWorkflow Timestamp(Path=Bonsai.Harp:TimestampSubject.bonsai)

    PublishSubject<System.Boolean> DO0
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Digital0)
    -> MulticastSubject Command

GroupWorkflow DoEverything
    GroupWorkflow InitBonvision3D
        ExternalizedMapping(WindowState, DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=Off
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Primary
          TargetRenderFrequency=140
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.ShaderResources(Shaders="")
        -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=..\..\Objects\sphere.obj)))
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn1
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn1.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn2
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn2.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn3
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn3.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn4
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn4.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=grayEnd
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\grayEnd.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=horGrat
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\horGrat.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\plaid.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=vertGrat
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\vertGrat.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=wider_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\wider_plaid.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=longer_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\longer_plaid.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=highf_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\highf_plaid.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=highf_Y_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\highf_Y_plaid.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=highf_X_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\highf_X_plaid.jpg
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Resources.LoadResources

        SubscribeSubject "Mouse Distance" => #7
        ExternalizedMapping(ClearColor) => #8
        Bonsai.Shaders.RenderFrame => #9
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> PublishSubject FrameIndex => #12
        SubscribeSubject "Mouse Distance"
        -> BehaviorSubject EyeDistance => #14
        #7, #14 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform => #16
          Expression:
            new(
            Item1 as MouseZ,
            Item2 as EyeZ)
        #9, #16 -> WithLatestFrom => #17
        SubscribeSubject sequence
        -> MemberSelector(Selector=Count) => #19
        #12, #19 -> WithLatestFrom
        -> Mod
        -> PublishSubject SequenceIndex => #22
        SubscribeSubject sequence => #23
        #22, #23 -> WithLatestFrom
        -> Bonsai.Scripting.ExpressionTransform Rename
          Expression:
            new(
            it.item2[it.item1] as PhotoQuadColor,
            it.Item1 as SequenceIndex
            )
        -> BehaviorSubject PhotoquadLog
        SubscribeSubject FrameIndex => #27
        SubscribeSubject PhotoquadLog => #28
        #17, #28, #27 -> Zip
        -> Bonsai.Scripting.ExpressionTransform Rename
          Expression:
            new(
            Item1.Item1 as FrameObject,
            Item1.Item2.MouseZ as MouseZ,
            Item1.Item2.EyeZ as EyeZ,
            Item2.PhotoQuadColor as PhotoQuadColor,
            Item2.SequenceIndex as SequenceIndex,
            Item3 as FrameIndex)
        -> BehaviorSubject FrameZ => #31
        -> MemberSelector(Selector=EyeZ)
        -> InputMapping(Z(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=35420.52) => #34
        #34, #8 -> GroupWorkflow SetViewports
            ExternalizedMapping(ClearColor) => #0
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
            -> InputMapping(Eye(Selector=it))
            -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=35420.52), NearClip=0.001, FarClip=1000000, Light(X=0, Y=0, Z=0))
            -> PublishSubject Draw => #5
            #5, #0 -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #6
            -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.0360390469, Y=-87.6625443, Z=0.47383610000000004)
              Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedProperty GammaLut(MemberName=Value)
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr1_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr1_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #9
            #6 -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
              Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedProperty GammaLut(MemberName=Value)
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr2_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr2_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #12
            #6 -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
              Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedProperty GammaLut(MemberName=Value)
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr3_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr3_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #15
            #6 -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.46982540000000006, Y=91.10029, Z=-0.10943494)
              Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedProperty GammaLut(MemberName=Value)
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr4_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr4_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #18
            #9, #12, #15, #18 -> Zip
            -> WorkflowOutput
        #31 -> MemberSelector(Selector=EyeZ)
        -> BehaviorSubject EyeZ
        #31 -> MemberSelector(Selector=MouseZ)
        -> BehaviorSubject MouseZ

    GroupWorkflow GlobalTimer
        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep)
        -> MemberSelector(Selector=ElapsedTime)
        -> Accumulate
        -> BehaviorSubject GlobalElapsedTime
        -> ElementIndex
        -> PublishSubject Frames
        -> WorkflowOutput

    GroupWorkflow "PhotodiodePlane MultiColor"
        SubscribeSubject Draw => #0
        ExternalizedMapping(ScaleX, ScaleY, ScaleZ) => #1
        ExternalizedMapping(Value(DisplayName=PhotoquadX))
        -> FloatProperty(Value=-155)
        -> Bonsai.Numerics.DegreeToRadian => #4
        ExternalizedMapping(Value(DisplayName=PhotoquadY))
        -> FloatProperty(Value=-40)
        -> Bonsai.Numerics.DegreeToRadian => #7
        ExternalizedMapping(Value(DisplayName=PhotoquadZ))
        -> FloatProperty(Value=1) => #9
        #4, #7, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform SphericalCoordinates => #11
          Expression:
            new(
            Item3 * Math.Cos(Item2) * Math.Cos(Item1) as X,
            Item3 * Math.Sin(Item2) as Y,
            Item3 * Math.Cos(Item2) * Math.Sin(Item1) as Z0
            )
        -> MemberSelector(Selector=X)
        -> PropertyMapping(TranslationX) => #13
        #11 -> MemberSelector(Selector=Y)
        -> PropertyMapping(TranslationY) => #15
        #11 -> MemberSelector(Selector=Z0) => #16
        SubscribeSubject EyeZ => #17
        #16, #17 -> CombineLatest
        -> Add
        -> PropertyMapping(TranslationZ) => #20
        SubscribeSubject FrameZ
        -> MemberSelector(Selector=PhotoQuadColor)
        -> PropertyMapping(Ambient) => #23
        #0, #23, #13, #15, #20, #1 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-0.694272041
          TranslationY=-0.642787635
          TranslationZ=35420.2
          ScaleX=0.1
          ScaleY=0.1
          ScaleZ=0.1
          MeshName=Plane
          Ambient(X=0.75, Y=0.75, Z=0.75)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          RotationZ=0
          RotationY=90
          RotationX=0
        -> WorkflowOutput

    GroupWorkflow FrameLogger(Description="Frame & Photodiode logger")
        SubscribeSubject FrameZ => #0
        -> MemberSelector(Selector=FrameObject.TimeStep)
        -> Accumulate
        -> ElementIndex => #3
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> Bonsai.Scripting.ExpressionTransform Rename => #5
          Expression:
            new(
            Timestamp as HarpTime,
            Value.Value.ElapsedTime as ElapsedTime,
            Value.Value.ElapsedRealTime as ElapsedRealTime)
        -> MemberSelector(Selector=ElapsedTime)
        -> PublishSubject ElapsedTime
        #5 -> MemberSelector(Selector=ElapsedRealTime)
        -> PublishSubject ElapsedRealTime
        #3 -> Disable MemberSelector(Selector=Index)
        #5, #0 -> Zip => #11
        Bonsai.Shaders.UpdateFrame
        -> ElementIndex
        -> Bonsai.Scripting.ExpressionTransform Rename => #14
          Expression: new(Index as UpdateFrameIndex)
        -> MemberSelector(Selector=UpdateFrameIndex)
        -> PublishSubject UpdateFrameIndex
        SubscribeSubject RootName
        -> Format(Format={0}\FrameLog.csv, Selector=it)
        -> PropertyMapping(FileName) => #19
        SubscribeSubject photodiode => #20
        #11, #20 -> WithLatestFrom => #21
        #21, #14 -> WithLatestFrom
        -> Bonsai.Scripting.ExpressionTransform Rename => #23
          Expression:
            new(
            Item1.Item1.Item1.HarpTime as HarpTime,
            Item1.Item1.Item2.FrameIndex as FrameIndex,
            Item1.Item1.Item1.ElapsedTime as ElapsedTime,
            Item1.Item1.Item1.ElapsedRealTime as ElapsedRealTime,
            Item1.Item1.Item2.MouseZ as MouseZ,
            Item1.Item1.Item2.EyeZ as EyeZ,
            Item1.Item1.Item2.PhotoQuadColor as PhotoQuadColor,
            Item1.Item1.Item2.SequenceIndex as SequenceIndex,
            Item1.Item2 as PhotodiodeSignal,
            Item2.UpdateFrameIndex as UpdateFrameIndex
            )
        #23, #19 -> Bonsai.IO.CsvWriter
          FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\FrameLog.csv
          Delimiter=","
          Append=true
          Overwrite=false
          Suffix=None
          IncludeHeader=true

    GroupWorkflow CopyFiles
        Timer(DueTime=PT1S, Period=PT0S) => #0
        SubscribeSubject RootName
        -> Format(Format={0}\SphereTube_fixed_spc.bonsai, Selector=it)
        -> PropertyMapping(DestinationPath) => #3
        #0, #3 -> CopyFile
          SourcePath=SphereTube_fixed_spc.bonsai
          DestinationPath=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\SphereTube_fixed_spc.bonsai
          Overwrite=false
        -> GroupWorkflow SphereTubeCopy
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput

        Timer(DueTime=PT1S, Period=PT0S) => #7
        SubscribeSubject RootName
        -> Format(Format={0}\random_sequence_5values_alternate.csv, Selector=it)
        -> PropertyMapping(DestinationPath) => #10
        #7, #10 -> CopyFile
          SourcePath=Extensions\random_sequence_5values_alternate.csv
          DestinationPath=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\random_sequence_5values_alternate.csv
          Overwrite=false
        -> GroupWorkflow SequenceCopy
            WorkflowInput Source1
            -> WorkflowOutput

        Timer(DueTime=PT1S, Period=PT0S) => #13
        SubscribeSubject RootName
        -> Format(Format={0}\TubeMapping_NewZ.cs, Selector=it)
        -> PropertyMapping(DestinationPath) => #16
        #13, #16 -> CopyFile
          SourcePath=Extensions\TubeMapping_NewZ.cs
          DestinationPath=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\TubeMapping_NewZ.cs
          Overwrite=false
        -> GroupWorkflow TubeMappingCopy
            WorkflowInput Source1
            -> WorkflowOutput

    GroupWorkflow Floor
        ExternalizedMapping(Value(DisplayName=FloorLength))
        -> FloatProperty(Value=200)
        -> BehaviorSubject FloorLength

        ExternalizedMapping(Value(DisplayName=TextureName))
        -> StringProperty(Value=highf_Y_plaid)
        -> PropertyMapping(TextureName) => #5
        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1, RangeMax=3, Count=3) => #6
        ExternalizedMapping(FloorWidth, FloorHeight) => #7
        #6, #5, #7 -> CreateObservable CreateFloors
            WorkflowInput Source1
            -> BehaviorSubject FloorNumber
            -> Subtract(Operand=IntProperty(Value=2)) => #2
            SubscribeSubject FloorLength => #3
            #2, #3 -> Zip
            -> Multiply
            -> BehaviorSubject "Floor Initial Z"

            SubscribeSubject Draw => #7
            ExternalizedMapping(TextureName) => #8
            #7, #8 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=highf_Y_plaid, TextureTarget=Texture2D) => #9
            SubscribeSubject MouseZ => #10
            SubscribeSubject FloorLength => #11
            SubscribeSubject FloorNumber => #12
            SubscribeSubject "Floor Initial Z" => #13
            ExternalizedMapping(Value(DisplayName=FloorWidth))
            -> FloatProperty(Value=5) => #15
            ExternalizedMapping(Value(DisplayName=FloorHeight))
            -> FloatProperty(Value=-2.5) => #17
            #10, #12, #11, #13, #15, #17 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform => #19
              Expression:
                new(
                (Math.Floor((Item1/Item3+3-Item2)/3))*(Item3*3)+Item4 as TranslationZ,
                Item3 as FloorLength,
                Item5 as FloorWidth,
                Item6 as FloorHeight
                )
            #9, #19 -> WithLatestFrom
            -> InputMapping
              Selector=Item1
              TranslationZ(Selector=Item2.TranslationZ)
              ScaleY(Selector=Item2.FloorLength)
              ScaleX(Selector=Item2.FloorWidth)
              TranslationY(Selector=Item2.FloorHeight)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-2.5
              TranslationZ=35600
              ScaleX=5
              ScaleY=200
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=-90
            -> WorkflowOutput
        -> Merge

    IncludeWorkflow(Path=Extensions\ManualReward.bonsai, RewardDuration=500)

    BooleanProperty(Value=false) => #7
    Bonsai.Windows.Input.KeyDown(Filter="MButton D Control Alt", SuppressRepetitions=true) => #8
    SubscribeSubject SaveTimestamp => #9
    SubscribeSubject SaveDate => #10
    SubscribeSubject Metadata => #11
    SubscribeSubject WhichExp => #12
    #11, #10, #9, #12 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4") => #14
    -> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
    #7, #14 -> Zip => #16
    -> SelectMany "Spheres Close & Open10cm" => #17
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=10)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=10, RangeMax=10, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=50)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=36, RangeMax=36, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=36, RangeMax=636, Count=51) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> Disable PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-12, RangeMax=24, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    Disable ExternalizedMapping(RewardDelay)
                    -> Disable GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=-8.947752
                  TranslationY=4.465169
                  TranslationZ=35443.3867
                  ScaleX=0.87
                  ScaleY=0.87
                  ScaleZ=0.87
                  MeshName=sphere
                  Ambient(X=0.209727108, Y=0.209727108, Z=0.209727108)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> Disable MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_10cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                Disable BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> Disable IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Disable Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                Disable SubscribeSubject RootName => #30
                Disable SubscribeSubject FrameZ => #31
                -> Disable MemberSelector(Selector=FrameObject.TimeStep)
                -> Disable Accumulate => #33
                #31 -> Disable MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Disable Zip => #35
                Disable SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> Disable WithLatestFrom
                -> Disable Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> Disable WithLatestFrom
                -> Disable Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                Disable SubscribeSubject Radius => #41
                #30, #41 -> Disable Zip
                -> Disable Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> Disable PropertyMapping(FileName) => #44
                #40, #44 -> Disable Bonsai.IO.CsvWriter
                  FileName=D:\data\test\S20250314\R133302_SpheresPermTubeReward_multidepth\\AllParams_10cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_10cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #16 -> SelectMany "Spheres Close & Open20cm" => #18
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=20, RangeMax=20, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=25)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=72, RangeMax=72, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=72, RangeMax=672, Count=26) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> Disable PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-24, RangeMax=48, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    Disable ExternalizedMapping(RewardDelay)
                    -> Disable GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=-19.9903145
                  TranslationY=0.6223753
                  TranslationZ=35465.6836
                  ScaleX=1.74
                  ScaleY=1.74
                  ScaleZ=1.74
                  MeshName=sphere
                  Ambient(X=0.184025913, Y=0.184025913, Z=0.184025913)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> Disable MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_20cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\AllParams_20cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_20cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #16 -> SelectMany "Spheres Close & Open40cm" => #19
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=40, RangeMax=40, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=12)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=144, RangeMax=144, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=144, RangeMax=744, Count=13) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> Disable PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-48, RangeMax=96, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    Disable ExternalizedMapping(RewardDelay)
                    -> Disable GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=33.0279961
                  TranslationY=22.5643864
                  TranslationZ=35527.6836
                  ScaleX=3.48
                  ScaleY=3.48
                  ScaleZ=3.48
                  MeshName=sphere
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> Disable MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_40cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\AllParams_40cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_40cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #16 -> SelectMany "Spheres Close & Open80cm" => #20
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=80)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=80, RangeMax=80, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=6)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=288, RangeMax=288, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=288, RangeMax=888, Count=7) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> Disable PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-96, RangeMax=192, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    Disable ExternalizedMapping(RewardDelay)
                    -> Disable GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=75.09441
                  TranslationY=-27.5831337
                  TranslationZ=35621.6836
                  ScaleX=6.96
                  ScaleY=6.96
                  ScaleZ=6.96
                  MeshName=sphere
                  Ambient(X=0.397170037, Y=0.397170037, Z=0.397170037)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> Disable MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_80cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\AllParams_80cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_80cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #16 -> SelectMany "Spheres Close & Open160cm" => #21
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=160)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=160, RangeMax=160, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=3)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=576, RangeMax=576, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=576, RangeMax=1176, Count=4) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> Disable PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-192, RangeMax=384, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    Disable ExternalizedMapping(RewardDelay)
                    -> Disable GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=139.888168
                  TranslationY=77.66144
                  TranslationZ=35420.72
                  ScaleX=13.92
                  ScaleY=13.92
                  ScaleZ=13.92
                  MeshName=sphere
                  Ambient(X=0, Y=0, Z=0)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> Disable MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_160cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\AllParams_160cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_160cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #16 -> SelectMany "Spheres Close & Open320cm" => #22
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=320)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=320, RangeMax=320, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=2)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1152, RangeMax=1152, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1152, RangeMax=1752, Count=3) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> Disable PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-384, RangeMax=768, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    Disable ExternalizedMapping(RewardDelay)
                    -> Disable GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=-316.83548
                  TranslationY=44.8918381
                  TranslationZ=35798.6445
                  ScaleX=27.84
                  ScaleY=27.84
                  ScaleZ=27.84
                  MeshName=sphere
                  Ambient(X=0, Y=0, Z=0)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> Disable MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_320cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\AllParams_320cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_320cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #16 -> SelectMany "Spheres Close & Open640cm" => #23
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=640)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=640, RangeMax=640, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=1)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=2304, RangeMax=2304, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=2304, RangeMax=2904, Count=2) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> Disable PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-768, RangeMax=1536, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    Disable ExternalizedMapping(RewardDelay)
                    -> Disable GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=-519.5989
                  TranslationY=-373.653564
                  TranslationZ=36571.3867
                  ScaleX=55.68
                  ScaleY=55.68
                  ScaleZ=55.68
                  MeshName=sphere
                  Ambient(X=0, Y=0, Z=0)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> Disable MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_640cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\AllParams_640cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_640cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #16 -> SelectMany "Spheres Close & OpenTestcm" => #24
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=5)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, RewardDelay(Category=Reward), BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold, RewardDelay)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold, RewardDelay) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=5, RangeMax=5, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=100)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=18, RangeMax=18, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=18, RangeMax=618, Count=101) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-6, RangeMax=12, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    ExternalizedMapping(RewardDelay)
                    -> GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                BehaviorSubject<System.Int32> SphereOriginalID => #48
                #5, #6, #7, #8, #9, #48 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #52
                SubscribeSubject SphereNewParams
                -> Condition => #54
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Radius)
                -> Disable Take(Count=1) => #56
                #54 -> MemberSelector(Selector=Z)
                -> Disable Take(Count=1) => #58
                SubscribeSubject MouseZ => #59
                #59, #58, #56 -> CombineLatest => #60
                #19, #25, #47, #11, #13, #33, #45, #60 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #64
                #52, #64 -> CombineLatest => #65
                #2, #65 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=4.14876127
                  TranslationY=-2.79065919
                  TranslationZ=35431.26
                  ScaleX=0.435
                  ScaleY=0.435
                  ScaleZ=0.435
                  MeshName=sphere
                  Ambient(X=0.07982588, Y=0.07982588, Z=0.07982588)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #65 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #70
                #65 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #71
                #65 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #72
                #65 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #73
                #65 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #74
                #70, #71, #72, #73, #74 -> Zip => #75
                #65 -> MemberSelector(Selector=Item2) => #76
                #75, #76 -> CombineLatest
                -> MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\NewParams_5cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\AllParams_5cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\PZAG16.3b\S20250317\R112650_SpheresPermTubeReward_multidepth\\RewardLog_5cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    Disable SelectMany "Spheres Close & Open5cm" => #25
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger

        BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          Radius
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=1)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=24)
            -> BehaviorSubject TubeSpacing => #31
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Description="Scale factor to go from bonsai units to a 20 degrees sphere on screen", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #34
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Description="Spheres with azimuth below this angle in degrees will be invisible (grey)", Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #38
            ExternalizedMapping(Value(DisplayName=Radius, Category=RadiusPosition))
            -> FloatProperty(Value=5)
            -> BehaviorSubject Radius => #41
            #41, #38, #31, #34 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #45
            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #47
            #47, #45 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
        ExternalizedMapping(Size, NewSphereTriggerThreshold, RewardDelay(Category=Reward), BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold, RewardDelay)
            -> GroupWorkflow ManageSphereParams6m
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #1
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold, RewardDelay) => #2
                SubscribeSubject Radius
                -> PropertyMapping(RangeMin) => #4
                SubscribeSubject Radius
                -> PropertyMapping(RangeMax) => #6
                #4, #6 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=5, RangeMax=5, Count=8)
                -> Disable GroupWorkflow RadiusRange => #8
                    SubscribeSubject DepthCount
                    -> IntProperty(Value=8) => #1
                    SubscribeSubject RadiusMin => #2
                    SubscribeSubject RadiusMax => #3
                    SubscribeSubject RadiusLogBase => #4
                    #2, #3, #1, #4 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #8
                    #6 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #10
                    #6 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #12
                    #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866, Count=8) => #13
                    #13, #4 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    SubscribeSubject Seed => #16
                    #15, #16 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                #8, #2 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        GroupWorkflow "Same Physical TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ZoScaleK => #3
                            #0, #1, #3 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #6
                            #2, #6 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput
                        -> WorkflowOutput

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject ThisDepth => #0
                            SubscribeSubject TubeSpacing => #1
                            SubscribeSubject TubeLength => #2
                            SubscribeSubject ThisDepth => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform => #6
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ZoScaleK => #7
                            #0, #1, #7 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #6, #10 -> Zip
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                        BehaviorSubject<System.Double> ZoSpacing
                    -> PropertyMapping(Count)
                    -> Range(Start=0, Count=100)
                    -> BooleanProperty(Value=false) => #6
                    Disable SubscribeSubject NewSphereTrigger => #7
                    #6, #7 -> Disable Merge
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> SelectMany => #11
                        WorkflowInput Source1
                        -> Take(Count=1) => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> CombineLatest
                        -> Multiply => #4
                        SubscribeSubject TrialMouseZ => #5
                        #4, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item2 >= Item1)
                        -> Take(Count=1)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> WorkflowOutput
                    SubscribeSubject EndThisTrial => #12
                    #11, #12 -> TakeUntil

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    SubscribeSubject InterTrialDelay => #16
                    BehaviorSubject<System.Double> Depth => #17
                    GroupWorkflow ZoRange
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject TakeZoNum => #1
                        SubscribeSubject ZoMin => #2
                        SubscribeSubject ZoSpacing => #3
                        SubscribeSubject SphereNumPerMoment => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #2, #6 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                        -> PropertyMapping(RangeMin) => #10
                        #9 -> PropertyMapping(RangeMax) => #11
                        #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=18, RangeMax=18, Count=2) => #12
                        SubscribeSubject SphereNumPerMoment => #13
                        #1, #13 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #16
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #18
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #20
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #22
                        SubscribeSubject ExtraSpheresFront => #23
                        #16, #23 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #26
                        #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=18, RangeMax=618, Count=101) => #27
                        #12, #27 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #30
                        -> WorkflowOutput
                        #30 -> Max
                        -> AsyncSubject MaxZo
                        #30, #0 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #20
                    BooleanProperty(Value=false) => #21
                    PublishSubject<System.Boolean> EndTrigger
                    -> Buffer(Count=2, Skip=1)
                    -> Bonsai.Scripting.ExpressionCondition => #24
                      Expression: ((it[1]==True) && (it[0]==False))
                    #24, #21 -> WithLatestFrom
                    -> PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #27
                    SubscribeSubject NewSphereTrigger => #28
                    #20, #28 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #31
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoMin => #1
                        SubscribeSubject ZoSpacing => #2
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #4
                        #2, #4 -> Zip
                        -> Multiply => #6
                        #1, #6 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #9
                        SubscribeSubject SphereNumPerMoment => #10
                        SubscribeSubject ZoSpacing => #11
                        SubscribeSubject ExtraSpheresBehind => #12
                        #11, #12 -> Zip
                        -> Multiply => #14
                        #0, #14 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #10, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-6, RangeMax=12, Count=4) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        WorkflowInput Source1 => #0
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #2
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #4
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #6
                        #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #9
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #11
                        #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #12
                        #7, #12 -> Concat
                        -> Bonsai.Numerics.Permutation => #14
                        #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                        #15, #0 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #34
                    #34, #31 -> Merge => #35
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #37
                    #37, #17 -> Merge => #38
                    #35, #38 -> CombineLatest => #39
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #41
                    #39 -> MemberSelector(Selector=Item1.Item2) => #42
                    #39 -> MemberSelector(Selector=Item2) => #43
                    #41, #42, #43 -> Zip
                    -> MulticastSubject SpherePos => #45
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #48
                    #27, #48 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #50
                    #45, #50 -> TakeUntil => #51
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #53
                    #16, #53 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #56
                    #51, #56 -> Delay(DueTime=PT9.7S)
                    -> WorkflowOutput

                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject MaxZo => #0
                        ExternalizedMapping(DistanceBehind) => #1
                        SubscribeSubject TrialInitialMouseZ => #2
                        SubscribeSubject ExtraSpheresFront => #3
                        SubscribeSubject ZoSpacing => #4
                        #3, #4 -> Zip
                        -> Multiply => #6
                        #0, #6 -> Zip
                        -> Subtract => #8
                        #8, #2 -> WithLatestFrom
                        -> Add => #10
                        #10, #1 -> Condition
                            Disable WorkflowInput Source1 => #0
                            Disable SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> Disable CombineLatest
                            -> Disable LessThan
                            -> Disable MulticastSubject EndTrigger
                            -> Disable WorkflowOutput

                            SubscribeSubject TrialMouseZ => #8
                            SubscribeSubject TubeLength => #9
                            #8, #9 -> CombineLatest
                            -> GreaterThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        BooleanProperty(Value=true) => #12
                        SubscribeSubject EndThisTrial => #13
                        #13, #12 -> WithLatestFrom
                        -> FloatProperty(Value=-9999)
                        -> MulticastSubject Depth
                        -> BooleanProperty(Value=true)

                    GroupWorkflow MouseZs
                        SubscribeSubject GlobalElapsedTime => #0
                        BehaviorSubject<System.Double> TrialStartTrigger => #1
                        #0, #1 -> Sample
                        -> MulticastSubject TrialStartTime => #3
                        SubscribeSubject MouseZ => #4
                        #4, #3 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #6
                        SubscribeSubject MouseZ => #7
                        #7, #6 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #3 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                        SubscribeSubject GlobalElapsedTime => #13
                        SubscribeSubject "Mouse Distance" => #14
                        SubscribeSubject "Mouse Distance" => #15
                        SubscribeSubject TrialStartTrigger => #16
                        #13, #16 -> Sample
                        -> MulticastSubject TrialStartTime => #18
                        #14, #18 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #20
                        #15, #20 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseDistance
                        #18 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> Disable GroupWorkflow "Generate NewSphereTrigger"
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.001) => #1
                        SubscribeSubject MouseZ => #2
                        BehaviorSubject<System.Double> ZoSpacing => #3
                        SubscribeSubject NewSphereTrigger => #4
                        SubscribeSubject ZoSpacing => #5
                        SubscribeSubject "Mouse Distance" => #6
                        SubscribeSubject "Mouse Distance"
                        -> Disable SubscribeSubject MouseZ => #8
                        Disable SubscribeSubject TrialMouseDistance => #9
                        #6, #9 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0))
                        -> Disable SubscribeSubject MouseZ => #12
                        Disable SubscribeSubject TrialMouseDistance => #13
                        #8, #13 -> Disable CombineLatest
                        -> Disable Subtract(Operand=DoubleProperty(Value=0)) => #15
                        #15, #4 -> Sample => #16
                        #16, #5 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #18
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> MemberSelector(Selector=TriggerNo)
                        -> Bonsai.Numerics.Floor
                        -> Double2Int => #21
                        #18 -> MemberSelector(Selector=ZoSpacing) => #22
                        #21, #22 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #24
                          Expression: Item1 * Item2
                        #12, #24 -> WithLatestFrom
                        -> Subtract
                        -> Buffer(Count=2, Skip=1) => #27
                        #27, #3, #1 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger => #31
                        #2, #31 -> Sample
                        -> PublishSubject TriggerMouseZ
                        -> WorkflowOutput
                        #27 -> Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as TriggerMouseZbefore,
                            it[1] as TriggerMouseZafter)
                        -> PublishSubject TriggerAdjacentMouseZ

                        Disable SubscribeSubject MouseZ => #37
                        Disable SubscribeSubject MouseZ => #38
                        Disable ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> Disable FloatProperty(Value=0.001) => #40
                        Disable SubscribeSubject MouseZ => #41
                        Disable BehaviorSubject<System.Double> ZoSpacing => #42
                        Disable SubscribeSubject NewSphereTrigger => #43
                        #37, #43 -> Disable Sample => #44
                        Disable SubscribeSubject ZoSpacing => #45
                        #44, #45 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #47
                          Expression:
                            new(
                            Item1/Item2 as TriggerNo,
                            Item2 as ZoSpacing
                            )
                        -> Disable MemberSelector(Selector=TriggerNo)
                        -> Disable Bonsai.Numerics.Floor
                        -> Disable Double2Int => #50
                        #47 -> Disable MemberSelector(Selector=ZoSpacing) => #51
                        #50, #51 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionTransform => #53
                          Expression: Item1 * Item2
                        #38, #53 -> Disable WithLatestFrom
                        -> Disable Subtract
                        -> Disable Buffer(Count=2, Skip=1) => #56
                        #56, #42, #40 -> Disable CombineLatest
                        -> Disable Bonsai.Scripting.ExpressionCondition
                          Expression: (Item1[1]>=0)&&(Item1[0]<0)
                        -> Disable BooleanProperty(Value=false)
                        -> Disable MulticastSubject NewSphereTrigger => #60
                        #41, #60 -> Disable Sample
                        -> Disable WorkflowOutput
                        #56 -> Disable Bonsai.Scripting.ExpressionTransform
                          Expression:
                            new(
                            it[0] as Item1,
                            it[1] as Item2)

                    ExternalizedMapping(RewardDelay)
                    -> GroupWorkflow "BlankPeriod Reward"
                        BooleanProperty(Value=true) => #0
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                        SubscribeSubject RewardTrigger => #2
                        #2, #0 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #4, #1 -> Delay(DueTime=PT2S) => #5
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                        -> Bonsai.Numerics.Permutation => #7
                        #7, #5 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput

                    Disable SubscribeSubject TriggerAdjacentMouseZ => #66
                    Disable SubscribeSubject TriggerMouseZ => #67
                    #67, #66 -> Disable WithLatestFrom => #68
                    Disable SubscribeSubject RootName
                    -> Disable Format(Format={0}\Trigger.csv, Selector=it)
                    -> Disable PropertyMapping(FileName) => #71
                    #68, #71 -> Disable Bonsai.IO.CsvWriter(FileName=D:\data\Test\S20240422\R132028_SpheresPermTubeReward\\Trigger.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
                -> Concat => #10
                #10, #1 -> RepeatCount(Count=100)

                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #15
                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #16
                SubscribeSubject EyeZ => #17
                Disable SubscribeSubject NewSphereTrigger => #18
                BehaviorSubject<System.Double> ThisDepth => #19
                SubscribeSubject TubeSpacing => #20
                SubscribeSubject ZoScaleK => #21
                #19, #20, #21 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform => #23
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #24
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #28
                #16, #28 -> WithLatestFrom
                -> ElementIndex => #30
                SubscribeSubject MouseZ => #31
                #17, #31 -> CombineLatest => #32
                #32, #18 -> Disable Sample => #33
                SubscribeSubject TrialInitialMouseZ => #34
                #30, #15, #23, #24, #34 -> CombineLatest => #35
                #35, #33 -> WithLatestFrom
                -> Disable TubeMapping_NewZ
                -> TubeMapping_NewZ_corrected
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            ExternalizedMapping(BackgroundColor, TargetAmb) => #3
            SubscribeSubject ExtraSpheresBehind => #4
            #2, #4 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=4) => #8
            #8, #3 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject ExtraSpheresBehind => #4
                    #3, #4 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #7
                    #1, #7 -> Mod(Operand=IntProperty(Value=4))
                    -> MulticastSubject SphereOriginalID => #9
                    #9, #2 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #11
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #13
                Disable SubscribeSubject SphereNewParams
                -> Disable Condition
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    SubscribeSubject SphereIndex => #2
                    SubscribeSubject SphereNumPerMoment
                    -> PropertyMapping(Value) => #4
                    #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                    #5, #2 -> WithLatestFrom => #6
                    #0 -> MemberSelector(Selector=Item3.Item3) => #7
                    #6, #7 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2) => #16
                Disable SubscribeSubject ElapsedTime => #17
                #17, #16 -> Disable WithLatestFrom
                -> Disable Subtract => #19
                SubscribeSubject GlobalElapsedTime => #20
                SubscribeSubject GlobalElapsedTime => #21
                SubscribeSubject NewSphereTime => #22
                #21, #22 -> Sample => #23
                #20, #23 -> CombineLatest
                -> Subtract => #25
                SubscribeSubject GlobalElapsedTime => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject StartTriggerIn => #28
                #27, #28 -> Sample => #29
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #30
                #29, #30 -> Merge => #31
                #26, #31 -> CombineLatest
                -> Subtract => #33
                SubscribeSubject GlobalElapsedTime => #34
                SubscribeSubject EndTriggerIn => #35
                #34, #35 -> Sample => #36
                SubscribeSubject GlobalElapsedTime => #37
                SubscribeSubject StartTriggerIn => #38
                #37, #38 -> Sample => #39
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #40
                #39, #40 -> Merge => #41
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #42
                #36, #42 -> Merge => #43
                #43, #41 -> CombineLatest
                -> Subtract => #45
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #47
                #19, #25, #47, #11, #13, #45, #33 -> CombineLatest
                -> CreateFadingInOut
                -> Disable CreateFadingIn
                -> Disable CreateFadingNew => #51
                BehaviorSubject<System.Int32> SphereOriginalID => #52
                #5, #6, #7, #8, #9, #52 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #56
                #56, #51 -> CombineLatest => #57
                #2, #57 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=4.624255
                  TranslationY=1.90164816
                  TranslationZ=12
                  ScaleX=0.435
                  ScaleY=0.435
                  ScaleZ=0.435
                  MeshName=sphere
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> WorkflowOutput
                #57 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #62
                #57 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #63
                #57 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #64
                #57 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #65
                #57 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #66
                #62, #63, #64, #65, #66 -> Zip => #67
                #57 -> MemberSelector(Selector=Item2) => #68
                #67, #68 -> CombineLatest
                -> MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject RootName => #3
                SubscribeSubject FrameZ => #4
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #6
                #4 -> MemberSelector(Selector=FrameIndex) => #7
                #6, #7 -> Zip => #8
                SubscribeSubject UpdateFrameIndex => #9
                #8, #9 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #11 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #13
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject Radius => #14
                #3, #14 -> Zip
                -> Format(Format={0}\NewParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #17
                #13, #17 -> Bonsai.IO.CsvWriter => #18
                  FileName=D:\data\BRAC9956.3b\S20241213\R101904_SpheresPermTubeReward\\NewParams_5cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> Disable MemberSelector(Selector=SphereID) => #19
                #18 -> Disable MemberSelector(Selector=Azimuth) => #20
                #18 -> Disable MemberSelector(Selector=Elevation) => #21
                #18 -> Disable MemberSelector(Selector=Depth) => #22
                #18 -> Disable MemberSelector(Selector=Frame) => #23
                #19, #20, #21, #22, #23 -> Disable Zip
                -> Disable Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.ExpressionTransform Rename => #29
                  Expression:
                    new(
                    Timestamp as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject RootName => #30
                SubscribeSubject FrameZ => #31
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #33
                #31 -> MemberSelector(Selector=FrameIndex) => #34
                #33, #34 -> Zip => #35
                SubscribeSubject UpdateFrameIndex => #36
                #35, #36 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #38
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #29, #38 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #40
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject Radius => #41
                #30, #41 -> Zip
                -> Format(Format={0}\AllParams_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #44
                #40, #44 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\BRAC9956.3b\S20241213\R101904_SpheresPermTubeReward\\AllParams_5cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject RootName => #2
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #6
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #8
                #6, #8 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #10 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.Timestamp as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject Radius => #13
                #2, #13 -> Zip
                -> Format(Format={0}\RewardLog_{1}cm.csv, Selector="Item1,Item2")
                -> PropertyMapping(FileName) => #16
                #12, #16 -> Bonsai.IO.CsvWriter
                  FileName=D:\data\BRAC9956.3b\S20241213\R101904_SpheresPermTubeReward\\RewardLog_5cm.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true
                -> WorkflowOutput
        #9, #7 -> DelaySubscription(DueTime=PT1S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    #25, #17, #18, #19, #20, #21, #22, #23, #24 -> Merge => #26
    #26, #8 -> TakeUntil
-> DelaySubscription(DueTime=PT3S)

SubscribeSubject TrialNo
