WorkflowBuilder(Version=2.8.5)
Bonsai.IO.Ports.CreateSerialPort
  PortName=COM7
  BaudRate=9600
  NewLine=\r\n
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=false
  RtsEnable=false
  ReadBufferSize=4096
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)
Bonsai.Osc.CreateUdpClient(Name=UdpSend_beh, Port=2324, RemoteHostName=10.0.250.44, RemotePort=2324)

GroupWorkflow PhotodiodeSequence
    ExternalizedMapping(FileName(DisplayName="Sequence File"))
    -> Bonsai.IO.CsvReader(FileName=Extensions\random_sequence_5values_alternate.csv, ScanPattern=%d, SkipRows=0)
    -> ToList
    -> BehaviorSubject sequence
    -> WorkflowOutput

PublishSubject<System.Int32> TrialNo

MetadataSource(ExpInfo(Animal=PZAG16.3c, RootDirectory=D:\data), Animal=PZAG16.3c, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

ExternalizedMapping
  InitialDelayReplay(Category="Exp Timings")
  TrialDuration(DisplayName=TrialDuration, Description="Duration of 1 depth", Category="Exp Timings")
  InterTrialDelay(Category="Exp Timings")
  RepeatNumber(DisplayName=RepeatNumber, Description="Number of repeating all depth values", Category="Exp Timings")
  DepthCount(Category="Exp Timings")
-> GroupWorkflow BasicSettings
    ExternalizedMapping(InitialDelayReplay, TrialDuration, InterTrialDelay, RepeatNumber, DepthCount)
    -> GroupWorkflow ExpTimings
        ExternalizedMapping(Value(DisplayName=TrialDuration, Description="Duration of 1 trial (1 fixed depth)", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject TrialDuration => #3
        ExternalizedMapping(Value(DisplayName=InterTrialDelay, Description="Interval between 2 trials", Category=Timings))
        -> FloatProperty(Value=5)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InterTrialDelay => #7
        #3, #7 -> Zip
        -> Add => #9
        ExternalizedMapping(Value(DisplayName=RepeatNumber, Description="Number of repeat of all the depth values", Category=Timings))
        -> IntProperty(Value=100)
        -> BehaviorSubject RepeatNumber => #12
        ExternalizedMapping(Value(DisplayName=DepthCount))
        -> IntProperty(Value=8)
        -> BehaviorSubject DepthCount => #15
        #12, #15 -> Zip
        -> Multiply => #17
        #9, #17 -> Zip
        -> Multiply
        -> BehaviorSubject CloseLoopDuration => #20
        ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InitialDelayReplay => #24
        #20, #24 -> Zip
        -> Add
        -> BehaviorSubject OpenLoopStartTime
        -> WorkflowOutput

    ExternalizedMapping(WhichExp)
    -> GroupWorkflow ChooseExperiment
        ExternalizedMapping(Value(DisplayName=WhichExp))
        -> StringProperty(Value=SpheresTubeMotor)
        -> Take(Count=1)
        -> AsyncSubject WhichExp

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix => #2
        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate => #5
        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp => #8
        SubscribeSubject WhichExp => #9
        #2, #5, #8, #9 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}\, Selector="Item1,Item2,Item3,Item4")
        -> BehaviorSubject RootName

        SubscribeSubject Metadata => #13
        SubscribeSubject SaveDate => #14
        SubscribeSubject SaveTimestamp => #15
        SubscribeSubject WhichExp => #16
        #13, #14, #15, #16 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend_beh, Address=/beh_fname)

GroupWorkflow SetRandomSeed
    SubscribeSubject Metadata
    -> MemberSelector(Selector="Year,Month,Day")
    -> Format(Format={1}{2}, Selector="Item1,Item2,Item3")
    -> Str2Int
    -> AsyncSubject RandomSeed

    SubscribeSubject RandomSeed
    -> PropertyMapping(Seed(Selector=it))
    -> Bonsai.Numerics.CreateRandom(Seed=123123123)
    -> Take(Count=1)
    -> AsyncSubject Seed

GroupWorkflow SetHarpSavePath
    SubscribeSubject RootName
    -> Format(Format={0}\harpmessage.bin, Selector=it)
    -> WorkflowOutput
-> PropertyMapping(HarpSavePath)
-> GroupWorkflow harp_hardware
    ExternalizedMapping(Path(DisplayName=HarpSavePath, Category=Logging)) => #0
    IncludeWorkflow Command(Path=Bonsai.Harp:CommandSubject.bonsai)
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3) => #2
    -> MemberSelector(Selector=MessageBytes) => #3
    #0, #3 -> Bonsai.Dsp.MatrixWriter(Path=D:\data\PZAG16.3c\S20250401\R155722_SpheresTubeMotor\\harpmessage.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
    #2 -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1)
    -> PublishSubject LickDetection
    #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterAnalogInput, Mask=Port2)
    -> MemberSelector(Selector=Value)
    -> BehaviorSubject photodiode
    #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
    -> GroupWorkflow CalculateDistance
        WorkflowInput Source1
        -> Skip(Count=1)
        -> BufferCount(Count=2, Skip=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform diffence
          Expression: it[0]-it[1]
        -> Bonsai.Scripting.Expressions.ExpressionTransform CutArtefact
          Expression:
            new(
            (it > 60000)? (it-65536) : ((it<-60000)? (it+65536) : it) as step
            )
        -> MemberSelector(Selector=step)
        -> Accumulate
        -> GroupWorkflow README>>(Description='Change the order in "difference" when putting rotary encoder at different side')
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> GroupWorkflow "Convert to cm"(Description="Convert to cm")
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #2
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #4
        #0, #2, #4 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> WorkflowOutput
    -> BehaviorSubject "Mouse Distance"
    #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
    -> PublishSubject SIFrameTrigger

    BehaviorSubject<System.Int32> RewardDuration
    -> Disable IntProperty(Value=250)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke2Valve)
    -> MulticastSubject Command

    PublishSubject<System.Boolean> Reward
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke2Valve)
    -> MulticastSubject Command

    IncludeWorkflow Timestamp(Path=Bonsai.Harp:TimestampSubject.bonsai)

    PublishSubject<System.Boolean> DO0
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Digital0)
    -> MulticastSubject Command

IntProperty(Value=0)
-> MulticastSubject ThisMotor

GroupWorkflow DoEverything
    GroupWorkflow InitBonvision3D
        ExternalizedMapping(WindowState, DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=Off
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Primary
          TargetRenderFrequency=140
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.ShaderResources(Shaders="")
        -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=..\..\Objects\sphere.obj)))
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn1
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn1.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn2
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn2.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn3
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn3.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=fwn4
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\fwn4.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=grayEnd
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\grayEnd.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=horGrat
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\horGrat.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\plaid.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=vertGrat
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\vertGrat.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=wider_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\wider_plaid.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=longer_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\longer_plaid.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=highf_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\highf_plaid.png
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=highf_Y_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\highf_Y_plaid.jpg
              ColorType=Unchanged
              FlipMode=Vertical
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=highf_X_plaid
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Textures\highf_X_plaid.jpg
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame => #7
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> PublishSubject FrameIndex => #10
        SubscribeSubject sequence
        -> MemberSelector(Selector=Count) => #12
        #10, #12 -> WithLatestFrom
        -> Mod
        -> PublishSubject SequenceIndex => #15
        SubscribeSubject sequence => #16
        #15, #16 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            it.item2[it.item1] as PhotoQuadColor,
            it.Item1 as SequenceIndex
            )
        -> BehaviorSubject PhotoquadLog
        SubscribeSubject "Mouse Distance" => #20
        SubscribeSubject "Mouse Distance"
        -> BehaviorSubject EyeDistance => #22
        #20, #22 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #24
          Expression:
            new(
            Item1 as MouseZ,
            Item2 as EyeZ)
        #7, #24 -> WithLatestFrom => #25
        SubscribeSubject PhotoquadLog => #26
        SubscribeSubject FrameIndex => #27
        #25, #26, #27 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1.Item1 as FrameObject,
            Item1.Item2.MouseZ as MouseZ,
            Item1.Item2.EyeZ as EyeZ,
            Item2.PhotoQuadColor as PhotoQuadColor,
            Item2.SequenceIndex as SequenceIndex,
            Item3 as FrameIndex)
        -> BehaviorSubject FrameZ => #30
        -> MemberSelector(Selector=EyeZ)
        -> InputMapping(Z(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0) => #33
        ExternalizedMapping(ClearColor) => #34
        #33, #34 -> GroupWorkflow SetViewports
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
            -> InputMapping(Eye(Selector=it))
            -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.001, FarClip=1000000, Light(X=0, Y=0, Z=0))
            -> PublishSubject Draw => #4
            ExternalizedMapping(ClearColor) => #5
            #4, #5 -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #6
            -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.0360390469, Y=-87.6625443, Z=0.47383610000000004)
              Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedMapping(ClearColor) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedMapping(Value(DisplayName=GammaLut))
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr1_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr1_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #9
            #6 -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
              Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedMapping(ClearColor) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedMapping(Value(DisplayName=GammaLut))
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr2_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr2_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #12
            #6 -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
              Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedMapping(ClearColor) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedMapping(Value(DisplayName=GammaLut))
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr3_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr3_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #15
            #6 -> IncludeWorkflow
              Path=BonVision:Environment.ViewWindow.bonsai
              Width=29.296875
              Height=52.0833321
              Rotation(X=0.46982540000000006, Y=91.10029, Z=-0.10943494)
              Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
            -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
                ExternalizedMapping(ClearColor) => #2
                #1, #2 -> Bonsai.Shaders.RenderTexture
                  RenderState=""
                  ClearColor=Gray
                  ClearMask="DepthBufferBit ColorBufferBit"
                  Width=nil
                  Height=nil
                  InternalFormat=Rgb
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
                ExternalizedMapping(Value(DisplayName=GammaLut))
                -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr4_gammalut_gray_average_table.bmp)
                -> InputMapping(FileName)
                -> Bonsai.Shaders.LoadImage => #8
                  Width=nil
                  Height=nil
                  InternalFormat=Rgba
                  WrapS=ClampToEdge
                  WrapT=ClampToEdge
                  MinFilter=Linear
                  MagFilter=Linear
                  FileName=GammaCalibration\calibration_data\RonanCottage_2p\230106\Scr4_gammalut_gray_average_table.bmp
                  ColorType=Unchanged
                  FlipMode=Vertical
                #4, #8 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
                -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #18
            #9, #12, #15, #18 -> Zip
            -> WorkflowOutput
        #30 -> MemberSelector(Selector=EyeZ)
        -> BehaviorSubject EyeZ
        #30 -> MemberSelector(Selector=MouseZ)
        -> BehaviorSubject MouseZ

    GroupWorkflow GlobalTimer
        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep)
        -> MemberSelector(Selector=ElapsedTime)
        -> Accumulate
        -> BehaviorSubject GlobalElapsedTime
        -> ElementIndex
        -> PublishSubject Frames
        -> WorkflowOutput

    GroupWorkflow "PhotodiodePlane MultiColor"
        SubscribeSubject Draw => #0
        SubscribeSubject FrameZ
        -> MemberSelector(Selector=PhotoQuadColor)
        -> PropertyMapping(Ambient) => #3
        ExternalizedMapping(Value(DisplayName=PhotoquadX))
        -> FloatProperty(Value=-155)
        -> Bonsai.Numerics.DegreeToRadian => #6
        ExternalizedMapping(Value(DisplayName=PhotoquadY))
        -> FloatProperty(Value=-40)
        -> Bonsai.Numerics.DegreeToRadian => #9
        ExternalizedMapping(Value(DisplayName=PhotoquadZ))
        -> FloatProperty(Value=5) => #11
        #6, #9, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform SphericalCoordinates => #13
          Expression:
            new(
            Item3 * Math.Cos(Item2) * Math.Cos(Item1) as X,
            Item3 * Math.Sin(Item2) as Y,
            Item3 * Math.Cos(Item2) * Math.Sin(Item1) as Z0
            )
        -> MemberSelector(Selector=X)
        -> PropertyMapping(TranslationX) => #15
        #13 -> MemberSelector(Selector=Y)
        -> PropertyMapping(TranslationY) => #17
        #13 -> MemberSelector(Selector=Z0) => #18
        SubscribeSubject EyeZ => #19
        #18, #19 -> CombineLatest
        -> Add
        -> PropertyMapping(TranslationZ) => #22
        ExternalizedMapping(ScaleX, ScaleY, ScaleZ) => #23
        #0, #3, #15, #17, #22, #23 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-3.47136021
          TranslationY=-3.213938
          TranslationZ=-1.61872184
          RotationZ=0
          RotationY=90
          RotationX=0
          ScaleX=0.5
          ScaleY=0.5
          ScaleZ=0.5
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          MeshName=Plane
        -> WorkflowOutput

    GroupWorkflow FrameLogger(Description="Frame & Photodiode logger")
        SubscribeSubject FrameZ => #0
        -> MemberSelector(Selector=FrameObject.TimeStep)
        -> Accumulate
        -> ElementIndex => #3
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #5
          Expression:
            new(
            Seconds as HarpTime,
            Value.Value.ElapsedTime as ElapsedTime,
            Value.Value.ElapsedRealTime as ElapsedRealTime)
        -> MemberSelector(Selector=ElapsedTime)
        -> PublishSubject ElapsedTime
        #5 -> MemberSelector(Selector=ElapsedRealTime)
        -> PublishSubject ElapsedRealTime
        #3 -> Disable MemberSelector(Selector=Index)
        #5, #0 -> Zip => #11
        SubscribeSubject photodiode => #12
        #11, #12 -> WithLatestFrom => #13
        Bonsai.Shaders.UpdateFrame
        -> ElementIndex
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #16
          Expression: new(Index as UpdateFrameIndex)
        #13, #16 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #18
          Expression:
            new(
            Item1.Item1.Item1.HarpTime as HarpTime,
            Item1.Item1.Item2.FrameIndex as FrameIndex,
            Item1.Item1.Item1.ElapsedTime as ElapsedTime,
            Item1.Item1.Item1.ElapsedRealTime as ElapsedRealTime,
            Item1.Item1.Item2.MouseZ as MouseZ,
            Item1.Item1.Item2.EyeZ as EyeZ,
            Item1.Item1.Item2.PhotoQuadColor as PhotoQuadColor,
            Item1.Item1.Item2.SequenceIndex as SequenceIndex,
            Item1.Item2 as PhotodiodeSignal,
            Item2.UpdateFrameIndex as UpdateFrameIndex
            )
        BehaviorSubject<System.Int32> ThisMotor => #19
        #18, #19 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #21
          Expression:
            new(
            Item1.HarpTime as HarpTime,
            Item1.FrameIndex as FrameIndex,
            Item1.ElapsedTime as ElapsedTime,
            Item1.ElapsedRealTime as ElapsedRealTime,
            Item1.MouseZ as MouseZ,
            Item1.EyeZ as EyeZ,
            Item1.PhotoQuadColor as PhotoQuadColor,
            Item1.SequenceIndex as SequenceIndex,
            Item1.PhotodiodeSignal as PhotodiodeSignal,
            Item2 as MotorSps
            )
        SubscribeSubject RootName
        -> Format(Format={0}\FrameLog.csv, Selector=it)
        -> PropertyMapping(FileName) => #24
        #21, #24 -> Bonsai.IO.CsvWriter
          FileName=D:\data\PZAG16.3c\S20250401\R155722_SpheresTubeMotor\\FrameLog.csv
          Delimiter=","
          Append=true
          Overwrite=false
          Suffix=None
          IncludeHeader=true
        #16 -> MemberSelector(Selector=UpdateFrameIndex)
        -> PublishSubject UpdateFrameIndex

    GroupWorkflow RotaryEncoderLogger(Description="Log ticks data from rotary encoder")
        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Accumulate
        -> ElementIndex => #3
        Bonsai.Shaders.UpdateFrame
        -> MemberSelector(Selector=TimeStep)
        -> Accumulate
        -> ElementIndex => #7
        SubscribeSubject "Mouse Distance" => #8
        SubscribeSubject EyeZ => #9
        SubscribeSubject MouseZ => #10
        #3, #7, #8, #9, #10 -> CombineLatest
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression:
            new(
            it.Value.Item1.Index as Frame,
            it.Seconds as HarpTime,
            it.Value.Item2.Value.ElapsedTime as IdealFrameTime,
            it.Value.Item1.Value as BonsaiRenderElapsedTime,
            it.Value.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime,
            it.Value.Item3 as RotaryEncoder,
            it.Value.Item5 as MouseZ,
            it.Value.Item4 as EyeZ
            )
        SubscribeSubject RootName
        -> Format(Format={0}\RotaryEncoder.csv, Selector=it)
        -> PropertyMapping(FileName) => #16
        #13, #16 -> Bonsai.IO.CsvWriter
          FileName=D:\data\PZAG16.3c\S20250401\R155722_SpheresTubeMotor\\RotaryEncoder.csv
          Delimiter=","
          Append=true
          Overwrite=false
          Suffix=None
          IncludeHeader=true

    GroupWorkflow CopyFiles
        Timer(DueTime=PT1S, Period=PT0S) => #0
        SubscribeSubject RootName
        -> Format(Format={0}\SphereTube_simplified_more_depths.bonsai, Selector=it)
        -> PropertyMapping(DestinationPath) => #3
        #0, #3 -> CopyFile
          SourcePath=SphereTube.bonsai
          DestinationPath=D:\data\PZAG16.3c\S20250401\R155722_SpheresTubeMotor\\SphereTube_simplified_more_depths.bonsai
          Overwrite=false
        -> GroupWorkflow SphereTubeCopy
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput

        Timer(DueTime=PT1S, Period=PT0S) => #7
        SubscribeSubject RootName
        -> Format(Format={0}\random_sequence_5values_alternate.csv, Selector=it)
        -> PropertyMapping(DestinationPath) => #10
        #7, #10 -> CopyFile
          SourcePath=Extensions\random_sequence_5values_alternate.csv
          DestinationPath=D:\data\PZAG16.3c\S20250401\R155722_SpheresTubeMotor\\random_sequence_5values_alternate.csv
          Overwrite=false
        -> GroupWorkflow SequenceCopy
            WorkflowInput Source1
            -> WorkflowOutput

        Timer(DueTime=PT1S, Period=PT0S) => #13
        SubscribeSubject RootName
        -> Format(Format={0}\TubeMapping_NewZ.cs, Selector=it)
        -> PropertyMapping(DestinationPath) => #16
        #13, #16 -> CopyFile(SourcePath=Extensions\TubeMapping_NewZ.cs, DestinationPath=D:\data\PZAG16.3c\S20250401\R155722_SpheresTubeMotor\\TubeMapping_NewZ.cs, Overwrite=false)
        -> GroupWorkflow TubeMappingCopy
            WorkflowInput Source1
            -> WorkflowOutput

        Timer(DueTime=PT1S, Period=PT0S) => #19
        SubscribeSubject RootName
        -> Format(Format={0}\steppersec_depth_combinations.csv, Selector=it)
        -> PropertyMapping(DestinationPath) => #22
        #19, #22 -> CopyFile
          SourcePath=D:\code\vis-stim-depth\steppersec_depth_combinations.csv
          DestinationPath=D:\data\PZAG16.3c\S20250401\R155722_SpheresTubeMotor\\steppersec_depth_combinations.csv
          Overwrite=false
        -> GroupWorkflow MotorSequenceCopy
            WorkflowInput Source1
            -> WorkflowOutput

    GroupWorkflow Floor
        ExternalizedMapping(Value(DisplayName=FloorLength))
        -> FloatProperty(Value=200)
        -> BehaviorSubject FloorLength

        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=3, RangeMin=1, RangeMax=3) => #3
        ExternalizedMapping(Value(DisplayName=TextureName))
        -> StringProperty(Value=highf_Y_plaid)
        -> PropertyMapping(TextureName) => #6
        ExternalizedMapping(FloorWidth, FloorHeight) => #7
        #3, #6, #7 -> CreateObservable CreateFloors
            WorkflowInput Source1
            -> BehaviorSubject FloorNumber
            -> Subtract(Operand=IntProperty(Value=2)) => #2
            SubscribeSubject FloorLength => #3
            #2, #3 -> Zip
            -> Multiply
            -> BehaviorSubject "Floor Initial Z"

            SubscribeSubject Draw => #7
            ExternalizedMapping(TextureName) => #8
            #7, #8 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=highf_Y_plaid, TextureTarget=Texture2D) => #9
            SubscribeSubject MouseZ => #10
            SubscribeSubject FloorNumber => #11
            SubscribeSubject FloorLength => #12
            SubscribeSubject "Floor Initial Z" => #13
            ExternalizedMapping(Value(DisplayName=FloorWidth))
            -> FloatProperty(Value=5) => #15
            ExternalizedMapping(Value(DisplayName=FloorHeight))
            -> FloatProperty(Value=-2.5) => #17
            #10, #11, #12, #13, #15, #17 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #19
              Expression:
                new(
                (Math.Floor((Item1/Item3+3-Item2)/3))*(Item3*3)+Item4 as TranslationZ,
                Item3 as FloorLength,
                Item5 as FloorWidth,
                Item6 as FloorHeight
                )
            #9, #19 -> WithLatestFrom
            -> InputMapping
              Selector=Item1
              TranslationZ(Selector=Item2.TranslationZ)
              ScaleY(Selector=Item2.FloorLength)
              ScaleX(Selector=Item2.FloorWidth)
              TranslationY(Selector=Item2.FloorHeight)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=0
              TranslationY=-2.5
              TranslationZ=200
              RotationZ=0
              RotationY=0
              RotationX=-90
              ScaleX=5
              ScaleY=200
              ScaleZ=0
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=10
              MeshName=Plane
            -> WorkflowOutput
        -> Merge

    IncludeWorkflow(Path=Extensions\ManualReward.bonsai, RewardDuration=400)

    SubscribeSubject Metadata => #8
    SubscribeSubject SaveDate => #9
    SubscribeSubject SaveTimestamp => #10
    SubscribeSubject WhichExp => #11
    #8, #9, #10, #11 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4") => #13
    -> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
    BooleanProperty(Value=false) => #15
    #15, #13 -> Zip => #16
    ExternalizedMapping(InitialDelay) => #17
    #16, #17 -> SelectMany "Spheres Close & Open" => #18
        WorkflowInput Source1
        -> BehaviorSubject StartTrigger
        -> BooleanProperty(Value=false)
        -> BehaviorSubject NewSphereTrigger
        -> Disable MulticastSubject Reward

        ExternalizedMapping
          ThetaMin
          ThetaMax
          TakeThetaNum
          RadiusMax
          RadiusMin
          RadiusLogBase
          ZoScaleK
          TubeLenth
          TubeSpacing
          InvisibleAngle
          ExtraSpheresBehind(Category=ZoPosition)
          ZoMin(Category=ZoPosition)
          ThetaMinLim(Category=ThetaPosition)
          ThetaMaxLim(Category=ThetaPosition)
          FadeTime
          RewardProb
        -> GroupWorkflow ParamSettings
            ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
            -> IntProperty(Value=5)
            -> BehaviorSubject ExtraSpheresBehind

            ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
            -> FloatProperty(Value=-40)
            -> BehaviorSubject ThetaMin

            ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
            -> FloatProperty(Value=220)
            -> BehaviorSubject ThetaMax

            ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
            -> FloatProperty(Value=40)
            -> BehaviorSubject ThetaMinLim

            ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
            -> FloatProperty(Value=140)
            -> BehaviorSubject ThetaMaxLim

            ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
            -> IntProperty(Value=1)
            -> BehaviorSubject TakeThetaNum

            Disable SubscribeSubject ExtraSpheresBehind => #18
            Disable SubscribeSubject TubeSpacing => #19
            #18, #19 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable Negate => #22
            ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
            #22, #23 -> FloatProperty(Value=0)
            -> BehaviorSubject ZoMin

            ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
            -> FloatProperty(Value=600)
            -> BehaviorSubject TubeLength

            ExternalizedMapping(Value(DisplayName=RadiusMax, Category=RadiusPosition))
            -> FloatProperty(Value=640)
            -> BehaviorSubject RadiusMax

            ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=RadiusPosition))
            -> FloatProperty(Value=10)
            -> BehaviorSubject RadiusLogBase

            Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
            -> IntProperty(Value=0) => #36
            ExternalizedMapping(Value(DisplayName=RadiusMin, Category=RadiusPosition))
            -> FloatProperty(Value=5)
            -> BehaviorSubject RadiusMin => #39
            ExternalizedMapping(Value(DisplayName=InvisibleAngle, Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject InvisibleAngle
            -> Bonsai.Numerics.DegreeToRadian => #43
            ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
            -> FloatProperty(Value=3)
            -> BehaviorSubject TubeSpacing => #46
            ExternalizedMapping(Value(DisplayName=ZoScaleK, Category=ZoPosition))
            -> FloatProperty(Value=20)
            -> BehaviorSubject ZoScaleK => #49
            #39, #43, #46, #49 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
            -> Add(Operand=DoubleProperty(Value=1))
            -> BehaviorSubject SphereNumPerMoment => #53
            #36, #53 -> CombineLatest
            -> Add
            -> BehaviorSubject ExtraSpheresFront

            ExternalizedMapping(Value(DisplayName=FadeTime))
            -> FloatProperty(Value=0.3)
            -> BehaviorSubject FadeTime

            ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
            -> FloatProperty(Value=0.8)
            -> BehaviorSubject RewardProb

        ExternalizedMapping(Size, NewSphereTriggerThreshold, RewardDelay(Category=Reward), BackgroundColor, TargetAmb)
        -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #8
            ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold, RewardDelay)
            -> GroupWorkflow ManageSphereParams
                GroupWorkflow RadiusRange => #0
                    Disable SubscribeSubject RadiusMin => #0
                    Disable SubscribeSubject RadiusMax => #1
                    Disable SubscribeSubject DepthCount
                    -> Disable IntProperty(Value=8) => #3
                    Disable SubscribeSubject RadiusLogBase => #4
                    #0, #1, #3, #4 -> Disable Zip
                    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform Log => #6
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> Disable MemberSelector(Selector=Min)
                    -> Disable PropertyMapping(RangeMin) => #8
                    #6 -> Disable MemberSelector(Selector=Max)
                    -> Disable PropertyMapping(RangeMax) => #10
                    #6 -> Disable MemberSelector(Selector=Count)
                    -> Disable PropertyMapping(Count) => #12
                    #8, #10, #12 -> Disable IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=8, RangeMin=0.69897000433601875, RangeMax=2.8061799739838866) => #13
                    #13, #4 -> Disable WithLatestFrom
                    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform Power => #15
                      Expression: Math.Pow(Item2,Item1)
                    Disable SubscribeSubject Seed => #16
                    #15, #16 -> Disable Bonsai.Numerics.Permutation
                    -> Disable WorkflowOutput

                    Disable Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\steppersec_depth_combinations.csv, ListSeparator="", ScanPattern="%i,%i,%i,%f,%f,%f", SkipRows=1)
                    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform rename
                      Expression:
                        new(it.Item3 as StepPerSec,
                        it.Item4 as Depth,
                        it.Item5 as ExpectedRS,
                        it.Item6 as ExpectedOF)
                    -> Disable WorkflowOutput

                    Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\steppersec_depth_combinations.csv, ListSeparator="", ScanPattern="%i,%i,%i,%f,%f,%f", SkipRows=1)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform rename => #23
                      Expression:
                        new(it.Item3 as StepPerSec,
                        it.Item4 as Depth,
                        it.Item5 as ExpectedRS,
                        it.Item6 as ExpectedOF)
                    SubscribeSubject Seed => #24
                    #23, #24 -> Bonsai.Numerics.Permutation
                    -> WorkflowOutput
                ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold, RewardDelay) => #1
                #0, #1 -> CreateObservable "Theta & Zo Range"
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform TrialProp => #1
                      Description="to avoid branching out of a subject"
                      Expression: it
                    -> MemberSelector(Selector=StepPerSec)
                    -> Take(Count=1)
                    -> MulticastSubject ThisMotor
                    -> Format(Format={0}, Selector=it)
                    -> Bonsai.IO.Ports.SerialWriteLine(PortName=COM7, NewLine=\r\n)
                    #1 -> MemberSelector(Selector=Depth)
                    -> Disable Delay(DueTime=PT1S)
                    -> MulticastSubject ThisDepth
                    -> MulticastSubject StartTriggerOut

                    GroupWorkflow "Total SphereNum PerTube"
                        SubscribeSubject ThisMotor => #0
                        SubscribeSubject TrialDuration
                        -> Divide(Operand=FloatProperty(Value=1E+07)) => #2
                        #0, #2 -> GroupWorkflow ThisCorridorLength
                            WorkflowInput Source1
                            -> InputMapping(Value(Selector=it))
                            -> FloatProperty(Value=0) => #2
                            WorkflowInput Source2
                            -> PropertyMapping(Value) => #4
                            #2, #4 -> Multiply(Operand=FloatProperty(Value=10)) => #5
                            GroupWorkflow StepsToRpm
                                FloatProperty(Value=0.0824668)
                                -> WorkflowOutput
                            -> PropertyMapping(Value) => #7
                            #5, #7 -> Multiply(Operand=FloatProperty(Value=0.0824668))
                            -> WorkflowOutput
                        -> MulticastSubject TubeLength
                        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform "Max(600, corridor)"
                          Expression: Math.Max(it, 600)
                        -> GroupWorkflow "Same Physical TubeLength"
                            WorkflowInput Source1
                            -> Disable SubscribeSubject TubeLength => #1
                            SubscribeSubject ThisDepth => #2
                            SubscribeSubject TubeSpacing => #3
                            SubscribeSubject ZoScaleK => #4
                            #2, #3, #4 -> CombineLatest
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #7
                            #1, #7 -> Zip
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                            SubscribeSubject TubeLength

                        Disable GroupWorkflow "Same Projected TubeLength"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
                              Expression: Item1 * Item2 / Item3
                            SubscribeSubject ThisDepth => #5
                            SubscribeSubject TubeSpacing => #6
                            SubscribeSubject ZoScaleK => #7
                            #5, #6, #7 -> CombineLatest
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: Item2*Item1/Item3
                            -> MulticastSubject ZoSpacing => #10
                            #4, #10 -> Zip
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: Math.Round(Item1/Item2)
                            -> BehaviorSubject TakeZoNum
                            -> WorkflowOutput

                    SubscribeSubject TubeLength
                    -> BehaviorSubject ZoMax

                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoSpacing => #1
                        SubscribeSubject ExtraSpheresBehind => #2
                        #1, #2 -> Zip
                        -> Multiply => #4
                        #0, #4 -> Zip
                        -> Subtract
                        -> PropertyMapping(RangeMin) => #7
                        SubscribeSubject ZoMin => #8
                        SubscribeSubject ZoSpacing => #9
                        SubscribeSubject SphereNumPerMoment
                        -> Subtract(Operand=IntProperty(Value=1)) => #11
                        #9, #11 -> Zip
                        -> Multiply => #13
                        #8, #13 -> Zip
                        -> Add
                        -> PropertyMapping(RangeMax) => #16
                        SubscribeSubject SphereNumPerMoment => #17
                        SubscribeSubject ExtraSpheresBehind => #18
                        #17, #18 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #21
                        #7, #16, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=24, RangeMin=-1.3428698480129242, RangeMax=4.8343314528465271) => #22
                        -> MulticastSubject TrialStartTrigger
                        #22 -> ElementIndex
                        -> MemberSelector(Selector=Value)
                        -> WorkflowOutput
                    -> CreateObservable ThetaRange
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #1
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #3
                        #1, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #4
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #6
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #8
                        #6, #8 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #9
                        #4, #9 -> Concat
                        -> Bonsai.Numerics.Permutation => #11
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #13
                        #11, #13 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #14
                        WorkflowInput Source1 => #15
                        #14, #15 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #16
                    GroupWorkflow ZoRange
                        SubscribeSubject ZoMin => #0
                        SubscribeSubject ZoSpacing => #1
                        SubscribeSubject SphereNumPerMoment => #2
                        #1, #2 -> Zip
                        -> Multiply => #4
                        #0, #4 -> Zip
                        -> Add
                        -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #7
                        -> PropertyMapping(RangeMin) => #8
                        #7 -> PropertyMapping(RangeMax) => #9
                        #8, #9 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=5.1029054224491119, RangeMax=5.1029054224491119) => #10
                        SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                        -> PropertyMapping(RangeMin) => #12
                        Disable GroupWorkflow "Same Projected Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ThisDepth => #1
                            SubscribeSubject ZoScaleK => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: Item1 * Item2 / Item3
                            -> WorkflowOutput
                        -> Disable PropertyMapping(RangeMax) => #14
                        GroupWorkflow "Same Physical Tube Length"
                            SubscribeSubject TubeLength => #0
                            SubscribeSubject ExtraSpheresFront => #1
                            SubscribeSubject ZoSpacing => #2
                            #1, #2 -> Zip
                            -> Multiply => #4
                            #0, #4 -> Zip
                            -> Add
                            -> WorkflowOutput
                        -> PropertyMapping(RangeMax) => #16
                        SubscribeSubject TakeZoNum => #17
                        SubscribeSubject SphereNumPerMoment => #18
                        #17, #18 -> Zip
                        -> Subtract
                        -> Add(Operand=IntProperty(Value=1)) => #21
                        SubscribeSubject ExtraSpheresFront => #22
                        #21, #22 -> Zip
                        -> Add
                        -> PropertyMapping(Count) => #25
                        #12, #14, #16, #25 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=1192, RangeMin=5.1029054224491119, RangeMax=325.07409682869911) => #26
                        #10, #26 -> Concat
                        -> Skip(Count=1)
                        -> Disable MulticastSubject TrialStartTrigger => #29
                        -> WorkflowOutput
                        #29 -> Max
                        -> AsyncSubject MaxZo
                        SubscribeSubject MouseZ => #33
                        #29, #33 -> WithLatestFrom
                    -> CreateObservable ThetaRange
                        SubscribeSubject ThetaMin
                        -> PropertyMapping(Lower) => #1
                        SubscribeSubject ThetaMinLim
                        -> PropertyMapping(Upper) => #3
                        #1, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #4
                        SubscribeSubject ThetaMaxLim
                        -> PropertyMapping(Lower) => #6
                        SubscribeSubject ThetaMax
                        -> PropertyMapping(Upper) => #8
                        #6, #8 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=140, Upper=220) => #9
                        #4, #9 -> Concat
                        -> Bonsai.Numerics.Permutation => #11
                        SubscribeSubject TakeThetaNum
                        -> PropertyMapping(Count) => #13
                        #11, #13 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #14
                        WorkflowInput Source1 => #15
                        #14, #15 -> CombineLatest
                        -> WorkflowOutput
                    -> Concat => #19
                    SubscribeSubject NewSphereTrigger => #20
                    #19, #20 -> Zip
                    -> Skip(Count=1)
                    -> MemberSelector(Selector=Item1) => #23
                    #16, #23 -> Merge => #24
                    SubscribeSubject ThisDepth
                    -> MulticastSubject Depth => #26
                    BehaviorSubject<System.Double> Depth => #27
                    #26, #27 -> Merge => #28
                    #24, #28 -> CombineLatest => #29
                    -> MemberSelector(Selector=Item1.Item1)
                    -> Bonsai.Numerics.DegreeToRadian => #31
                    #29 -> MemberSelector(Selector=Item1.Item2) => #32
                    #29 -> MemberSelector(Selector=Item2) => #33
                    #31, #32, #33 -> Zip
                    -> MulticastSubject SpherePos => #35
                    ExternalizedMapping(DistanceBehind)
                    -> GroupWorkflow EndTrialCondition
                        SubscribeSubject GlobalElapsedTime
                        -> Take(Count=1)
                        -> BehaviorSubject ThisTrialStart

                        SubscribeSubject GlobalElapsedTime => #3
                        SubscribeSubject ThisTrialStart => #4
                        #3, #4 -> WithLatestFrom
                        -> GroupWorkflow IsTrialOver
                            WorkflowInput Source1
                            -> Subtract => #1
                            SubscribeSubject TrialDuration
                            -> Divide(Operand=FloatProperty(Value=1E+07)) => #3
                            #1, #3 -> WithLatestFrom
                            -> GreaterThan
                            -> WorkflowOutput
                        -> GroupWorkflow EndTrigger(Description="IsTrialOver is a boolean emited all the time, eitehr True or False. Find the transition from False to True to trigger trial end")
                            WorkflowInput Source1
                            -> BufferCount(Count=2, Skip=1)
                            -> Bonsai.Scripting.Expressions.ExpressionCondition
                              Expression: ((it[1]==True) && (it[0]==False))
                            -> WorkflowOutput
                        -> GroupWorkflow StopMotor
                            WorkflowInput Source1 => #0
                            StringProperty(Value=0) => #1
                            #0, #1 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> Bonsai.IO.Ports.SerialWriteLine(PortName=COM7, NewLine=\r\n)
                            -> IntProperty(Value=0)
                            -> MulticastSubject ThisMotor
                            -> WorkflowOutput
                        -> GroupWorkflow SetDepth9999
                            WorkflowInput Source1 => #0
                            BooleanProperty(Value=true) => #1
                            #0, #1 -> WithLatestFrom
                            -> FloatProperty(Value=-9999)
                            -> MulticastSubject Depth
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> WorkflowOutput

                        Disable SubscribeSubject MaxZo => #12
                        Disable SubscribeSubject ExtraSpheresFront => #13
                        Disable SubscribeSubject ZoSpacing => #14
                        #13, #14 -> Disable Zip
                        -> Disable Multiply => #16
                        #12, #16 -> Disable Zip
                        -> Disable Subtract => #18
                        Disable SubscribeSubject TrialInitialMouseZ => #19
                        #18, #19 -> Disable WithLatestFrom
                        -> Disable Add => #21
                        ExternalizedMapping(DistanceBehind) => #22
                        #21, #22 -> Disable Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject MouseZ => #1
                            ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                            #1, #2 -> Subtract(Operand=DoubleProperty(Value=0)) => #3
                            #0, #3 -> CombineLatest
                            -> LessThan
                            -> MulticastSubject EndTrigger
                            -> WorkflowOutput

                        Disable BooleanProperty(Value=false)

                        Disable SubscribeSubject EndThisTrial => #25
                        Disable BooleanProperty(Value=true) => #26
                        #25, #26 -> Disable WithLatestFrom
                        -> Disable FloatProperty(Value=-9999)
                        -> Disable MulticastSubject Depth
                        -> Disable BooleanProperty(Value=true)
                    -> Disable GroupWorkflow
                        WorkflowInput Source1
                        -> Disable PublishSubject<System.Boolean> EndTrigger
                        -> Disable BufferCount(Count=2, Skip=1)
                        -> Disable Bonsai.Scripting.Expressions.ExpressionCondition => #3
                          Expression: ((it[1]==True) && (it[0]==False))
                        Disable BooleanProperty(Value=false) => #4
                        #3, #4 -> Disable WithLatestFrom
                        -> WorkflowOutput
                    -> PublishSubject RewardTrigger
                    -> MulticastSubject EndTriggerOut => #40
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07))
                    -> PropertyMapping(DueTime) => #43
                    #40, #43 -> Delay(DueTime=PT0.3S)
                    -> PublishSubject EndThisTrial => #45
                    #35, #45 -> TakeUntil => #46
                    SubscribeSubject InterTrialDelay => #47
                    SubscribeSubject FadeTime
                    -> Multiply(Operand=FloatProperty(Value=1E+07)) => #49
                    #47, #49 -> Zip
                    -> Subtract
                    -> PropertyMapping(DueTime) => #52
                    #46, #52 -> Delay(DueTime=PT4.7S)
                    -> WorkflowOutput

                    GroupWorkflow MouseZs
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject MouseZ => #1
                        SubscribeSubject GlobalElapsedTime => #2
                        BehaviorSubject<System.Double> TrialStartTrigger => #3
                        #2, #3 -> Sample
                        -> MulticastSubject TrialStartTime => #5
                        #1, #5 -> Sample
                        -> MulticastSubject TrialInitialMouseZ => #7
                        #0, #7 -> WithLatestFrom
                        -> Subtract
                        -> BehaviorSubject TrialMouseZ
                        #5 -> Disable BooleanProperty(Value=false)
                        -> Disable BehaviorSubject NewSphereTrigger

                    ExternalizedMapping(NewSphereTriggerThreshold)
                    -> GroupWorkflow "Generate NewSphereTrigger"
                        SubscribeSubject MouseZ => #0
                        SubscribeSubject MouseZ => #1
                        SubscribeSubject MouseZ => #2
                        SubscribeSubject NewSphereTrigger => #3
                        #2, #3 -> Sample => #4
                        #1, #4 -> WithLatestFrom
                        -> Subtract
                        -> BufferCount(Count=2, Skip=1) => #7
                        BehaviorSubject<System.Double> ZoSpacing => #8
                        ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                        -> FloatProperty(Value=0.01) => #10
                        #7, #8, #10 -> CombineLatest
                        -> Bonsai.Scripting.Expressions.ExpressionCondition
                          Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject NewSphereTrigger
                        -> Disable PublishSubject NewSphereTrigger => #15
                        #0, #15 -> Sample
                        -> WorkflowOutput

                    ExternalizedMapping(RewardDelay)
                    -> GroupWorkflow "BlankPeriod Reward"
                        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=1000, RangeMin=0, RangeMax=1)
                        -> Bonsai.Numerics.Permutation => #1
                        SubscribeSubject RewardTrigger => #2
                        BooleanProperty(Value=true) => #3
                        #2, #3 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #5
                        ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #6
                        #5, #6 -> Delay(DueTime=PT2S) => #7
                        #1, #7 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Condition
                            WorkflowInput Source1 => #0
                            SubscribeSubject RewardProb
                            -> PropertyMapping(Value) => #2
                            #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.800000011920929))
                            -> WorkflowOutput
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject Reward
                        -> MulticastSubject RewardLog
                        -> WorkflowOutput
                -> Concat => #3
                SubscribeSubject RepeatNumber
                -> PropertyMapping(Count) => #5
                #3, #5 -> RepeatCount(Count=100)

                BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #7
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep.ElapsedRealTime)
                -> Accumulate
                -> PublishSubject ElapsedTime => #11
                #7, #11 -> WithLatestFrom
                -> ElementIndex => #13
                ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
                -> FloatProperty(Value=0.087)
                -> BehaviorSubject OriginalSize
                -> Take(Count=1) => #17
                BehaviorSubject<System.Double> ThisDepth => #18
                SubscribeSubject TubeSpacing => #19
                SubscribeSubject ZoScaleK => #20
                #18, #19, #20 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
                  Expression: Item2*Item1/Item3
                SubscribeSubject SphereNumPerMoment => #23
                #13, #17, #22, #23 -> CombineLatest => #24
                SubscribeSubject EyeZ => #25
                SubscribeSubject MouseZ => #26
                #25, #26 -> CombineLatest => #27
                #24, #27 -> WithLatestFrom
                -> TubeMapping_NewZ
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1 as SphereID,
                    Item2 as SphereStartTime,
                    Item3.Item1 as Theta,
                    Item3.Item2 as Z0,
                    Item3.Item3 as Radius,
                    Item4.Item1 as X,
                    Item4.Item2 as Y,
                    Item4.Item3 as Z0,
                    Item4.Item4 as Z,
                    Item4.Item5 as EyeZ,
                    Item4.Item6 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size)
                -> BehaviorSubject SphereNewParams

                BehaviorSubject<System.Double> TrialInitialMouseZ
                -> FloatProperty(Value=0)

                BehaviorSubject<System.Double> TrialStartTime
                -> BehaviorSubject TrialStartTimeSub

            SubscribeSubject SphereNumPerMoment => #2
            SubscribeSubject ExtraSpheresBehind => #3
            #2, #3 -> Zip
            -> Add
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=24) => #7
            ExternalizedMapping(BackgroundColor, TargetAmb) => #8
            #7, #8 -> CreateObservable CreateSpheres
                WorkflowInput Source1
                -> AsyncSubject SphereIndex

                SubscribeSubject Draw => #2
                SubscribeSubject SphereNewParams
                -> Condition => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereNumPerMoment => #2
                    SubscribeSubject ExtraSpheresBehind => #3
                    #2, #3 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #6
                    #1, #6 -> Mod(Operand=IntProperty(Value=24))
                    -> MulticastSubject SphereOriginalID => #8
                    SubscribeSubject SphereIndex => #9
                    #8, #9 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector="SphereID,SphereStartTime") => #5
                #4 -> MemberSelector(Selector="Theta,Z0,Radius") => #6
                #4 -> MemberSelector(Selector="X,Y,Z") => #7
                #4 -> MemberSelector(Selector="EyeZ,MouseZ") => #8
                #4 -> MemberSelector(Selector="OriginalSize,Size") => #9
                BehaviorSubject<System.Int32> SphereOriginalID => #10
                #5, #6, #7, #8, #9, #10 -> Zip
                -> MulticastSubject LogSphereParams
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(
                    Item6 as SphereOriginalID,
                    Item1.Item1 as SphereID,
                    Item1.Item2 as SphereStartTime,
                    Item2.Item1 as Theta,
                    Item2.Item2 as Z0,
                    Item2.Item3 as Radius,
                    Item3.Item1 as X,
                    Item3.Item2 as Y,
                    Item3.Item3 as Z,
                    Item4.Item1 as EyeZ,
                    Item4.Item2 as MouseZ,
                    Item5.Item1 as OriginalSize,
                    Item5.Item2 as Size
                    )
                -> PublishSubject NewSphereTime => #14
                SubscribeSubject GlobalElapsedTime => #15
                SubscribeSubject GlobalElapsedTime => #16
                SubscribeSubject NewSphereTime => #17
                #16, #17 -> Sample => #18
                #15, #18 -> CombineLatest
                -> Subtract => #20
                SubscribeSubject FadeTime
                -> FloatProperty(Value=0.3) => #22
                ExternalizedMapping(Value(DisplayName=TargetAmb))
                -> FloatProperty(Value=0) => #24
                ExternalizedMapping(Value(DisplayName=BackgroundColor))
                -> FloatProperty(Value=0.5) => #26
                SubscribeSubject GlobalElapsedTime => #27
                SubscribeSubject GlobalElapsedTime => #28
                SubscribeSubject StartTriggerIn => #29
                #28, #29 -> Sample => #30
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=0, RangeMax=0) => #31
                #30, #31 -> Merge => #32
                #27, #32 -> CombineLatest
                -> Subtract => #34
                SubscribeSubject GlobalElapsedTime => #35
                SubscribeSubject EndTriggerIn => #36
                #35, #36 -> Sample => #37
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=99999999, RangeMax=99999999) => #38
                #37, #38 -> Merge => #39
                SubscribeSubject GlobalElapsedTime => #40
                SubscribeSubject StartTriggerIn => #41
                #40, #41 -> Sample => #42
                IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=0, RangeMax=0) => #43
                #42, #43 -> Merge => #44
                #39, #44 -> CombineLatest
                -> Subtract => #46
                SubscribeSubject MouseZ => #47
                SubscribeSubject SphereNewParams
                -> Condition => #49
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=SphereID) => #1
                    SubscribeSubject SphereNumPerMoment => #2
                    SubscribeSubject ExtraSpheresBehind => #3
                    #2, #3 -> Zip
                    -> Add
                    -> PropertyMapping(Value) => #6
                    #1, #6 -> Mod(Operand=IntProperty(Value=24))
                    -> Disable MulticastSubject SphereOriginalID => #8
                    SubscribeSubject SphereIndex => #9
                    #8, #9 -> WithLatestFrom => #10
                    #0 -> MemberSelector(Selector=Radius) => #11
                    #10, #11 -> WithLatestFrom
                    -> SphereIdxCondition
                    -> WorkflowOutput
                -> MemberSelector(Selector=Z) => #50
                #49 -> MemberSelector(Selector=Radius) => #51
                #47, #50, #51 -> CombineLatest => #52
                #20, #22, #24, #26, #34, #46, #52 -> CombineLatest
                -> CreateFadingInOut => #54
                #14, #54 -> CombineLatest => #55
                #2, #55 -> WithLatestFrom
                -> InputMapping
                  Selector=Item1
                  TranslationY(Selector=Item2.Item1.Y)
                  TranslationZ(Selector=Item2.Item1.Z)
                  ScaleX(Selector=Item2.Item1.Size)
                  ScaleY(Selector=Item2.Item1.Size)
                  ScaleZ(Selector=Item2.Item1.Size)
                  TranslationX(Selector=Item2.Item1.X)
                  Ambient(Selector=Item2.Item2)
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=8631.632
                  TranslationY=5047.26953
                  TranslationZ=9439.444
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                  ScaleX=-869.912964
                  ScaleY=-869.912964
                  ScaleZ=-869.912964
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=10
                  MeshName=sphere
                -> WorkflowOutput
                #55 -> MemberSelector(Selector="Item1.SphereID,Item1.SphereStartTime") => #60
                #55 -> MemberSelector(Selector="Item1.Theta,Item1.Z0,Item1.Radius") => #61
                #55 -> MemberSelector(Selector="Item1.X,Item1.Y,Item1.Z") => #62
                #55 -> MemberSelector(Selector="Item1.EyeZ,Item1.MouseZ") => #63
                #55 -> MemberSelector(Selector="Item1.OriginalSize,Item1.Size") => #64
                #60, #61, #62, #63, #64 -> Zip => #65
                #55 -> MemberSelector(Selector=Item2) => #66
                #65, #66 -> CombineLatest
                -> MulticastSubject LogSphereAllParams
            -> Merge

            GroupWorkflow SphereParamsLoggerClose
                BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Int32)> LogSphereParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #2
                  Expression:
                    new(
                    Seconds as HarpTime,
                    Value.Item1.Item1 as SphereID,
                    Value.Item1.Item2 as SphereStartTime,
                    Value.Item2.Item1 as Theta,
                    Value.Item2.Item2 as Z0,
                    Value.Item2.Item3 as Radius,
                    Value.Item3.Item1 as X,
                    Value.Item3.Item2 as Y,
                    Value.Item3.Item3 as Z,
                    Value.Item4.Item1 as EyeZ,
                    Value.Item4.Item2 as MouseZ,
                    Value.Item5.Item1 as OriginalSize,
                    Value.Item5.Item2 as Size
                    )
                SubscribeSubject FrameZ => #3
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #5
                #3 -> MemberSelector(Selector=FrameIndex) => #6
                #5, #6 -> Zip => #7
                SubscribeSubject UpdateFrameIndex => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #10
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #2, #10 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #12
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size)
                SubscribeSubject RootName
                -> Format(Format={0}\NewParams.csv, Selector=it)
                -> PropertyMapping(FileName) => #15
                #12, #15 -> Bonsai.IO.CsvWriter(FileName=D:\data\PZAG16.3b\S20250401\R153159_SpheresTubeMotor\\NewParams.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true) => #16
                -> Disable MemberSelector(Selector=SphereID) => #17
                #16 -> Disable MemberSelector(Selector=Azimuth) => #18
                #16 -> Disable MemberSelector(Selector=Elevation) => #19
                #16 -> Disable MemberSelector(Selector=Depth) => #20
                #16 -> Disable MemberSelector(Selector=Frame) => #21
                #17, #18, #19, #20, #21 -> Disable Zip
                -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item5 as Frame,
                    Item1 as SphereID,
                    Item2 as Azimuth,
                    Item3 as Elevation,
                    Item4 as Depth
                    )
                -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

                BehaviorSubject<System.Tuple(System.Tuple(System.Tuple(System.Int32,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> LogSphereAllParams
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #27
                  Expression:
                    new(
                    Seconds as HarpTime,
                    Value.Item1.Item1.Item1 as SphereID,
                    Value.Item1.Item1.Item2 as SphereStartTime,
                    Value.Item1.Item2.Item1 as Theta,
                    Value.Item1.Item2.Item2 as Z0,
                    Value.Item1.Item2.Item3 as Radius,
                    Value.Item1.Item3.Item1 as X,
                    Value.Item1.Item3.Item2 as Y,
                    Value.Item1.Item3.Item3 as Z,
                    Value.Item1.Item4.Item1 as EyeZ,
                    Value.Item1.Item4.Item2 as MouseZ,
                    Value.Item1.Item5.Item1 as OriginalSize,
                    Value.Item1.Item5.Item2 as Size,
                    Value.Item2 as Ambience
                    )
                SubscribeSubject FrameZ => #28
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate => #30
                #28 -> MemberSelector(Selector=FrameIndex) => #31
                #30, #31 -> Zip => #32
                SubscribeSubject UpdateFrameIndex => #33
                #32, #33 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #35
                  Expression:
                    new(
                    Item1.Item2 as Frameindex,
                    Item1.Item1.ElapsedTime as ElapsedTimeSinceSpheres,
                    Item1.Item1.ElapsedRealTime as ElapsedRealTimeSinceSpheres,
                    Item2 as UpdateFrameIndex)
                #27, #35 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #37
                  Expression:
                    new(
                    Item1.HarpTime as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTimeSinceSpheres as ElapsedTimeSinceSpheres,
                    Item2.ElapsedRealTimeSinceSpheres as ElapsedRealTimeSinceSpheres,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.SphereID as SphereID,
                    Item1.Theta/Math.PI*180 as Theta,
                    Item1.Z0 as Z0,
                    Item1.Radius as Radius,
                    Item1.X as X,
                    Item1.Y as Y,
                    Item1.Z as Z,
                    Item1.EyeZ as EyeZ,
                    Item1.MouseZ as MouseZ,
                    Item1.OriginalSize as OriginalSize,
                    Item1.Size as Size,
                    Item1.Ambience as Ambience)
                SubscribeSubject RootName
                -> Format(Format={0}\AllParams.csv, Selector=it)
                -> PropertyMapping(FileName) => #40
                #37, #40 -> Bonsai.IO.CsvWriter(FileName=D:\data\PZAG16.3b\S20250401\R153159_SpheresTubeMotor\\AllParams.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

            BehaviorSubject<System.Boolean> EndTriggerOut
            -> Disable BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
            -> PublishSubject EndTriggerIn
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> Add(Operand=IntProperty(Value=1))
            -> PublishSubject TrialCount

            BehaviorSubject<System.Double> StartTriggerOut
            -> PublishSubject StartTriggerIn

            GroupWorkflow RewardLog
                BehaviorSubject<System.Boolean> RewardLog
                -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #1
                SubscribeSubject FrameZ
                -> MemberSelector(Selector=FrameObject.TimeStep)
                -> Accumulate
                -> ElementIndex => #5
                Bonsai.Shaders.UpdateFrame
                -> ElementIndex => #7
                #5, #7 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #9
                  Expression:
                    new(
                    Item1.Index as Frameindex,
                    Item1.Value.ElapsedTime as ElapsedTime,
                    Item1.Value.ElapsedRealTime as ElapsedRealTime,
                    Item2.Index as UpdateFrameIndex)
                #1, #9 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #11
                  Expression:
                    new(
                    Item1.Seconds as HarpTime,
                    Item2.Frameindex as Frameindex,
                    Item2.ElapsedTime as ElapsedTime,
                    Item2.ElapsedRealTime as ElapsedRealTime,
                    Item2.UpdateFrameIndex as UpdateFrameIndex,
                    Item1.Value as Reward)
                SubscribeSubject RootName
                -> Format(Format={0}\RewardLog.csv, Selector=it)
                -> PropertyMapping(FileName) => #14
                #11, #14 -> Bonsai.IO.CsvWriter(FileName=D:\data\PZAG16.3b\S20250401\R153159_SpheresTubeMotor\\RewardLog.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
                -> WorkflowOutput
        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #9
        #8, #9 -> DelaySubscription(DueTime=PT20S)

        SubscribeSubject TrialCount => #11
        SubscribeSubject DepthCount
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=IntProperty(Value=8))
        -> MulticastSubject TrialNo
    Bonsai.Windows.Input.KeyDown(Filter="MButton D Control Alt", SuppressRepetitions=true) => #19
    #18, #19 -> TakeUntil
-> DelaySubscription(DueTime=PT2S)

SubscribeSubject "Mouse Distance" => #19
-> Skip(Count=10) => #20
#20, #19 -> Zip
-> Subtract
-> Multiply(Operand=DoubleProperty(Value=100))
-> SelectMany
    WorkflowInput Source1
    -> Take(Count=100)
    -> Average
    -> WorkflowOutput
-> PublishSubject MouseSpeed

ExternalizedMapping(Value(DisplayName=TreadmillSpeed)) => #26
Bonsai.Windows.Input.KeyDown(Filter="MButton D Shift Control", SuppressRepetitions=false) => #27
#26, #27 -> StringProperty(Value=0)
-> Bonsai.IO.Ports.SerialWriteLine(PortName=COM7, NewLine=\r\n)
