WorkflowBuilder(Version=2.6.0)
Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)
Bonsai.Osc.CreateUdpClient(Name=UdpSend_beh, Port=2324, RemoteHostName=10.0.250.44, RemotePort=2324)

MetadataSource(ExpInfo(Animal=Test, RootDirectory=D:\data), Animal=Test, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

ExternalizedMapping(CloseLoopDuration(Category=Timings), InitialDelayReplay(Category=BasicSettings))
-> GroupWorkflow BasicSettings
    ExternalizedMapping(Value(DisplayName=CloseLoopDuration, Category=Timings))
    -> FloatProperty(Value=600)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject CloseLoopDuration => #3
    ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
    -> FloatProperty(Value=10)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject InitialDelayReplay => #7
    #3, #7 -> Zip
    -> Add
    -> BehaviorSubject OpenLoopStartTime

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp

        SubscribeSubject SaveTimestamp => #9
        SubscribeSubject SaveDate => #10
        SubscribeSubject Metadata => #11
        #11, #10, #9 -> Zip
        -> Format(Format={0}\S{1}\R{2}, Selector="Item1.Animal,Item2,Item3")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend_beh, Address=/beh_fname)

GroupWorkflow InitBonvision3D
    ExternalizedMapping(WindowState, DisplayDevice, ClearColor)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Primary
      TargetRenderFrequency=0
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=D:\code\vis-stim-depth\Spheres\Objects\sphere.obj)))
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    Disable Bonsai.Windows.Input.MouseMove
    -> Disable MemberSelector(Selector=Y)
    -> Disable Bonsai.Dsp.Rescale(Min=0, Max=2000, RangeMin=0, RangeMax=10, RescaleType=Linear)
    -> Disable Bonsai.Shaders.LatestOnUpdateFrame
    -> Disable PublishSubject MouseZ

    ExternalizedMapping(ScreenCalibFile(Category=Calibrations), GammaCalibFile(Category=Calibrations))
    -> GroupWorkflow CalibrationFiles
        ExternalizedMapping(FileName(DisplayName=ScreenCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\monitor_calibration.csv, ListSeparator=",", ScanPattern=%f, SkipRows=1)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            it[0] as Screen1_params,
            it[1] as Screen2_params,
            it[2] as Screen3_params,
            it[3] as Screen4_params
            )
        -> MemberSelector(Selector=Screen1_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen1pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen2_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen2pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen3_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen3pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen4_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen4pos(BufferSize=nil)

        ExternalizedMapping(FileName(DisplayName=GammaCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\gamma_calibration.csv, ListSeparator="", ScanPattern=%s, SkipRows=0)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Screen1_gammalut,
            it[1] as Screen2_gammalut,
            it[2] as Screen3_gammalut,
            it[3] as Screen4_gammalut
            )
        -> ReplaySubject GammaLut(BufferSize=nil)

    GroupWorkflow SetMouseZ
        SubscribeSubject "Mouse Distance" => #0
        Bonsai.Shaders.UpdateFrame => #1
        #1, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #5
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #7
        #3, #5, #7 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> Disable IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=100, RangeBegin=0, RangeEnd=500)
        -> PublishSubject MouseZ

        SubscribeSubject MouseZ
        -> ReplaySubject MouseZClose(BufferSize=nil) => #13
        SubscribeSubject CloseLoopDuration
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT10M) => #16
        #13, #16 -> TakeUntil

        SubscribeSubject MouseZ => #18
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT10M9.9999744S) => #21
        #18, #21 -> Sample
        -> BehaviorSubject MouseZOpenStart

    GroupWorkflow MouseZ
        SubscribeSubject MouseZClose => #0
        SubscribeSubject MouseZClose => #1
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime) => #3
        #1, #3 -> Bonsai.Shaders.Delay(DueTime=PT10M9.9999744S) => #4
        SubscribeSubject MouseZOpenStart => #5
        #4, #5 -> WithLatestFrom
        -> Add => #7
        #0, #7 -> Merge
        -> Bonsai.Scripting.ExpressionTransform Rename1
          Expression:
            new(
            0 as X,
            0 as Y,
            it as EyeZ)
        -> WorkflowOutput
    -> PublishSubject Eye
    -> PropertyMapping(Eye(Selector="X,Y,EyeZ"))
    -> GroupWorkflow SetViewports
        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
        SubscribeSubject Screen1pos => #2
        SubscribeSubject Screen2pos => #3
        SubscribeSubject Screen3pos => #4
        SubscribeSubject Screen4pos => #5
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen1_gammalut) => #7
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen2_gammalut) => #9
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen3_gammalut) => #11
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen4_gammalut) => #13
        Disable SubscribeSubject Screen1pos => #14
        Disable SubscribeSubject Screen2pos => #15
        Disable SubscribeSubject Screen3pos => #16
        Disable SubscribeSubject Screen4pos => #17
        ExternalizedMapping(Eye) => #18
        #1, #18 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> PublishSubject Draw
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #21
        #21, #2 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #24
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0360390469, Y=-87.6625443, Z=0.4738361)
          Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
        #24, #7 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #27
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #27, #14 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #30
        #21, #3 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #33
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
          Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
        #33, #9 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #36
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #36, #15 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #39
        #21, #4 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #42
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
          Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
        #42, #11 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #45
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #45, #16 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #48
        #21, #5 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #51
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.4698254, Y=91.10029, Z=-0.10943494)
          Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
        #51, #13 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #54
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #54, #17 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #57
        #30, #39, #48, #57 -> Zip
        -> WorkflowOutput

GroupWorkflow Floor
    ExternalizedMapping(Period(DisplayName=RegenerateInterval))
    -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT5S)
    -> ElementIndex
    -> MemberSelector(Selector=Index) => #3
    ExternalizedMapping(TextureName, Ambient, TranslationX, TranslationY, ScaleZ, RotationX, RotationY, RotationZ) => #4
    SubscribeSubject FloorLength
    -> PropertyMapping(Value)
    -> FloatProperty(Value=10000) => #7
    #3, #7 -> CombineLatest
    -> Multiply => #9
    #9, #4 -> CreateObservable
        WorkflowInput Source1 => #0
        SubscribeSubject Draw => #1
        SubscribeSubject FloorWidth
        -> PropertyMapping(ScaleX) => #3
        ExternalizedMapping(TextureName) => #4
        #1, #4 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #5
        #5, #0 -> CombineLatest
        -> InputMapping(Selector=Item1, TranslationZ(Selector=Item2)) => #7
        SubscribeSubject FloorLength
        -> PropertyMapping(ScaleY) => #9
        ExternalizedMapping(Ambient, TranslationX, TranslationY, ScaleZ, RotationZ, RotationY, RotationX) => #10
        #7, #3, #9, #10 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.5
          TranslationZ=70000
          ScaleX=0.5
          ScaleY=10000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    -> Merge

    ExternalizedMapping(Value(DisplayName=FloorLength))
    -> FloatProperty(Value=10000)
    -> BehaviorSubject FloorLength

    ExternalizedMapping(Value(DisplayName=FloorWidth))
    -> FloatProperty(Value=0.5)
    -> BehaviorSubject FloorWidth

IncludeWorkflow(Path=Extensions\PhotodiodePlane.bonsai, ScaleX=0.5, ScaleY=0.5, ScaleZ=0.5, PhotoquadX=-25, PhotoquadY=-37, PhotoquadZ=5)

Disable GroupWorkflow "Frame Logger"(Description="Frame & Photodiode logger")
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #3
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #7
    #3, #7 -> Zip
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #10
      Expression:
        new(
        it.Value.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime
        )
    SubscribeSubject SaveTimestamp => #11
    SubscribeSubject SaveGeneralPrefix => #12
    SubscribeSubject SaveDate => #13
    ExternalizedMapping(Value(DisplayName=Filename))
    -> StringProperty(Value=FrameLog) => #15
    SubscribeSubject Metadata => #16
    #12, #13, #11, #15, #16 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> PropertyMapping(FileName) => #19
    #10, #19 -> Bonsai.IO.CsvWriter
      FileName=D:\data\PZAH4.1c\S20210429\R102752\PZAH4.1c_FrameLog_S20210429_R102752.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable WorkflowOutput

    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #25
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #29
    #25, #29 -> Zip => #30
    SubscribeSubject photodiode => #31
    SubscribeSubject PhotoQuadColor => #32
    #30, #32, #31 -> CombineLatest
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #35
      Expression:
        new(
        it.Value.Item1.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item1.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item1.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime,
        it.Value.Item2 as PhotoQuadColor,
        it.Value.Item3 as Photodiode
        )
    SubscribeSubject SaveTimestamp => #36
    SubscribeSubject SaveGeneralPrefix => #37
    SubscribeSubject SaveDate => #38
    ExternalizedMapping(Value(DisplayName="Photodiode Filename"))
    -> StringProperty(Value=PhotodiodeLog) => #40
    SubscribeSubject Metadata => #41
    #37, #38, #36, #40, #41 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> PropertyMapping(FileName) => #44
    #35, #44 -> Bonsai.IO.CsvWriter
      FileName=D:\data\PZAH4.1c\S20210429\R102752\PZAH4.1c_PhotodiodeLog_S20210429_R102752.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable WorkflowOutput

Disable GroupWorkflow "Rotary Encoder Logger"(Description="Log ticks data from rotary encoder")
    SubscribeSubject "Mouse Distance" => #0
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #4
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #8
    #4, #8, #0 -> CombineLatest
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #11
      Expression:
        new(
        it.Value.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime,
        it.Value.Item3 as RotaryEncoder
        )
    SubscribeSubject SaveTimestamp => #12
    SubscribeSubject SaveGeneralPrefix => #13
    SubscribeSubject SaveDate => #14
    ExternalizedMapping(Value(DisplayName=Filename))
    -> StringProperty(Value=RotaryEncoder) => #16
    SubscribeSubject Metadata => #17
    #13, #14, #12, #16, #17 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> PropertyMapping(FileName) => #20
    #11, #20 -> Bonsai.IO.CsvWriter
      FileName=D:\data\PZAH4.1c\S20210429\R102752\PZAH4.1c_RotaryEncoder_S20210429_R102752.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true

Disable IncludeWorkflow(Path=Extensions\ManualReward.bonsai)

Disable GroupWorkflow TestSphereSize
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=180, Count=37)
    -> Bonsai.Numerics.DegreeToRadian => #1
    FloatProperty(Value=0)
    -> Bonsai.Numerics.DegreeToRadian => #3
    FloatProperty(Value=3) => #4
    FloatProperty(Value=0.043) => #5
    #1, #3, #4, #5 -> CombineLatest
    -> SelectMany
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as Azi,
            Item2 as Ele,
            Item3 as Depth,
            Item4 as OriSize)
        -> Bonsai.Scripting.ExpressionTransform => #2
          Expression:
            new(
            Depth * Math.Cos(Ele) * Math.Cos(Azi) as X,
            Depth * Math.Sin(Ele) as Y,
            Depth * Math.Cos(Ele) * Math.Sin(Azi) as Z0,
            Depth * OriSize as Size
            )
        SubscribeSubject Draw => #3
        #2, #3 -> CombineLatest
        -> InputMapping
          Selector=Item2
          TranslationX(Selector=Item1.X)
          TranslationY(Selector=Item1.Y)
          TranslationZ(Selector=Item1.Z0)
          ScaleX(Selector=Item1.Size)
          ScaleY(Selector=Item1.Size)
          ScaleZ(Selector=Item1.Size)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-3
          TranslationY=0
          TranslationZ=3.673819E-16
          ScaleX=0.129000008
          ScaleY=0.129000008
          ScaleZ=0.129000008
          MeshName=sphere
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=0
        -> WorkflowOutput
    -> WorkflowOutput

Disable GroupWorkflow SetHarpSavePath
    SubscribeSubject SaveTimestamp => #0
    SubscribeSubject SaveGeneralPrefix => #1
    SubscribeSubject SaveDate => #2
    StringProperty(Value=harpmessage) => #3
    SubscribeSubject Metadata => #4
    #1, #2, #0, #3, #4 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.bin, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> WorkflowOutput
-> Disable PropertyMapping(HarpSavePath)
-> GroupWorkflow harp_hardware
    IncludeWorkflow Command(Path=Bonsai.Harp:CommandSubject.bonsai)
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #1
    -> MemberSelector(Selector=MessageBytes) => #2
    Disable ExternalizedMapping(Path(DisplayName=HarpSavePath, Category=Logging)) => #3
    #3, #2 -> Disable Bonsai.Dsp.MatrixWriter(Path=D:\data\PZAH4.1c\S20210429\R102752\PZAH4.1c_harpmessage_S20210429_R102752.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
    #1 -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1)
    -> PublishSubject LickDetection
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterAnalogInput, Mask=Port2)
    -> MemberSelector(Selector=Value)
    -> BehaviorSubject photodiode
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
    -> GroupWorkflow CalculateDistance
        WorkflowInput Source1
        -> Skip(Count=1)
        -> Buffer(Count=2, Skip=1)
        -> Bonsai.Scripting.ExpressionTransform diffence
          Expression: it[0]-it[1]
        -> Bonsai.Scripting.ExpressionTransform CutArtefact
          Expression:
            new(
            (it > 60000)? (it-65536) : ((it<-60000)? (it+65536) : it) as step
            )
        -> MemberSelector(Selector=step)
        -> Accumulate
        -> GroupWorkflow README>>(Description='Change the order in "difference" when putting rotary encoder at different side')
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    -> BehaviorSubject "Mouse Distance"
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
    -> PublishSubject SIFrameTrigger

    PublishSubject<System.Boolean> Reward
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke2Valve)
    -> MulticastSubject Command

    IncludeWorkflow Timestamp(Path=Bonsai.Harp:TimestampSubject.bonsai)

    PublishSubject<System.Boolean> DO0
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Digital0)
    -> MulticastSubject Command

Disable SubscribeSubject "Mouse Distance"
Disable SubscribeSubject photodiode

SubscribeSubject Metadata
-> Format(Format={0}_S{1}{2}{3}_R{4}{5}{6}, Selector="Animal,Year,Month,Day,Hour,Minute,Second") => #21
-> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift Control Alt", SuppressRepetitions=false)
-> BooleanProperty(Value=false) => #24
#21, #24 -> Zip
-> SelectMany "Spheres Close & Open" => #26
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger

    ExternalizedMapping
      Size(Category=MiscParams)
      InitialDelay(Category=Timings)
      LifeTime(Category=Timings)
      Ymin(Category=Position)
      Ymax(Category=Position)
      Ycount(Category=Position)
      DepthMin(Category=Position)
      DepthMax(Category=Position)
      DepthCount(Category=Position)
      SphereInterval(Category=Timings)
      Xmin(Category=Position)
      XminLim(Category=Position)
      XminCount(Category=Position)
      XmaxLim(Category=Position)
      Xmax(Category=Position)
      XmaxCount(Category=Position)
      "SaveFilename AllParams"(DisplayName="Close All Params", Category=ParamLogger)
      "SaveFilename NewParams"(DisplayName="Close NewParams", Category=ParamLogger)
    -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.")
        SubscribeSubject MouseZ => #0
        ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
        -> FloatProperty(Value=0.043)
        -> BehaviorSubject OriginalSize
        -> Take(Count=1) => #4
        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #5
        ExternalizedMapping
          LifeTime(Category=Timings)
          Ymin(Category=Positions)
          Ymax(Category=Positions)
          Ycount(Category=Positions)
          DepthMin(Category=Positions)
          DepthMax(Category=Positions)
          DepthCount(Category=Positions)
          SphereInterval(Category=Timings)
          Xmin(Category=Positions)
          XminLim(Category=Positions)
          XminCount(Category=Positions)
          XmaxLim(Category=Positions)
          Xmax(Category=Positions)
          XmaxCount(Category=Positions)
        -> GroupWorkflow SetParams
            ExternalizedMapping(Value(DisplayName=LifeTime, Category=Timings))
            -> FloatProperty(Value=4)
            -> BehaviorSubject LifeTime

            ExternalizedMapping => #3
              Ymin(Category=Position)
              Ymax(Category=Position)
              Ycount(Category=Position)
              DepthMin(Category=Position)
              DepthMax(Category=Position)
              DepthCount(Category=Position)
            ExternalizedMapping(Period(DisplayName=SphereInterval, Category=Timings))
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.5S) => #5
            ExternalizedMapping(Xmin, XminLim, XminCount, XmaxLim, Xmax, XmaxCount)
            -> GroupWorkflow Xrange => #7
                ExternalizedMapping(RangeMin(DisplayName=Xmin), RangeMax(DisplayName=XminLim), Count(DisplayName=XminCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-30, RangeMax=70, Count=26) => #1
                ExternalizedMapping(RangeMin(DisplayName=XmaxLim), RangeMax(DisplayName=Xmax), Count(DisplayName=XmaxCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=110, RangeMax=240, Count=26) => #3
                #1, #3 -> Concat
                -> WorkflowOutput
            #7, #3 -> CreateObservable YZrange
                WorkflowInput Source1 => #0
                ExternalizedMapping(RangeMin(DisplayName=Ymin), RangeMax(DisplayName=Ymax), Count(DisplayName=Ycount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-40, RangeMax=40, Count=16) => #2
                #0, #2 -> CombineLatest => #3
                ExternalizedMapping(DepthMin(Category=Positions), DepthMax, DepthCount, DepthLogBase) => #4
                #3, #4 -> CreateObservable DepthRange
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=DepthMin, Category=Positions))
                    -> FloatProperty(Value=20) => #2
                    ExternalizedMapping(Value(DisplayName=DepthMax, Category=Positions))
                    -> FloatProperty(Value=200) => #4
                    ExternalizedMapping(Value(DisplayName=DepthCount, Category=Positions))
                    -> IntProperty(Value=3) => #6
                    ExternalizedMapping(Value(DisplayName=DepthLogBase, Category=Positions))
                    -> FloatProperty(Value=10) => #8
                    #2, #4, #6, #8 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #10
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #12
                    #10 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #14
                    #10 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #16
                    #12, #14, #16 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.301029995663981, RangeMax=2.3010299956639808, Count=3) => #17
                    #17, #8 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #19
                      Expression: Math.Pow(Item2,Item1)
                    #0, #19 -> CombineLatest
                    -> InputMapping(X(Selector=Item1.Item1), Y(Selector=Item1.Item2), Z(Selector=Item2))
                    -> Bonsai.Shaders.CreateVector3(X=240, Y=40, Z=200)
                    -> WorkflowOutput
                -> Concat
                -> WorkflowOutput
            -> Concat
            -> Bonsai.Numerics.Permutation => #10
            #10, #5 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Repeat
            -> Bonsai.Scripting.ExpressionTransform => #14
              Expression:
                new(
                it.X as X,
                it.Y as Y,
                it.Z as Depth
                )
            SubscribeSubject CloseLoopDuration => #15
            SubscribeSubject LifeTime
            -> Multiply(Operand=FloatProperty(Value=-1E+07)) => #17
            #15, #17 -> Zip
            -> Add
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT9M56S) => #21
            #14, #21 -> TakeUntil => #22
            -> MemberSelector(Selector=X)
            -> ReplaySubject Xdeg(BufferSize=nil)
            -> Bonsai.Numerics.DegreeToRadian => #25
            #22 -> MemberSelector(Selector=Y)
            -> ReplaySubject Ydeg(BufferSize=nil)
            -> Bonsai.Numerics.DegreeToRadian => #28
            #22 -> MemberSelector(Selector=Depth)
            -> ReplaySubject Depth(BufferSize=nil) => #30
            #25, #28, #30 -> Zip => #31
            SubscribeSubject StartTrigger => #32
            #31, #32 -> WithLatestFrom
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> ElementIndex => #8
        #8, #4 -> CombineLatest => #9
        #9, #0 -> WithLatestFrom
        -> SphericalCoordinates_Discrete
        -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> BehaviorSubject ThisSphereParams
            -> MulticastSubject SphereNewParams => #2
            SubscribeSubject Draw => #3
            Disable SubscribeSubject LifeTime => #4
            SubscribeSubject LifeTime
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT4S) => #8
            Disable Bonsai.Shaders.RenderFrame
            -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Disable Accumulate => #11
            Disable SubscribeSubject ThisSphereParams
            -> Disable MemberSelector(Selector=Item1) => #13
            #13, #11, #4 -> Disable CombineLatest
            -> Disable CreateFading => #15
            #2, #15 -> Disable CombineLatest
            -> Disable MulticastSubject SphereAllParams => #17
            #3, #17 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item2 as Ambient,
                Item2.Item1.Item1 as SphereID,
                Item2.Item1.Item2.Item1 as Azimuth,
                Item2.Item1.Item2.Item2 as Elevation,
                Item2.Item1.Item2.Item3 as Depth,
                Item2.Item1.Item3.Item1 as X,
                Item2.Item1.Item3.Item2 as Y,
                Item2.Item1.Item3.Item3 as Z0,
                Item2.Item1.Item3.Item4 as Z,
                Item2.Item1.Item3.Item5 as MouseZ,
                Item2.Item1.Item4.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationX(Selector=X)
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow => #21
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=102.4844
              TranslationY=97.97794
              TranslationZ=141.057678
              ScaleX=8.6
              ScaleY=8.6
              ScaleZ=8.6
              MeshName=sphere
              Ambient(X=0.9587383, Y=0.9587383, Z=0.9587383)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            #21, #8 -> TakeUntil
            -> WorkflowOutput
        -> Merge => #13
        #13, #5 -> DelaySubscription(DueTime=PT5S)
        -> WorkflowOutput

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger), "SaveFilename AllParams")
        -> GroupWorkflow SphereParamsLoggerClose
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep)
            -> Accumulate
            -> ElementIndex
            -> PublishSubject Frames

            BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParams => #5
            SubscribeSubject Frames => #6
            SubscribeSubject SaveGeneralPrefix => #7
            SubscribeSubject SaveDate => #8
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams", Category=ParamLogger))
            -> StringProperty(Value=SphereClose_NewParams) => #10
            SubscribeSubject Metadata => #11
            SubscribeSubject SaveTimestamp => #12
            #7, #8, #12, #10, #11 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #15
            SubscribeSubject StartTrigger => #16
            #6, #16 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #18
            #5, #18 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform => #20
              Expression:
                new(
                Item2.Index as Frame,
                Item2.Value.ElapsedTime as FrameElapsedTime,
                Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Item1.Item1 as SphereID,
                Math.Round(Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Item1.Item2.Item2/Math.PI*180) as Elevation,
                Item1.Item2.Item3 as Depth,
                Item1.Item3.Item1 as X,
                Item1.Item3.Item2 as Y,
                Item1.Item3.Item3 as Z0,
                Item1.Item3.Item4 as Z,
                Item1.Item3.Item5 as MouseZ,
                Item1.Item4.Item1 as OriginalSize,
                Item1.Item4.Item2 as Size)
            #20, #15 -> Bonsai.IO.CsvWriter => #21
              FileName=D:\data\Test\S20210429\R103753\Test_SphereClose_NewParams_S20210429_R103753.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=true
            -> MemberSelector(Selector=SphereID) => #22
            #21 -> MemberSelector(Selector=Azimuth) => #23
            #21 -> MemberSelector(Selector=Elevation) => #24
            #21 -> MemberSelector(Selector=Depth) => #25
            #21 -> MemberSelector(Selector=Frame) => #26
            #22, #23, #24, #25, #26 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> ReplaySubject SphereParamsReplay(BufferSize=nil)

            BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParams => #30
            SubscribeSubject Frames => #31
            SubscribeSubject CloseLoopDuration
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=P69444DT10H42M43.5385344S) => #35
            SubscribeSubject SaveGeneralPrefix => #36
            SubscribeSubject SaveDate => #37
            ExternalizedMapping(Value(DisplayName="SaveFilename AllParams", Category=ParamLogger))
            -> StringProperty(Value=SphereClose_AllParams) => #39
            SubscribeSubject Metadata => #40
            SubscribeSubject SaveTimestamp => #41
            #36, #37, #41, #39, #40 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #44
            SubscribeSubject StartTrigger => #45
            #31, #45 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #47
            #30, #47 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform => #49
              Expression:
                new(
                Item2.Index as Frame,
                Item2.Value.ElapsedTime as FrameElapsedTime,
                Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Item1.Item1.Item1 as SphereID,
                Math.Round(Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Item1.Item1.Item2.Item2/Math.PI*180) as Elevation,
                Item1.Item1.Item2.Item3 as Depth,
                Item1.Item1.Item3.Item1 as X,
                Item1.Item1.Item3.Item2 as Y,
                Item1.Item1.Item3.Item3 as Z0,
                Item1.Item1.Item3.Item4 as Z,
                Item1.Item1.Item3.Item5 as MouseZ,
                Item1.Item1.Item4.Item1 as OriginalSize,
                Item1.Item1.Item4.Item2 as Size,
                Item1.Item2 as Ambient)
            #49, #44 -> Bonsai.IO.CsvWriter => #50
              FileName=D:\data\Test\S20210429\R103753\Test_SphereClose_AllParams_S20210429_R103753.csv
              Append=false
              Overwrite=true
              Suffix=Timestamp
              IncludeHeader=true
            #50, #35 -> TakeUntil

    ExternalizedMapping
      "SaveFilename NewParams"(DisplayName="Open NewParams", Category=ParamLogger)
      "SaveFilename AllParams"(DisplayName="Open AllParams", Category=ParamLogger)
    -> GroupWorkflow SpheresOpen
        SubscribeSubject Ydeg
        -> Bonsai.Numerics.DegreeToRadian => #1
        SubscribeSubject Depth => #2
        SubscribeSubject MouseZ => #3
        SubscribeSubject CloseLoopDuration
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=P69444DT10H42M43.5385344S) => #7
        SubscribeSubject OriginalSize => #8
        SubscribeSubject Xdeg
        -> Bonsai.Numerics.DegreeToRadian => #10
        #10, #1, #2 -> Zip => #11
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime) => #13
        SubscribeSubject StartTrigger => #14
        #11, #14 -> WithLatestFrom
        -> MemberSelector(Selector=Item1) => #16
        #16, #13 -> Bonsai.Shaders.Delay(DueTime=PT10M9.9999744S)
        -> ElementIndex => #18
        #18, #8 -> CombineLatest => #19
        #19, #3 -> WithLatestFrom
        -> CylinderCoordinates
        -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> BehaviorSubject ThisSphereParams
            -> MulticastSubject SphereNewParamsOpen => #2
            SubscribeSubject Draw => #3
            SubscribeSubject LifeTime => #4
            SubscribeSubject LifeTime
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT4S) => #8
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate => #11
            SubscribeSubject ThisSphereParams
            -> MemberSelector(Selector=Item1) => #13
            #13, #11, #4 -> CombineLatest
            -> CreateFading => #15
            #2, #15 -> CombineLatest
            -> MulticastSubject SphereAllParamsOpen => #17
            #3, #17 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item2 as Ambient,
                Item2.Item1.Item1 as SphereID,
                Item2.Item1.Item2.Item1 as Azimuth,
                Item2.Item1.Item2.Item2 as Elevation,
                Item2.Item1.Item2.Item3 as Depth,
                Item2.Item1.Item3.Item1 as X,
                Item2.Item1.Item3.Item2 as Y,
                Item2.Item1.Item3.Item3 as Z0,
                Item2.Item1.Item3.Item4 as Z,
                Item2.Item1.Item3.Item5 as MouseZ,
                Item2.Item1.Item4.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationX(Selector=X)
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow => #21
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=174.356888
              TranslationY=97.97794
              TranslationZ=8126.97461
              ScaleX=8.6
              ScaleY=8.6
              ScaleZ=8.6
              MeshName=sphere
              Ambient(X=0.9240159, Y=0.9240159, Z=0.9240159)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            #21, #8 -> TakeUntil
            -> WorkflowOutput
        -> Merge => #23
        #23, #7 -> TakeUntil
        -> WorkflowOutput

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger), "SaveFilename AllParams")
        -> GroupWorkflow SphereParamsLoggerOpen
            BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParamsOpen => #0
            SubscribeSubject Frames => #1
            SubscribeSubject SaveGeneralPrefix => #2
            SubscribeSubject SaveDate => #3
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams", Category=ParamLogger))
            -> StringProperty(Value=SphereOpen_NewParams) => #5
            SubscribeSubject Metadata => #6
            SubscribeSubject SaveTimestamp => #7
            #2, #3, #7, #5, #6 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #10
            SubscribeSubject StartTrigger => #11
            #1, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #13
            #0, #13 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform => #15
              Expression:
                new(
                Item2.Index as Frame,
                Item2.Value.ElapsedTime as FrameElapsedTime,
                Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Item1.Item1 as SphereID,
                Math.Round(Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Item1.Item2.Item2/Math.PI*180) as Elevation,
                Item1.Item2.Item3 as Depth,
                Item1.Item3.Item1 as X,
                Item1.Item3.Item2 as Y,
                Item1.Item3.Item3 as Z0,
                Item1.Item3.Item4 as Z,
                Item1.Item3.Item5 as MouseZ,
                Item1.Item4.Item1 as OriginalSize,
                Item1.Item4.Item2 as Size)
            #15, #10 -> Bonsai.IO.CsvWriter
              FileName=D:\data\Test\S20210429\R103753\Test_SphereOpen_NewParams_S20210429_R103753.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParamsOpen => #17
            SubscribeSubject Frames => #18
            SubscribeSubject CloseLoopDuration
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=P69444DT10H42M43.5385344S) => #22
            SubscribeSubject SaveGeneralPrefix => #23
            SubscribeSubject SaveDate => #24
            ExternalizedMapping(Value(DisplayName="SaveFilename AllParams", Category=ParamLogger))
            -> StringProperty(Value=SphereOpen_AllParams) => #26
            SubscribeSubject Metadata => #27
            SubscribeSubject SaveTimestamp => #28
            #23, #24, #28, #26, #27 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #31
            SubscribeSubject StartTrigger => #32
            #18, #32 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #34
            #17, #34 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform => #36
              Expression:
                new(
                Item2.Index as Frame,
                Item2.Value.ElapsedTime as FrameElapsedTime,
                Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Item1.Item1.Item1 as SphereID,
                Math.Round(Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Item1.Item1.Item2.Item2/Math.PI*180) as Elevation,
                Item1.Item1.Item2.Item3 as Depth,
                Item1.Item1.Item3.Item1 as X,
                Item1.Item1.Item3.Item2 as Y,
                Item1.Item1.Item3.Item3 as Z0,
                Item1.Item1.Item3.Item4 as Z,
                Item1.Item1.Item3.Item5 as MouseZ,
                Item1.Item1.Item4.Item1 as OriginalSize,
                Item1.Item1.Item4.Item2 as Size,
                Item1.Item2 as Ambient)
            #36, #31 -> Bonsai.IO.CsvWriter => #37
              FileName=D:\data\Test\S20210429\R103753\Test_SphereOpen_AllParams_S20210429_R103753.csv
              Append=false
              Overwrite=true
              Suffix=Timestamp
              IncludeHeader=true
            #37, #22 -> TakeUntil
Bonsai.Windows.Input.KeyDown(Filter="Space NumPad0 Control Alt", SuppressRepetitions=true) => #27
#26, #27 -> TakeUntil

Disable SubscribeSubject photodiode
