WorkflowBuilder(Version=2.6.0)
Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)

MetadataSource(ExpInfo(Animal=TEST, RootDirectory=D:\data), Animal=TEST, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

ExternalizedMapping
  InitialDelayReplay(Category="Exp Timings")
  TrialDuration(DisplayName=TrialDuration, Description="Duration of 1 depth", Category="Exp Timings")
  InterTrialDelay(Category="Exp Timings")
  RepeatNumber(DisplayName=RepeatNumber, Description="Number of repeating all depth values", Category="Exp Timings")
  DepthCount(Category="Exp Timings")
-> GroupWorkflow BasicSettings
    ExternalizedMapping(InitialDelayReplay, TrialDuration, InterTrialDelay, RepeatNumber, DepthCount)
    -> GroupWorkflow ExpTimings
        ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InitialDelayReplay => #3
        ExternalizedMapping(Value(DisplayName=TrialDuration, Description="Duration of 1 trial (1 fixed depth)", Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject TrialDuration => #7
        ExternalizedMapping(Value(DisplayName=RepeatNumber, Description="Number of repeat of all the depth values", Category=Timings))
        -> IntProperty(Value=15)
        -> BehaviorSubject RepeatNumber => #10
        ExternalizedMapping(Value(DisplayName=InterTrialDelay, Description="Interval between 2 trials", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InterTrialDelay => #14
        #7, #14 -> Zip
        -> Add => #16
        ExternalizedMapping(Value(DisplayName=DepthCount))
        -> IntProperty(Value=3)
        -> BehaviorSubject DepthCount => #19
        #10, #19 -> Zip
        -> Multiply => #21
        #16, #21 -> Zip
        -> Multiply
        -> BehaviorSubject CloseLoopDuration => #24
        #24, #3 -> Zip
        -> Add
        -> BehaviorSubject OpenLoopStartTime
        -> WorkflowOutput

    GroupWorkflow ChooseExperiment
        ExternalizedMapping(Value(DisplayName=WhichExp))
        -> StringProperty(Value=SphereSparseNoise)
        -> Take(Count=1)
        -> AsyncSubject WhichExp

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp

        SubscribeSubject SaveTimestamp => #9
        SubscribeSubject SaveDate => #10
        SubscribeSubject Metadata => #11
        SubscribeSubject WhichExp => #12
        #11, #10, #9, #12 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/beh_fname)

GroupWorkflow InitBonvision3D
    ExternalizedMapping(WindowState, DisplayDevice, ClearColor)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Primary
      TargetRenderFrequency=0
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=D:\code\vis-stim-depth\Spheres\Objects\sphere.obj)))
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    Disable Bonsai.Windows.Input.MouseMove
    -> Disable MemberSelector(Selector=Y)
    -> Disable Bonsai.Dsp.Rescale(Min=0, Max=2000, RangeMin=0, RangeMax=10, RescaleType=Linear)
    -> Disable Bonsai.Shaders.LatestOnUpdateFrame
    -> Disable PublishSubject MouseZ

    ExternalizedMapping(ScreenCalibFile(Category=Calibrations), GammaCalibFile(Category=Calibrations))
    -> GroupWorkflow CalibrationFiles
        ExternalizedMapping(FileName(DisplayName=ScreenCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\monitor_calibration.csv, ListSeparator=",", ScanPattern=%f, SkipRows=1)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            it[0] as Screen1_params,
            it[1] as Screen2_params,
            it[2] as Screen3_params,
            it[3] as Screen4_params
            )
        -> MemberSelector(Selector=Screen1_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen1pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen2_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen2pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen3_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen3pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen4_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen4pos(BufferSize=nil)

        ExternalizedMapping(FileName(DisplayName=GammaCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\gamma_calibration.csv, ListSeparator="", ScanPattern=%s, SkipRows=0)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Screen1_gammalut,
            it[1] as Screen2_gammalut,
            it[2] as Screen3_gammalut,
            it[3] as Screen4_gammalut
            )
        -> ReplaySubject GammaLut(BufferSize=nil)

    GroupWorkflow SetMouseZ
        SubscribeSubject "Mouse Distance" => #0
        Bonsai.Shaders.UpdateFrame => #1
        #1, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #5
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #7
        #3, #5, #7 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> BehaviorSubject MouseZ

        Disable SubscribeSubject MouseZ
        -> Disable ReplaySubject MouseZClose(BufferSize=nil) => #12
        Disable SubscribeSubject CloseLoopDuration
        -> Disable PropertyMapping(DueTime)
        -> Disable Bonsai.Shaders.Timer(DueTime=PT3M12S) => #15
        #12, #15 -> Disable TakeUntil

        Disable SubscribeSubject MouseZ => #17
        Disable SubscribeSubject OpenLoopStartTime
        -> Disable PropertyMapping(DueTime)
        -> Disable Bonsai.Shaders.Timer(DueTime=PT3M13S) => #20
        #17, #20 -> Disable Sample
        -> Disable BehaviorSubject MouseZOpenStart

    SubscribeSubject MouseZ
    -> BehaviorSubject EyeZ
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=115.662155)
    -> PropertyMapping(Eye)
    -> GroupWorkflow SetViewports
        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
        SubscribeSubject Screen1pos => #2
        SubscribeSubject Screen2pos => #3
        SubscribeSubject Screen3pos => #4
        SubscribeSubject Screen4pos => #5
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen1_gammalut) => #7
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen2_gammalut) => #9
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen3_gammalut) => #11
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen4_gammalut) => #13
        Disable SubscribeSubject Screen1pos => #14
        Disable SubscribeSubject Screen2pos => #15
        Disable SubscribeSubject Screen3pos => #16
        Disable SubscribeSubject Screen4pos => #17
        ExternalizedMapping(Eye) => #18
        #1, #18 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=115.662155), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> PublishSubject Draw
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #21
        #21, #2 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #24
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0360390469, Y=-87.6625443, Z=0.4738361)
          Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
        #24, #7 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #27
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #27, #14 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #30
        #21, #3 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #33
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
          Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
        #33, #9 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #36
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #36, #15 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #39
        #21, #4 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #42
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
          Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
        #42, #11 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #45
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #45, #16 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #48
        #21, #5 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #51
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.4698254, Y=91.10029, Z=-0.10943494)
          Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
        #51, #13 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #54
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #54, #17 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #57
        #30, #39, #48, #57 -> Zip
        -> WorkflowOutput

GroupWorkflow Floor
    ExternalizedMapping(Value(DisplayName=FloorLength))
    -> FloatProperty(Value=30)
    -> BehaviorSubject FloorLength

    ExternalizedMapping(Value(DisplayName=TextureName))
    -> StringProperty(Value=horGrat)
    -> PropertyMapping(TextureName) => #5
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1, RangeMax=3, Count=3) => #6
    #6, #5 -> CreateObservable CreateFloors
        WorkflowInput Source1
        -> BehaviorSubject FloorNumber
        -> Subtract(Operand=IntProperty(Value=2)) => #2
        SubscribeSubject FloorLength => #3
        #2, #3 -> Zip
        -> Multiply
        -> BehaviorSubject "Floor Initial Z"

        SubscribeSubject Draw => #7
        ExternalizedMapping(TextureName) => #8
        #7, #8 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=horGrat, TextureTarget=Texture2D) => #9
        SubscribeSubject MouseZ => #10
        SubscribeSubject FloorLength => #11
        SubscribeSubject FloorNumber => #12
        SubscribeSubject "Floor Initial Z" => #13
        #10, #12, #11, #13 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform => #15
          Expression: (Math.Floor((Item1/Item3+3-Item2)/3))*(Item3*3)+Item4
        #9, #15 -> WithLatestFrom
        -> InputMapping(Selector=Item1, TranslationZ(Selector=Item2))
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.5
          TranslationZ=120
          ScaleX=0.5
          ScaleY=30
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    -> Merge

IncludeWorkflow(Path=Extensions\PhotodiodePlane.bonsai, ScaleX=0.5, ScaleY=0.5, ScaleZ=0.5, PhotoquadX=-25, PhotoquadY=-37, PhotoquadZ=5)

GroupWorkflow "Frame Logger"(Description="Frame & Photodiode logger")
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #3
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #7
    #3, #7 -> Zip
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #10
      Expression:
        new(
        it.Value.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime
        )
    SubscribeSubject SaveTimestamp => #11
    SubscribeSubject SaveGeneralPrefix => #12
    SubscribeSubject SaveDate => #13
    ExternalizedMapping(Value(DisplayName=Filename))
    -> StringProperty(Value=FrameLog) => #15
    SubscribeSubject Metadata => #16
    SubscribeSubject WhichExp => #17
    #12, #13, #11, #15, #16, #17 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal,Item6")
    -> PropertyMapping(FileName) => #20
    #10, #20 -> Bonsai.IO.CsvWriter
      FileName=D:\data\TEST\S20210511\R155057_SphereSparseNoise\TEST_S20210511_R155057_SphereSparseNoise_FrameLog.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable WorkflowOutput
    #3 -> MemberSelector(Selector=Index)
    -> BehaviorSubject FrameNo

    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #28
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #32
    #28, #32 -> Zip => #33
    SubscribeSubject photodiode => #34
    SubscribeSubject PhotoQuadColor => #35
    #33, #35, #34 -> CombineLatest
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #38
      Expression:
        new(
        it.Value.Item1.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item1.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item1.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime,
        it.Value.Item2 as PhotoQuadColor,
        it.Value.Item3 as Photodiode
        )
    SubscribeSubject SaveTimestamp => #39
    SubscribeSubject SaveGeneralPrefix => #40
    SubscribeSubject SaveDate => #41
    ExternalizedMapping(Value(DisplayName="Photodiode Filename"))
    -> StringProperty(Value=PhotodiodeLog) => #43
    SubscribeSubject Metadata => #44
    SubscribeSubject WhichExp => #45
    #40, #41, #39, #43, #44, #45 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal,Item6")
    -> PropertyMapping(FileName) => #48
    #38, #48 -> Bonsai.IO.CsvWriter
      FileName=D:\data\TEST\S20210511\R155057_SphereSparseNoise\TEST_S20210511_R155057_SphereSparseNoise_PhotodiodeLog.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable WorkflowOutput

GroupWorkflow "Rotary Encoder Logger"(Description="Log ticks data from rotary encoder")
    SubscribeSubject "Mouse Distance" => #0
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #4
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #8
    SubscribeSubject EyeZ => #9
    #4, #8, #0, #9 -> CombineLatest
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #12
      Expression:
        new(
        it.Value.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime,
        it.Value.Item3 as RotaryEncoder,
        it.Value.Item4 as EyeZ
        )
    SubscribeSubject SaveTimestamp => #13
    SubscribeSubject SaveGeneralPrefix => #14
    SubscribeSubject SaveDate => #15
    ExternalizedMapping(Value(DisplayName=Filename))
    -> StringProperty(Value=RotaryEncoder) => #17
    SubscribeSubject Metadata => #18
    SubscribeSubject WhichExp => #19
    #14, #15, #13, #17, #18, #19 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal,Item6")
    -> PropertyMapping(FileName) => #22
    #12, #22 -> Bonsai.IO.CsvWriter
      FileName=D:\data\TEST\S20210511\R155057_SphereSparseNoise\TEST_S20210511_R155057_SphereSparseNoise_RotaryEncoder.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true

GroupWorkflow "Manual Reward"
    Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false) => #0
    BooleanProperty(Value=true) => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject Reward
    -> WorkflowOutput

GroupWorkflow SetHarpSavePath
    SubscribeSubject SaveTimestamp => #0
    SubscribeSubject SaveGeneralPrefix => #1
    SubscribeSubject SaveDate => #2
    SubscribeSubject Metadata => #3
    SubscribeSubject WhichExp => #4
    ExternalizedMapping(Value(DisplayName=HarpLog))
    -> StringProperty(Value=harpmessage) => #6
    #1, #2, #0, #6, #3, #4 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal,Item6")
    -> WorkflowOutput
-> PropertyMapping(HarpSavePath)
-> IncludeWorkflow
  Path=Extensions\harp_hardware.bonsai
  HarpSavePath=D:\data\TEST\S20210511\R155057_SphereSparseNoise\TEST_S20210511_R155057_SphereSparseNoise_harpmessage.csv

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift Control Alt", SuppressRepetitions=false) => #16
Bonsai.Windows.Input.KeyDown(Filter="Space NumPad0 Control Alt", SuppressRepetitions=true) => #17
SubscribeSubject SaveTimestamp => #18
SubscribeSubject SaveDate => #19
SubscribeSubject Metadata => #20
SubscribeSubject WhichExp => #21
#20, #19, #18, #21 -> Zip
-> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4") => #23
-> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
#16, #23 -> Zip
-> SelectMany "Spheres Close & Open" => #26
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger

    ExternalizedMapping
      LifeTime
      Size
      InitialDelay
      DepthMin
      DepthMax
      DepthLogBase
      Ymin
      Ymax
      Ycount
      Xmin
      XminLim
      XminCount
      XmaxLim
      Xmax
      XmaxCount
      InterSphereInterval
      "SaveFilename NewParams"
    -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.")
        ExternalizedMapping(Value(DisplayName=LifeTime, Category=Timings))
        -> FloatProperty(Value=0.5)
        -> BehaviorSubject LifeTime

        SubscribeSubject MouseZ => #3
        ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
        -> FloatProperty(Value=0.043)
        -> BehaviorSubject OriginalSize
        -> Take(Count=1) => #7
        ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #8
        ExternalizedMapping(DepthMin(Category=Positions), DepthMax, DepthLogBase)
        -> GroupWorkflow DepthRange => #10
            ExternalizedMapping(Value(DisplayName=DepthMin, Category=Positions))
            -> FloatProperty(Value=20) => #1
            ExternalizedMapping(Value(DisplayName=DepthMax, Category=Positions))
            -> FloatProperty(Value=200) => #3
            ExternalizedMapping(Value(DisplayName=DepthLogBase, Category=Positions))
            -> FloatProperty(Value=10) => #5
            SubscribeSubject DepthCount
            -> IntProperty(Value=3) => #7
            #1, #3, #7, #5 -> Zip
            -> Bonsai.Scripting.ExpressionTransform Log => #9
              Expression:
                new(
                Math.Log(Item1,Item4) as Min,
                Math.Log(Item2,Item4) as Max,
                Item3 as Count
                )
            -> MemberSelector(Selector=Min)
            -> PropertyMapping(RangeMin) => #11
            #9 -> MemberSelector(Selector=Max)
            -> PropertyMapping(RangeMax) => #13
            #9 -> MemberSelector(Selector=Count)
            -> PropertyMapping(Count) => #15
            #11, #13, #15 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.301029995663981, RangeMax=2.3010299956639808, Count=3) => #16
            #16, #5 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Power
              Expression: Math.Pow(Item2,Item1)
            -> WorkflowOutput
        ExternalizedMapping(Ymin, Ymax, Ycount, Xmin, XminLim, XminCount, XmaxLim, Xmax, XmaxCount, InterSphereInterval) => #11
        #10, #11 -> CreateObservable "XY Range"
            WorkflowInput Source1 => #0
            ExternalizedMapping(Ymin(Category=Position), Ymax(Category=Position), Ycount(Category=Position)) => #1
            ExternalizedMapping(Xmin, XminLim, XminCount, XmaxLim, Xmax, XmaxCount)
            -> GroupWorkflow Xrange => #3
                ExternalizedMapping(RangeMin(DisplayName=Xmin), RangeMax(DisplayName=XminLim), Count(DisplayName=XminCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-30, RangeMax=70, Count=21) => #1
                ExternalizedMapping(RangeMin(DisplayName=XmaxLim), RangeMax(DisplayName=Xmax), Count(DisplayName=XmaxCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=110, RangeMax=240, Count=21) => #3
                #1, #3 -> Concat
                -> WorkflowOutput
            #3, #1 -> CreateObservable Yrange
                WorkflowInput Source1 => #0
                ExternalizedMapping(RangeMin(DisplayName=Ymin), RangeMax(DisplayName=Ymax), Count(DisplayName=Ycount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-40, RangeMax=40, Count=17) => #2
                #0, #2 -> CombineLatest
                -> WorkflowOutput
            -> Concat
            -> Bonsai.Numerics.Permutation => #6
            ExternalizedMapping(DueTime(DisplayName=InterSphereInterval))
            -> Bonsai.Shaders.Timer(DueTime=PT0.01S, Period=PT0S) => #8
            #6, #8 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Repeat => #11
            #11, #0 -> CombineLatest => #12
            SubscribeSubject TrialDuration
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT30S) => #15
            #12, #15 -> TakeUntil => #16
            SubscribeSubject InterTrialDelay
            -> PropertyMapping(DueTime) => #18
            #16, #18 -> Delay(DueTime=PT10S)
            -> WorkflowOutput
        -> Concat => #13
        SubscribeSubject RepeatNumber
        -> PropertyMapping(Count) => #15
        #13, #15 -> RepeatCount(Count=15) => #16
        -> MemberSelector(Selector=Item1.Item1)
        -> Bonsai.Numerics.DegreeToRadian => #18
        #16 -> MemberSelector(Selector=Item1.Item2)
        -> Bonsai.Numerics.DegreeToRadian => #20
        #16 -> MemberSelector(Selector=Item2) => #21
        #18, #20, #21 -> Zip
        -> ElementIndex => #23
        #23, #7 -> CombineLatest => #24
        #24, #3 -> WithLatestFrom
        -> SphericalCoordinates_SP
        -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> BehaviorSubject ThisSphereParams
            -> MulticastSubject SphereNewParams => #2
            SubscribeSubject Draw => #3
            SubscribeSubject LifeTime => #4
            SubscribeSubject LifeTime
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate => #11
            SubscribeSubject ThisSphereParams
            -> MemberSelector(Selector=Item1) => #13
            #13, #11, #4 -> CombineLatest
            -> CreateFading => #15
            #2, #15 -> CombineLatest
            -> MulticastSubject SphereAllParams => #17
            #3, #17 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item2 as Ambient,
                Item2.Item1.Item1 as SphereID,
                Item2.Item1.Item2.Item1 as Azimuth,
                Item2.Item1.Item2.Item2 as Elevation,
                Item2.Item1.Item2.Item3 as Depth,
                Item2.Item1.Item3.Item1 as X,
                Item2.Item1.Item3.Item2 as Y,
                Item2.Item1.Item3.Item3 as Z0,
                Item2.Item1.Item3.Item4 as Z,
                Item2.Item1.Item3.Item5 as MouseZ,
                Item2.Item1.Item4.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationX(Selector=X)
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow => #21
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=9.96194649
              TranslationY=-1.74311483
              TranslationZ=17.2545986
              ScaleX=0.86
              ScaleY=0.86
              ScaleZ=0.86
              MeshName=sphere
              Ambient(X=0.805532, Y=0.805532, Z=0.805532)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            #21, #8 -> TakeUntil
            -> WorkflowOutput
        -> Merge => #28
        #28, #8 -> DelaySubscription(DueTime=PT10S)
        -> WorkflowOutput

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep)
            -> Accumulate
            -> ElementIndex
            -> PublishSubject Frames

            BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParams => #5
            SubscribeSubject Frames => #6
            SubscribeSubject StartTrigger => #7
            #6, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #9
            #5, #9 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Index as Frame,
                Value.Item2.Value.ElapsedTime as FrameElapsedTime,
                Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Value.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Value.Item1.Item2.Item2/Math.PI*180) as Elevation,
                Value.Item1.Item2.Item3 as Depth,
                Value.Item1.Item3.Item1 as X,
                Value.Item1.Item3.Item2 as Y,
                Value.Item1.Item3.Item3 as Z0,
                Value.Item1.Item3.Item4 as Z,
                Value.Item1.Item3.Item5 as MouseZ,
                Value.Item1.Item4.Item1 as OriginalSize,
                Value.Item1.Item4.Item2 as Size)
            SubscribeSubject SaveGeneralPrefix => #13
            SubscribeSubject SaveDate => #14
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams"))
            -> StringProperty(Value=NewParams) => #16
            SubscribeSubject Metadata => #17
            SubscribeSubject WhichExp => #18
            SubscribeSubject SaveTimestamp => #19
            #13, #14, #19, #18, #16, #17 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #22
            #12, #22 -> Bonsai.IO.CsvWriter => #23
              FileName=D:\data\TEST\S20210511\R150731_SphereSparseNoise\TEST_S20210511_R150731_SphereSparseNoise_NewParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #24
            #23 -> Disable MemberSelector(Selector=Azimuth) => #25
            #23 -> Disable MemberSelector(Selector=Elevation) => #26
            #23 -> Disable MemberSelector(Selector=Depth) => #27
            #23 -> Disable MemberSelector(Selector=Frame) => #28
            #24, #25, #26, #27, #28 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

            BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParams => #32
            SubscribeSubject Frames => #33
            SubscribeSubject CloseLoopDuration
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=P208333DT7H32M23.1319552S) => #37
            SubscribeSubject StartTrigger => #38
            #33, #38 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #40
            #32, #40 -> CombineLatest
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #43
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Index as Frame,
                Value.Item2.Value.ElapsedTime as FrameElapsedTime,
                Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Value.Item1.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Value.Item1.Item1.Item2.Item2/Math.PI*180) as Elevation,
                Value.Item1.Item1.Item2.Item3 as Depth,
                Value.Item1.Item1.Item3.Item1 as X,
                Value.Item1.Item1.Item3.Item2 as Y,
                Value.Item1.Item1.Item3.Item3 as Z0,
                Value.Item1.Item1.Item3.Item4 as Z,
                Value.Item1.Item1.Item3.Item5 as MouseZ,
                Value.Item1.Item1.Item4.Item1 as OriginalSize,
                Value.Item1.Item1.Item4.Item2 as Size,
                Value.Item1.Item2 as Ambient)
            SubscribeSubject SaveGeneralPrefix => #44
            SubscribeSubject SaveDate => #45
            ExternalizedMapping(Value(DisplayName="SaveFilename AllParams"))
            -> StringProperty(Value=AllParams) => #47
            SubscribeSubject Metadata => #48
            SubscribeSubject WhichExp => #49
            SubscribeSubject SaveTimestamp => #50
            #44, #45, #50, #49, #47, #48 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #53
            #43, #53 -> Bonsai.IO.CsvWriter => #54
              FileName=D:\data\TEST\S20210511\R150731_SphereSparseNoise\TEST_S20210511_R150731_SphereSparseNoise_AllParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            #54, #37 -> TakeUntil

    Disable GroupWorkflow SpheresOpen
        SubscribeSubject Ydeg
        -> Bonsai.Numerics.DegreeToRadian => #1
        SubscribeSubject Depth => #2
        SubscribeSubject MouseZ => #3
        SubscribeSubject CloseLoopDuration
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=P4861DT2H39M53.1940864S) => #7
        SubscribeSubject OriginalSize => #8
        SubscribeSubject Xdeg
        -> Bonsai.Numerics.DegreeToRadian => #10
        #10, #1, #2 -> Zip => #11
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime) => #13
        SubscribeSubject StartTrigger => #14
        #11, #14 -> WithLatestFrom
        -> MemberSelector(Selector=Item1) => #16
        #16, #13 -> Bonsai.Shaders.Delay(DueTime=PT43S)
        -> ElementIndex => #18
        #18, #8 -> CombineLatest => #19
        #19, #3 -> WithLatestFrom
        -> SphericalCoordinates
        -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> BehaviorSubject ThisSphereParams
            -> MulticastSubject SphereNewParamsOpen => #2
            SubscribeSubject Draw => #3
            SubscribeSubject LifeTime => #4
            SubscribeSubject LifeTime
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #8
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate => #11
            SubscribeSubject ThisSphereParams
            -> MemberSelector(Selector=Item1) => #13
            #13, #11, #4 -> CombineLatest
            -> CreateFading => #15
            #2, #15 -> CombineLatest
            -> MulticastSubject SphereAllParamsOpen => #17
            #3, #17 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item2 as Ambient,
                Item2.Item1.Item1 as SphereID,
                Item2.Item1.Item2.Item1 as Azimuth,
                Item2.Item1.Item2.Item2 as Elevation,
                Item2.Item1.Item2.Item3 as Depth,
                Item2.Item1.Item3.Item1 as X,
                Item2.Item1.Item3.Item2 as Y,
                Item2.Item1.Item3.Item3 as Z0,
                Item2.Item1.Item3.Item4 as Z,
                Item2.Item1.Item3.Item5 as MouseZ,
                Item2.Item1.Item4.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationX(Selector=X)
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow => #21
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-9.671043
              TranslationY=-2.54379845
              TranslationZ=-8.454695E-07
              ScaleX=0.43
              ScaleY=0.43
              ScaleZ=0.43
              MeshName=sphere
              Ambient(X=0.405804, Y=0.405804, Z=0.405804)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            #21, #8 -> TakeUntil
            -> WorkflowOutput
        -> Merge => #23
        #23, #7 -> TakeUntil
        -> WorkflowOutput

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger), "SaveFilename AllParams")
        -> GroupWorkflow SphereParamsLoggerOpen
            BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParamsOpen => #0
            SubscribeSubject Frames => #1
            SubscribeSubject SaveGeneralPrefix => #2
            SubscribeSubject SaveDate => #3
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams", Category=ParamLogger))
            -> StringProperty(Value=SphereSP_Open_NewParams) => #5
            SubscribeSubject Metadata => #6
            SubscribeSubject SaveTimestamp => #7
            #2, #3, #7, #5, #6 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #10
            SubscribeSubject StartTrigger => #11
            #1, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #13
            #0, #13 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform => #15
              Expression:
                new(
                Item2.Index as Frame,
                Item2.Value.ElapsedTime as FrameElapsedTime,
                Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Item1.Item1 as SphereID,
                Math.Round(Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Item1.Item2.Item2/Math.PI*180) as Elevation,
                Item1.Item2.Item3 as Depth,
                Item1.Item3.Item1 as X,
                Item1.Item3.Item2 as Y,
                Item1.Item3.Item3 as Z0,
                Item1.Item3.Item4 as Z,
                Item1.Item3.Item5 as MouseZ,
                Item1.Item4.Item1 as OriginalSize,
                Item1.Item4.Item2 as Size)
            #15, #10 -> Bonsai.IO.CsvWriter
              FileName=D:\data\TEST\S20210329\R195008\TEST_SphereSP_Open_NewParams_S20210329_R195008.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=true

            BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParamsOpen => #17
            SubscribeSubject Frames => #18
            SubscribeSubject CloseLoopDuration
            -> Multiply(Operand=FloatProperty(Value=1E+07))
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=P4861DT2H39M53.1940864S) => #22
            SubscribeSubject SaveGeneralPrefix => #23
            SubscribeSubject SaveDate => #24
            ExternalizedMapping(Value(DisplayName="SaveFilename AllParams", Category=ParamLogger))
            -> StringProperty(Value=SphereSP_Open_AllParams) => #26
            SubscribeSubject Metadata => #27
            SubscribeSubject SaveTimestamp => #28
            #23, #24, #28, #26, #27 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #31
            SubscribeSubject StartTrigger => #32
            #18, #32 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #34
            #17, #34 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform => #36
              Expression:
                new(
                Item2.Index as Frame,
                Item2.Value.ElapsedTime as FrameElapsedTime,
                Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Item1.Item1.Item1 as SphereID,
                Math.Round(Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Item1.Item1.Item2.Item2/Math.PI*180) as Elevation,
                Item1.Item1.Item2.Item3 as Depth,
                Item1.Item1.Item3.Item1 as X,
                Item1.Item1.Item3.Item2 as Y,
                Item1.Item1.Item3.Item3 as Z0,
                Item1.Item1.Item3.Item4 as Z,
                Item1.Item1.Item3.Item5 as MouseZ,
                Item1.Item1.Item4.Item1 as OriginalSize,
                Item1.Item1.Item4.Item2 as Size,
                Item1.Item2 as Ambient)
            #36, #31 -> Bonsai.IO.CsvWriter => #37
              FileName=D:\data\TEST\S20210329\R195008\TEST_SphereSP_Open_AllParams_S20210329_R195008.csv
              Append=false
              Overwrite=true
              Suffix=Timestamp
              IncludeHeader=true
            #37, #22 -> TakeUntil
#26, #17 -> TakeUntil
