WorkflowBuilder(Version=2.6.0)
Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)
Bonsai.Osc.CreateUdpClient(Name=UdpSend_beh, Port=2324, RemoteHostName=10.0.250.44, RemotePort=2324)

MetadataSource(ExpInfo(Animal=PZAH2.1b, RootDirectory=D:\data), Animal=PZAH2.1b, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

ExternalizedMapping
  InitialDelayReplay(Category="Exp Timings")
  TrialDuration(DisplayName=TrialDuration, Description="Duration of 1 depth", Category="Exp Timings")
  InterTrialDelay(Category="Exp Timings")
  RepeatNumber(DisplayName=RepeatNumber, Description="Number of repeating all depth values", Category="Exp Timings")
  DepthCount(Category="Exp Timings")
-> GroupWorkflow BasicSettings
    ExternalizedMapping(InitialDelayReplay, TrialDuration, InterTrialDelay, RepeatNumber, DepthCount)
    -> GroupWorkflow ExpTimings
        ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InitialDelayReplay => #3
        ExternalizedMapping(Value(DisplayName=TrialDuration, Description="Duration of 1 trial (1 fixed depth)", Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject TrialDuration => #7
        ExternalizedMapping(Value(DisplayName=RepeatNumber, Description="Number of repeat of all the depth values", Category=Timings))
        -> IntProperty(Value=50)
        -> BehaviorSubject RepeatNumber => #10
        ExternalizedMapping(Value(DisplayName=InterTrialDelay, Description="Interval between 2 trials", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InterTrialDelay => #14
        #7, #14 -> Zip
        -> Add => #16
        ExternalizedMapping(Value(DisplayName=DepthCount))
        -> IntProperty(Value=3)
        -> BehaviorSubject DepthCount => #19
        #10, #19 -> Zip
        -> Multiply => #21
        #16, #21 -> Zip
        -> Multiply
        -> BehaviorSubject CloseLoopDuration => #24
        #24, #3 -> Zip
        -> Add
        -> BehaviorSubject OpenLoopStartTime
        -> WorkflowOutput

    GroupWorkflow ChooseExperiment
        ExternalizedMapping(Value(DisplayName=WhichExp))
        -> StringProperty(Value=SphereSparseNoise)
        -> Take(Count=1)
        -> AsyncSubject WhichExp

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp

        SubscribeSubject SaveTimestamp => #9
        SubscribeSubject SaveDate => #10
        SubscribeSubject Metadata => #11
        SubscribeSubject WhichExp => #12
        #11, #10, #9, #12 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend_beh, Address=/beh_fname)

GroupWorkflow SetHarpSavePath
    SubscribeSubject SaveTimestamp => #0
    SubscribeSubject SaveGeneralPrefix => #1
    SubscribeSubject SaveDate => #2
    SubscribeSubject Metadata => #3
    SubscribeSubject WhichExp => #4
    ExternalizedMapping(Value(DisplayName=HarpLog))
    -> StringProperty(Value=harpmessage) => #6
    #1, #2, #0, #6, #3, #4 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.bin, Selector="Item1,Item2,Item3,Item4,Item5.Animal,Item6")
    -> WorkflowOutput
-> PropertyMapping(HarpSavePath)
-> IncludeWorkflow
  Path=Extensions\harp_hardware.bonsai
  HarpSavePath=D:\data\Test_Framedrops\S20210910\R170959_SphereSparseNoise\Test_Framedrops_S20210910_R170959_SphereSparseNoise_harpmessage.bin

GroupWorkflow InitBonvision3D
    ExternalizedMapping(WindowState, DisplayDevice)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Primary
      TargetRenderFrequency=140
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=D:\code\vis-stim-depth\Spheres\Objects\sphere.obj)))
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    GroupWorkflow SetMouseZ
        SubscribeSubject "Mouse Distance" => #0
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #2
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #4
        Bonsai.Shaders.RenderFrame => #5
        #5, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #7
        #7, #2, #4 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> PublishSubject MouseZ

    SubscribeSubject MouseZ
    -> BehaviorSubject EyeZ
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=401.534821)
    -> PropertyMapping(Eye(Selector=it)) => #12
    ExternalizedMapping(ClearColor) => #13
    #12, #13 -> GroupWorkflow SetViewports
        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
        ExternalizedMapping(Eye) => #2
        #1, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=401.534821), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> PublishSubject Draw => #4
        ExternalizedMapping(ClearColor) => #5
        #4, #5 -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #6
        -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0360390469, Y=-87.6625443, Z=0.4738361)
          Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #9
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
          Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #12
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
          Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #15
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.4698254, Y=91.10029, Z=-0.10943494)
          Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #18
        #9, #12, #15, #18 -> Zip
        -> WorkflowOutput

GroupWorkflow GlobalTimer
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex
    -> PublishSubject Frames
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\PhotodiodePlane.bonsai, ScaleX=0.5, ScaleY=0.5, ScaleZ=0.5, PhotoquadX=-155, PhotoquadY=-40, PhotoquadZ=5)
IncludeWorkflow(Path=Extensions\FrameLogger.bonsai, Filename=FrameLog, Photodiode_x0020_Filename=PhotodiodeLog)
IncludeWorkflow(Path=Extensions\RotaryEncoderLogger.bonsai, Filename=RotaryEncoder)
Disable IncludeWorkflow(Path=Extensions\ManualReward.bonsai, RewardDuration=250)
IncludeWorkflow(Path=Extensions\Floor.bonsai, FloorLength=30, TextureName=horGrat)

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift Control Alt", SuppressRepetitions=false) => #18
Bonsai.Windows.Input.KeyDown(Filter="Space NumPad0 Control Alt", SuppressRepetitions=true) => #19
SubscribeSubject SaveTimestamp => #20
SubscribeSubject SaveDate => #21
SubscribeSubject Metadata => #22
SubscribeSubject WhichExp => #23
#22, #21, #20, #23 -> Zip
-> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4") => #25
-> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
#18, #25 -> Zip
-> SelectMany "Spheres Close & Open" => #28
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger

    ExternalizedMapping(Value(DisplayName=SphereNumPerMoment, Category=SphereSettings))
    -> IntProperty(Value=50)
    -> BehaviorSubject SphereNumPerMoment

    ExternalizedMapping(Value(DisplayName=InterSphereInterval, Category=Timings))
    -> FloatProperty(Value=0.01)
    -> BehaviorSubject InterSphereInterval

    ExternalizedMapping
      Size(Category=SphereSettings)
      DepthMin(Category=Depth)
      DepthMax(Category=Depth)
      DepthLogBase(Category=Depth)
      Ymin(Category=Yposition)
      Ymax(Category=Yposition)
      Ycount(Category=Yposition)
      Xmin(Category=Xposition)
      XminLim(Category=Xposition)
      XminCount(Category=Xposition)
      XmaxLim(Category=Xposition)
      Xmax(Category=Xposition)
      XmaxCount(Category=Xposition)
      "SaveFilename NewParams"
      BackgroundColor(Category=SphereSettings)
      TargetAmb(Category=SphereSettings)
    -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
        ExternalizedMapping(Size, DepthMin, DepthMax, DepthLogBase, Ymin, Ymax, Ycount, Xmin, XminLim, XminCount, XmaxLim, Xmax, XmaxCount)
        -> GroupWorkflow ManageSphereParams
            ExternalizedMapping(DepthMin(Category=Positions), DepthMax, DepthLogBase)
            -> GroupWorkflow DepthRange => #1
                ExternalizedMapping(Value(DisplayName=DepthMin, Category=Positions))
                -> FloatProperty(Value=20) => #1
                ExternalizedMapping(Value(DisplayName=DepthMax, Category=Positions))
                -> FloatProperty(Value=200) => #3
                ExternalizedMapping(Value(DisplayName=DepthLogBase, Category=Positions))
                -> FloatProperty(Value=10) => #5
                SubscribeSubject DepthCount
                -> IntProperty(Value=3) => #7
                #1, #3, #7, #5 -> Zip
                -> Bonsai.Scripting.ExpressionTransform Log => #9
                  Expression:
                    new(
                    Math.Log(Item1,Item4) as Min,
                    Math.Log(Item2,Item4) as Max,
                    Item3 as Count
                    )
                -> MemberSelector(Selector=Min)
                -> PropertyMapping(RangeMin) => #11
                #9 -> MemberSelector(Selector=Max)
                -> PropertyMapping(RangeMax) => #13
                #9 -> MemberSelector(Selector=Count)
                -> PropertyMapping(Count) => #15
                #11, #13, #15 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.301029995663981, RangeMax=2.3010299956639808, Count=3) => #16
                #16, #5 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Power
                  Expression: Math.Pow(Item2,Item1)
                -> Bonsai.Numerics.Permutation
                -> WorkflowOutput
            ExternalizedMapping(Ymin, Ymax, Ycount, Xmin, XminLim, XminCount, XmaxLim, Xmax, XmaxCount) => #2
            #1, #2 -> CreateObservable "XY Range"
                WorkflowInput Source1
                -> MulticastSubject Depth => #1
                ExternalizedMapping(Ymin(Category=Position), Ymax(Category=Position), Ycount(Category=Position)) => #2
                ExternalizedMapping(Xmin, XminLim, XminCount, XmaxLim, Xmax, XmaxCount)
                -> GroupWorkflow Xrange => #4
                    ExternalizedMapping(RangeMin(DisplayName=Xmin), RangeMax(DisplayName=XminLim), Count(DisplayName=XminCount))
                    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-20, RangeMax=70, Count=10) => #1
                    ExternalizedMapping(RangeMin(DisplayName=XmaxLim), RangeMax(DisplayName=Xmax), Count(DisplayName=XmaxCount))
                    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=110, RangeMax=200, Count=10) => #3
                    #1, #3 -> Concat
                    -> WorkflowOutput
                #4, #2 -> CreateObservable Yrange
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(RangeMin(DisplayName=Ymin), RangeMax(DisplayName=Ymax), Count(DisplayName=Ycount))
                    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-40, RangeMax=40, Count=17) => #2
                    #0, #2 -> CombineLatest
                    -> WorkflowOutput
                -> Concat
                -> Bonsai.Numerics.Permutation => #7
                SubscribeSubject TrialDuration
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT30S, Period=PT0S)
                -> PublishSubject EndThisTrial => #11
                SubscribeSubject InterTrialDelay
                -> PropertyMapping(DueTime) => #13
                BehaviorSubject<System.Double> Depth => #14
                #1, #14 -> Merge => #15
                SubscribeSubject InterSphereInterval
                -> Multiply(Operand=FloatProperty(Value=1E+07))
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT0.01S, Period=PT0S) => #19
                #7, #19 -> Zip
                -> MemberSelector(Selector=Item1)
                -> Repeat => #22
                #22, #15 -> CombineLatest => #23
                #23, #11 -> TakeUntil => #24
                #24, #13 -> Delay(DueTime=PT10S)
                -> WorkflowOutput

                BooleanProperty(Value=true) => #27
                SubscribeSubject EndThisTrial => #28
                #28, #27 -> WithLatestFrom
                -> FloatProperty(Value=-9999)
                -> MulticastSubject Depth
                -> BooleanProperty(Value=true)
            -> Concat => #4
            SubscribeSubject RepeatNumber
            -> PropertyMapping(Count) => #6
            #4, #6 -> RepeatCount(Count=50) => #7
            -> MemberSelector(Selector=Item1.Item1)
            -> Bonsai.Numerics.DegreeToRadian => #9
            #7 -> MemberSelector(Selector=Item1.Item2)
            -> Bonsai.Numerics.DegreeToRadian => #11
            #7 -> MemberSelector(Selector=Item2) => #12
            #9, #11, #12 -> Zip
            -> BehaviorSubject SpherePos
            -> PublishSubject EachSphereStartTrigger

            SubscribeSubject MouseZ => #16
            ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
            -> FloatProperty(Value=0.0435)
            -> BehaviorSubject OriginalSize
            -> Take(Count=1) => #20
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> PublishSubject ElapsedTime => #24
            SubscribeSubject SpherePos => #25
            SubscribeSubject EachSphereStartTrigger => #26
            #24, #26 -> Sample => #27
            #25, #27 -> WithLatestFrom
            -> ElementIndex => #29
            #29, #20 -> CombineLatest => #30
            #30, #16 -> WithLatestFrom
            -> SphericalCoordinates_SP
            -> BehaviorSubject SphereNewParams

        SubscribeSubject SphereNumPerMoment
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=50) => #4
        ExternalizedMapping(BackgroundColor, TargetAmb) => #5
        #4, #5 -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> AsyncSubject SphereIndex

            SubscribeSubject SphereNewParams
            -> Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Value) => #4
                #1, #4 -> Mod(Operand=IntProperty(Value=50)) => #5
                #5, #2 -> WithLatestFrom => #6
                #0 -> MemberSelector(Selector=Item3.Item3) => #7
                #6, #7 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2) => #4
            SubscribeSubject ElapsedTime => #5
            #5, #4 -> WithLatestFrom
            -> Subtract => #7
            SubscribeSubject SphereNumPerMoment => #8
            SubscribeSubject InterSphereInterval => #9
            #9, #8 -> Zip
            -> Multiply => #11
            SubscribeSubject Draw => #12
            SubscribeSubject SphereNewParams
            -> Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Value) => #4
                #1, #4 -> Mod(Operand=IntProperty(Value=50)) => #5
                #5, #2 -> WithLatestFrom => #6
                #0 -> MemberSelector(Selector=Item3.Item3) => #7
                #6, #7 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> MulticastSubject LogSphereParams => #15
            ExternalizedMapping(Value(DisplayName=TargetAmb))
            -> FloatProperty(Value=0) => #17
            ExternalizedMapping(Value(DisplayName=BackgroundColor))
            -> FloatProperty(Value=0.5) => #19
            #7, #11, #17, #19 -> CombineLatest
            -> CreateFadingNew => #21
            #15, #21 -> CombineLatest => #22
            #12, #22 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item1.Item1 as SphereID,
                Item2.Item2 as Ambient,
                Item2.Item1.Item3.Item1 as Azimuth,
                Item2.Item1.Item3.Item2 as Elevation,
                Item2.Item1.Item3.Item3 as Depth,
                Item2.Item1.Item4.Item1 as X,
                Item2.Item1.Item4.Item2 as Y,
                Item2.Item1.Item4.Item3 as Z0,
                Item2.Item1.Item4.Item4 as Z,
                Item2.Item1.Item4.Item5 as MouseZ,
                Item2.Item1.Item5.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationX(Selector=X)
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-125.501373
              TranslationY=-114.715286
              TranslationZ=105.308159
              ScaleX=8.7
              ScaleY=8.7
              ScaleZ=8.7
              MeshName=sphere
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            -> WorkflowOutput
        -> Merge

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            SubscribeSubject Frames => #0
            SubscribeSubject StartTrigger => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #3
            SubscribeSubject SaveGeneralPrefix => #4
            SubscribeSubject SaveDate => #5
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams"))
            -> StringProperty(Value=NewParams) => #7
            SubscribeSubject Metadata => #8
            SubscribeSubject WhichExp => #9
            SubscribeSubject SaveTimestamp => #10
            #4, #5, #10, #9, #7, #8 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #13
            BehaviorSubject<System.Tuple(System.Int32,System.Single,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> LogSphereParams => #14
            #14, #3 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #17
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Index as Frame,
                Value.Item2.Value.ElapsedTime as FrameElapsedTime,
                Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Value.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item3.Item1/Math.PI*180) as Azimuth,
                Math.Round(Value.Item1.Item3.Item2/Math.PI*180) as Elevation,
                Value.Item1.Item3.Item3 as Depth,
                Value.Item1.Item4.Item1 as X,
                Value.Item1.Item4.Item2 as Y,
                Value.Item1.Item4.Item3 as Z0,
                Value.Item1.Item4.Item4 as Z,
                Value.Item1.Item4.Item5 as MouseZ,
                Value.Item1.Item5.Item1 as OriginalSize,
                Value.Item1.Item5.Item2 as Size)
            #17, #13 -> Bonsai.IO.CsvWriter => #18
              FileName=D:\data\Test_Framedrops\S20210910\R162636_SphereSparseNoise\Test_Framedrops_S20210910_R162636_SphereSparseNoise_NewParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #19
            #18 -> Disable MemberSelector(Selector=Azimuth) => #20
            #18 -> Disable MemberSelector(Selector=Elevation) => #21
            #18 -> Disable MemberSelector(Selector=Depth) => #22
            #18 -> Disable MemberSelector(Selector=Frame) => #23
            #19, #20, #21, #22, #23 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)
    ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #10
    #9, #10 -> DelaySubscription(DueTime=PT30S)
#28, #19 -> TakeUntil
