<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>UdpSend</osc:Name>
          <osc:Port>2323</osc:Port>
          <osc:RemoteHostName>10.0.250.44</osc:RemoteHostName>
          <osc:RemotePort>2323</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>UdpSend_beh</osc:Name>
          <osc:Port>2324</osc:Port>
          <osc:RemoteHostName>10.0.250.44</osc:RemoteHostName>
          <osc:RemotePort>2324</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Animal</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Root/</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Value.Item1 as Animal,
it.Value.Item2 as RootDirectory,
it.Timestamp.Year.ToString() as Year,
it.Timestamp.Month&lt;10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
it.Timestamp.Day&lt;10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
it.Timestamp.Hour&lt;10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
it.Timestamp.Minute&lt;10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
it.Timestamp.Second&lt;10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
)</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Metadata</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SaveTimestamp</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SaveDate</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Metadata</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WhichExp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
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        </Builder>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_S{1}_R{2}_{3}</Format>
        <Selector>Item1.Animal,Item2,Item3,Item4</Selector>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>UdpSend</osc:Connection>
        <osc:Address>/si_fname</osc:Address>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CloseLoopDuration" Category="Timings" />
        <Property Name="InitialDelayReplay" Category="BasicSettings" />
        <Property Name="InitialDelaySpheres" Category="Timings" />
        <Property Name="LifeTime" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BasicSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CloseLoopDuration" Category="Timings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3600</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>CloseLoopDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitialDelayReplay" Category="Timings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>InitialDelayReplay</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitialDelaySpheres" Category="Timings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>InitialDelaySphere</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="BehaviorSubject">
              <Name>OpenLoopStartTime</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="WhichExp" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ChooseExperiment</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="WhichExp" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>SphereCylinder</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="AsyncSubject">
                    <Name>WhichExp</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetFileSaving</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Metadata</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>RootDirectory,Animal</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>SaveGeneralPrefix</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Metadata</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Year,Month,Day</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>SaveDate</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Metadata</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}{2}</Format>
                    <Selector>Hour,Minute,Second</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>SaveTimestamp</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SaveTimestamp</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SaveDate</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Metadata</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WhichExp</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\S{1}\R{2}_{3}</Format>
                    <Selector>Item1.Animal,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>SaveCameraFilePath</Name>
                  </Expression>
                  <Expression xsi:type="osc:SendMessage">
                    <osc:Connection>UdpSend_beh</osc:Connection>
                    <osc:Address>/beh_fname</osc:Address>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="13" Label="Source3" />
                  <Edge From="10" To="13" Label="Source2" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LifeTime" Category="Timings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>LifeTime</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="12" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\InitBonvision3D.bonsai">
        <WindowState>Fullscreen</WindowState>
        <DisplayDevice>Primary</DisplayDevice>
        <ScreenCalibFile>D:\code\Calibrations\ScreenCalibration\calibration_data\Ronan_Cottage_2p\210406\monitor_calibration.csv</ScreenCalibFile>
        <GammaCalibFile>D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210305\gamma_calibration.csv</GammaCalibFile>
        <ClearColor>Gray</ClearColor>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\PhotodiodePlane.bonsai">
        <ScaleX>0.5</ScaleX>
        <ScaleY>0.5</ScaleY>
        <ScaleZ>0.5</ScaleZ>
        <PhotoquadX>-155</PhotoquadX>
        <PhotoquadY>-40</PhotoquadY>
        <PhotoquadZ>5</PhotoquadZ>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\FrameLogger.bonsai">
        <Filename>FrameLog</Filename>
        <Photodiode_x0020_Filename>PhotodiodeLog</Photodiode_x0020_Filename>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\RotaryEncoderLogger.bonsai">
        <Filename>RotaryEncoder</Filename>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\Floor.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ManualReward.bonsai">
        <RewardDuration>250</RewardDuration>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetHarpSavePath</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SaveTimestamp</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SaveGeneralPrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SaveDate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Metadata</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WhichExp</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="HarpLog" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>harpmessage</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.bin</Format>
              <Selector>Item1,Item2,Item3,Item4,Item5.Animal,Item6</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source3" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="7" Label="Source2" />
            <Edge From="3" To="7" Label="Source5" />
            <Edge From="4" To="7" Label="Source6" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source4" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="HarpSavePath" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\harp_hardware.bonsai">
        <HarpSavePath>D:\data\Test_Framedrops\S20210819\R162351_SphereCylinder\Test_Framedrops_S20210819_R162351_SphereCylinder_harpmessage.bin</HarpSavePath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Spheres Close &amp; Open</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Size" Category="MiscParams" />
              <Property Name="SphereInterval" Category="Timings" />
              <Property Name="SaveFilename NewParams" DisplayName="Close NewParams" Category="ParamLogger" />
              <Property Name="AziMin" Category="Positions Azimuth" />
              <Property Name="AziMax" Category="Positions Azimuth" />
              <Property Name="AziCount" Category="Positions Azimuth" />
              <Property Name="RadiusMin" Category="Positions Radius" />
              <Property Name="RadiusMax" Category="Positions Radius" />
              <Property Name="RadiusCount" Category="Positions Radius" />
              <Property Name="RadiusLogBase" Category="Positions Radius" />
              <Property Name="ThetaMin" Category="Positions Theta" />
              <Property Name="ThetaMinLim" Category="Positions Theta" />
              <Property Name="ThetaMinCount" Category="Positions Theta" />
              <Property Name="ThetaMaxLim" Category="Positions Theta" />
              <Property Name="ThetaMax" Category="Positions Theta" />
              <Property Name="ThetaMaxCount" Category="Positions Theta" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SpheresClose</Name>
              <Description>Depth is in log10 space.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MouseZ</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Size" Category="MiscParams" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.087</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>OriginalSize</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SphereInterval" Category="Timings" />
                    <Property Name="AziMin" />
                    <Property Name="AziMax" />
                    <Property Name="AziCount" />
                    <Property Name="RadiusMin" />
                    <Property Name="RadiusMax" />
                    <Property Name="RadiusCount" />
                    <Property Name="RadiusLogBase" />
                    <Property Name="ThetaMin" />
                    <Property Name="ThetaMinLim" />
                    <Property Name="ThetaMinCount" />
                    <Property Name="ThetaMaxLim" />
                    <Property Name="ThetaMax" />
                    <Property Name="ThetaMaxCount" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetParams</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Period" DisplayName="SphereInterval" Category="Timings" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0S</gl:DueTime>
                            <gl:Period>PT0.5S</gl:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>StartTrigger</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="AziMin" />
                          <Property Name="AziMax" DisplayName="AziMax" />
                          <Property Name="AziCount" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>AziRange</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="RangeMin" DisplayName="AziMin" />
                                <Property Name="RangeMax" DisplayName="AziMax" />
                                <Property Name="Count" DisplayName="AziCount" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                                <RangeMin>20</RangeMin>
                                <RangeMax>200</RangeMax>
                                <Count>3</Count>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="RadiusMin" />
                          <Property Name="RadiusMax" />
                          <Property Name="RadiusCount" />
                          <Property Name="RadiusLogBase" />
                          <Property Name="ThetaMin" />
                          <Property Name="ThetaMinLim" />
                          <Property Name="ThetaMinCount" />
                          <Property Name="ThetaMaxLim" />
                          <Property Name="ThetaMax" />
                          <Property Name="ThetaMaxCount" />
                        </Expression>
                        <Expression xsi:type="CreateObservable">
                          <Name>Theta Radius Range</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="RangeMin" DisplayName="ThetaMin" />
                                <Property Name="RangeMax" DisplayName="ThetaMinLim" />
                                <Property Name="Count" DisplayName="ThetaMinCount" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                                <RangeMin>-40</RangeMin>
                                <RangeMax>40</RangeMax>
                                <Count>9</Count>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="RadiusMin" Category="Positions" />
                                <Property Name="RadiusMax" />
                                <Property Name="RadiusCount" />
                                <Property Name="RadiusLogBase" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="RangeMin" DisplayName="ThetaMaxLim" />
                                <Property Name="RangeMax" DisplayName="ThetaMax" />
                                <Property Name="Count" DisplayName="ThetaMaxCount" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                                <RangeMin>40</RangeMin>
                                <RangeMax>40</RangeMax>
                                <Count>2</Count>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Concat" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="CreateObservable">
                                <Name>RadiusRange</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="RadiusMin" Category="Positions" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>20</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="RadiusMax" Category="Positions" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>20</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="RadiusCount" Category="Positions" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="IntProperty">
                                        <Value>2</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" DisplayName="RadiusLogBase" Category="Positions" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>10</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Zip" />
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Name>Log</scr:Name>
                                      <scr:Expression>new(
Math.Log(Item1,Item4) as Min,
Math.Log(Item2,Item4) as Max,
Item3 as Count
)</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Min</Selector>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="RangeMin" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Max</Selector>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="RangeMax" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Count</Selector>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Count" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                                      <RangeMin>1.301029995663981</RangeMin>
                                      <RangeMax>1.301029995663981</RangeMax>
                                      <Count>2</Count>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="scr:ExpressionTransform">
                                      <scr:Name>Power</scr:Name>
                                      <scr:Expression>Math.Pow(Item2,Item1)</scr:Expression>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:CombineLatest" />
                                    </Expression>
                                    <Expression xsi:type="InputMapping">
                                      <PropertyMappings>
                                        <Property Name="X" Selector="Item1.Item1" />
                                        <Property Name="Y" Selector="Item1.Item2" />
                                        <Property Name="Z" Selector="Item2" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:CreateVector3">
                                        <gl:X>20</gl:X>
                                        <gl:Y>40</gl:Y>
                                        <gl:Z>20</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="20" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="9" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="9" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="9" Label="Source3" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source4" />
                                    <Edge From="8" To="18" Label="Source2" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source1" />
                                    <Edge From="10" To="13" Label="Source1" />
                                    <Edge From="10" To="15" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source1" />
                                    <Edge From="12" To="17" Label="Source1" />
                                    <Edge From="13" To="14" Label="Source1" />
                                    <Edge From="14" To="17" Label="Source2" />
                                    <Edge From="15" To="16" Label="Source1" />
                                    <Edge From="16" To="17" Label="Source3" />
                                    <Edge From="17" To="18" Label="Source1" />
                                    <Edge From="18" To="19" Label="Source1" />
                                    <Edge From="19" To="20" Label="Source2" />
                                    <Edge From="20" To="21" Label="Source1" />
                                    <Edge From="21" To="22" Label="Source1" />
                                    <Edge From="22" To="23" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Concat" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="7" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="6" Label="Source1" />
                              <Edge From="3" To="8" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source2" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:Permutation" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Repeat" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
it.X as Azimuth,
it.Y as Theta, 
it.Z as Radius
)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CloseLoopDuration</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT59M59.9997952S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Azimuth</Selector>
                        </Expression>
                        <Expression xsi:type="ReplaySubject">
                          <Name>Azimuth</Name>
                          <BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:DegreeToRadian" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Theta</Selector>
                        </Expression>
                        <Expression xsi:type="ReplaySubject">
                          <Name>Theta</Name>
                          <BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:DegreeToRadian" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Radius</Selector>
                        </Expression>
                        <Expression xsi:type="ReplaySubject">
                          <Name>Radius</Name>
                          <BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="9" Label="Source2" />
                        <Edge From="2" To="26" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="16" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="16" To="20" Label="Source1" />
                        <Edge From="16" To="23" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="25" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="25" Label="Source2" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source3" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="CreateObservable">
                    <Name>CreateSpheres</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject">
                          <Name>ThisSphereParams</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SphereNewParams</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LifeTime</Name>
                        </Expression>
                        <Expression xsi:type="Divide">
                          <Operand xsi:type="FloatProperty">
                            <Value>1E+07</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LifeTime</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT4S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:RenderFrame" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TimeStep.ElapsedRealTime</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisSphereParams</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:CreateFading" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MulticastSubject">
                            <Name>SphereAllParams</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>Rename</scr:Name>
                          <scr:Expression>new(
Item1 as Draw,
Item2.Item2 as Ambient,
Item2.Item1.Item1 as SphereID,
Item2.Item1.Item2.Item1 as Azimuth,
Item2.Item1.Item2.Item2 as Elevation,
Item2.Item1.Item2.Item3 as Depth,
Item2.Item1.Item3.Item1 as X, 
Item2.Item1.Item3.Item2 as Y, 
Item2.Item1.Item3.Item3 as Z0, 
Item2.Item1.Item3.Item4 as Z, 
Item2.Item1.Item3.Item5 as MouseZ,
Item2.Item1.Item4.Item2 as Size)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="TranslationX" Selector="X" />
                            <Property Name="TranslationY" Selector="Y" />
                            <Property Name="TranslationZ" Selector="Z" />
                            <Property Name="ScaleX" Selector="Size" />
                            <Property Name="ScaleY" Selector="Size" />
                            <Property Name="ScaleZ" Selector="Size" />
                            <Property Name="Ambient" Selector="Ambient" />
                          </PropertyMappings>
                          <Selector>Draw</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                          <TranslationX>19.6961555</TranslationX>
                          <TranslationY>-3.47296357</TranslationY>
                          <TranslationZ>3.02706623</TranslationZ>
                          <ScaleX>1.74</ScaleX>
                          <ScaleY>1.74</ScaleY>
                          <ScaleZ>1.74</ScaleZ>
                          <MeshName>sphere</MeshName>
                          <Ambient>
                            <X>0.7715485</X>
                            <Y>0.7715485</Y>
                            <Z>0.7715485</Z>
                          </Ambient>
                          <Diffuse>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                          </Diffuse>
                          <Specular>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                          </Specular>
                          <SpecularExponent>10</SpecularExponent>
                          <RotationZ>0</RotationZ>
                          <RotationY>0</RotationY>
                          <RotationX>0</RotationX>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="16" Label="Source1" />
                        <Edge From="3" To="18" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="14" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="22" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="14" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source2" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>InitialDelaySphere</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SaveFilename NewParams" Category="ParamLogger" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SphereParamsLoggerClose</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateFrame" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TimeStep</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:ElementIndex" />
                        </Expression>
                        <Expression xsi:type="PublishSubject">
                          <Name>Frames</Name>
                        </Expression>
                        <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Tuple(sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single,sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single))">
                          <Name>SphereNewParams</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Frames</Name>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>StartTrigger</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                          <Name>Timestamp</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Value.Item2.Index as Frame,
Timestamp as HarpTime,
Value.Item2.Value.ElapsedTime as FrameElapsedTime,
Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
Value.Item1.Item1 as SphereID,
Math.Round(Value.Item1.Item2.Item1/Math.PI*180) as Azimuth,
Math.Round(Value.Item1.Item2.Item2/Math.PI*180) as Theta,
Value.Item1.Item2.Item3 as Radius,
Value.Item1.Item3.Item1 as X, 
Value.Item1.Item3.Item2 as Y, 
Value.Item1.Item3.Item3 as Z0, 
Value.Item1.Item3.Item4 as Z, 
Value.Item1.Item3.Item5 as MouseZ,
Value.Item1.Item4.Item1 as OriginalSize,
Value.Item1.Item4.Item2 as Size)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SaveGeneralPrefix</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SaveDate</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="SaveFilename NewParams" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>NewParams</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Metadata</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>WhichExp</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SaveTimestamp</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv</Format>
                          <Selector>Item1,Item2,Item3,Item4,Item5,Item6.Animal</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>D:\data\Test_Framedrops\S20210819\R162351_SphereCylinder\Test_Framedrops_S20210819_R162351_SphereCylinder_NewParams.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>None</io:Suffix>
                          <io:IncludeHeader>true</io:IncludeHeader>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="scr:ExpressionTransform">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="ReplaySubject">
                            <Name>SphereParamsReplay</Name>
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="BehaviorSubject" TypeArguments="sys:Tuple(sys:Tuple(sys:Int32,sys:Tuple(sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single,sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single)),sys:Single)">
                            <Name>SphereAllParams</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>Frames</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>StartTrigger</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="MemberSelector">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
                            <Name>Timestamp</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="scr:ExpressionTransform">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>CloseLoopDuration</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>LifeTime</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>InitialDelaySphere</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Add" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>SaveGeneralPrefix</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>SaveDate</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="ExternalizedMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>Metadata</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>WhichExp</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="SubscribeSubject">
                            <Name>SaveTimestamp</Name>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Format">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="PropertyMapping">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="io:CsvWriter">
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                          </Builder>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="Combinator">
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                          </Builder>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="10" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="23" Label="Source1" />
                        <Edge From="13" To="20" Label="Source1" />
                        <Edge From="14" To="20" Label="Source2" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="20" Label="Source5" />
                        <Edge From="17" To="20" Label="Source6" />
                        <Edge From="18" To="20" Label="Source4" />
                        <Edge From="19" To="20" Label="Source3" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source2" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="23" To="25" Label="Source1" />
                        <Edge From="23" To="26" Label="Source1" />
                        <Edge From="23" To="27" Label="Source1" />
                        <Edge From="23" To="28" Label="Source1" />
                        <Edge From="24" To="29" Label="Source1" />
                        <Edge From="25" To="29" Label="Source2" />
                        <Edge From="26" To="29" Label="Source3" />
                        <Edge From="27" To="29" Label="Source4" />
                        <Edge From="28" To="29" Label="Source5" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="32" To="37" Label="Source1" />
                        <Edge From="33" To="35" Label="Source1" />
                        <Edge From="34" To="35" Label="Source2" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source2" />
                        <Edge From="37" To="38" Label="Source1" />
                        <Edge From="38" To="39" Label="Source1" />
                        <Edge From="39" To="57" Label="Source1" />
                        <Edge From="40" To="43" Label="Source2" />
                        <Edge From="41" To="43" Label="Source3" />
                        <Edge From="42" To="43" Label="Source1" />
                        <Edge From="43" To="44" Label="Source1" />
                        <Edge From="44" To="45" Label="Source1" />
                        <Edge From="45" To="46" Label="Source1" />
                        <Edge From="46" To="58" Label="Source2" />
                        <Edge From="47" To="54" Label="Source1" />
                        <Edge From="48" To="54" Label="Source2" />
                        <Edge From="49" To="50" Label="Source1" />
                        <Edge From="50" To="54" Label="Source5" />
                        <Edge From="51" To="54" Label="Source6" />
                        <Edge From="52" To="54" Label="Source4" />
                        <Edge From="53" To="54" Label="Source3" />
                        <Edge From="54" To="55" Label="Source1" />
                        <Edge From="55" To="56" Label="Source1" />
                        <Edge From="56" To="57" Label="Source2" />
                        <Edge From="57" To="58" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="8" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="14" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>SpheresOpen</Name>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="13" Label="Source3" />
      <Edge From="10" To="13" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source4" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>