WorkflowBuilder(Version=2.6.2)
Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)
Bonsai.Osc.CreateUdpClient(Name=UdpSend_beh, Port=2324, RemoteHostName=10.0.250.44, RemotePort=2324)

MetadataSource(ExpInfo(Animal=Test, RootDirectory=D:\data), Animal=Test, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

GroupWorkflow README>>(Description="Press R to initialize reward")

ExternalizedMapping
  InitialDelayReplay(Category="Exp Timings")
  TrialDuration(DisplayName=TrialDuration, Description="Duration of 1 depth", Category="Exp Timings")
  InterTrialDelay(Category="Exp Timings")
  RepeatNumber(DisplayName=RepeatNumber, Description="Number of repeating all depth values", Category="Exp Timings")
  DepthCount(Category="Exp Timings")
-> GroupWorkflow BasicSettings
    ExternalizedMapping(InitialDelayReplay, TrialDuration, InterTrialDelay, RepeatNumber, DepthCount)
    -> GroupWorkflow ExpTimings
        ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InitialDelayReplay => #3
        ExternalizedMapping(Value(DisplayName=TrialDuration, Description="Duration of 1 trial (1 fixed depth)", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject TrialDuration => #7
        ExternalizedMapping(Value(DisplayName=RepeatNumber, Description="Number of repeat of all the depth values", Category=Timings))
        -> IntProperty(Value=50)
        -> BehaviorSubject RepeatNumber => #10
        ExternalizedMapping(Value(DisplayName=InterTrialDelay, Description="Interval between 2 trials", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InterTrialDelay => #14
        #7, #14 -> Zip
        -> Add => #16
        ExternalizedMapping(Value(DisplayName=DepthCount))
        -> IntProperty(Value=5)
        -> BehaviorSubject DepthCount => #19
        #10, #19 -> Zip
        -> Multiply => #21
        #16, #21 -> Zip
        -> Multiply
        -> BehaviorSubject CloseLoopDuration => #24
        #24, #3 -> Zip
        -> Add
        -> BehaviorSubject OpenLoopStartTime
        -> WorkflowOutput

    ExternalizedMapping(WhichExp)
    -> GroupWorkflow ChooseExperiment
        ExternalizedMapping(Value(DisplayName=WhichExp))
        -> StringProperty(Value=SpheresPermTubeReward)
        -> Take(Count=1)
        -> AsyncSubject WhichExp

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp

        SubscribeSubject SaveTimestamp => #9
        SubscribeSubject SaveDate => #10
        SubscribeSubject Metadata => #11
        SubscribeSubject WhichExp => #12
        #11, #10, #9, #12 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend_beh, Address=/beh_fname)

GroupWorkflow SetHarpSavePath
    SubscribeSubject SaveTimestamp => #0
    SubscribeSubject SaveGeneralPrefix => #1
    SubscribeSubject SaveDate => #2
    SubscribeSubject Metadata => #3
    SubscribeSubject WhichExp => #4
    ExternalizedMapping(Value(DisplayName=HarpLog))
    -> StringProperty(Value=harpmessage) => #6
    #1, #2, #0, #6, #3, #4 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.bin, Selector="Item1,Item2,Item3,Item4,Item5.Animal,Item6")
    -> WorkflowOutput
-> PropertyMapping(HarpSavePath)
-> IncludeWorkflow
  Path=Extensions\harp_hardware.bonsai
  HarpSavePath=D:\data\Test\S20220407\R145145_SpheresPermTubeReward\Test_S20220407_R145145_SpheresPermTubeReward_harpmessage.bin

GroupWorkflow InitBonvision3D
    ExternalizedMapping(WindowState, DisplayDevice)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Primary
      TargetRenderFrequency=140
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=D:\code\vis-stim-depth\Spheres\Objects\sphere.obj)))
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=wider_plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\wider_plaid.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=longer_plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\longer_plaid.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=highf_plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\highf_plaid.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=highf_Y_plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\highf_Y_plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=highf_X_plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\highf_X_plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    GroupWorkflow SetMouseZ
        SubscribeSubject "Mouse Distance" => #0
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #2
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #4
        Bonsai.Shaders.RenderFrame => #5
        #5, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #7
        #7, #2, #4 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> BehaviorSubject MouseZ

    SubscribeSubject MouseZ
    -> BehaviorSubject EyeZ
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(Eye(Selector=it)) => #12
    ExternalizedMapping(ClearColor) => #13
    #12, #13 -> GroupWorkflow SetViewports
        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
        ExternalizedMapping(Eye) => #2
        #1, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> PublishSubject Draw => #4
        ExternalizedMapping(ClearColor) => #5
        #4, #5 -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #6
        -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0360390469, Y=-87.6625443, Z=0.47383610000000004)
          Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #9
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
          Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #12
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
          Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #15
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.46982540000000006, Y=91.10029, Z=-0.10943494)
          Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #18
        #9, #12, #15, #18 -> Zip
        -> WorkflowOutput

GroupWorkflow GlobalTimer
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep)
    -> MemberSelector(Selector=ElapsedTime)
    -> Accumulate
    -> BehaviorSubject GlobalElapsedTime
    -> ElementIndex
    -> PublishSubject Frames
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\PhotodiodePlane.bonsai, ScaleX=0.5, ScaleY=0.5, ScaleZ=0.5, PhotoquadX=-155, PhotoquadY=-40, PhotoquadZ=5)
IncludeWorkflow(Path=Extensions\FrameLogger.bonsai, Filename=FrameLog, Photodiode_x0020_Filename=PhotodiodeLog)
IncludeWorkflow(Path=Extensions\RotaryEncoderLogger.bonsai, Filename=RotaryEncoder)

GroupWorkflow Floor
    ExternalizedMapping(Value(DisplayName=FloorLength))
    -> FloatProperty(Value=200)
    -> BehaviorSubject FloorLength

    ExternalizedMapping(Value(DisplayName=TextureName))
    -> StringProperty(Value=highf_Y_plaid)
    -> PropertyMapping(TextureName) => #5
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1, RangeMax=3, Count=3) => #6
    ExternalizedMapping(FloorWidth, FloorHeight) => #7
    #6, #5, #7 -> CreateObservable CreateFloors
        WorkflowInput Source1
        -> BehaviorSubject FloorNumber
        -> Subtract(Operand=IntProperty(Value=2)) => #2
        SubscribeSubject FloorLength => #3
        #2, #3 -> Zip
        -> Multiply
        -> BehaviorSubject "Floor Initial Z"

        SubscribeSubject Draw => #7
        ExternalizedMapping(TextureName) => #8
        #7, #8 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=highf_Y_plaid, TextureTarget=Texture2D) => #9
        SubscribeSubject MouseZ => #10
        SubscribeSubject FloorLength => #11
        SubscribeSubject FloorNumber => #12
        SubscribeSubject "Floor Initial Z" => #13
        ExternalizedMapping(Value(DisplayName=FloorWidth))
        -> FloatProperty(Value=5) => #15
        ExternalizedMapping(Value(DisplayName=FloorHeight))
        -> FloatProperty(Value=-2.5) => #17
        #10, #12, #11, #13, #15, #17 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform => #19
          Expression:
            new(
            (Math.Floor((Item1/Item3+3-Item2)/3))*(Item3*3)+Item4 as TranslationZ,
            Item3 as FloorLength,
            Item5 as FloorWidth,
            Item6 as FloorHeight
            )
        #9, #19 -> WithLatestFrom
        -> InputMapping
          Selector=Item1
          TranslationZ(Selector=Item2.TranslationZ)
          ScaleY(Selector=Item2.FloorLength)
          ScaleX(Selector=Item2.FloorWidth)
          TranslationY(Selector=Item2.FloorHeight)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-2.5
          TranslationZ=200
          ScaleX=5
          ScaleY=200
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    -> Merge

IncludeWorkflow(Path=Extensions\ManualReward.bonsai, RewardDuration=700)

Disable Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift Control Alt", SuppressRepetitions=false) => #19
Disable Bonsai.Windows.Input.KeyDown(Filter="MButton D Control Alt", SuppressRepetitions=true) => #20
Disable SubscribeSubject SaveTimestamp => #21
Disable SubscribeSubject SaveDate => #22
Disable SubscribeSubject Metadata => #23
Disable SubscribeSubject WhichExp => #24
#23, #22, #21, #24 -> Disable Zip
-> Disable Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4") => #26
-> Disable Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
#19, #26 -> Disable Zip
-> Disable SelectMany "Spheres Close & Open" => #29
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger
    -> BooleanProperty(Value=false)
    -> BehaviorSubject NewSphereTrigger
    -> Disable MulticastSubject Reward

    ExternalizedMapping
      ThetaMin
      ThetaMax
      TakeThetaNum
      RadiusMax
      RadiusMin
      RadiusLogBase
      ZoScaleK
      TubeLenth
      TubeSpacing
      InvisibleAngle
      ExtraSpheresBehind(Category=ZoPosition)
      ZoMin(Category=ZoPosition)
      ThetaMinLim(Category=ThetaPosition)
      ThetaMaxLim(Category=ThetaPosition)
      FadeTime
      RewardProb
    -> GroupWorkflow ParamSettings
        ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
        -> IntProperty(Value=5)
        -> BehaviorSubject ExtraSpheresBehind

        ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
        -> FloatProperty(Value=-40)
        -> BehaviorSubject ThetaMin

        ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
        -> FloatProperty(Value=220)
        -> BehaviorSubject ThetaMax

        ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
        -> FloatProperty(Value=40)
        -> BehaviorSubject ThetaMinLim

        ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
        -> FloatProperty(Value=130)
        -> BehaviorSubject ThetaMaxLim

        ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
        -> IntProperty(Value=1)
        -> BehaviorSubject TakeThetaNum

        Disable SubscribeSubject ExtraSpheresBehind => #18
        Disable SubscribeSubject TubeSpacing => #19
        #18, #19 -> Disable CombineLatest
        -> Disable Multiply
        -> Disable Negate => #22
        ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
        #22, #23 -> FloatProperty(Value=0)
        -> BehaviorSubject ZoMin

        ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
        -> FloatProperty(Value=600)
        -> BehaviorSubject TubeLength

        ExternalizedMapping(Value(DisplayName=RadiusMax, Category=RadiusPosition))
        -> FloatProperty(Value=600)
        -> BehaviorSubject RadiusMax

        ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=RadiusPosition))
        -> FloatProperty(Value=2.71828175)
        -> BehaviorSubject RadiusLogBase

        ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
        -> FloatProperty(Value=3)
        -> BehaviorSubject TubeSpacing => #37
        ExternalizedMapping(Value(DisplayName=ZoScaleK, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject ZoScaleK => #40
        ExternalizedMapping(Value(DisplayName=InvisibleAngle, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject InvisibleAngle
        -> Bonsai.Numerics.DegreeToRadian => #44
        ExternalizedMapping(Value(DisplayName=RadiusMin, Category=RadiusPosition))
        -> FloatProperty(Value=6)
        -> BehaviorSubject RadiusMin => #47
        #47, #44, #37, #40 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
        -> BehaviorSubject SphereNumPerMoment => #50
        Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
        -> IntProperty(Value=0) => #52
        #52, #50 -> CombineLatest
        -> Add
        -> BehaviorSubject ExtraSpheresFront

        ExternalizedMapping(Value(DisplayName=FadeTime))
        -> FloatProperty(Value=0.3)
        -> BehaviorSubject FadeTime

        ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
        -> FloatProperty(Value=0.6)
        -> BehaviorSubject RewardProb

    ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
    ExternalizedMapping(Size, NewSphereTriggerThreshold, RewardDelay(Category=Reward), BackgroundColor, TargetAmb, "SaveFilename NewParams")
    -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
        ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold, RewardDelay)
        -> GroupWorkflow ManageSphereParams
            SubscribeSubject RepeatNumber
            -> PropertyMapping(Count) => #1
            GroupWorkflow RadiusRange => #2
                Disable SubscribeSubject DepthCount
                -> IntProperty(Value=5) => #1
                SubscribeSubject RadiusMin => #2
                SubscribeSubject RadiusMax => #3
                SubscribeSubject RadiusLogBase => #4
                #2, #3, #1, #4 -> Zip
                -> Bonsai.Scripting.ExpressionTransform Log => #6
                  Expression:
                    new(
                    Math.Log(Item1,Item4) as Min,
                    Math.Log(Item2,Item4) as Max,
                    Item3 as Count
                    )
                -> MemberSelector(Selector=Min)
                -> PropertyMapping(RangeMin) => #8
                #6 -> MemberSelector(Selector=Max)
                -> PropertyMapping(RangeMax) => #10
                #6 -> MemberSelector(Selector=Count)
                -> PropertyMapping(Count) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.7917595236399573, RangeMax=6.3969298494772167, Count=5) => #13
                #13, #4 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Power
                  Expression: Math.Pow(Item2,Item1)
                -> Bonsai.Numerics.Permutation
                -> WorkflowOutput
            ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold, RewardDelay) => #3
            #2, #3 -> CreateObservable "Theta & Zo Range"
                WorkflowInput Source1
                -> MulticastSubject ThisDepth
                -> MulticastSubject StartTriggerOut

                GroupWorkflow "Total SphereNum PerTube"
                    Disable GroupWorkflow "Same Physical TubeLength"
                        SubscribeSubject ThisDepth => #0
                        SubscribeSubject TubeSpacing => #1
                        SubscribeSubject TubeLength => #2
                        SubscribeSubject ZoScaleK => #3
                        #0, #1, #3 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item2*Item1/Item3
                        -> MulticastSubject ZoSpacing => #6
                        #2, #6 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Math.Round(Item1/Item2)
                        -> BehaviorSubject TakeZoNum
                        -> WorkflowOutput

                    Disable GroupWorkflow "Same Projected TubeLength"
                        SubscribeSubject ThisDepth => #0
                        SubscribeSubject TubeSpacing => #1
                        SubscribeSubject TubeLength => #2
                        SubscribeSubject ThisDepth => #3
                        SubscribeSubject ZoScaleK => #4
                        #2, #3, #4 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #6
                          Expression: Item1 * Item2 / Item3
                        SubscribeSubject ZoScaleK => #7
                        #0, #1, #7 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item2*Item1/Item3
                        -> MulticastSubject ZoSpacing => #10
                        #6, #10 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Math.Round(Item1/Item2)
                        -> BehaviorSubject TakeZoNum
                        -> WorkflowOutput

                    GroupWorkflow "Same Physical TubeLength"
                        SubscribeSubject ThisDepth => #0
                        SubscribeSubject TubeSpacing => #1
                        SubscribeSubject ZoScaleK => #2
                        #0, #1, #2 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item2*Item1/Item3
                        -> MulticastSubject ZoSpacing

                        SubscribeSubject TubeLength => #6
                        SubscribeSubject TubeSpacing => #7
                        #6, #7 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Math.Round(Item1/Item2)
                        -> BehaviorSubject TakeZoNum
                        -> WorkflowOutput

                SubscribeSubject TubeLength
                -> BehaviorSubject ZoMax

                SubscribeSubject InterTrialDelay => #6
                BehaviorSubject<System.Double> Depth => #7
                GroupWorkflow ZoRange
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject TakeZoNum => #1
                    SubscribeSubject ZoMin => #2
                    SubscribeSubject ZoSpacing => #3
                    SubscribeSubject SphereNumPerMoment => #4
                    #3, #4 -> Zip
                    -> Multiply => #6
                    #2, #6 -> Zip
                    -> Add
                    -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                    -> PropertyMapping(RangeMin) => #10
                    #9 -> PropertyMapping(RangeMax) => #11
                    #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=16.2, RangeMax=16.2, Count=2) => #12
                    SubscribeSubject SphereNumPerMoment => #13
                    #1, #13 -> Zip
                    -> Subtract
                    -> Add(Operand=IntProperty(Value=1)) => #16
                    Disable GroupWorkflow "Same Projected Tube Length"
                        SubscribeSubject TubeLength => #0
                        SubscribeSubject ThisDepth => #1
                        SubscribeSubject ZoScaleK => #2
                        #0, #1, #2 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item1 * Item2 / Item3
                        -> WorkflowOutput
                    -> Disable PropertyMapping(RangeMax) => #18
                    GroupWorkflow "Same Physical Tube Length"
                        SubscribeSubject TubeLength => #0
                        SubscribeSubject ExtraSpheresFront => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> Zip
                        -> Multiply => #4
                        #0, #4 -> Zip
                        -> Add
                        -> WorkflowOutput
                    -> PropertyMapping(RangeMax) => #20
                    SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                    -> PropertyMapping(RangeMin) => #22
                    SubscribeSubject ExtraSpheresFront => #23
                    #16, #23 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #26
                    #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=16.2, RangeMax=616.2, Count=201) => #27
                    #12, #27 -> Concat
                    -> Skip(Count=1)
                    -> Disable MulticastSubject TrialStartTrigger => #30
                    -> WorkflowOutput
                    #30 -> Max
                    -> AsyncSubject MaxZo
                    #30, #0 -> WithLatestFrom
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMinLim
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                    SubscribeSubject ThetaMaxLim
                    -> PropertyMapping(Lower) => #9
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #11
                    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
                    #7, #12 -> Concat
                    -> Bonsai.Numerics.Permutation => #14
                    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                    #15, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #10
                BooleanProperty(Value=false) => #11
                PublishSubject<System.Boolean> EndTrigger
                -> Buffer(Count=2, Skip=1)
                -> Bonsai.Scripting.ExpressionCondition => #14
                  Expression: ((it[1]==True) && (it[0]==False))
                #14, #11 -> WithLatestFrom
                -> PublishSubject RewardTrigger
                -> MulticastSubject EndTriggerOut => #17
                SubscribeSubject NewSphereTrigger => #18
                #10, #18 -> Zip
                -> Skip(Count=1)
                -> MemberSelector(Selector=Item1) => #21
                GroupWorkflow ZoRange
                    SubscribeSubject ZoMin => #0
                    SubscribeSubject ZoMin => #1
                    SubscribeSubject ZoSpacing => #2
                    SubscribeSubject SphereNumPerMoment
                    -> Subtract(Operand=IntProperty(Value=1)) => #4
                    #2, #4 -> Zip
                    -> Multiply => #6
                    #1, #6 -> Zip
                    -> Add
                    -> PropertyMapping(RangeMax) => #9
                    SubscribeSubject SphereNumPerMoment => #10
                    SubscribeSubject ZoSpacing => #11
                    SubscribeSubject ExtraSpheresBehind => #12
                    #11, #12 -> Zip
                    -> Multiply => #14
                    #0, #14 -> Zip
                    -> Subtract
                    -> PropertyMapping(RangeMin) => #17
                    SubscribeSubject ExtraSpheresBehind => #18
                    #10, #18 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #21
                    #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-4.5, RangeMax=15.3, Count=23) => #22
                    -> MulticastSubject TrialStartTrigger
                    #22 -> ElementIndex
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMinLim
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                    SubscribeSubject ThetaMaxLim
                    -> PropertyMapping(Lower) => #9
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #11
                    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
                    #7, #12 -> Concat
                    -> Bonsai.Numerics.Permutation => #14
                    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                    #15, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #24
                #24, #21 -> Merge => #25
                SubscribeSubject ThisDepth
                -> MulticastSubject Depth => #27
                #27, #7 -> Merge => #28
                #25, #28 -> CombineLatest => #29
                -> MemberSelector(Selector=Item1.Item1)
                -> Bonsai.Numerics.DegreeToRadian => #31
                #29 -> MemberSelector(Selector=Item1.Item2) => #32
                #29 -> MemberSelector(Selector=Item2) => #33
                #31, #32, #33 -> Zip
                -> MulticastSubject SpherePos => #35
                SubscribeSubject FadeTime
                -> Multiply(Operand=FloatProperty(Value=1E+07))
                -> PropertyMapping(DueTime) => #38
                #17, #38 -> Delay(DueTime=PT0.3S)
                -> PublishSubject EndThisTrial => #40
                #35, #40 -> TakeUntil => #41
                SubscribeSubject FadeTime
                -> Multiply(Operand=FloatProperty(Value=1E+07)) => #43
                #6, #43 -> Zip
                -> Subtract
                -> PropertyMapping(DueTime) => #46
                #41, #46 -> Delay(DueTime=PT9.7S)
                -> WorkflowOutput

                ExternalizedMapping(DistanceBehind)
                -> GroupWorkflow EndTrialCondition
                    SubscribeSubject MaxZo => #0
                    ExternalizedMapping(DistanceBehind) => #1
                    SubscribeSubject TrialInitialMouseZ => #2
                    SubscribeSubject ExtraSpheresFront => #3
                    SubscribeSubject ZoSpacing => #4
                    #3, #4 -> Zip
                    -> Multiply => #6
                    #0, #6 -> Zip
                    -> Subtract => #8
                    #8, #2 -> WithLatestFrom
                    -> Add => #10
                    #10, #1 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject MouseZ => #1
                        ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                        #1, #2 -> Subtract(Operand=DoubleProperty(Value=0)) => #3
                        #0, #3 -> CombineLatest
                        -> LessThan
                        -> MulticastSubject EndTrigger
                        -> WorkflowOutput

                    BooleanProperty(Value=true) => #12
                    SubscribeSubject EndThisTrial => #13
                    #13, #12 -> WithLatestFrom
                    -> FloatProperty(Value=-9999)
                    -> MulticastSubject Depth
                    -> BooleanProperty(Value=true)

                GroupWorkflow MouseZs
                    SubscribeSubject GlobalElapsedTime => #0
                    BehaviorSubject<System.Double> TrialStartTrigger => #1
                    #0, #1 -> Sample
                    -> MulticastSubject TrialStartTime => #3
                    SubscribeSubject MouseZ => #4
                    #4, #3 -> Sample
                    -> MulticastSubject TrialInitialMouseZ => #6
                    SubscribeSubject MouseZ => #7
                    #7, #6 -> WithLatestFrom
                    -> Subtract
                    -> BehaviorSubject TrialMouseZ
                    #3 -> Disable BooleanProperty(Value=false)
                    -> Disable BehaviorSubject NewSphereTrigger

                ExternalizedMapping(NewSphereTriggerThreshold)
                -> GroupWorkflow "Generate NewSphereTrigger"
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject MouseZ => #1
                    ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                    -> FloatProperty(Value=0.01) => #3
                    SubscribeSubject MouseZ => #4
                    BehaviorSubject<System.Double> ZoSpacing => #5
                    SubscribeSubject NewSphereTrigger => #6
                    #0, #6 -> Sample => #7
                    #1, #7 -> WithLatestFrom
                    -> Subtract
                    -> Buffer(Count=2, Skip=1) => #10
                    #10, #5, #3 -> CombineLatest
                    -> Bonsai.Scripting.ExpressionCondition
                      Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject NewSphereTrigger
                    -> Disable PublishSubject NewSphereTrigger => #15
                    #4, #15 -> Sample
                    -> WorkflowOutput

                ExternalizedMapping(RewardDelay)
                -> GroupWorkflow "BlankPeriod Reward"
                    BooleanProperty(Value=true) => #0
                    ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                    SubscribeSubject RewardTrigger => #2
                    #2, #0 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #4
                    #4, #1 -> Delay(DueTime=PT2S) => #5
                    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                    -> Bonsai.Numerics.Permutation => #7
                    #7, #5 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject RewardProb
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.60000002384185791))
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Reward
                    -> MulticastSubject RewardLog
                    -> WorkflowOutput
            -> Concat => #5
            #5, #1 -> RepeatCount(Count=50)

            ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
            -> FloatProperty(Value=0.087)
            -> BehaviorSubject OriginalSize
            -> Take(Count=1) => #10
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> PublishSubject ElapsedTime => #14
            BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #15
            #15, #14 -> WithLatestFrom
            -> ElementIndex => #17
            SubscribeSubject MouseZ => #18
            SubscribeSubject NewSphereTrigger => #19
            #18, #19 -> Sample => #20
            BehaviorSubject<System.Double> ThisDepth => #21
            SubscribeSubject TubeSpacing => #22
            SubscribeSubject ZoScaleK => #23
            #21, #22, #23 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform => #25
              Expression: Item2*Item1/Item3
            SubscribeSubject SphereNumPerMoment => #26
            #17, #10, #25, #26 -> CombineLatest => #27
            #27, #20 -> WithLatestFrom
            -> Disable TubeMapping_NewZ
            -> TubeMapping_NewZ_Discrete_Test
            -> BehaviorSubject SphereNewParams

            BehaviorSubject<System.Double> TrialInitialMouseZ
            -> FloatProperty(Value=0)

            BehaviorSubject<System.Double> TrialStartTime
            -> BehaviorSubject TrialStartTimeSub

        SubscribeSubject SphereNumPerMoment => #2
        ExternalizedMapping(BackgroundColor, TargetAmb) => #3
        SubscribeSubject ExtraSpheresBehind => #4
        #2, #4 -> Zip
        -> Add
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=23) => #8
        #8, #3 -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> AsyncSubject SphereIndex

            SubscribeSubject Draw => #2
            SubscribeSubject SphereNewParams
            -> Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment => #3
                SubscribeSubject ExtraSpheresBehind => #4
                #3, #4 -> Zip
                -> Add
                -> PropertyMapping(Value) => #7
                #1, #7 -> Mod(Operand=IntProperty(Value=23)) => #8
                #8, #2 -> WithLatestFrom => #9
                #0 -> MemberSelector(Selector=Item3.Item3) => #10
                #9, #10 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> MulticastSubject LogSphereParams
            -> PublishSubject NewSphereTime => #6
            ExternalizedMapping(Value(DisplayName=TargetAmb))
            -> FloatProperty(Value=0) => #8
            ExternalizedMapping(Value(DisplayName=BackgroundColor))
            -> FloatProperty(Value=0.5) => #10
            Disable SubscribeSubject SphereNewParams
            -> Disable Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Value) => #4
                #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                #5, #2 -> WithLatestFrom => #6
                #0 -> MemberSelector(Selector=Item3.Item3) => #7
                #6, #7 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> Disable MemberSelector(Selector=Item2) => #13
            Disable SubscribeSubject ElapsedTime => #14
            #14, #13 -> Disable WithLatestFrom
            -> Disable Subtract => #16
            SubscribeSubject GlobalElapsedTime => #17
            SubscribeSubject GlobalElapsedTime => #18
            SubscribeSubject NewSphereTime => #19
            #18, #19 -> Sample => #20
            #17, #20 -> CombineLatest
            -> Subtract => #22
            SubscribeSubject GlobalElapsedTime => #23
            SubscribeSubject GlobalElapsedTime => #24
            SubscribeSubject StartTriggerIn => #25
            #24, #25 -> Sample => #26
            IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #27
            #26, #27 -> Merge => #28
            #23, #28 -> CombineLatest
            -> Subtract => #30
            SubscribeSubject GlobalElapsedTime => #31
            SubscribeSubject EndTriggerIn => #32
            #31, #32 -> Sample => #33
            SubscribeSubject GlobalElapsedTime => #34
            SubscribeSubject StartTriggerIn => #35
            #34, #35 -> Sample => #36
            IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #37
            #36, #37 -> Merge => #38
            IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #39
            #33, #39 -> Merge => #40
            #40, #38 -> CombineLatest
            -> Subtract => #42
            SubscribeSubject FadeTime
            -> FloatProperty(Value=0.3) => #44
            #16, #22, #44, #8, #10, #30, #42 -> CombineLatest
            -> CreateFadingInOut
            -> Disable CreateFadingIn
            -> Disable CreateFadingNew => #48
            #6, #48 -> CombineLatest => #49
            #2, #49 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item1.Item1 as SphereID,
                Item2.Item2 as Ambient,
                Item2.Item1.Item3.Item1 as Azimuth,
                Item2.Item1.Item3.Item2 as Elevation,
                Item2.Item1.Item3.Item3 as Depth,
                Item2.Item1.Item4.Item1 as X,
                Item2.Item1.Item4.Item2 as Y,
                Item2.Item1.Item4.Item3 as Z0,
                Item2.Item1.Item4.Item4 as Z,
                Item2.Item1.Item4.Item5 as MouseZ,
                Item2.Item1.Item5.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              TranslationX(Selector=X)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-16.1051331
              TranslationY=10.0809078
              TranslationZ=3450.6167
              ScaleX=1.653
              ScaleY=1.653
              ScaleZ=1.653
              MeshName=sphere
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            -> WorkflowOutput
        -> Merge

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            SubscribeSubject Frames => #0
            SubscribeSubject StartTrigger => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #3
            SubscribeSubject SaveGeneralPrefix => #4
            SubscribeSubject SaveDate => #5
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams"))
            -> StringProperty(Value=NewParams) => #7
            SubscribeSubject Metadata => #8
            SubscribeSubject WhichExp => #9
            SubscribeSubject SaveTimestamp => #10
            #4, #5, #10, #9, #7, #8 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #13
            BehaviorSubject<System.Tuple(System.Int32,System.Single,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> LogSphereParams => #14
            -> Disable MemberSelector(Selector=Item3.Item2) => #15
            Disable SubscribeSubject NewSphereTrigger => #16
            #16, #15 -> Disable CombineLatest
            -> Disable IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #18
            Disable SubscribeSubject SaveGeneralPrefix => #19
            Disable SubscribeSubject SaveDate => #20
            Disable StringProperty(Value=NewSphereTrigger) => #21
            Disable SubscribeSubject Metadata => #22
            Disable SubscribeSubject WhichExp => #23
            Disable SubscribeSubject SaveTimestamp => #24
            #19, #20, #24, #23, #21, #22 -> Disable Zip
            -> Disable Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> Disable PropertyMapping(FileName) => #27
            #18, #27 -> Disable Bonsai.IO.CsvWriter
              FileName=D:\data\Test\S20211007\R203254_SpheresPermTube\Test_S20211007_R203254_SpheresPermTube_NewSphereTrigger.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            SubscribeSubject MouseZ => #29
            #3, #29 -> CombineLatest => #30
            #14, #30 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #33
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Item1.Index as Frame,
                Value.Item1.Item1 as SphereID,
                Value.Item1.Item2 as StartTime,
                Math.Round(Value.Item1.Item3.Item1/Math.PI*180) as Theta,
                Value.Item1.Item3.Item2 as Zo,
                Value.Item1.Item3.Item3 as Depth,
                Value.Item1.Item4.Item1 as X,
                Value.Item1.Item4.Item2 as Y,
                Value.Item1.Item4.Item3 as Z0,
                Value.Item1.Item4.Item4 as Z,
                Value.Item2.Item2 as MouseZ,
                Value.Item1.Item5.Item1 as OriginalSize,
                Value.Item1.Item5.Item2 as Size)
            #33, #13 -> Bonsai.IO.CsvWriter => #34
              FileName=D:\data\PZAH6.4b\S20220407\R121347_SpheresPermTubeReward\PZAH6.4b_S20220407_R121347_SpheresPermTubeReward_NewParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #35
            #34 -> Disable MemberSelector(Selector=Azimuth) => #36
            #34 -> Disable MemberSelector(Selector=Elevation) => #37
            #34 -> Disable MemberSelector(Selector=Depth) => #38
            #34 -> Disable MemberSelector(Selector=Frame) => #39
            #35, #36, #37, #38, #39 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

        BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
        -> PublishSubject EndTriggerIn
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> PublishSubject TrialCount

        BehaviorSubject<System.Double> StartTriggerOut
        -> PublishSubject StartTriggerIn

        GroupWorkflow RewardLog
            BehaviorSubject<System.Boolean> RewardLog
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression:
                new(
                Timestamp as HarpTime,
                Value as Reward)
            SubscribeSubject SaveGeneralPrefix => #3
            SubscribeSubject SaveDate => #4
            ExternalizedMapping(Value(DisplayName="SaveFilename Reward"))
            -> StringProperty(Value=RewardLog) => #6
            SubscribeSubject Metadata => #7
            SubscribeSubject WhichExp => #8
            SubscribeSubject SaveTimestamp => #9
            #3, #4, #9, #8, #6, #7 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #12
            #2, #12 -> Bonsai.IO.CsvWriter
              FileName=D:\data\PZAH6.4b\S20220407\R121347_SpheresPermTubeReward\PZAH6.4b_S20220407_R121347_SpheresPermTubeReward_RewardLog.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> WorkflowOutput
    #9, #7 -> DelaySubscription(DueTime=PT2S)

    SubscribeSubject TrialCount => #11
    SubscribeSubject DepthCount
    -> PropertyMapping(Value) => #13
    #11, #13 -> Divide(Operand=IntProperty(Value=5))
    -> MulticastSubject TrialNo
#29, #20 -> Disable TakeUntil
Disable Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift Control Alt", SuppressRepetitions=false)
-> Disable SelectMany RewardRunning => #32
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger

    SubscribeSubject MouseZ => #2
    SubscribeSubject MouseZ => #3
    ExternalizedMapping(Value(DisplayName=NewRewardTriggerThreshold))
    -> FloatProperty(Value=0.01) => #5
    SubscribeSubject MouseZ => #6
    BooleanProperty(Value=true) => #7
    ExternalizedMapping(Value(DisplayName=RewardDistance))
    -> IntProperty(Value=10) => #9
    SubscribeSubject Reward => #10
    #2, #10 -> Sample => #11
    #3, #11 -> WithLatestFrom
    -> Subtract
    -> BehaviorSubject TrialMouseZ
    -> Buffer(Count=2, Skip=1) => #15
    #15, #9, #5 -> CombineLatest
    -> Bonsai.Scripting.ExpressionCondition
      Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[1]>item1[0])
    -> BooleanProperty(Value=false)
    -> PublishSubject NewSphereTrigger => #19
    #6, #19 -> Sample => #20
    #20, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject Reward
    -> WorkflowOutput

    Disable ExternalizedMapping
      ThetaMin
      ThetaMax
      TakeThetaNum
      ZoMin
      RadiusMax
      RadiusMin
      RadiusLogBase
      ZoScaleK
      TubeLenth
      TubeSpacing
      InvisibleAngle
      ExtraSpheresBehind(Category=ZoPosition)
    -> Disable GroupWorkflow ParamSettings
        ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
        -> FloatProperty(Value=-40)
        -> BehaviorSubject ThetaMin

        ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
        -> FloatProperty(Value=220)
        -> BehaviorSubject ThetaMax

        ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
        -> IntProperty(Value=1)
        -> BehaviorSubject TakeThetaNum

        ExternalizedMapping(Value(DisplayName=ZoMin, Category=ZoPosition))
        -> FloatProperty(Value=0)
        -> BehaviorSubject ZoMin

        ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
        -> FloatProperty(Value=1000)
        -> BehaviorSubject TubeLength

        ExternalizedMapping(Value(DisplayName=RadiusMax, Category=RadiusPosition))
        -> FloatProperty(Value=200)
        -> BehaviorSubject RadiusMax

        ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=RadiusPosition))
        -> FloatProperty(Value=2)
        -> BehaviorSubject RadiusLogBase

        ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
        -> FloatProperty(Value=5)
        -> BehaviorSubject TubeSpacing => #23
        ExternalizedMapping(Value(DisplayName=ZoScaleK, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject ZoScaleK => #26
        ExternalizedMapping(Value(DisplayName=InvisibleAngle, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject InvisibleAngle
        -> Bonsai.Numerics.DegreeToRadian => #30
        ExternalizedMapping(Value(DisplayName=RadiusMin, Category=RadiusPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject RadiusMin => #33
        #33, #30, #23, #26 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
        -> BehaviorSubject SphereNumPerMoment

        ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
        -> IntProperty(Value=10)
        -> BehaviorSubject ExtraSpheresBehind

    Disable ExternalizedMapping
      Size(Category=SphereSettings)
      "SaveFilename NewParams"
      BackgroundColor(Category=SphereSettings)
      TargetAmb(Category=SphereSettings)
      DistanceBehind(Category=TrialConditions)
      FadeInTime(Category=SphereSettings)
      NewSphereTriggerThreshold(Category=ZoPosition)
    -> Disable GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #28
        ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
        -> GroupWorkflow ManageSphereParams
            SubscribeSubject RepeatNumber
            -> PropertyMapping(Count) => #1
            GroupWorkflow RadiusRange => #2
                SubscribeSubject DepthCount
                -> IntProperty(Value=3) => #1
                SubscribeSubject RadiusMin => #2
                SubscribeSubject RadiusMax => #3
                SubscribeSubject RadiusLogBase => #4
                #2, #3, #1, #4 -> Zip
                -> Bonsai.Scripting.ExpressionTransform Log => #6
                  Expression:
                    new(
                    Math.Log(Item1,Item4) as Min,
                    Math.Log(Item2,Item4) as Max,
                    Item3 as Count
                    )
                -> MemberSelector(Selector=Min)
                -> PropertyMapping(RangeMin) => #8
                #6 -> MemberSelector(Selector=Max)
                -> PropertyMapping(RangeMax) => #10
                #6 -> MemberSelector(Selector=Count)
                -> PropertyMapping(Count) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=4.3219280948873626, RangeMax=7.6438561897747244, Count=3) => #13
                #13, #4 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Power
                  Expression: Math.Pow(Item2,Item1)
                -> Disable Bonsai.Numerics.Permutation
                -> WorkflowOutput
            ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #3
            #2, #3 -> CreateObservable "Theta & Zo Range"
                WorkflowInput Source1
                -> BehaviorSubject ThisDepth

                SubscribeSubject ThisDepth => #2
                SubscribeSubject TubeSpacing => #3
                SubscribeSubject RadiusMin => #4
                #2, #3, #4 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: Item2*Item1/Item3
                -> MulticastSubject ZoSpacing => #7
                SubscribeSubject TubeLength => #8
                #8, #7 -> Zip
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: Math.Round(Item1/Item2)
                -> BehaviorSubject TakeZoNum

                SubscribeSubject TubeLength
                -> BehaviorSubject ZoMax

                SubscribeSubject InterTrialDelay
                -> PropertyMapping(DueTime) => #15
                BehaviorSubject<System.Double> Depth => #16
                GroupWorkflow ZoRange
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject TakeZoNum => #1
                    SubscribeSubject ZoMin => #2
                    SubscribeSubject ZoSpacing => #3
                    SubscribeSubject SphereNumPerMoment => #4
                    #3, #4 -> Zip
                    -> Multiply => #6
                    #2, #6 -> Zip
                    -> Add
                    -> PropertyMapping(RangeMin) => #9
                    SubscribeSubject SphereNumPerMoment => #10
                    #1, #10 -> Zip
                    -> Subtract
                    -> Add(Operand=IntProperty(Value=1))
                    -> PropertyMapping(Count) => #14
                    SubscribeSubject TubeLength
                    -> PropertyMapping(RangeMax) => #16
                    #9, #16, #14 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=50.000000000000007, RangeMax=1000, Count=191)
                    -> Disable MulticastSubject TrialStartTrigger => #18
                    -> WorkflowOutput
                    #18 -> Max
                    -> AsyncSubject MaxZo
                    #18, #0 -> WithLatestFrom
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=220)
                    -> Bonsai.Numerics.Permutation => #8
                    #8, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #9
                    #9, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #19
                BooleanProperty(Value=false) => #20
                PublishSubject<System.Boolean> EndTrigger
                -> Bonsai.Scripting.ExpressionCondition => #22
                  Expression: (it==True)
                #22, #20 -> WithLatestFrom
                -> PublishSubject EndThisTrial => #24
                SubscribeSubject NewSphereTrigger => #25
                #19, #25 -> Zip
                -> MemberSelector(Selector=Item1) => #27
                GroupWorkflow ZoRange
                    SubscribeSubject ZoMin => #0
                    SubscribeSubject ZoMin => #1
                    SubscribeSubject ZoSpacing => #2
                    SubscribeSubject SphereNumPerMoment
                    -> Subtract(Operand=IntProperty(Value=1)) => #4
                    #2, #4 -> Zip
                    -> Multiply => #6
                    #1, #6 -> Zip
                    -> Add
                    -> PropertyMapping(RangeMax) => #9
                    SubscribeSubject SphereNumPerMoment => #10
                    SubscribeSubject ZoSpacing => #11
                    SubscribeSubject ExtraSpheresBehind => #12
                    #11, #12 -> Zip
                    -> Multiply => #14
                    #0, #14 -> Zip
                    -> Subtract
                    -> PropertyMapping(RangeMin) => #17
                    SubscribeSubject ExtraSpheresBehind => #18
                    #10, #18 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #21
                    #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-50.000000000000007, RangeMax=45.000000000000007, Count=20)
                    -> MulticastSubject TrialStartTrigger
                    -> WorkflowOutput
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=220)
                    -> Bonsai.Numerics.Permutation => #8
                    #8, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #9
                    #9, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #30
                #30, #27 -> Merge => #31
                SubscribeSubject ThisDepth
                -> MulticastSubject Depth => #33
                #33, #16 -> Merge => #34
                #31, #34 -> CombineLatest => #35
                -> MemberSelector(Selector=Item1.Item1)
                -> Bonsai.Numerics.DegreeToRadian => #37
                #35 -> MemberSelector(Selector=Item1.Item2) => #38
                #35 -> MemberSelector(Selector=Item2) => #39
                #37, #38, #39 -> Zip
                -> MulticastSubject SpherePos => #41
                #41, #24 -> TakeUntil => #42
                #42, #15 -> Delay(DueTime=PT10S)
                -> WorkflowOutput

                SubscribeSubject MaxZo => #45
                ExternalizedMapping(DistanceBehind) => #46
                SubscribeSubject TrialInitialMouseZ => #47
                #45, #47 -> WithLatestFrom
                -> Add => #49
                #49, #46 -> Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject MouseZ => #1
                    ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                    #1, #2 -> Subtract(Operand=DoubleProperty(Value=20)) => #3
                    #0, #3 -> CombineLatest
                    -> LessThan
                    -> MulticastSubject EndTrigger
                    -> WorkflowOutput

                BooleanProperty(Value=true) => #51
                SubscribeSubject EndThisTrial => #52
                #52, #51 -> WithLatestFrom
                -> FloatProperty(Value=-9999)
                -> MulticastSubject Depth
                -> BooleanProperty(Value=true)

                SubscribeSubject GlobalElapsedTime => #57
                BehaviorSubject<System.Double> TrialStartTrigger => #58
                #57, #58 -> Sample
                -> MulticastSubject TrialStartTime => #60
                SubscribeSubject MouseZ => #61
                #61, #60 -> Sample
                -> MulticastSubject TrialInitialMouseZ => #63
                SubscribeSubject MouseZ => #64
                #64, #63 -> WithLatestFrom
                -> Subtract
                -> BehaviorSubject TrialMouseZ
                -> Buffer(Count=2, Skip=1) => #68
                ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                -> FloatProperty(Value=0.01) => #70
                SubscribeSubject MouseZ => #71
                BehaviorSubject<System.Double> ZoSpacing => #72
                #68, #72, #70 -> CombineLatest
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                -> BooleanProperty(Value=false)
                -> PublishSubject NewSphereTrigger => #76
                #71, #76 -> Sample
            -> Concat => #5
            #5, #1 -> RepeatCount(Count=50)

            ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
            -> FloatProperty(Value=0.087)
            -> BehaviorSubject OriginalSize
            -> Take(Count=1) => #10
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> PublishSubject ElapsedTime => #14
            BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #15
            #15, #14 -> WithLatestFrom
            -> ElementIndex => #17
            #17, #10 -> CombineLatest => #18
            BehaviorSubject<System.Double> TrialInitialMouseZ => #19
            #18, #19 -> WithLatestFrom
            -> TubeMapping
            -> Disable SphericalCoordinates_SP
            -> BehaviorSubject SphereNewParams

            BehaviorSubject<System.Double> TrialStartTime
            -> BehaviorSubject TrialStartTimeSub

        SubscribeSubject SphereNumPerMoment => #2
        ExternalizedMapping(BackgroundColor, TargetAmb, FadeInTime) => #3
        SubscribeSubject ExtraSpheresBehind => #4
        #2, #4 -> Zip
        -> Add
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=20) => #8
        #8, #3 -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> AsyncSubject SphereIndex

            SubscribeSubject Draw => #2
            SubscribeSubject SphereNewParams
            -> Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment => #3
                SubscribeSubject ExtraSpheresBehind => #4
                #3, #4 -> Zip
                -> Add
                -> PropertyMapping(Value) => #7
                #1, #7 -> Mod(Operand=IntProperty(Value=20)) => #8
                #8, #2 -> WithLatestFrom => #9
                #0 -> MemberSelector(Selector=Item3.Item3) => #10
                #9, #10 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> MulticastSubject LogSphereParams => #5
            ExternalizedMapping(Value(DisplayName=TargetAmb))
            -> FloatProperty(Value=0) => #7
            ExternalizedMapping(Value(DisplayName=BackgroundColor))
            -> FloatProperty(Value=0.5) => #9
            ExternalizedMapping(Value(DisplayName=FadeInTime))
            -> FloatProperty(Value=0.5) => #11
            Disable SubscribeSubject SphereNewParams
            -> Disable Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Value) => #4
                #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                #5, #2 -> WithLatestFrom => #6
                #0 -> MemberSelector(Selector=Item3.Item3) => #7
                #6, #7 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> Disable MemberSelector(Selector=Item2) => #14
            Disable SubscribeSubject ElapsedTime => #15
            #15, #14 -> Disable WithLatestFrom
            -> Disable Subtract => #17
            SubscribeSubject GlobalElapsedTime => #18
            SubscribeSubject TrialStartTimeSub => #19
            #18, #19 -> CombineLatest
            -> Subtract => #21
            #17, #21, #11, #7, #9 -> CombineLatest
            -> CreateFadingIn
            -> Disable CreateFadingNew => #24
            #5, #24 -> CombineLatest => #25
            #2, #25 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item1.Item1 as SphereID,
                Item2.Item2 as Ambient,
                Item2.Item1.Item3.Item1 as Azimuth,
                Item2.Item1.Item3.Item2 as Elevation,
                Item2.Item1.Item3.Item3 as Depth,
                Item2.Item1.Item4.Item1 as X,
                Item2.Item1.Item4.Item2 as Y,
                Item2.Item1.Item4.Item3 as Z0,
                Item2.Item1.Item4.Item4 as Z,
                Item2.Item1.Item4.Item5 as MouseZ,
                Item2.Item1.Item5.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              TranslationX(Selector=X)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=19.9870224
              TranslationY=-0.720345438
              TranslationZ=345
              ScaleX=1.74
              ScaleY=1.74
              ScaleZ=1.74
              MeshName=sphere
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            -> WorkflowOutput
        -> Merge

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            SubscribeSubject Frames => #0
            SubscribeSubject StartTrigger => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #3
            SubscribeSubject SaveGeneralPrefix => #4
            SubscribeSubject SaveDate => #5
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams"))
            -> StringProperty(Value=NewParams) => #7
            SubscribeSubject Metadata => #8
            SubscribeSubject WhichExp => #9
            SubscribeSubject SaveTimestamp => #10
            #4, #5, #10, #9, #7, #8 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #13
            BehaviorSubject<System.Tuple(System.Int32,System.Single,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> LogSphereParams => #14
            #14, #3 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #17
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Index as Frame,
                Value.Item1.Item1 as SphereID,
                Value.Item1.Item2 as StartTime,
                Math.Round(Value.Item1.Item3.Item1/Math.PI*180) as Theta,
                Value.Item1.Item3.Item2 as Zo,
                Value.Item1.Item3.Item3 as Depth,
                Value.Item1.Item4.Item1 as X,
                Value.Item1.Item4.Item2 as Y,
                Value.Item1.Item4.Item3 as Z0,
                Value.Item1.Item4.Item4 as Z,
                Value.Item1.Item4.Item5 as MouseZ,
                Value.Item1.Item5.Item1 as OriginalSize,
                Value.Item1.Item5.Item2 as Size)
            #17, #13 -> Bonsai.IO.CsvWriter => #18
              FileName=D:\data\Test\S20211008\R150052_SpheresPermTube\Test_S20211008_R150052_SpheresPermTube_NewParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #19
            #18 -> Disable MemberSelector(Selector=Azimuth) => #20
            #18 -> Disable MemberSelector(Selector=Elevation) => #21
            #18 -> Disable MemberSelector(Selector=Depth) => #22
            #18 -> Disable MemberSelector(Selector=Frame) => #23
            #19, #20, #21, #22, #23 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)
            #14 -> Disable MemberSelector(Selector=Item3.Item2) => #27
            Disable SubscribeSubject NewSphereTrigger => #28
            #28, #27 -> Disable CombineLatest
            -> Disable IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #30
            Disable SubscribeSubject SaveGeneralPrefix => #31
            Disable SubscribeSubject SaveDate => #32
            Disable StringProperty(Value=NewSphereTrigger) => #33
            Disable SubscribeSubject Metadata => #34
            Disable SubscribeSubject WhichExp => #35
            Disable SubscribeSubject SaveTimestamp => #36
            #31, #32, #36, #35, #33, #34 -> Disable Zip
            -> Disable Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> Disable PropertyMapping(FileName) => #39
            #30, #39 -> Disable Bonsai.IO.CsvWriter
              FileName=D:\data\Test\S20211007\R203254_SpheresPermTube\Test_S20211007_R203254_SpheresPermTube_NewSphereTrigger.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
    Disable ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #29
    #28, #29 -> Disable DelaySubscription(DueTime=PT10S)
#32, #19 -> Disable TakeUntil

PublishSubject<System.Int32> TrialNo
SubscribeSubject MouseZ

ExternalizedMapping(AziMin, AziMax(DisplayName=AziMax), AziCount)
-> GroupWorkflow AziRange => #37
    ExternalizedMapping(RangeMin(DisplayName=AziMin), RangeMax(DisplayName=AziMax), Count(DisplayName=AziCount))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-20, RangeMax=70, Count=10)
    -> WorkflowOutput
ExternalizedMapping(RadiusMin, RadiusMax, RadiusCount, RadiusLogBase, ThetaMin, ThetaMinLim, ThetaMinCount) => #38
#37, #38 -> CreateObservable "Theta Radius Range"
    WorkflowInput Source1 => #0
    ExternalizedMapping(RangeMin(DisplayName=ThetaMin), RangeMax(DisplayName=ThetaMinLim), Count(DisplayName=ThetaMinCount))
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-40, RangeMax=40, Count=9) => #2
    ExternalizedMapping(RadiusMin(Category=Positions), RadiusMax, RadiusCount, RadiusLogBase) => #3
    Disable ExternalizedMapping(RangeMin(DisplayName=ThetaMaxLim), RangeMax(DisplayName=ThetaMax), Count(DisplayName=ThetaMaxCount))
    -> Disable IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=40, RangeMax=40, Count=2) => #5
    #2, #5 -> Disable Concat => #6
    #0, #6 -> CombineLatest => #7
    #7, #3 -> CreateObservable RadiusRange
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=RadiusMin, Category=Positions))
        -> FloatProperty(Value=20) => #2
        ExternalizedMapping(Value(DisplayName=RadiusMax, Category=Positions))
        -> FloatProperty(Value=200) => #4
        ExternalizedMapping(Value(DisplayName=RadiusCount, Category=Positions))
        -> IntProperty(Value=3) => #6
        ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=Positions))
        -> FloatProperty(Value=2) => #8
        #2, #4, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform Log => #10
          Expression:
            new(
            Math.Log(Item1,Item4) as Min,
            Math.Log(Item2,Item4) as Max,
            Item3 as Count
            )
        -> MemberSelector(Selector=Min)
        -> PropertyMapping(RangeMin) => #12
        #10 -> MemberSelector(Selector=Max)
        -> PropertyMapping(RangeMax) => #14
        #10 -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #16
        #12, #14, #16 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=4.3219280948873626, RangeMax=7.6438561897747244, Count=3) => #17
        #17, #8 -> WithLatestFrom
        -> Bonsai.Scripting.ExpressionTransform Power => #19
          Expression: Math.Pow(Item2,Item1)
        #0, #19 -> CombineLatest
        -> InputMapping(X(Selector=Item1.Item1), Y(Selector=Item1.Item2), Z(Selector=Item2))
        -> Bonsai.Shaders.CreateVector3(X=70, Y=40, Z=200)
        -> WorkflowOutput
    -> Concat
    -> WorkflowOutput
-> Concat
-> Bonsai.Numerics.Permutation => #41
Timer(DueTime=PT0S, Period=PT1S) => #42
#41, #42 -> Zip

Range(Start=0, Count=2)
-> CreateObservable
    WorkflowInput Source1

    ExternalizedMapping(AziMin, AziMax(DisplayName=AziMax), AziCount)
    -> GroupWorkflow AziRange => #2
        ExternalizedMapping(RangeMin(DisplayName=AziMin), RangeMax(DisplayName=AziMax), Count(DisplayName=AziCount))
        -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-20, RangeMax=70, Count=10)
        -> WorkflowOutput
    ExternalizedMapping(RadiusMin, RadiusMax, RadiusCount, RadiusLogBase, ThetaMin, ThetaMinLim, ThetaMinCount) => #3
    #2, #3 -> CreateObservable "Theta Radius Range"
        WorkflowInput Source1 => #0
        ExternalizedMapping(RangeMin(DisplayName=ThetaMin), RangeMax(DisplayName=ThetaMinLim), Count(DisplayName=ThetaMinCount))
        -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-40, RangeMax=40, Count=9) => #2
        ExternalizedMapping(RadiusMin(Category=Positions), RadiusMax, RadiusCount, RadiusLogBase) => #3
        Disable ExternalizedMapping(RangeMin(DisplayName=ThetaMaxLim), RangeMax(DisplayName=ThetaMax), Count(DisplayName=ThetaMaxCount))
        -> Disable IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=40, RangeMax=40, Count=2) => #5
        #2, #5 -> Disable Concat => #6
        #0, #6 -> CombineLatest => #7
        #7, #3 -> CreateObservable RadiusRange
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=RadiusMin, Category=Positions))
            -> FloatProperty(Value=20) => #2
            ExternalizedMapping(Value(DisplayName=RadiusMax, Category=Positions))
            -> FloatProperty(Value=200) => #4
            ExternalizedMapping(Value(DisplayName=RadiusCount, Category=Positions))
            -> IntProperty(Value=3) => #6
            ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=Positions))
            -> FloatProperty(Value=2) => #8
            #2, #4, #6, #8 -> Zip
            -> Bonsai.Scripting.ExpressionTransform Log => #10
              Expression:
                new(
                Math.Log(Item1,Item4) as Min,
                Math.Log(Item2,Item4) as Max,
                Item3 as Count
                )
            -> MemberSelector(Selector=Min)
            -> PropertyMapping(RangeMin) => #12
            #10 -> MemberSelector(Selector=Max)
            -> PropertyMapping(RangeMax) => #14
            #10 -> MemberSelector(Selector=Count)
            -> PropertyMapping(Count) => #16
            #12, #14, #16 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=4.3219280948873626, RangeMax=7.6438561897747244, Count=3) => #17
            #17, #8 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Power => #19
              Expression: Math.Pow(Item2,Item1)
            #0, #19 -> CombineLatest
            -> InputMapping(X(Selector=Item1.Item1), Y(Selector=Item1.Item2), Z(Selector=Item2))
            -> Bonsai.Shaders.CreateVector3(X=70, Y=40, Z=200)
            -> WorkflowOutput
        -> Concat
        -> WorkflowOutput
    -> Concat
    -> Bonsai.Numerics.Permutation => #6
    Timer(DueTime=PT0S, Period=PT1S) => #7
    #6, #7 -> Zip => #8
    Timer(DueTime=PT4S, Period=PT0S) => #9
    #8, #9 -> TakeUntil
    -> WorkflowOutput
-> Concat

GroupWorkflow ZoRange
    Disable SubscribeSubject MouseZ => #0
    Disable SubscribeSubject TakeZoNum => #1
    Disable SubscribeSubject ZoMin => #2
    Disable SubscribeSubject ZoSpacing => #3
    Disable SubscribeSubject SphereNumPerMoment => #4
    #3, #4 -> Disable Zip
    -> Disable Multiply => #6
    #2, #6 -> Disable Zip
    -> Disable Add
    -> Disable BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
    -> Disable PropertyMapping(RangeMin) => #10
    #9 -> Disable PropertyMapping(RangeMax) => #11
    #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=16.2, RangeMax=16.2, Count=2) => #12
    Disable SubscribeSubject SphereNumPerMoment => #13
    #1, #13 -> Disable Zip
    -> Disable Subtract
    -> Disable Add(Operand=IntProperty(Value=1)) => #16
    Disable GroupWorkflow "Same Physical Tube Length"
        SubscribeSubject TubeLength => #0
        SubscribeSubject ExtraSpheresFront => #1
        SubscribeSubject ZoSpacing => #2
        #1, #2 -> Zip
        -> Multiply => #4
        #0, #4 -> Zip
        -> Add
        -> WorkflowOutput
    -> Disable PropertyMapping(RangeMax) => #18
    Disable SubscribeSubject "NewlyGeneratedSpheres ZoMin"
    -> Disable PropertyMapping(RangeMin) => #20
    Disable SubscribeSubject ExtraSpheresFront => #21
    #16, #21 -> Disable Zip
    -> Disable Add
    -> Disable PropertyMapping(Count) => #24
    #20, #18, #24 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=16.2, RangeMax=616.2, Count=201) => #25
    #12, #25 -> Concat
    -> Skip(Count=1)
    -> Disable MulticastSubject TrialStartTrigger => #28
    -> WorkflowOutput
    #28 -> Disable Max
    -> Disable AsyncSubject MaxZo
    #28, #0 -> Disable WithLatestFrom
-> CreateObservable ThetaRange
    WorkflowInput Source1 => #0
    Disable SubscribeSubject TakeThetaNum
    -> Disable PropertyMapping(Count) => #2
    Disable SubscribeSubject ThetaMin
    -> Disable PropertyMapping(Lower) => #4
    Disable SubscribeSubject ThetaMinLim
    -> Disable PropertyMapping(Upper) => #6
    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
    Disable SubscribeSubject ThetaMaxLim
    -> Disable PropertyMapping(Lower) => #9
    Disable SubscribeSubject ThetaMax
    -> Disable PropertyMapping(Upper) => #11
    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
    #7, #12 -> Concat
    -> Bonsai.Numerics.Permutation => #14
    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=10)
    -> Bonsai.Numerics.VariationWithRepetition(Count=1) => #17
    #15, #0, #17 -> CombineLatest
    -> WorkflowOutput
-> Concat => #49
GroupWorkflow ZoRange
    Disable SubscribeSubject ZoMin => #0
    Disable SubscribeSubject ZoMin => #1
    Disable SubscribeSubject ZoSpacing => #2
    Disable SubscribeSubject SphereNumPerMoment
    -> Disable Subtract(Operand=IntProperty(Value=1)) => #4
    #2, #4 -> Disable Zip
    -> Disable Multiply => #6
    #1, #6 -> Disable Zip
    -> Disable Add
    -> Disable PropertyMapping(RangeMax) => #9
    Disable SubscribeSubject SphereNumPerMoment => #10
    Disable SubscribeSubject ZoSpacing => #11
    Disable SubscribeSubject ExtraSpheresBehind => #12
    #11, #12 -> Disable Zip
    -> Disable Multiply => #14
    #0, #14 -> Disable Zip
    -> Disable Subtract
    -> Disable PropertyMapping(RangeMin) => #17
    Disable SubscribeSubject ExtraSpheresBehind => #18
    #10, #18 -> Disable Zip
    -> Disable Add
    -> Disable PropertyMapping(Count) => #21
    #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-4.5, RangeMax=15.3, Count=23) => #22
    -> Disable MulticastSubject TrialStartTrigger
    #22 -> Disable ElementIndex
    -> Disable MemberSelector(Selector=Value)
    -> WorkflowOutput
-> CreateObservable ThetaRange
    WorkflowInput Source1 => #0
    Disable SubscribeSubject TakeThetaNum
    -> Disable PropertyMapping(Count) => #2
    Disable SubscribeSubject ThetaMin
    -> Disable PropertyMapping(Lower) => #4
    Disable SubscribeSubject ThetaMinLim
    -> Disable PropertyMapping(Upper) => #6
    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
    Disable SubscribeSubject ThetaMaxLim
    -> Disable PropertyMapping(Lower) => #9
    Disable SubscribeSubject ThetaMax
    -> Disable PropertyMapping(Upper) => #11
    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
    #7, #12 -> Concat
    -> Bonsai.Numerics.Permutation => #14
    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=10)
    -> Bonsai.Numerics.VariationWithRepetition(Count=1) => #17
    #15, #0, #17 -> CombineLatest
    -> WorkflowOutput
-> Concat => #52
Timer(DueTime=PT0S, Period=PT1S) => #53
#49, #53 -> Zip
-> Skip(Count=1)
-> MemberSelector(Selector=Item1) => #56
#52, #56 -> Merge => #57
Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=10)
-> Disable Bonsai.Numerics.Permutation
-> Disable Bonsai.Numerics.Distributions.SampleMany(Count=1) => #60
#57, #60 -> Disable CombineLatest

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift Control Alt", SuppressRepetitions=false) => #62
Bonsai.Windows.Input.KeyDown(Filter="MButton D Control Alt", SuppressRepetitions=true) => #63
SubscribeSubject SaveTimestamp => #64
SubscribeSubject SaveDate => #65
SubscribeSubject Metadata => #66
SubscribeSubject WhichExp => #67
#66, #65, #64, #67 -> Zip
-> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4") => #69
-> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
#62, #69 -> Zip
-> SelectMany "Spheres Close & Open" => #72
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger
    -> BooleanProperty(Value=false)
    -> BehaviorSubject NewSphereTrigger
    -> Disable MulticastSubject Reward

    ExternalizedMapping
      ThetaMin
      ThetaMax
      TakeThetaNum
      RadiusMax
      RadiusMin
      RadiusLogBase
      ZoScaleK
      TubeLenth
      TubeSpacing
      InvisibleAngle
      ExtraSpheresBehind(Category=ZoPosition)
      ZoMin(Category=ZoPosition)
      ThetaMinLim(Category=ThetaPosition)
      ThetaMaxLim(Category=ThetaPosition)
      FadeTime
      RewardProb
    -> GroupWorkflow ParamSettings
        ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
        -> IntProperty(Value=5)
        -> BehaviorSubject ExtraSpheresBehind

        ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
        -> FloatProperty(Value=-40)
        -> BehaviorSubject ThetaMin

        ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
        -> FloatProperty(Value=220)
        -> BehaviorSubject ThetaMax

        ExternalizedMapping(Value(DisplayName=ThetaMinLim, Category=ThetaPosition))
        -> FloatProperty(Value=40)
        -> BehaviorSubject ThetaMinLim

        ExternalizedMapping(Value(DisplayName=ThetaMaxLim, Category=ThetaPosition))
        -> FloatProperty(Value=130)
        -> BehaviorSubject ThetaMaxLim

        ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
        -> IntProperty(Value=1)
        -> BehaviorSubject TakeThetaNum

        Disable SubscribeSubject ExtraSpheresBehind => #18
        Disable SubscribeSubject TubeSpacing => #19
        #18, #19 -> Disable CombineLatest
        -> Disable Multiply
        -> Disable Negate => #22
        ExternalizedMapping(Value(DisplayName=ZoMin)) => #23
        #22, #23 -> FloatProperty(Value=0)
        -> BehaviorSubject ZoMin

        ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
        -> FloatProperty(Value=600)
        -> BehaviorSubject TubeLength

        ExternalizedMapping(Value(DisplayName=RadiusMax, Category=RadiusPosition))
        -> FloatProperty(Value=600)
        -> BehaviorSubject RadiusMax

        ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=RadiusPosition))
        -> FloatProperty(Value=2.71828175)
        -> BehaviorSubject RadiusLogBase

        ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
        -> FloatProperty(Value=3)
        -> BehaviorSubject TubeSpacing => #37
        ExternalizedMapping(Value(DisplayName=ZoScaleK, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject ZoScaleK => #40
        ExternalizedMapping(Value(DisplayName=InvisibleAngle, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject InvisibleAngle
        -> Bonsai.Numerics.DegreeToRadian => #44
        ExternalizedMapping(Value(DisplayName=RadiusMin, Category=RadiusPosition))
        -> FloatProperty(Value=6)
        -> BehaviorSubject RadiusMin => #47
        #47, #44, #37, #40 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
        -> BehaviorSubject SphereNumPerMoment => #50
        Disable ExternalizedMapping(Value(DisplayName=ExtraSpheresFront))
        -> IntProperty(Value=0) => #52
        #52, #50 -> CombineLatest
        -> Add
        -> BehaviorSubject ExtraSpheresFront

        ExternalizedMapping(Value(DisplayName=FadeTime))
        -> FloatProperty(Value=0.3)
        -> BehaviorSubject FadeTime

        ExternalizedMapping(Value(DisplayName=RewardProb, Category=Reward))
        -> FloatProperty(Value=0.6)
        -> BehaviorSubject RewardProb

    ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #7
    Disable ExternalizedMapping(Size, NewSphereTriggerThreshold, RewardDelay(Category=Reward), BackgroundColor, TargetAmb, "SaveFilename NewParams")
    -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #9
        ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold, RewardDelay)
        -> GroupWorkflow ManageSphereParams
            Disable SubscribeSubject RepeatNumber
            -> Disable PropertyMapping(Count) => #1
            Disable GroupWorkflow RadiusRange => #2
                Disable SubscribeSubject DepthCount
                -> IntProperty(Value=5) => #1
                SubscribeSubject RadiusMin => #2
                SubscribeSubject RadiusMax => #3
                SubscribeSubject RadiusLogBase => #4
                #2, #3, #1, #4 -> Zip
                -> Bonsai.Scripting.ExpressionTransform Log => #6
                  Expression:
                    new(
                    Math.Log(Item1,Item4) as Min,
                    Math.Log(Item2,Item4) as Max,
                    Item3 as Count
                    )
                -> MemberSelector(Selector=Min)
                -> PropertyMapping(RangeMin) => #8
                #6 -> MemberSelector(Selector=Max)
                -> PropertyMapping(RangeMax) => #10
                #6 -> MemberSelector(Selector=Count)
                -> PropertyMapping(Count) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.7917595236399573, RangeMax=6.3969298494772167, Count=5) => #13
                #13, #4 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Power
                  Expression: Math.Pow(Item2,Item1)
                -> Bonsai.Numerics.Permutation
                -> WorkflowOutput
            Disable ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold, RewardDelay) => #3
            #2, #3 -> Disable CreateObservable "Theta & Zo Range"
                WorkflowInput Source1
                -> MulticastSubject ThisDepth
                -> MulticastSubject StartTriggerOut

                GroupWorkflow "Total SphereNum PerTube"
                    Disable GroupWorkflow "Same Physical TubeLength"
                        SubscribeSubject ThisDepth => #0
                        SubscribeSubject TubeSpacing => #1
                        SubscribeSubject TubeLength => #2
                        SubscribeSubject ZoScaleK => #3
                        #0, #1, #3 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item2*Item1/Item3
                        -> MulticastSubject ZoSpacing => #6
                        #2, #6 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Math.Round(Item1/Item2)
                        -> BehaviorSubject TakeZoNum
                        -> WorkflowOutput

                    Disable GroupWorkflow "Same Projected TubeLength"
                        SubscribeSubject ThisDepth => #0
                        SubscribeSubject TubeSpacing => #1
                        SubscribeSubject TubeLength => #2
                        SubscribeSubject ThisDepth => #3
                        SubscribeSubject ZoScaleK => #4
                        #2, #3, #4 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform => #6
                          Expression: Item1 * Item2 / Item3
                        SubscribeSubject ZoScaleK => #7
                        #0, #1, #7 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item2*Item1/Item3
                        -> MulticastSubject ZoSpacing => #10
                        #6, #10 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Math.Round(Item1/Item2)
                        -> BehaviorSubject TakeZoNum
                        -> WorkflowOutput

                    GroupWorkflow "Same Physical TubeLength"
                        SubscribeSubject ThisDepth => #0
                        SubscribeSubject TubeSpacing => #1
                        SubscribeSubject ZoScaleK => #2
                        #0, #1, #2 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item2*Item1/Item3
                        -> MulticastSubject ZoSpacing

                        SubscribeSubject TubeLength => #6
                        SubscribeSubject TubeSpacing => #7
                        #6, #7 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Math.Round(Item1/Item2)
                        -> BehaviorSubject TakeZoNum
                        -> WorkflowOutput

                SubscribeSubject TubeLength
                -> BehaviorSubject ZoMax

                SubscribeSubject InterTrialDelay => #6
                BehaviorSubject<System.Double> Depth => #7
                GroupWorkflow ZoRange
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject TakeZoNum => #1
                    SubscribeSubject ZoMin => #2
                    SubscribeSubject ZoSpacing => #3
                    SubscribeSubject SphereNumPerMoment => #4
                    #3, #4 -> Zip
                    -> Multiply => #6
                    #2, #6 -> Zip
                    -> Add
                    -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #9
                    -> PropertyMapping(RangeMin) => #10
                    #9 -> PropertyMapping(RangeMax) => #11
                    #10, #11 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=16.2, RangeMax=16.2, Count=2) => #12
                    SubscribeSubject SphereNumPerMoment => #13
                    #1, #13 -> Zip
                    -> Subtract
                    -> Add(Operand=IntProperty(Value=1)) => #16
                    Disable GroupWorkflow "Same Projected Tube Length"
                        SubscribeSubject TubeLength => #0
                        SubscribeSubject ThisDepth => #1
                        SubscribeSubject ZoScaleK => #2
                        #0, #1, #2 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item1 * Item2 / Item3
                        -> WorkflowOutput
                    -> Disable PropertyMapping(RangeMax) => #18
                    GroupWorkflow "Same Physical Tube Length"
                        SubscribeSubject TubeLength => #0
                        SubscribeSubject ExtraSpheresFront => #1
                        SubscribeSubject ZoSpacing => #2
                        #1, #2 -> Zip
                        -> Multiply => #4
                        #0, #4 -> Zip
                        -> Add
                        -> WorkflowOutput
                    -> PropertyMapping(RangeMax) => #20
                    SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                    -> PropertyMapping(RangeMin) => #22
                    SubscribeSubject ExtraSpheresFront => #23
                    #16, #23 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #26
                    #22, #18, #20, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=16.2, RangeMax=616.2, Count=201) => #27
                    #12, #27 -> Concat
                    -> Skip(Count=1)
                    -> Disable MulticastSubject TrialStartTrigger => #30
                    -> WorkflowOutput
                    #30 -> Max
                    -> AsyncSubject MaxZo
                    #30, #0 -> WithLatestFrom
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMinLim
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                    SubscribeSubject ThetaMaxLim
                    -> PropertyMapping(Lower) => #9
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #11
                    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
                    #7, #12 -> Concat
                    -> Bonsai.Numerics.Permutation => #14
                    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                    #15, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #10
                BooleanProperty(Value=false) => #11
                PublishSubject<System.Boolean> EndTrigger
                -> Buffer(Count=2, Skip=1)
                -> Bonsai.Scripting.ExpressionCondition => #14
                  Expression: ((it[1]==True) && (it[0]==False))
                #14, #11 -> WithLatestFrom
                -> PublishSubject RewardTrigger
                -> MulticastSubject EndTriggerOut => #17
                SubscribeSubject NewSphereTrigger => #18
                #10, #18 -> Zip
                -> Skip(Count=1)
                -> MemberSelector(Selector=Item1) => #21
                GroupWorkflow ZoRange
                    SubscribeSubject ZoMin => #0
                    SubscribeSubject ZoMin => #1
                    SubscribeSubject ZoSpacing => #2
                    SubscribeSubject SphereNumPerMoment
                    -> Subtract(Operand=IntProperty(Value=1)) => #4
                    #2, #4 -> Zip
                    -> Multiply => #6
                    #1, #6 -> Zip
                    -> Add
                    -> PropertyMapping(RangeMax) => #9
                    SubscribeSubject SphereNumPerMoment => #10
                    SubscribeSubject ZoSpacing => #11
                    SubscribeSubject ExtraSpheresBehind => #12
                    #11, #12 -> Zip
                    -> Multiply => #14
                    #0, #14 -> Zip
                    -> Subtract
                    -> PropertyMapping(RangeMin) => #17
                    SubscribeSubject ExtraSpheresBehind => #18
                    #10, #18 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #21
                    #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-4.5, RangeMax=15.3, Count=23) => #22
                    -> MulticastSubject TrialStartTrigger
                    #22 -> ElementIndex
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMinLim
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                    SubscribeSubject ThetaMaxLim
                    -> PropertyMapping(Lower) => #9
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #11
                    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
                    #7, #12 -> Concat
                    -> Bonsai.Numerics.Permutation => #14
                    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                    #15, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #24
                #24, #21 -> Merge => #25
                SubscribeSubject ThisDepth
                -> MulticastSubject Depth => #27
                #27, #7 -> Merge => #28
                #25, #28 -> CombineLatest => #29
                -> MemberSelector(Selector=Item1.Item1)
                -> Bonsai.Numerics.DegreeToRadian => #31
                #29 -> MemberSelector(Selector=Item1.Item2) => #32
                #29 -> MemberSelector(Selector=Item2) => #33
                #31, #32, #33 -> Zip
                -> MulticastSubject SpherePos => #35
                SubscribeSubject FadeTime
                -> Multiply(Operand=FloatProperty(Value=1E+07))
                -> PropertyMapping(DueTime) => #38
                #17, #38 -> Delay(DueTime=PT0.3S)
                -> PublishSubject EndThisTrial => #40
                #35, #40 -> TakeUntil => #41
                SubscribeSubject FadeTime
                -> Multiply(Operand=FloatProperty(Value=1E+07)) => #43
                #6, #43 -> Zip
                -> Subtract
                -> PropertyMapping(DueTime) => #46
                #41, #46 -> Delay(DueTime=PT9.7S)
                -> WorkflowOutput

                ExternalizedMapping(DistanceBehind)
                -> GroupWorkflow EndTrialCondition
                    SubscribeSubject MaxZo => #0
                    ExternalizedMapping(DistanceBehind) => #1
                    SubscribeSubject TrialInitialMouseZ => #2
                    SubscribeSubject ExtraSpheresFront => #3
                    SubscribeSubject ZoSpacing => #4
                    #3, #4 -> Zip
                    -> Multiply => #6
                    #0, #6 -> Zip
                    -> Subtract => #8
                    #8, #2 -> WithLatestFrom
                    -> Add => #10
                    #10, #1 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject MouseZ => #1
                        ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                        #1, #2 -> Subtract(Operand=DoubleProperty(Value=0)) => #3
                        #0, #3 -> CombineLatest
                        -> LessThan
                        -> MulticastSubject EndTrigger
                        -> WorkflowOutput

                    BooleanProperty(Value=true) => #12
                    SubscribeSubject EndThisTrial => #13
                    #13, #12 -> WithLatestFrom
                    -> FloatProperty(Value=-9999)
                    -> MulticastSubject Depth
                    -> BooleanProperty(Value=true)

                GroupWorkflow MouseZs
                    SubscribeSubject GlobalElapsedTime => #0
                    BehaviorSubject<System.Double> TrialStartTrigger => #1
                    #0, #1 -> Sample
                    -> MulticastSubject TrialStartTime => #3
                    SubscribeSubject MouseZ => #4
                    #4, #3 -> Sample
                    -> MulticastSubject TrialInitialMouseZ => #6
                    SubscribeSubject MouseZ => #7
                    #7, #6 -> WithLatestFrom
                    -> Subtract
                    -> BehaviorSubject TrialMouseZ
                    #3 -> Disable BooleanProperty(Value=false)
                    -> Disable BehaviorSubject NewSphereTrigger

                ExternalizedMapping(NewSphereTriggerThreshold)
                -> GroupWorkflow "Generate NewSphereTrigger"
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject MouseZ => #1
                    ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                    -> FloatProperty(Value=0.01) => #3
                    SubscribeSubject MouseZ => #4
                    BehaviorSubject<System.Double> ZoSpacing => #5
                    SubscribeSubject NewSphereTrigger => #6
                    #0, #6 -> Sample => #7
                    #1, #7 -> WithLatestFrom
                    -> Subtract
                    -> Buffer(Count=2, Skip=1) => #10
                    #10, #5, #3 -> CombineLatest
                    -> Bonsai.Scripting.ExpressionCondition
                      Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject NewSphereTrigger
                    -> Disable PublishSubject NewSphereTrigger => #15
                    #4, #15 -> Sample
                    -> WorkflowOutput

                ExternalizedMapping(RewardDelay)
                -> GroupWorkflow "BlankPeriod Reward"
                    BooleanProperty(Value=true) => #0
                    ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                    SubscribeSubject RewardTrigger => #2
                    #2, #0 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #4
                    #4, #1 -> Delay(DueTime=PT2S) => #5
                    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                    -> Bonsai.Numerics.Permutation => #7
                    #7, #5 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject RewardProb
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.60000002384185791))
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Reward
                    -> MulticastSubject RewardLog
                    -> WorkflowOutput
            -> Disable Concat => #5
            #5, #1 -> Disable RepeatCount(Count=50)

            ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
            -> FloatProperty(Value=0.087)
            -> BehaviorSubject OriginalSize
            -> Take(Count=1) => #10
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> PublishSubject ElapsedTime => #14
            BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #15
            #15, #14 -> WithLatestFrom
            -> ElementIndex => #17
            SubscribeSubject MouseZ => #18
            SubscribeSubject NewSphereTrigger => #19
            #18, #19 -> Sample => #20
            BehaviorSubject<System.Double> ThisDepth => #21
            SubscribeSubject TubeSpacing => #22
            SubscribeSubject ZoScaleK => #23
            #21, #22, #23 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform => #25
              Expression: Item2*Item1/Item3
            SubscribeSubject SphereNumPerMoment => #26
            #17, #10, #25, #26 -> CombineLatest => #27
            #27, #20 -> WithLatestFrom
            -> TubeMapping_NewZ
            -> Disable TubeMapping_NewZ_Discrete_Test
            -> BehaviorSubject SphereNewParams

            BehaviorSubject<System.Double> TrialInitialMouseZ
            -> FloatProperty(Value=0)

            BehaviorSubject<System.Double> TrialStartTime
            -> BehaviorSubject TrialStartTimeSub

            Disable SubscribeSubject RepeatNumber
            -> Disable PropertyMapping(Count) => #37
            ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold, RewardDelay) => #38
            Range(Start=0, Count=3) => #39
            #39, #38 -> CreateObservable "Theta & Zo & Radius Range"
                WorkflowInput Source1
                -> MulticastSubject StartTriggerOut

                GroupWorkflow "Total SphereNum PerTube"
                    GroupWorkflow "Same Physical TubeLength"
                        SubscribeSubject TubeLength => #0
                        SubscribeSubject TubeSpacing => #1
                        #0, #1 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Math.Round(Item1/Item2)
                        -> BehaviorSubject TakeZoNum
                        -> WorkflowOutput

                SubscribeSubject TubeLength
                -> BehaviorSubject ZoMax

                SubscribeSubject InterTrialDelay => #5
                BehaviorSubject<System.Double> Depth => #6
                GroupWorkflow ZoRange
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject TakeZoNum => #1
                    SubscribeSubject ZoMin => #2
                    SubscribeSubject SphereNumPerMoment => #3
                    SubscribeSubject SphereNumPerMoment => #4
                    #1, #4 -> Zip
                    -> Subtract
                    -> Add(Operand=IntProperty(Value=1)) => #7
                    Disable GroupWorkflow "Same Projected Tube Length"
                        SubscribeSubject TubeLength => #0
                        SubscribeSubject ThisDepth => #1
                        SubscribeSubject ZoScaleK => #2
                        #0, #1, #2 -> CombineLatest
                        -> Bonsai.Scripting.ExpressionTransform
                          Expression: Item1 * Item2 / Item3
                        -> WorkflowOutput
                    -> Disable PropertyMapping(RangeMax) => #9
                    GroupWorkflow "Same Physical Tube Length"
                        SubscribeSubject TubeLength => #0
                        SubscribeSubject ExtraSpheresFront => #1
                        SubscribeSubject TubeSpacing => #2
                        #1, #2 -> Zip
                        -> Multiply => #4
                        #0, #4 -> Zip
                        -> Add
                        -> WorkflowOutput
                    -> PropertyMapping(RangeMax) => #11
                    SubscribeSubject "NewlyGeneratedSpheres ZoMin"
                    -> PropertyMapping(RangeMin) => #13
                    SubscribeSubject ExtraSpheresFront => #14
                    #7, #14 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #17
                    #13, #9, #11, #17 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=54, RangeMax=654, Count=201) => #18
                    SubscribeSubject TubeSpacing => #19
                    #19, #3 -> Zip
                    -> Multiply => #21
                    #2, #21 -> Zip
                    -> Add
                    -> BehaviorSubject "NewlyGeneratedSpheres ZoMin" => #24
                    -> PropertyMapping(RangeMin) => #25
                    #24 -> PropertyMapping(RangeMax) => #26
                    #25, #26 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=54, RangeMax=54, Count=2) => #27
                    #27, #18 -> Concat
                    -> Skip(Count=1)
                    -> Disable MulticastSubject TrialStartTrigger => #30
                    -> WorkflowOutput
                    #30 -> Max
                    -> AsyncSubject MaxZo
                    #30, #0 -> WithLatestFrom
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMinLim
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                    SubscribeSubject ThetaMaxLim
                    -> PropertyMapping(Lower) => #9
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #11
                    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
                    #7, #12 -> Concat
                    -> Bonsai.Numerics.Permutation => #14
                    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                    GroupWorkflow RadiusRange
                        Disable SubscribeSubject DepthCount
                        -> IntProperty(Value=5) => #1
                        SubscribeSubject RadiusMin => #2
                        SubscribeSubject RadiusMax => #3
                        SubscribeSubject RadiusLogBase => #4
                        #2, #3, #1, #4 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform Log => #6
                          Expression:
                            new(
                            Math.Log(Item1,Item4) as Min,
                            Math.Log(Item2,Item4) as Max,
                            Item3 as Count
                            )
                        -> MemberSelector(Selector=Min)
                        -> PropertyMapping(RangeMin) => #8
                        #6 -> MemberSelector(Selector=Max)
                        -> PropertyMapping(RangeMax) => #10
                        #6 -> MemberSelector(Selector=Count)
                        -> PropertyMapping(Count) => #12
                        #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.7917595236399573, RangeMax=6.3969298494772167, Count=5) => #13
                        #13, #4 -> WithLatestFrom
                        -> Bonsai.Scripting.ExpressionTransform Power
                          Expression: Math.Pow(Item2,Item1)
                        -> WorkflowOutput
                    -> Bonsai.Numerics.VariationWithRepetition(Count=0) => #17
                    #15, #0, #17 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #9
                BooleanProperty(Value=false) => #10
                PublishSubject<System.Boolean> EndTrigger
                -> Buffer(Count=2, Skip=1)
                -> Bonsai.Scripting.ExpressionCondition => #13
                  Expression: ((it[1]==True) && (it[0]==False))
                #13, #10 -> WithLatestFrom
                -> PublishSubject RewardTrigger
                -> MulticastSubject EndTriggerOut => #16
                SubscribeSubject NewSphereTrigger => #17
                #9, #17 -> Zip
                -> Skip(Count=1)
                -> MemberSelector(Selector=Item1) => #20
                GroupWorkflow ZoRange
                    SubscribeSubject ZoMin => #0
                    SubscribeSubject ZoMin => #1
                    SubscribeSubject SphereNumPerMoment
                    -> Subtract(Operand=IntProperty(Value=1)) => #3
                    SubscribeSubject SphereNumPerMoment => #4
                    SubscribeSubject ExtraSpheresBehind => #5
                    SubscribeSubject ExtraSpheresBehind => #6
                    #4, #6 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #9
                    SubscribeSubject TubeSpacing => #10
                    #10, #5 -> Zip
                    -> Multiply => #12
                    #0, #12 -> Zip
                    -> Subtract
                    -> PropertyMapping(RangeMin) => #15
                    SubscribeSubject TubeSpacing => #16
                    #16, #3 -> Zip
                    -> Multiply => #18
                    #1, #18 -> Zip
                    -> Add
                    -> PropertyMapping(RangeMax) => #21
                    #15, #21, #9 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-15, RangeMax=51, Count=23) => #22
                    -> MulticastSubject TrialStartTrigger
                    #22 -> ElementIndex
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMinLim
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=40) => #7
                    SubscribeSubject ThetaMaxLim
                    -> PropertyMapping(Lower) => #9
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #11
                    #9, #11 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=130, Upper=220) => #12
                    #7, #12 -> Concat
                    -> Bonsai.Numerics.Permutation => #14
                    #14, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #15
                    GroupWorkflow RadiusRange
                        Disable SubscribeSubject DepthCount
                        -> IntProperty(Value=5) => #1
                        SubscribeSubject RadiusMin => #2
                        SubscribeSubject RadiusMax => #3
                        SubscribeSubject RadiusLogBase => #4
                        #2, #3, #1, #4 -> Zip
                        -> Bonsai.Scripting.ExpressionTransform Log => #6
                          Expression:
                            new(
                            Math.Log(Item1,Item4) as Min,
                            Math.Log(Item2,Item4) as Max,
                            Item3 as Count
                            )
                        -> MemberSelector(Selector=Min)
                        -> PropertyMapping(RangeMin) => #8
                        #6 -> MemberSelector(Selector=Max)
                        -> PropertyMapping(RangeMax) => #10
                        #6 -> MemberSelector(Selector=Count)
                        -> PropertyMapping(Count) => #12
                        #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.7917595236399573, RangeMax=6.3969298494772167, Count=5) => #13
                        #13, #4 -> WithLatestFrom
                        -> Bonsai.Scripting.ExpressionTransform Power
                          Expression: Math.Pow(Item2,Item1)
                        -> WorkflowOutput
                    -> Bonsai.Numerics.VariationWithRepetition(Count=0) => #17
                    #15, #0, #17 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #23
                #23, #20 -> Merge => #24
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Numerics.DegreeToRadian => #26
                #24 -> MemberSelector(Selector=Item2) => #27
                #24 -> MemberSelector(Selector=Item3)
                -> MulticastSubject Depth => #29
                #29, #6 -> Merge => #30
                #26, #27, #30 -> Zip
                -> MulticastSubject SpherePos => #32
                SubscribeSubject FadeTime
                -> Multiply(Operand=FloatProperty(Value=1E+07))
                -> PropertyMapping(DueTime) => #35
                #16, #35 -> Delay(DueTime=PT0.3S)
                -> PublishSubject EndThisTrial => #37
                #32, #37 -> TakeUntil => #38
                SubscribeSubject FadeTime
                -> Multiply(Operand=FloatProperty(Value=1E+07)) => #40
                #5, #40 -> Zip
                -> Subtract
                -> PropertyMapping(DueTime) => #43
                #38, #43 -> Delay(DueTime=PT9.7S)
                -> WorkflowOutput

                ExternalizedMapping(DistanceBehind)
                -> GroupWorkflow EndTrialCondition
                    SubscribeSubject ZoMax => #0
                    ExternalizedMapping(DistanceBehind) => #1
                    SubscribeSubject TrialInitialMouseZ => #2
                    SubscribeSubject ExtraSpheresFront => #3
                    SubscribeSubject TubeSpacing => #4
                    #3, #4 -> Zip
                    -> Multiply => #6
                    #0, #6 -> Zip
                    -> Subtract => #8
                    #8, #2 -> CombineLatest
                    -> Add => #10
                    #10, #1 -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject MouseZ => #1
                        ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                        #1, #2 -> Subtract(Operand=DoubleProperty(Value=0)) => #3
                        #0, #3 -> CombineLatest
                        -> LessThan
                        -> MulticastSubject EndTrigger
                        -> WorkflowOutput

                    BooleanProperty(Value=true) => #12
                    SubscribeSubject EndThisTrial => #13
                    #13, #12 -> WithLatestFrom
                    -> FloatProperty(Value=-9999)
                    -> MulticastSubject Depth
                    -> BooleanProperty(Value=true)

                GroupWorkflow MouseZs
                    SubscribeSubject GlobalElapsedTime => #0
                    BehaviorSubject<System.Double> TrialStartTrigger => #1
                    #0, #1 -> Sample
                    -> MulticastSubject TrialStartTime => #3
                    SubscribeSubject MouseZ => #4
                    #4, #3 -> Sample
                    -> MulticastSubject TrialInitialMouseZ => #6
                    SubscribeSubject MouseZ => #7
                    #7, #6 -> WithLatestFrom
                    -> Subtract
                    -> BehaviorSubject TrialMouseZ
                    #3 -> Disable BooleanProperty(Value=false)
                    -> Disable BehaviorSubject NewSphereTrigger

                ExternalizedMapping(NewSphereTriggerThreshold)
                -> GroupWorkflow "Generate NewSphereTrigger"
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject MouseZ => #1
                    ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                    -> FloatProperty(Value=0.01) => #3
                    SubscribeSubject MouseZ => #4
                    SubscribeSubject NewSphereTrigger => #5
                    #0, #5 -> Sample => #6
                    #1, #6 -> WithLatestFrom
                    -> Subtract
                    -> Buffer(Count=2, Skip=1) => #9
                    SubscribeSubject TubeSpacing => #10
                    #9, #10, #3 -> CombineLatest
                    -> Bonsai.Scripting.ExpressionCondition
                      Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject NewSphereTrigger
                    -> Disable PublishSubject NewSphereTrigger => #15
                    #4, #15 -> Sample
                    -> WorkflowOutput

                ExternalizedMapping(RewardDelay)
                -> GroupWorkflow "BlankPeriod Reward"
                    BooleanProperty(Value=true) => #0
                    ExternalizedMapping(DueTime(DisplayName=RewardDelay)) => #1
                    SubscribeSubject RewardTrigger => #2
                    #2, #0 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #4
                    #4, #1 -> Delay(DueTime=PT2S) => #5
                    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=1, Count=1000)
                    -> Bonsai.Numerics.Permutation => #7
                    #7, #5 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> Condition
                        WorkflowInput Source1 => #0
                        SubscribeSubject RewardProb
                        -> PropertyMapping(Value) => #2
                        #0, #2 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.60000002384185791))
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject Reward
                    -> MulticastSubject RewardLog
                    -> WorkflowOutput
            -> Concat => #41
            #41, #37 -> Disable RepeatCount(Count=50)

        SubscribeSubject SphereNumPerMoment => #2
        ExternalizedMapping(BackgroundColor, TargetAmb) => #3
        SubscribeSubject ExtraSpheresBehind => #4
        #2, #4 -> Zip
        -> Add
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=23) => #8
        #8, #3 -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> AsyncSubject SphereIndex

            SubscribeSubject Draw => #2
            SubscribeSubject SphereNewParams
            -> Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment => #3
                SubscribeSubject ExtraSpheresBehind => #4
                #3, #4 -> Zip
                -> Add
                -> PropertyMapping(Value) => #7
                #1, #7 -> Mod(Operand=IntProperty(Value=23)) => #8
                #8, #2 -> WithLatestFrom => #9
                #0 -> MemberSelector(Selector=Item3.Item3) => #10
                #9, #10 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> MulticastSubject LogSphereParams
            -> PublishSubject NewSphereTime => #6
            ExternalizedMapping(Value(DisplayName=TargetAmb))
            -> FloatProperty(Value=0) => #8
            ExternalizedMapping(Value(DisplayName=BackgroundColor))
            -> FloatProperty(Value=0.5) => #10
            Disable SubscribeSubject SphereNewParams
            -> Disable Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Value) => #4
                #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                #5, #2 -> WithLatestFrom => #6
                #0 -> MemberSelector(Selector=Item3.Item3) => #7
                #6, #7 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> Disable MemberSelector(Selector=Item2) => #13
            Disable SubscribeSubject ElapsedTime => #14
            #14, #13 -> Disable WithLatestFrom
            -> Disable Subtract => #16
            SubscribeSubject GlobalElapsedTime => #17
            SubscribeSubject GlobalElapsedTime => #18
            SubscribeSubject NewSphereTime => #19
            #18, #19 -> Sample => #20
            #17, #20 -> CombineLatest
            -> Subtract => #22
            SubscribeSubject GlobalElapsedTime => #23
            SubscribeSubject GlobalElapsedTime => #24
            SubscribeSubject StartTriggerIn => #25
            #24, #25 -> Sample => #26
            IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #27
            #26, #27 -> Merge => #28
            #23, #28 -> CombineLatest
            -> Subtract => #30
            SubscribeSubject GlobalElapsedTime => #31
            SubscribeSubject EndTriggerIn => #32
            #31, #32 -> Sample => #33
            SubscribeSubject GlobalElapsedTime => #34
            SubscribeSubject StartTriggerIn => #35
            #34, #35 -> Sample => #36
            IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=0, Count=2) => #37
            #36, #37 -> Merge => #38
            IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=99999999, RangeMax=99999999, Count=2) => #39
            #33, #39 -> Merge => #40
            #40, #38 -> CombineLatest
            -> Subtract => #42
            SubscribeSubject FadeTime
            -> FloatProperty(Value=0.3) => #44
            #16, #22, #44, #8, #10, #30, #42 -> CombineLatest
            -> CreateFadingInOut
            -> Disable CreateFadingIn
            -> Disable CreateFadingNew => #48
            #6, #48 -> CombineLatest => #49
            #2, #49 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item1.Item1 as SphereID,
                Item2.Item2 as Ambient,
                Item2.Item1.Item3.Item1 as Azimuth,
                Item2.Item1.Item3.Item2 as Elevation,
                Item2.Item1.Item3.Item3 as Depth,
                Item2.Item1.Item4.Item1 as X,
                Item2.Item1.Item4.Item2 as Y,
                Item2.Item1.Item4.Item3 as Z0,
                Item2.Item1.Item4.Item4 as Z,
                Item2.Item1.Item4.Item5 as MouseZ,
                Item2.Item1.Item5.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              TranslationX(Selector=X)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-16.1051331
              TranslationY=10.0809078
              TranslationZ=3450.6167
              ScaleX=1.653
              ScaleY=1.653
              ScaleZ=1.653
              MeshName=sphere
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            -> WorkflowOutput
        -> Merge

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            SubscribeSubject Frames => #0
            SubscribeSubject StartTrigger => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #3
            SubscribeSubject SaveGeneralPrefix => #4
            SubscribeSubject SaveDate => #5
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams"))
            -> StringProperty(Value=NewParams) => #7
            SubscribeSubject Metadata => #8
            SubscribeSubject WhichExp => #9
            SubscribeSubject SaveTimestamp => #10
            #4, #5, #10, #9, #7, #8 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #13
            BehaviorSubject<System.Tuple(System.Int32,System.Single,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> LogSphereParams => #14
            -> Disable MemberSelector(Selector=Item3.Item2) => #15
            Disable SubscribeSubject NewSphereTrigger => #16
            #16, #15 -> Disable CombineLatest
            -> Disable IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #18
            Disable SubscribeSubject SaveGeneralPrefix => #19
            Disable SubscribeSubject SaveDate => #20
            Disable StringProperty(Value=NewSphereTrigger) => #21
            Disable SubscribeSubject Metadata => #22
            Disable SubscribeSubject WhichExp => #23
            Disable SubscribeSubject SaveTimestamp => #24
            #19, #20, #24, #23, #21, #22 -> Disable Zip
            -> Disable Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> Disable PropertyMapping(FileName) => #27
            #18, #27 -> Disable Bonsai.IO.CsvWriter
              FileName=D:\data\Test\S20211007\R203254_SpheresPermTube\Test_S20211007_R203254_SpheresPermTube_NewSphereTrigger.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            SubscribeSubject MouseZ => #29
            #3, #29 -> CombineLatest => #30
            #14, #30 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #33
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Item1.Index as Frame,
                Value.Item1.Item1 as SphereID,
                Value.Item1.Item2 as StartTime,
                Math.Round(Value.Item1.Item3.Item1/Math.PI*180) as Theta,
                Value.Item1.Item3.Item2 as Zo,
                Value.Item1.Item3.Item3 as Depth,
                Value.Item1.Item4.Item1 as X,
                Value.Item1.Item4.Item2 as Y,
                Value.Item1.Item4.Item3 as Z0,
                Value.Item1.Item4.Item4 as Z,
                Value.Item2.Item2 as MouseZ,
                Value.Item1.Item5.Item1 as OriginalSize,
                Value.Item1.Item5.Item2 as Size)
            #33, #13 -> Bonsai.IO.CsvWriter => #34
              FileName=D:\data\Test\S20220407\R145145_SpheresPermTubeReward\Test_S20220407_R145145_SpheresPermTubeReward_NewParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #35
            #34 -> Disable MemberSelector(Selector=Azimuth) => #36
            #34 -> Disable MemberSelector(Selector=Elevation) => #37
            #34 -> Disable MemberSelector(Selector=Depth) => #38
            #34 -> Disable MemberSelector(Selector=Frame) => #39
            #35, #36, #37, #38, #39 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

        BehaviorSubject<System.Tuple(System.Collections.Generic.IList(System.Boolean),System.Boolean)> EndTriggerOut
        -> PublishSubject EndTriggerIn
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> Add(Operand=IntProperty(Value=1))
        -> PublishSubject TrialCount

        BehaviorSubject<System.Double> StartTriggerOut
        -> PublishSubject StartTriggerIn

        GroupWorkflow RewardLog
            BehaviorSubject<System.Boolean> RewardLog
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression:
                new(
                Timestamp as HarpTime,
                Value as Reward)
            SubscribeSubject SaveGeneralPrefix => #3
            SubscribeSubject SaveDate => #4
            ExternalizedMapping(Value(DisplayName="SaveFilename Reward"))
            -> StringProperty(Value=RewardLog) => #6
            SubscribeSubject Metadata => #7
            SubscribeSubject WhichExp => #8
            SubscribeSubject SaveTimestamp => #9
            #3, #4, #9, #8, #6, #7 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #12
            #2, #12 -> Bonsai.IO.CsvWriter
              FileName=D:\data\Test\S20220407\R145145_SpheresPermTubeReward\Test_S20220407_R145145_SpheresPermTubeReward_RewardLog.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> WorkflowOutput
    #9, #7 -> DelaySubscription(DueTime=PT2S)

    SubscribeSubject TrialCount => #11
    SubscribeSubject DepthCount
    -> PropertyMapping(Value) => #13
    #11, #13 -> Divide(Operand=IntProperty(Value=5))
    -> MulticastSubject TrialNo
#72, #63 -> TakeUntil
Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift Control Alt", SuppressRepetitions=false)
-> SelectMany RewardRunning => #75
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger

    SubscribeSubject MouseZ => #2
    SubscribeSubject MouseZ => #3
    ExternalizedMapping(Value(DisplayName=NewRewardTriggerThreshold))
    -> FloatProperty(Value=0.01) => #5
    SubscribeSubject MouseZ => #6
    BooleanProperty(Value=true) => #7
    ExternalizedMapping(Value(DisplayName=RewardDistance))
    -> IntProperty(Value=10) => #9
    SubscribeSubject Reward => #10
    #2, #10 -> Sample => #11
    #3, #11 -> WithLatestFrom
    -> Subtract
    -> BehaviorSubject TrialMouseZ
    -> Buffer(Count=2, Skip=1) => #15
    #15, #9, #5 -> CombineLatest
    -> Bonsai.Scripting.ExpressionCondition
      Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[1]>item1[0])
    -> BooleanProperty(Value=false)
    -> PublishSubject NewSphereTrigger => #19
    #6, #19 -> Sample => #20
    #20, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject Reward
    -> WorkflowOutput

    Disable ExternalizedMapping
      ThetaMin
      ThetaMax
      TakeThetaNum
      ZoMin
      RadiusMax
      RadiusMin
      RadiusLogBase
      ZoScaleK
      TubeLenth
      TubeSpacing
      InvisibleAngle
      ExtraSpheresBehind(Category=ZoPosition)
    -> Disable GroupWorkflow ParamSettings
        ExternalizedMapping(Value(DisplayName=ThetaMin, Category=ThetaPosition))
        -> FloatProperty(Value=-40)
        -> BehaviorSubject ThetaMin

        ExternalizedMapping(Value(DisplayName=ThetaMax, Category=ThetaPosition))
        -> FloatProperty(Value=220)
        -> BehaviorSubject ThetaMax

        ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
        -> IntProperty(Value=1)
        -> BehaviorSubject TakeThetaNum

        ExternalizedMapping(Value(DisplayName=ZoMin, Category=ZoPosition))
        -> FloatProperty(Value=0)
        -> BehaviorSubject ZoMin

        ExternalizedMapping(Value(DisplayName=TubeLenth, Category=ZoPosition))
        -> FloatProperty(Value=1000)
        -> BehaviorSubject TubeLength

        ExternalizedMapping(Value(DisplayName=RadiusMax, Category=RadiusPosition))
        -> FloatProperty(Value=200)
        -> BehaviorSubject RadiusMax

        ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=RadiusPosition))
        -> FloatProperty(Value=2)
        -> BehaviorSubject RadiusLogBase

        ExternalizedMapping(Value(DisplayName=TubeSpacing, Category=ZoPosition))
        -> FloatProperty(Value=5)
        -> BehaviorSubject TubeSpacing => #23
        ExternalizedMapping(Value(DisplayName=ZoScaleK, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject ZoScaleK => #26
        ExternalizedMapping(Value(DisplayName=InvisibleAngle, Category=ZoPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject InvisibleAngle
        -> Bonsai.Numerics.DegreeToRadian => #30
        ExternalizedMapping(Value(DisplayName=RadiusMin, Category=RadiusPosition))
        -> FloatProperty(Value=20)
        -> BehaviorSubject RadiusMin => #33
        #33, #30, #23, #26 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Math.Floor(Item1/Math.Tan(Item2)/(Item3*Item1/item4))
        -> BehaviorSubject SphereNumPerMoment

        ExternalizedMapping(Value(DisplayName=ExtraSpheresBehind))
        -> IntProperty(Value=10)
        -> BehaviorSubject ExtraSpheresBehind

    Disable ExternalizedMapping
      Size(Category=SphereSettings)
      "SaveFilename NewParams"
      BackgroundColor(Category=SphereSettings)
      TargetAmb(Category=SphereSettings)
      DistanceBehind(Category=TrialConditions)
      FadeInTime(Category=SphereSettings)
      NewSphereTriggerThreshold(Category=ZoPosition)
    -> Disable GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #28
        ExternalizedMapping(Size, DistanceBehind(Category=TrialCondition), NewSphereTriggerThreshold)
        -> GroupWorkflow ManageSphereParams
            SubscribeSubject RepeatNumber
            -> PropertyMapping(Count) => #1
            GroupWorkflow RadiusRange => #2
                SubscribeSubject DepthCount
                -> IntProperty(Value=3) => #1
                SubscribeSubject RadiusMin => #2
                SubscribeSubject RadiusMax => #3
                SubscribeSubject RadiusLogBase => #4
                #2, #3, #1, #4 -> Zip
                -> Bonsai.Scripting.ExpressionTransform Log => #6
                  Expression:
                    new(
                    Math.Log(Item1,Item4) as Min,
                    Math.Log(Item2,Item4) as Max,
                    Item3 as Count
                    )
                -> MemberSelector(Selector=Min)
                -> PropertyMapping(RangeMin) => #8
                #6 -> MemberSelector(Selector=Max)
                -> PropertyMapping(RangeMax) => #10
                #6 -> MemberSelector(Selector=Count)
                -> PropertyMapping(Count) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=4.3219280948873626, RangeMax=7.6438561897747244, Count=3) => #13
                #13, #4 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Power
                  Expression: Math.Pow(Item2,Item1)
                -> Disable Bonsai.Numerics.Permutation
                -> WorkflowOutput
            ExternalizedMapping(DistanceBehind, NewSphereTriggerThreshold) => #3
            #2, #3 -> CreateObservable "Theta & Zo Range"
                WorkflowInput Source1
                -> BehaviorSubject ThisDepth

                SubscribeSubject ThisDepth => #2
                SubscribeSubject TubeSpacing => #3
                SubscribeSubject RadiusMin => #4
                #2, #3, #4 -> CombineLatest
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: Item2*Item1/Item3
                -> MulticastSubject ZoSpacing => #7
                SubscribeSubject TubeLength => #8
                #8, #7 -> Zip
                -> Bonsai.Scripting.ExpressionTransform
                  Expression: Math.Round(Item1/Item2)
                -> BehaviorSubject TakeZoNum

                SubscribeSubject TubeLength
                -> BehaviorSubject ZoMax

                SubscribeSubject InterTrialDelay
                -> PropertyMapping(DueTime) => #15
                BehaviorSubject<System.Double> Depth => #16
                GroupWorkflow ZoRange
                    SubscribeSubject MouseZ => #0
                    SubscribeSubject TakeZoNum => #1
                    SubscribeSubject ZoMin => #2
                    SubscribeSubject ZoSpacing => #3
                    SubscribeSubject SphereNumPerMoment => #4
                    #3, #4 -> Zip
                    -> Multiply => #6
                    #2, #6 -> Zip
                    -> Add
                    -> PropertyMapping(RangeMin) => #9
                    SubscribeSubject SphereNumPerMoment => #10
                    #1, #10 -> Zip
                    -> Subtract
                    -> Add(Operand=IntProperty(Value=1))
                    -> PropertyMapping(Count) => #14
                    SubscribeSubject TubeLength
                    -> PropertyMapping(RangeMax) => #16
                    #9, #16, #14 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=50.000000000000007, RangeMax=1000, Count=191)
                    -> Disable MulticastSubject TrialStartTrigger => #18
                    -> WorkflowOutput
                    #18 -> Max
                    -> AsyncSubject MaxZo
                    #18, #0 -> WithLatestFrom
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=220)
                    -> Bonsai.Numerics.Permutation => #8
                    #8, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #9
                    #9, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #19
                BooleanProperty(Value=false) => #20
                PublishSubject<System.Boolean> EndTrigger
                -> Bonsai.Scripting.ExpressionCondition => #22
                  Expression: (it==True)
                #22, #20 -> WithLatestFrom
                -> PublishSubject EndThisTrial => #24
                SubscribeSubject NewSphereTrigger => #25
                #19, #25 -> Zip
                -> MemberSelector(Selector=Item1) => #27
                GroupWorkflow ZoRange
                    SubscribeSubject ZoMin => #0
                    SubscribeSubject ZoMin => #1
                    SubscribeSubject ZoSpacing => #2
                    SubscribeSubject SphereNumPerMoment
                    -> Subtract(Operand=IntProperty(Value=1)) => #4
                    #2, #4 -> Zip
                    -> Multiply => #6
                    #1, #6 -> Zip
                    -> Add
                    -> PropertyMapping(RangeMax) => #9
                    SubscribeSubject SphereNumPerMoment => #10
                    SubscribeSubject ZoSpacing => #11
                    SubscribeSubject ExtraSpheresBehind => #12
                    #11, #12 -> Zip
                    -> Multiply => #14
                    #0, #14 -> Zip
                    -> Subtract
                    -> PropertyMapping(RangeMin) => #17
                    SubscribeSubject ExtraSpheresBehind => #18
                    #10, #18 -> Zip
                    -> Add
                    -> PropertyMapping(Count) => #21
                    #17, #9, #21 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-50.000000000000007, RangeMax=45.000000000000007, Count=20)
                    -> MulticastSubject TrialStartTrigger
                    -> WorkflowOutput
                -> CreateObservable ThetaRange
                    WorkflowInput Source1 => #0
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #2
                    SubscribeSubject ThetaMin
                    -> PropertyMapping(Lower) => #4
                    SubscribeSubject ThetaMax
                    -> PropertyMapping(Upper) => #6
                    #4, #6 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-40, Upper=220)
                    -> Bonsai.Numerics.Permutation => #8
                    #8, #2 -> Bonsai.Numerics.Distributions.SampleMany(Count=1) => #9
                    #9, #0 -> CombineLatest
                    -> WorkflowOutput
                -> Concat => #30
                #30, #27 -> Merge => #31
                SubscribeSubject ThisDepth
                -> MulticastSubject Depth => #33
                #33, #16 -> Merge => #34
                #31, #34 -> CombineLatest => #35
                -> MemberSelector(Selector=Item1.Item1)
                -> Bonsai.Numerics.DegreeToRadian => #37
                #35 -> MemberSelector(Selector=Item1.Item2) => #38
                #35 -> MemberSelector(Selector=Item2) => #39
                #37, #38, #39 -> Zip
                -> MulticastSubject SpherePos => #41
                #41, #24 -> TakeUntil => #42
                #42, #15 -> Delay(DueTime=PT10S)
                -> WorkflowOutput

                SubscribeSubject MaxZo => #45
                ExternalizedMapping(DistanceBehind) => #46
                SubscribeSubject TrialInitialMouseZ => #47
                #45, #47 -> WithLatestFrom
                -> Add => #49
                #49, #46 -> Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject MouseZ => #1
                    ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                    #1, #2 -> Subtract(Operand=DoubleProperty(Value=20)) => #3
                    #0, #3 -> CombineLatest
                    -> LessThan
                    -> MulticastSubject EndTrigger
                    -> WorkflowOutput

                BooleanProperty(Value=true) => #51
                SubscribeSubject EndThisTrial => #52
                #52, #51 -> WithLatestFrom
                -> FloatProperty(Value=-9999)
                -> MulticastSubject Depth
                -> BooleanProperty(Value=true)

                SubscribeSubject GlobalElapsedTime => #57
                BehaviorSubject<System.Double> TrialStartTrigger => #58
                #57, #58 -> Sample
                -> MulticastSubject TrialStartTime => #60
                SubscribeSubject MouseZ => #61
                #61, #60 -> Sample
                -> MulticastSubject TrialInitialMouseZ => #63
                SubscribeSubject MouseZ => #64
                #64, #63 -> WithLatestFrom
                -> Subtract
                -> BehaviorSubject TrialMouseZ
                -> Buffer(Count=2, Skip=1) => #68
                ExternalizedMapping(Value(DisplayName=NewSphereTriggerThreshold))
                -> FloatProperty(Value=0.01) => #70
                SubscribeSubject MouseZ => #71
                BehaviorSubject<System.Double> ZoSpacing => #72
                #68, #72, #70 -> CombineLatest
                -> Bonsai.Scripting.ExpressionCondition
                  Expression: (Item1[1]>=(Item2-Item3))&&(Item1[1]>(Math.Floor(Item1[1]/Item2)*Item2+Item3))&&(Item1[0]<(Math.Floor(Item1[1]/Item2)*Item2+Item3))
                -> BooleanProperty(Value=false)
                -> PublishSubject NewSphereTrigger => #76
                #71, #76 -> Sample
            -> Concat => #5
            #5, #1 -> RepeatCount(Count=50)

            ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
            -> FloatProperty(Value=0.087)
            -> BehaviorSubject OriginalSize
            -> Take(Count=1) => #10
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> PublishSubject ElapsedTime => #14
            BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #15
            #15, #14 -> WithLatestFrom
            -> ElementIndex => #17
            #17, #10 -> CombineLatest => #18
            BehaviorSubject<System.Double> TrialInitialMouseZ => #19
            #18, #19 -> WithLatestFrom
            -> TubeMapping
            -> Disable SphericalCoordinates_SP
            -> BehaviorSubject SphereNewParams

            BehaviorSubject<System.Double> TrialStartTime
            -> BehaviorSubject TrialStartTimeSub

        SubscribeSubject SphereNumPerMoment => #2
        ExternalizedMapping(BackgroundColor, TargetAmb, FadeInTime) => #3
        SubscribeSubject ExtraSpheresBehind => #4
        #2, #4 -> Zip
        -> Add
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=20) => #8
        #8, #3 -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> AsyncSubject SphereIndex

            SubscribeSubject Draw => #2
            SubscribeSubject SphereNewParams
            -> Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment => #3
                SubscribeSubject ExtraSpheresBehind => #4
                #3, #4 -> Zip
                -> Add
                -> PropertyMapping(Value) => #7
                #1, #7 -> Mod(Operand=IntProperty(Value=20)) => #8
                #8, #2 -> WithLatestFrom => #9
                #0 -> MemberSelector(Selector=Item3.Item3) => #10
                #9, #10 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> MulticastSubject LogSphereParams => #5
            ExternalizedMapping(Value(DisplayName=TargetAmb))
            -> FloatProperty(Value=0) => #7
            ExternalizedMapping(Value(DisplayName=BackgroundColor))
            -> FloatProperty(Value=0.5) => #9
            ExternalizedMapping(Value(DisplayName=FadeInTime))
            -> FloatProperty(Value=0.5) => #11
            Disable SubscribeSubject SphereNewParams
            -> Disable Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Value) => #4
                #1, #4 -> Mod(Operand=IntProperty(Value=30)) => #5
                #5, #2 -> WithLatestFrom => #6
                #0 -> MemberSelector(Selector=Item3.Item3) => #7
                #6, #7 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> Disable MemberSelector(Selector=Item2) => #14
            Disable SubscribeSubject ElapsedTime => #15
            #15, #14 -> Disable WithLatestFrom
            -> Disable Subtract => #17
            SubscribeSubject GlobalElapsedTime => #18
            SubscribeSubject TrialStartTimeSub => #19
            #18, #19 -> CombineLatest
            -> Subtract => #21
            #17, #21, #11, #7, #9 -> CombineLatest
            -> CreateFadingIn
            -> Disable CreateFadingNew => #24
            #5, #24 -> CombineLatest => #25
            #2, #25 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item1.Item1 as SphereID,
                Item2.Item2 as Ambient,
                Item2.Item1.Item3.Item1 as Azimuth,
                Item2.Item1.Item3.Item2 as Elevation,
                Item2.Item1.Item3.Item3 as Depth,
                Item2.Item1.Item4.Item1 as X,
                Item2.Item1.Item4.Item2 as Y,
                Item2.Item1.Item4.Item3 as Z0,
                Item2.Item1.Item4.Item4 as Z,
                Item2.Item1.Item4.Item5 as MouseZ,
                Item2.Item1.Item5.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              TranslationX(Selector=X)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=19.9870224
              TranslationY=-0.720345438
              TranslationZ=345
              ScaleX=1.74
              ScaleY=1.74
              ScaleZ=1.74
              MeshName=sphere
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            -> WorkflowOutput
        -> Merge

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            SubscribeSubject Frames => #0
            SubscribeSubject StartTrigger => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #3
            SubscribeSubject SaveGeneralPrefix => #4
            SubscribeSubject SaveDate => #5
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams"))
            -> StringProperty(Value=NewParams) => #7
            SubscribeSubject Metadata => #8
            SubscribeSubject WhichExp => #9
            SubscribeSubject SaveTimestamp => #10
            #4, #5, #10, #9, #7, #8 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #13
            BehaviorSubject<System.Tuple(System.Int32,System.Single,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> LogSphereParams => #14
            #14, #3 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #17
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Index as Frame,
                Value.Item1.Item1 as SphereID,
                Value.Item1.Item2 as StartTime,
                Math.Round(Value.Item1.Item3.Item1/Math.PI*180) as Theta,
                Value.Item1.Item3.Item2 as Zo,
                Value.Item1.Item3.Item3 as Depth,
                Value.Item1.Item4.Item1 as X,
                Value.Item1.Item4.Item2 as Y,
                Value.Item1.Item4.Item3 as Z0,
                Value.Item1.Item4.Item4 as Z,
                Value.Item1.Item4.Item5 as MouseZ,
                Value.Item1.Item5.Item1 as OriginalSize,
                Value.Item1.Item5.Item2 as Size)
            #17, #13 -> Bonsai.IO.CsvWriter => #18
              FileName=D:\data\Test\S20211008\R150052_SpheresPermTube\Test_S20211008_R150052_SpheresPermTube_NewParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #19
            #18 -> Disable MemberSelector(Selector=Azimuth) => #20
            #18 -> Disable MemberSelector(Selector=Elevation) => #21
            #18 -> Disable MemberSelector(Selector=Depth) => #22
            #18 -> Disable MemberSelector(Selector=Frame) => #23
            #19, #20, #21, #22, #23 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)
            #14 -> Disable MemberSelector(Selector=Item3.Item2) => #27
            Disable SubscribeSubject NewSphereTrigger => #28
            #28, #27 -> Disable CombineLatest
            -> Disable IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #30
            Disable SubscribeSubject SaveGeneralPrefix => #31
            Disable SubscribeSubject SaveDate => #32
            Disable StringProperty(Value=NewSphereTrigger) => #33
            Disable SubscribeSubject Metadata => #34
            Disable SubscribeSubject WhichExp => #35
            Disable SubscribeSubject SaveTimestamp => #36
            #31, #32, #36, #35, #33, #34 -> Disable Zip
            -> Disable Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> Disable PropertyMapping(FileName) => #39
            #30, #39 -> Disable Bonsai.IO.CsvWriter
              FileName=D:\data\Test\S20211007\R203254_SpheresPermTube\Test_S20211007_R203254_SpheresPermTube_NewSphereTrigger.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
    Disable ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #29
    #28, #29 -> Disable DelaySubscription(DueTime=PT10S)
#75, #62 -> TakeUntil
