WorkflowBuilder(Version=2.6.2)
Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)
Bonsai.Osc.CreateUdpClient(Name=UdpSend_beh, Port=2324, RemoteHostName=10.0.250.44, RemotePort=2324)

MetadataSource(ExpInfo(Animal=Test, RootDirectory=D:\data), Animal=Test, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

ExternalizedMapping
  InitialDelayReplay(Category="Exp Timings")
  TrialDuration(DisplayName=TrialDuration, Description="Duration of 1 depth", Category="Exp Timings")
  InterTrialDelay(Category="Exp Timings")
  RepeatNumber(DisplayName=RepeatNumber, Description="Number of repeating all depth values", Category="Exp Timings")
  DepthCount(Category="Exp Timings")
-> GroupWorkflow BasicSettings
    ExternalizedMapping(InitialDelayReplay, TrialDuration, InterTrialDelay, RepeatNumber, DepthCount)
    -> GroupWorkflow ExpTimings
        ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
        -> FloatProperty(Value=30)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InitialDelayReplay => #3
        ExternalizedMapping(Value(DisplayName=TrialDuration, Description="Duration of 1 trial (1 fixed depth)", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject TrialDuration => #7
        ExternalizedMapping(Value(DisplayName=RepeatNumber, Description="Number of repeat of all the depth values", Category=Timings))
        -> IntProperty(Value=50)
        -> BehaviorSubject RepeatNumber => #10
        ExternalizedMapping(Value(DisplayName=InterTrialDelay, Description="Interval between 2 trials", Category=Timings))
        -> FloatProperty(Value=10)
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> BehaviorSubject InterTrialDelay => #14
        #7, #14 -> Zip
        -> Add => #16
        ExternalizedMapping(Value(DisplayName=DepthCount))
        -> IntProperty(Value=3)
        -> BehaviorSubject DepthCount => #19
        #10, #19 -> Zip
        -> Multiply => #21
        #16, #21 -> Zip
        -> Multiply
        -> BehaviorSubject CloseLoopDuration => #24
        #24, #3 -> Zip
        -> Add
        -> BehaviorSubject OpenLoopStartTime
        -> WorkflowOutput

    ExternalizedMapping(WhichExp)
    -> GroupWorkflow ChooseExperiment
        ExternalizedMapping(Value(DisplayName=WhichExp))
        -> StringProperty(Value=SpheresPermTube)
        -> Take(Count=1)
        -> AsyncSubject WhichExp

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp

        SubscribeSubject SaveTimestamp => #9
        SubscribeSubject SaveDate => #10
        SubscribeSubject Metadata => #11
        SubscribeSubject WhichExp => #12
        #11, #10, #9, #12 -> Zip
        -> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend_beh, Address=/beh_fname)

GroupWorkflow SetHarpSavePath
    SubscribeSubject SaveTimestamp => #0
    SubscribeSubject SaveGeneralPrefix => #1
    SubscribeSubject SaveDate => #2
    SubscribeSubject Metadata => #3
    SubscribeSubject WhichExp => #4
    ExternalizedMapping(Value(DisplayName=HarpLog))
    -> StringProperty(Value=harpmessage) => #6
    #1, #2, #0, #6, #3, #4 -> Zip
    -> Format(Format={0}\S{1}\R{2}_{5}\{4}_S{1}_R{2}_{5}_{3}.bin, Selector="Item1,Item2,Item3,Item4,Item5.Animal,Item6")
    -> WorkflowOutput
-> PropertyMapping(HarpSavePath)
-> IncludeWorkflow
  Path=Extensions\harp_hardware.bonsai
  HarpSavePath=D:\data\Test\S20210930\R192054_SpheresPermTube\Test_S20210930_R192054_SpheresPermTube_harpmessage.bin

GroupWorkflow InitBonvision3D
    ExternalizedMapping(WindowState, DisplayDevice)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Primary
      TargetRenderFrequency=140
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=D:\code\vis-stim-depth\Spheres\Objects\sphere.obj)))
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    GroupWorkflow SetMouseZ
        SubscribeSubject "Mouse Distance" => #0
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #2
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #4
        Bonsai.Shaders.RenderFrame => #5
        #5, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #7
        #7, #2, #4 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> BehaviorSubject MouseZ

    SubscribeSubject MouseZ
    -> BehaviorSubject EyeZ
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(Eye(Selector=it)) => #12
    ExternalizedMapping(ClearColor) => #13
    #12, #13 -> GroupWorkflow SetViewports
        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
        ExternalizedMapping(Eye) => #2
        #1, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> PublishSubject Draw => #4
        ExternalizedMapping(ClearColor) => #5
        #4, #5 -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #6
        -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0360390469, Y=-87.6625443, Z=0.47383610000000004)
          Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr1.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #9
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
          Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr2.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #12
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
          Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr3.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #15
        #6 -> IncludeWorkflow
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.46982540000000006, Y=91.10029, Z=-0.10943494)
          Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\Calibrations\GammaCalibration\calibration_data\RonanCottage_2p\210708\gammalut_gray_Scr4.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #18
        #9, #12, #15, #18 -> Zip
        -> WorkflowOutput

GroupWorkflow GlobalTimer
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep)
    -> MemberSelector(Selector=ElapsedTime)
    -> Accumulate
    -> BehaviorSubject GlobalElapsedTime
    -> ElementIndex
    -> PublishSubject Frames
    -> WorkflowOutput

IncludeWorkflow(Path=Extensions\PhotodiodePlane.bonsai, ScaleX=0.5, ScaleY=0.5, ScaleZ=0.5, PhotoquadX=-155, PhotoquadY=-40, PhotoquadZ=5)
IncludeWorkflow(Path=Extensions\FrameLogger.bonsai, Filename=FrameLog, Photodiode_x0020_Filename=PhotodiodeLog)
IncludeWorkflow(Path=Extensions\RotaryEncoderLogger.bonsai, Filename=RotaryEncoder)

GroupWorkflow Floor
    ExternalizedMapping(Value(DisplayName=FloorLength))
    -> FloatProperty(Value=40)
    -> BehaviorSubject FloorLength

    ExternalizedMapping(Value(DisplayName=TextureName))
    -> StringProperty(Value=plaid)
    -> PropertyMapping(TextureName) => #5
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1, RangeMax=3, Count=3) => #6
    ExternalizedMapping(FloorWidth) => #7
    #6, #5, #7 -> CreateObservable CreateFloors
        WorkflowInput Source1
        -> BehaviorSubject FloorNumber
        -> Subtract(Operand=IntProperty(Value=2)) => #2
        SubscribeSubject FloorLength => #3
        #2, #3 -> Zip
        -> Multiply
        -> BehaviorSubject "Floor Initial Z"

        SubscribeSubject Draw => #7
        ExternalizedMapping(TextureName) => #8
        #7, #8 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #9
        SubscribeSubject MouseZ => #10
        SubscribeSubject FloorLength => #11
        SubscribeSubject FloorNumber => #12
        SubscribeSubject "Floor Initial Z" => #13
        ExternalizedMapping(Value(DisplayName=FloorWidth))
        -> FloatProperty(Value=1) => #15
        #10, #12, #11, #13, #15 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform => #17
          Expression:
            new(
            (Math.Floor((Item1/Item3+3-Item2)/3))*(Item3*3)+Item4 as TranslationZ,
            Item3 as FloorLength,
            Item5 as FloorWidth
            )
        #9, #17 -> WithLatestFrom
        -> InputMapping(Selector=Item1, TranslationZ(Selector=Item2.TranslationZ), ScaleY(Selector=Item2.FloorLength), ScaleX(Selector=Item2.FloorWidth))
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.5
          TranslationZ=40
          ScaleX=1
          ScaleY=40
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    -> Merge

Disable IncludeWorkflow(Path=Extensions\ManualReward.bonsai, RewardDuration=250)

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift Control Alt", SuppressRepetitions=false) => #18
Bonsai.Windows.Input.KeyDown(Filter="Space NumPad0 Control Alt", SuppressRepetitions=true) => #19
SubscribeSubject SaveTimestamp => #20
SubscribeSubject SaveDate => #21
SubscribeSubject Metadata => #22
SubscribeSubject WhichExp => #23
#22, #21, #20, #23 -> Zip
-> Format(Format={0}\S{1}\R{2}_{3}, Selector="Item1.Animal,Item2,Item3,Item4") => #25
-> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
#18, #25 -> Zip
-> SelectMany "Spheres Close & Open" => #28
    WorkflowInput Source1
    -> BehaviorSubject StartTrigger

    ExternalizedMapping(Value(DisplayName=TakeZoNum, Category=ZoPosition))
    -> IntProperty(Value=250)
    -> BehaviorSubject TakeZoNum => #4
    ExternalizedMapping(Value(DisplayName=TakeThetaNum, Category=ThetaPosition))
    -> IntProperty(Value=1)
    -> BehaviorSubject TakeThetaNum => #7
    #7, #4 -> Zip
    -> Multiply
    -> BehaviorSubject SphereNumPerMoment

    ExternalizedMapping(Value(DisplayName=InterSphereInterval, Category=Timings))
    -> FloatProperty(Value=0.01)
    -> BehaviorSubject InterSphereInterval

    ExternalizedMapping
      Size(Category=SphereSettings)
      RadiusMin(Category=Radius)
      RadiusMax(Category=Radius)
      RadiusLogBase(Category=Radius)
      ZoMin(Category=ZoPosition)
      ZoMax(Category=ZoPosition)
      ThetaMin(Category=ThetaPosition)
      ThetaMinLim(Category=ThetaPosition)
      ThetaMaxLim(Category=ThetaPosition)
      ThetaMax(Category=ThetaPosition)
      "SaveFilename NewParams"
      BackgroundColor(Category=SphereSettings)
      TargetAmb(Category=SphereSettings)
      ThetaMaxCount(Category=ThetaPosition)
      ThetaMinCount(Category=ThetaPosition)
      ZoCount(DisplayName=ZoCount, Category=ZoPosition)
      DistanceBehind(Category=TrialConditions)
      FadeInTime(Category=SphereSettings)
    -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.") => #15
        ExternalizedMapping
          Size
          RadiusMin
          RadiusMax
          RadiusLogBase
          ThetaMin
          ThetaMinLim
          ThetaMax
          ThetaMaxLim
          ZoMin
          ZoMax
          ThetaMaxCount
          ThetaMinCount
          ZoCount
          DistanceBehind(Category=TrialCondition)
        -> GroupWorkflow ManageSphereParams
            SubscribeSubject RepeatNumber
            -> PropertyMapping(Count) => #1
            ExternalizedMapping(RadiusMin, RadiusMax, RadiusLogBase)
            -> GroupWorkflow RadiusRange => #3
                ExternalizedMapping(Value(DisplayName=RadiusMin, Category=Positions))
                -> FloatProperty(Value=20) => #1
                ExternalizedMapping(Value(DisplayName=RadiusMax, Category=Positions))
                -> FloatProperty(Value=200) => #3
                ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=Positions))
                -> FloatProperty(Value=10) => #5
                SubscribeSubject DepthCount
                -> IntProperty(Value=3) => #7
                #1, #3, #7, #5 -> Zip
                -> Bonsai.Scripting.ExpressionTransform Log => #9
                  Expression:
                    new(
                    Math.Log(Item1,Item4) as Min,
                    Math.Log(Item2,Item4) as Max,
                    Item3 as Count
                    )
                -> MemberSelector(Selector=Min)
                -> PropertyMapping(RangeMin) => #11
                #9 -> MemberSelector(Selector=Max)
                -> PropertyMapping(RangeMax) => #13
                #9 -> MemberSelector(Selector=Count)
                -> PropertyMapping(Count) => #15
                #11, #13, #15 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.301029995663981, RangeMax=2.3010299956639808, Count=3) => #16
                #16, #5 -> WithLatestFrom
                -> Bonsai.Scripting.ExpressionTransform Power
                  Expression: Math.Pow(Item2,Item1)
                -> Disable Bonsai.Numerics.Permutation
                -> WorkflowOutput
            ExternalizedMapping(ThetaMin, ThetaMinLim, ThetaMax, ThetaMaxLim, ZoMin, ZoMax, ThetaMaxCount, ThetaMinCount, ZoCount, DistanceBehind) => #4
            #3, #4 -> CreateObservable "Theta & Zo Range"
                WorkflowInput Source1
                -> MulticastSubject Depth => #1
                SubscribeSubject InterTrialDelay
                -> PropertyMapping(DueTime) => #3
                BehaviorSubject<System.Double> Depth => #4
                #1, #4 -> Merge => #5
                Disable SubscribeSubject InterSphereInterval
                -> Disable Multiply(Operand=FloatProperty(Value=1E+07))
                -> Disable PropertyMapping(DueTime)
                -> Disable Timer(DueTime=PT0.01S, Period=PT0S) => #9
                ExternalizedMapping(ThetaMin, ThetaMinLim, ThetaMax, ThetaMaxLim, ThetaMinCount, ThetaMaxCount) => #10
                ExternalizedMapping(ZoMin, ZoMax, ZoCount)
                -> GroupWorkflow ZoRange => #12
                    ExternalizedMapping(RangeMin(DisplayName=ZoMin), RangeMax(DisplayName=ZoMax), Count(DisplayName=ZoCount))
                    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=3000, Count=250)
                    -> Bonsai.Numerics.Permutation => #2
                    SubscribeSubject MouseZ => #3
                    SubscribeSubject TakeZoNum
                    -> PropertyMapping(Count) => #5
                    #2, #5 -> Take(Count=250) => #6
                    -> WorkflowOutput
                    #6 -> Max
                    -> AsyncSubject MaxZo
                    #6, #3 -> WithLatestFrom
                #12, #10 -> CreateObservable ThetaRange
                    ExternalizedMapping(RangeMin(DisplayName=ThetaMin), RangeMax(DisplayName=ThetaMinLim), Count(DisplayName=ThetaMinCount))
                    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-40, RangeMax=40, Count=9) => #1
                    ExternalizedMapping(RangeMin(DisplayName=ThetaMaxLim), RangeMax(DisplayName=ThetaMax), Count(DisplayName=ThetaMaxCount))
                    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=140, RangeMax=220, Count=9) => #3
                    #1, #3 -> Merge
                    -> Bonsai.Numerics.Permutation => #5
                    WorkflowInput Source1 => #6
                    SubscribeSubject TakeThetaNum
                    -> PropertyMapping(Count) => #8
                    #5, #8 -> Take(Count=1) => #9
                    #9, #6 -> CombineLatest
                    -> WorkflowOutput
                -> Concat
                -> Disable Bonsai.Numerics.Permutation => #15
                #15, #9 -> Disable Zip
                -> Disable MemberSelector(Selector=Item1) => #17
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Count) => #19
                #17, #19 -> Disable Take(Count=40)
                -> Disable Repeat => #21
                #21, #5 -> CombineLatest => #22
                -> MemberSelector(Selector=Item1.Item1)
                -> Bonsai.Numerics.DegreeToRadian => #24
                #22 -> MemberSelector(Selector=Item1.Item2) => #25
                #22 -> MemberSelector(Selector=Item2) => #26
                #24, #25, #26 -> Zip
                -> MulticastSubject SpherePos => #28
                BooleanProperty(Value=false) => #29
                PublishSubject<System.Boolean> EndTrigger
                -> Bonsai.Scripting.ExpressionCondition => #31
                  Expression: (it==True)
                #31, #29 -> WithLatestFrom
                -> PublishSubject EndThisTrial => #33
                #28, #33 -> TakeUntil => #34
                #34, #3 -> Delay(DueTime=PT10S)
                -> WorkflowOutput

                SubscribeSubject MaxZo => #37
                SubscribeSubject MouseZ => #38
                #37, #38 -> WithLatestFrom
                -> Add => #40
                ExternalizedMapping(DistanceBehind) => #41
                #40, #41 -> Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject MouseZ => #1
                    ExternalizedMapping(Value(DisplayName=DistanceBehind)) => #2
                    #1, #2 -> Subtract(Operand=DoubleProperty(Value=20)) => #3
                    #0, #3 -> CombineLatest
                    -> LessThan
                    -> MulticastSubject EndTrigger
                    -> WorkflowOutput

                BooleanProperty(Value=true) => #43
                SubscribeSubject EndThisTrial => #44
                #44, #43 -> WithLatestFrom
                -> FloatProperty(Value=-9999)
                -> MulticastSubject Depth
                -> BooleanProperty(Value=true)
            -> Concat => #6
            #6, #1 -> RepeatCount(Count=50)

            SubscribeSubject MouseZ => #8
            ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
            -> FloatProperty(Value=0.0435)
            -> BehaviorSubject OriginalSize
            -> Take(Count=1) => #12
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> PublishSubject ElapsedTime => #16
            BehaviorSubject<System.Tuple(System.Double,System.Double,System.Double)> SpherePos => #17
            #17, #16 -> WithLatestFrom
            -> ElementIndex => #19
            #19, #12 -> CombineLatest => #20
            #20, #8 -> WithLatestFrom
            -> TubeMapping
            -> Disable SphericalCoordinates_SP
            -> BehaviorSubject SphereNewParams

            SubscribeSubject GlobalElapsedTime => #25
            SubscribeSubject SpherePos
            -> Take(Count=1) => #27
            #25, #27 -> Sample
            -> PublishSubject TrialStartTime

        SubscribeSubject SphereNumPerMoment
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=250) => #4
        ExternalizedMapping(BackgroundColor, TargetAmb, FadeInTime) => #5
        #4, #5 -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> AsyncSubject SphereIndex

            SubscribeSubject Draw => #2
            SubscribeSubject SphereNewParams
            -> Condition
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject SphereIndex => #2
                SubscribeSubject SphereNumPerMoment
                -> PropertyMapping(Value) => #4
                #1, #4 -> Mod(Operand=IntProperty(Value=250)) => #5
                #5, #2 -> WithLatestFrom => #6
                #0 -> MemberSelector(Selector=Item3.Item3) => #7
                #6, #7 -> WithLatestFrom
                -> SphereIdxCondition
                -> WorkflowOutput
            -> MulticastSubject LogSphereParams => #5
            ExternalizedMapping(Value(DisplayName=TargetAmb))
            -> FloatProperty(Value=0) => #7
            ExternalizedMapping(Value(DisplayName=BackgroundColor))
            -> FloatProperty(Value=0.5) => #9
            ExternalizedMapping(Value(DisplayName=FadeInTime))
            -> FloatProperty(Value=0.5) => #11
            SubscribeSubject GlobalElapsedTime => #12
            SubscribeSubject TrialStartTime => #13
            #12, #13 -> CombineLatest
            -> Subtract => #15
            #15, #11, #7, #9 -> CombineLatest
            -> CreateFadingIn
            -> Disable CreateFadingNew => #18
            #5, #18 -> CombineLatest => #19
            #2, #19 -> WithLatestFrom
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item1.Item1 as SphereID,
                Item2.Item2 as Ambient,
                Item2.Item1.Item3.Item1 as Azimuth,
                Item2.Item1.Item3.Item2 as Elevation,
                Item2.Item1.Item3.Item3 as Depth,
                Item2.Item1.Item4.Item1 as X,
                Item2.Item1.Item4.Item2 as Y,
                Item2.Item1.Item4.Item3 as Z0,
                Item2.Item1.Item4.Item4 as Z,
                Item2.Item1.Item4.Item5 as MouseZ,
                Item2.Item1.Item5.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              TranslationX(Selector=X)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=173.205078
              TranslationY=-100
              TranslationZ=8910.227
              ScaleX=8.7
              ScaleY=8.7
              ScaleZ=8.7
              MeshName=sphere
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            -> WorkflowOutput
        -> Merge

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            SubscribeSubject Frames => #0
            SubscribeSubject StartTrigger => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item1) => #3
            SubscribeSubject SaveGeneralPrefix => #4
            SubscribeSubject SaveDate => #5
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams"))
            -> StringProperty(Value=NewParams) => #7
            SubscribeSubject Metadata => #8
            SubscribeSubject WhichExp => #9
            SubscribeSubject SaveTimestamp => #10
            #4, #5, #10, #9, #7, #8 -> Zip
            -> Format(Format={0}\S{1}\R{2}_{3}\{5}_S{1}_R{2}_{3}_{4}.csv, Selector="Item1,Item2,Item3,Item4,Item5,Item6.Animal")
            -> PropertyMapping(FileName) => #13
            BehaviorSubject<System.Tuple(System.Int32,System.Single,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> LogSphereParams => #14
            #14, #3 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #17
              Expression:
                new(
                Timestamp as HarpTime,
                Value.Item2.Index as Frame,
                Value.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item3.Item1/Math.PI*180) as Theta,
                Value.Item1.Item3.Item2 as Zo,
                Value.Item1.Item3.Item3 as Depth,
                Value.Item1.Item4.Item1 as X,
                Value.Item1.Item4.Item2 as Y,
                Value.Item1.Item4.Item3 as Z0,
                Value.Item1.Item4.Item4 as Z,
                Value.Item1.Item4.Item5 as MouseZ,
                Value.Item1.Item5.Item1 as OriginalSize,
                Value.Item1.Item5.Item2 as Size)
            #17, #13 -> Bonsai.IO.CsvWriter => #18
              FileName=D:\data\Test\S20210930\R182851_SphereSparseNoise\Test_S20210930_R182851_SphereSparseNoise_NewParams.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #19
            #18 -> Disable MemberSelector(Selector=Azimuth) => #20
            #18 -> Disable MemberSelector(Selector=Elevation) => #21
            #18 -> Disable MemberSelector(Selector=Depth) => #22
            #18 -> Disable MemberSelector(Selector=Frame) => #23
            #19, #20, #21, #22, #23 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Elevation,
                Item4 as Depth
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)
    ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #16
    #15, #16 -> DelaySubscription(DueTime=PT10S)
#28, #19 -> TakeUntil
