WorkflowBuilder(Version=2.6.0)
Bonsai.Osc.CreateUdpClient(Name=UdpSend, Port=2323, RemoteHostName=10.0.250.44, RemotePort=2323)
Bonsai.Osc.CreateUdpClient(Name=UdpSend_beh, Port=2324, RemoteHostName=10.0.250.44, RemotePort=2324)

MetadataSource(ExpInfo(Animal=Test, RootDirectory=D:\data), Animal=Test, RootDirectory=D:\data)
-> Timestamp
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    it.Value.Animal as Animal,
    it.Value.RootDirectory as RootDirectory,
    it.Timestamp.Year.ToString() as Year,
    it.Timestamp.Month<10? ("0"+it.Timestamp.Month.ToString()):(it.Timestamp.Month.ToString()) as Month,
    it.Timestamp.Day<10? ("0"+it.Timestamp.Day.ToString()):(it.Timestamp.Day.ToString()) as Day,
    it.Timestamp.Hour<10? ("0"+it.Timestamp.Hour.ToString()):(it.Timestamp.Hour.ToString()) as Hour,
    it.Timestamp.Minute<10? ("0"+it.Timestamp.Minute.ToString()):(it.Timestamp.Minute.ToString()) as Minute,
    it.Timestamp.Second<10? ("0"+it.Timestamp.Second.ToString()):(it.Timestamp.Second.ToString()) as Second
    )
-> BehaviorSubject Metadata

ExternalizedMapping(CloseLoopDuration(Category=Timings), InitialDelayReplay(Category=BasicSettings), InitialDelaySpheres(Category=Timings), LifeTime)
-> GroupWorkflow BasicSettings
    ExternalizedMapping(Value(DisplayName=CloseLoopDuration, Category=Timings))
    -> FloatProperty(Value=20)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject CloseLoopDuration => #3
    ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
    -> FloatProperty(Value=5)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject InitialDelayReplay => #7
    ExternalizedMapping(Value(DisplayName=InitialDelaySpheres, Category=Timings))
    -> FloatProperty(Value=5)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject InitialDelaySphere => #11
    #3, #7, #11 -> Zip
    -> Add
    -> BehaviorSubject OpenLoopStartTime

    GroupWorkflow SetFileSaving
        SubscribeSubject Metadata
        -> Format(Format={0}\{1}, Selector="RootDirectory,Animal")
        -> BehaviorSubject SaveGeneralPrefix

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Year,Month,Day")
        -> BehaviorSubject SaveDate

        SubscribeSubject Metadata
        -> Format(Format={0}{1}{2}, Selector="Hour,Minute,Second")
        -> BehaviorSubject SaveTimestamp

        SubscribeSubject SaveTimestamp => #9
        SubscribeSubject SaveDate => #10
        SubscribeSubject Metadata => #11
        #11, #10, #9 -> Zip
        -> Format(Format={0}\S{1}\R{2}, Selector="Item1.Animal,Item2,Item3")
        -> BehaviorSubject SaveCameraFilePath
        -> Bonsai.Osc.SendMessage(Connection=UdpSend_beh, Address=/beh_fname)

    ExternalizedMapping(Value(DisplayName=LifeTime, Category=Timings))
    -> FloatProperty(Value=4)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject LifeTime

GroupWorkflow InitBonvision3D
    ExternalizedMapping(WindowState, DisplayDevice, ClearColor)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Primary
      TargetRenderFrequency=0
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=D:\code\vis-stim-depth\Spheres\Objects\sphere.obj)))
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    Disable Bonsai.Windows.Input.MouseMove
    -> Disable MemberSelector(Selector=Y)
    -> Disable Bonsai.Dsp.Rescale(Min=0, Max=2000, RangeMin=0, RangeMax=10, RescaleType=Linear)
    -> Disable Bonsai.Shaders.LatestOnUpdateFrame
    -> Disable PublishSubject MouseZ

    ExternalizedMapping(ScreenCalibFile(Category=Calibrations), GammaCalibFile(Category=Calibrations))
    -> GroupWorkflow CalibrationFiles
        ExternalizedMapping(FileName(DisplayName=ScreenCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\monitor_calibration.csv, ListSeparator=",", ScanPattern=%f, SkipRows=1)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            it[0] as Screen1_params,
            it[1] as Screen2_params,
            it[2] as Screen3_params,
            it[3] as Screen4_params
            )
        -> MemberSelector(Selector=Screen1_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen1pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen2_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen2pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen3_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen3pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen4_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen4pos(BufferSize=nil)

        ExternalizedMapping(FileName(DisplayName=GammaCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\gamma_calibration.csv, ListSeparator="", ScanPattern=%s, SkipRows=0)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Screen1_gammalut,
            it[1] as Screen2_gammalut,
            it[2] as Screen3_gammalut,
            it[3] as Screen4_gammalut
            )
        -> ReplaySubject GammaLut(BufferSize=nil)

    GroupWorkflow SetMouseZ
        SubscribeSubject "Mouse Distance" => #0
        ExternalizedMapping(Value(DisplayName=EncoderCPR))
        -> FloatProperty(Value=4096) => #2
        ExternalizedMapping(Value(DisplayName=WheelDiameter, Description="in cm"))
        -> FloatProperty(Value=20) => #4
        Bonsai.Shaders.RenderFrame => #5
        #5, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #7
        #7, #2, #4 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Item1 * (2*Math.PI*(Item3/2)) / Item2
        -> PublishSubject MouseZ

        SubscribeSubject MouseZ => #11
        SubscribeSubject InitialDelaySphere => #12
        SubscribeSubject CloseLoopDuration => #13
        SubscribeSubject LifeTime => #14
        #12, #13, #14 -> Zip
        -> Add
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT29S) => #18
        #11, #18 -> TakeUntil
        -> ReplaySubject MouseZClose(BufferSize=nil)

        SubscribeSubject MouseZ
        -> PublishSubject "MouseZ Close&Interval" => #22
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT30S) => #25
        #22, #25 -> TakeUntil

        SubscribeSubject MouseZ => #27
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT30S) => #30
        #27, #30 -> Sample
        -> BehaviorSubject MouseZOpenStart

        SubscribeSubject MouseZClose => #33
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime) => #35
        #33, #35 -> Bonsai.Shaders.Delay(DueTime=PT30S) => #36
        SubscribeSubject "MouseZ Close&Interval" => #37
        SubscribeSubject MouseZOpenStart => #38
        #36, #38 -> WithLatestFrom
        -> Add => #40
        #37, #40 -> Merge
        -> BehaviorSubject EyeZ

    SubscribeSubject EyeZ
    -> InputMapping(Z(Selector=it))
    -> Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> PropertyMapping(Eye(Selector=it))
    -> GroupWorkflow SetViewports
        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
        SubscribeSubject Screen1pos => #2
        SubscribeSubject Screen2pos => #3
        SubscribeSubject Screen3pos => #4
        SubscribeSubject Screen4pos => #5
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen1_gammalut) => #7
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen2_gammalut) => #9
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen3_gammalut) => #11
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen4_gammalut) => #13
        Disable SubscribeSubject Screen1pos => #14
        Disable SubscribeSubject Screen2pos => #15
        Disable SubscribeSubject Screen3pos => #16
        Disable SubscribeSubject Screen4pos => #17
        ExternalizedMapping(Eye) => #18
        #1, #18 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> PublishSubject Draw
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #21
        #21, #2 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #24
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0360390469, Y=-87.6625443, Z=0.4738361)
          Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
        #24, #7 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #27
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #27, #14 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #30
        #21, #3 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #33
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.103132404, Y=-27.1009026, Z=1.071431)
          Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
        #33, #9 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #36
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #36, #15 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #39
        #21, #4 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #42
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.8307888, Y=24.29341, Z=0.476700872)
          Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
        #42, #11 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #45
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #45, #16 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #48
        #21, #5 -> CombineLatest
        -> InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #51
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.4698254, Y=91.10029, Z=-0.10943494)
          Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
        #51, #13 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #54
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #54, #17 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #57
        #30, #39, #48, #57 -> Zip
        -> WorkflowOutput

GroupWorkflow "Frame Logger"(Description="Frame & Photodiode logger")
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #3
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #7
    #3, #7 -> Zip
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #10
      Expression:
        new(
        it.Value.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime
        )
    SubscribeSubject SaveTimestamp => #11
    SubscribeSubject SaveGeneralPrefix => #12
    SubscribeSubject SaveDate => #13
    ExternalizedMapping(Value(DisplayName=Filename))
    -> StringProperty(Value=FrameLog) => #15
    SubscribeSubject Metadata => #16
    #12, #13, #11, #15, #16 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> PropertyMapping(FileName) => #19
    #10, #19 -> Bonsai.IO.CsvWriter
      FileName=D:\data\Test\S20210506\R203807\Test_FrameLog_S20210506_R203807.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable WorkflowOutput

    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #25
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #29
    #25, #29 -> Zip => #30
    SubscribeSubject photodiode => #31
    SubscribeSubject PhotoQuadColor => #32
    #30, #32, #31 -> CombineLatest
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #35
      Expression:
        new(
        it.Value.Item1.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item1.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item1.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime,
        it.Value.Item2 as PhotoQuadColor,
        it.Value.Item3 as Photodiode
        )
    SubscribeSubject SaveTimestamp => #36
    SubscribeSubject SaveGeneralPrefix => #37
    SubscribeSubject SaveDate => #38
    ExternalizedMapping(Value(DisplayName="Photodiode Filename"))
    -> StringProperty(Value=PhotodiodeLog) => #40
    SubscribeSubject Metadata => #41
    #37, #38, #36, #40, #41 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> PropertyMapping(FileName) => #44
    #35, #44 -> Bonsai.IO.CsvWriter
      FileName=D:\data\Test\S20210506\R203807\Test_PhotodiodeLog_S20210506_R203807.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable WorkflowOutput

IncludeWorkflow(Path=Extensions\PhotodiodePlane.bonsai, ScaleX=0.5, ScaleY=0.5, ScaleZ=0.5, PhotoquadX=-25, PhotoquadY=-37, PhotoquadZ=5)

GroupWorkflow Floor
    ExternalizedMapping(Value(DisplayName=FloorLength))
    -> FloatProperty(Value=30)
    -> BehaviorSubject FloorLength

    ExternalizedMapping(Value(DisplayName=TextureName))
    -> StringProperty(Value=horGrat) => #4
    -> PropertyMapping(TextureName) => #5
    IntProperty(Value=1) => #6
    #6, #5 -> SelectMany CreateFloor
        WorkflowInput Source1
        -> BehaviorSubject FloorNumber => #1
        SubscribeSubject FloorLength => #2
        IntProperty(Value=4)
        -> Divide(Operand=DoubleProperty(Value=2))
        -> Add(Operand=DoubleProperty(Value=0.5)) => #5
        #1, #5 -> Zip
        -> Subtract => #7
        #7, #2 -> Zip
        -> Multiply => #9
        SubscribeSubject Draw => #10
        ExternalizedMapping(TextureName) => #11
        #10, #11 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=horGrat, TextureTarget=Texture2D) => #12
        SubscribeSubject FloorLength
        -> PropertyMapping(ScaleY) => #14
        SubscribeSubject FloorLength => #15
        SubscribeSubject FloorNumber => #16
        SubscribeSubject EyeZ => #17
        #17, #16, #15, #9 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (Math.Floor((Item1/Item3+4-Item2)/4))*(Item3*4)+Item4
        -> PropertyMapping(TranslationZ) => #20
        #12, #20, #14 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.5
          TranslationZ=-45
          ScaleX=0.5
          ScaleY=30
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    #4 -> PropertyMapping(TextureName) => #8
    IntProperty(Value=2) => #9
    #9, #8 -> SelectMany CreateFloor
        WorkflowInput Source1
        -> BehaviorSubject FloorNumber => #1
        SubscribeSubject FloorLength => #2
        IntProperty(Value=4)
        -> Divide(Operand=DoubleProperty(Value=2))
        -> Add(Operand=DoubleProperty(Value=0.5)) => #5
        #1, #5 -> Zip
        -> Subtract => #7
        #7, #2 -> Zip
        -> Multiply => #9
        SubscribeSubject Draw => #10
        ExternalizedMapping(TextureName) => #11
        #10, #11 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=horGrat, TextureTarget=Texture2D) => #12
        SubscribeSubject FloorLength
        -> PropertyMapping(ScaleY) => #14
        SubscribeSubject FloorLength => #15
        SubscribeSubject FloorNumber => #16
        SubscribeSubject EyeZ => #17
        #17, #16, #15, #9 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (Math.Floor((Item1/Item3+4-Item2)/4))*(Item3*4)+Item4
        -> PropertyMapping(TranslationZ) => #20
        #12, #20, #14 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.5
          TranslationZ=-15
          ScaleX=0.5
          ScaleY=30
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    #4 -> PropertyMapping(TextureName) => #11
    IntProperty(Value=3) => #12
    #12, #11 -> SelectMany CreateFloor
        WorkflowInput Source1
        -> BehaviorSubject FloorNumber => #1
        SubscribeSubject FloorLength => #2
        IntProperty(Value=4)
        -> Divide(Operand=DoubleProperty(Value=2))
        -> Add(Operand=DoubleProperty(Value=0.5)) => #5
        #1, #5 -> Zip
        -> Subtract => #7
        #7, #2 -> Zip
        -> Multiply => #9
        SubscribeSubject Draw => #10
        ExternalizedMapping(TextureName) => #11
        #10, #11 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=horGrat, TextureTarget=Texture2D) => #12
        SubscribeSubject FloorLength
        -> PropertyMapping(ScaleY) => #14
        SubscribeSubject FloorLength => #15
        SubscribeSubject FloorNumber => #16
        SubscribeSubject EyeZ => #17
        #17, #16, #15, #9 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (Math.Floor((Item1/Item3+4-Item2)/4))*(Item3*4)+Item4
        -> PropertyMapping(TranslationZ) => #20
        #12, #20, #14 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.5
          TranslationZ=15
          ScaleX=0.5
          ScaleY=30
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    #4 -> PropertyMapping(TextureName) => #14
    IntProperty(Value=4) => #15
    #15, #14 -> SelectMany CreateFloor
        WorkflowInput Source1
        -> BehaviorSubject FloorNumber => #1
        SubscribeSubject FloorLength => #2
        IntProperty(Value=4)
        -> Divide(Operand=DoubleProperty(Value=2))
        -> Add(Operand=DoubleProperty(Value=0.5)) => #5
        #1, #5 -> Zip
        -> Subtract => #7
        #7, #2 -> Zip
        -> Multiply => #9
        SubscribeSubject Draw => #10
        ExternalizedMapping(TextureName) => #11
        #10, #11 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=horGrat, TextureTarget=Texture2D) => #12
        SubscribeSubject FloorLength
        -> PropertyMapping(ScaleY) => #14
        SubscribeSubject FloorLength => #15
        SubscribeSubject FloorNumber => #16
        SubscribeSubject EyeZ => #17
        #17, #16, #15, #9 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression: (Math.Floor((Item1/Item3+4-Item2)/4))*(Item3*4)+Item4
        -> PropertyMapping(TranslationZ) => #20
        #12, #20, #14 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-0.5
          TranslationZ=45
          ScaleX=0.5
          ScaleY=30
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput

GroupWorkflow "Rotary Encoder Logger"(Description="Log ticks data from rotary encoder")
    SubscribeSubject "Mouse Distance" => #0
    Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex => #4
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex => #8
    SubscribeSubject SaveTimestamp => #9
    SubscribeSubject SaveGeneralPrefix => #10
    SubscribeSubject SaveDate => #11
    ExternalizedMapping(Value(DisplayName=Filename))
    -> StringProperty(Value=RotaryEncoder) => #13
    SubscribeSubject Metadata => #14
    #10, #11, #9, #13, #14 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> PropertyMapping(FileName) => #17
    SubscribeSubject EyeZ => #18
    #4, #8, #0, #18 -> CombineLatest
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform => #21
      Expression:
        new(
        it.Value.Item1.Index as Frame,
        it.Timestamp as HarpTime,
        it.Value.Item2.Value.ElapsedTime as IdealFrameTime,
        it.Value.Item1.Value as BonsaiRenderElapsedTime,
        it.Value.Item2.Value.ElapsedRealTime as BonsaiUpdateElapsedTime,
        it.Value.Item3 as RotaryEncoder,
        it.Value.Item4 as EyeZ
        )
    #21, #17 -> Bonsai.IO.CsvWriter
      FileName=D:\data\Test\S20210506\R203807\Test_RotaryEncoder_S20210506_R203807.csv
      Delimiter=","
      Append=true
      Overwrite=false
      Suffix=None
      IncludeHeader=true

GroupWorkflow SetHarpSavePath
    SubscribeSubject SaveTimestamp => #0
    SubscribeSubject SaveGeneralPrefix => #1
    SubscribeSubject SaveDate => #2
    StringProperty(Value=harpmessage) => #3
    SubscribeSubject Metadata => #4
    #1, #2, #0, #3, #4 -> Zip
    -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.bin, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
    -> WorkflowOutput
-> PropertyMapping(HarpSavePath)
-> IncludeWorkflow(Path=Extensions\harp_hardware.bonsai, HarpSavePath=D:\data\Test\S20210506\R203807\Test_harpmessage_S20210506_R203807.bin)

SubscribeSubject Metadata
-> Format(Format={0}_S{1}{2}{3}_R{4}{5}{6}, Selector="Animal,Year,Month,Day,Hour,Minute,Second") => #17
-> Bonsai.Osc.SendMessage(Connection=UdpSend, Address=/si_fname)
Disable Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift Control Alt", SuppressRepetitions=false)
-> Disable BooleanProperty(Value=false) => #20
#17, #20 -> Disable Zip
-> Disable SelectMany "Spheres Close & Open" => #22
    WorkflowInput Source1

    ExternalizedMapping
      Size(Category=MiscParams)
      SphereInterval(Category=Timings)
      AziMin(Category="Positions Azimuth")
      AziMinLim(Category="Positions Azimuth")
      AziMinCount(Category="Positions Azimuth")
      AziMaxLim(Category="Positions Azimuth")
      AziMax(Category="Positions Azimuth")
      AziMaxCount(Category="Positions Azimuth")
      RadiusMin(Category="Positions Radius")
      RadiusMax(Category="Positions Radius")
      RadiusCount(Category="Positions Radius")
      RadiusLogBase(Category="Positions Radius")
      ThetaMin(Category="Positions Theta")
      ThetaMinLim(Category="Positions Theta")
      ThetaMinCount(Category="Positions Theta")
      ThetaMaxLim(Category="Positions Theta")
      ThetaMax(Category="Positions Theta")
      ThetaMaxCount(Category="Positions Theta")
      "SaveFilename NewParams"
    -> GroupWorkflow SpheresClose(Description="Depth is in log10 space.")
        SubscribeSubject MouseZ => #0
        ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
        -> FloatProperty(Value=0.0435)
        -> BehaviorSubject OriginalSize
        -> Take(Count=1) => #4
        ExternalizedMapping
          SphereInterval(Category=Timings)
          AziMin
          AziMinLim
          AziMinCount
          AziMaxLim
          AziMax
          AziMaxCount
          RadiusMin
          RadiusMax
          RadiusCount
          RadiusLogBase
          ThetaMin
          ThetaMinLim
          ThetaMinCount
          ThetaMaxLim
          ThetaMax
          ThetaMaxCount
        -> GroupWorkflow SetParams
            ExternalizedMapping(Period(DisplayName=SphereInterval, Category=Timings))
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.5S) => #1
            Disable SubscribeSubject StartTrigger => #2
            ExternalizedMapping(AziMin, AziMinLim, AziMinCount, AziMaxLim, AziMax, AziMaxCount)
            -> GroupWorkflow AziRange => #4
                ExternalizedMapping(RangeMin(DisplayName=AziMin), RangeMax(DisplayName=AziMinLim), Count(DisplayName=AziMinCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-30, RangeMax=70, Count=11) => #1
                ExternalizedMapping(RangeMin(DisplayName=AziMaxLim), RangeMax(DisplayName=AziMax), Count(DisplayName=AziMaxCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=110, RangeMax=210, Count=11) => #3
                #1, #3 -> Concat
                -> WorkflowOutput
            ExternalizedMapping(RadiusMin, RadiusMax, RadiusCount, RadiusLogBase, ThetaMin, ThetaMinLim, ThetaMinCount, ThetaMaxLim, ThetaMax, ThetaMaxCount) => #5
            #4, #5 -> CreateObservable "Theta Radius Range"
                WorkflowInput Source1 => #0
                ExternalizedMapping(RangeMin(DisplayName=ThetaMin), RangeMax(DisplayName=ThetaMinLim), Count(DisplayName=ThetaMinCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=-40, RangeMax=40, Count=9) => #2
                ExternalizedMapping(RadiusMin(Category=Positions), RadiusMax, RadiusCount, RadiusLogBase) => #3
                ExternalizedMapping(RangeMin(DisplayName=ThetaMaxLim), RangeMax(DisplayName=ThetaMax), Count(DisplayName=ThetaMaxCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=140, RangeMax=220, Count=9) => #5
                #2, #5 -> Concat => #6
                #0, #6 -> CombineLatest => #7
                #7, #3 -> CreateObservable RadiusRange
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=RadiusMin, Category=Positions))
                    -> FloatProperty(Value=20) => #2
                    ExternalizedMapping(Value(DisplayName=RadiusMax, Category=Positions))
                    -> FloatProperty(Value=200) => #4
                    ExternalizedMapping(Value(DisplayName=RadiusCount, Category=Positions))
                    -> IntProperty(Value=3) => #6
                    ExternalizedMapping(Value(DisplayName=RadiusLogBase, Category=Positions))
                    -> FloatProperty(Value=10) => #8
                    #2, #4, #6, #8 -> Zip
                    -> Bonsai.Scripting.ExpressionTransform Log => #10
                      Expression:
                        new(
                        Math.Log(Item1,Item4) as Min,
                        Math.Log(Item2,Item4) as Max,
                        Item3 as Count
                        )
                    -> MemberSelector(Selector=Min)
                    -> PropertyMapping(RangeMin) => #12
                    #10 -> MemberSelector(Selector=Max)
                    -> PropertyMapping(RangeMax) => #14
                    #10 -> MemberSelector(Selector=Count)
                    -> PropertyMapping(Count) => #16
                    #12, #14, #16 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1.301029995663981, RangeMax=2.3010299956639808, Count=3) => #17
                    #17, #8 -> WithLatestFrom
                    -> Bonsai.Scripting.ExpressionTransform Power => #19
                      Expression: Math.Pow(Item2,Item1)
                    #0, #19 -> CombineLatest
                    -> InputMapping(X(Selector=Item1.Item1), Y(Selector=Item1.Item2), Z(Selector=Item2))
                    -> Bonsai.Shaders.CreateVector3(X=210, Y=220, Z=200)
                    -> WorkflowOutput
                -> Concat
                -> WorkflowOutput
            -> Concat
            -> Bonsai.Numerics.Permutation => #8
            #8, #1 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Repeat
            -> Bonsai.Scripting.ExpressionTransform => #12
              Expression:
                new(
                it.X as Azimuth,
                it.Y as Theta,
                it.Z as Radius
                )
            SubscribeSubject CloseLoopDuration
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT20S) => #15
            #12, #15 -> TakeUntil => #16
            -> MemberSelector(Selector=Azimuth)
            -> ReplaySubject Azimuth(BufferSize=nil)
            -> Bonsai.Numerics.DegreeToRadian => #19
            #16 -> MemberSelector(Selector=Theta)
            -> ReplaySubject Theta(BufferSize=nil)
            -> Bonsai.Numerics.DegreeToRadian => #22
            #16 -> MemberSelector(Selector=Radius)
            -> ReplaySubject Radius(BufferSize=nil) => #24
            #19, #22, #24 -> Zip => #25
            #25, #2 -> Disable WithLatestFrom
            -> Disable MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> ElementIndex => #7
        #7, #4 -> CombineLatest => #8
        #8, #0 -> WithLatestFrom
        -> CylinderCoords
        -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> MulticastSubject SphereNewParams => #1
            SubscribeSubject Draw => #2
            SubscribeSubject LifeTime
            -> Divide(Operand=FloatProperty(Value=1E+07)) => #4
            SubscribeSubject LifeTime
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT4S) => #7
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate => #10
            SubscribeSubject SphereNewParams
            -> MemberSelector(Selector=Item1) => #12
            #12, #10, #4 -> CombineLatest
            -> CreateFading => #14
            #1, #14 -> CombineLatest
            -> Disable MulticastSubject SphereAllParams => #16
            #2, #16 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item2 as Ambient,
                Item2.Item1.Item1 as SphereID,
                Item2.Item1.Item2.Item1 as Azimuth,
                Item2.Item1.Item2.Item2 as Elevation,
                Item2.Item1.Item2.Item3 as Depth,
                Item2.Item1.Item3.Item1 as X,
                Item2.Item1.Item3.Item2 as Y,
                Item2.Item1.Item3.Item3 as Z0,
                Item2.Item1.Item3.Item4 as Z,
                Item2.Item1.Item3.Item5 as MouseZ,
                Item2.Item1.Item4.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationX(Selector=X)
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-173.205078
              TranslationY=-100
              TranslationZ=72.79405
              ScaleX=8.7
              ScaleY=8.7
              ScaleZ=8.7
              MeshName=sphere
              Ambient(X=0.5149087, Y=0.5149087, Z=0.5149087)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            #20, #7 -> TakeUntil
            -> WorkflowOutput
        -> Merge => #12
        SubscribeSubject InitialDelaySphere
        -> PropertyMapping(DueTime) => #14
        #12, #14 -> DelaySubscription(DueTime=PT5S)
        -> WorkflowOutput

        ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> GroupWorkflow SphereParamsLoggerClose
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep)
            -> Accumulate
            -> ElementIndex
            -> PublishSubject Frames

            BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParams => #5
            SubscribeSubject Frames => #6
            SubscribeSubject SaveGeneralPrefix => #7
            SubscribeSubject SaveDate => #8
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams", Category=ParamLogger))
            -> StringProperty(Value=SphereClose_NewParams) => #10
            SubscribeSubject Metadata => #11
            SubscribeSubject SaveTimestamp => #12
            #7, #8, #12, #10, #11 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #15
            Disable SubscribeSubject StartTrigger => #16
            #6, #16 -> Disable WithLatestFrom
            -> Disable MemberSelector(Selector=Item1) => #18
            #5, #18 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #21
              Expression:
                new(
                Value.Item2.Index as Frame,
                Timestamp as HarpTime,
                Value.Item2.Value.ElapsedTime as FrameElapsedTime,
                Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Value.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Value.Item1.Item2.Item2/Math.PI*180) as Theta,
                Value.Item1.Item2.Item3 as Radius,
                Value.Item1.Item3.Item1 as X,
                Value.Item1.Item3.Item2 as Y,
                Value.Item1.Item3.Item3 as Z0,
                Value.Item1.Item3.Item4 as Z,
                Value.Item1.Item3.Item5 as MouseZ,
                Value.Item1.Item4.Item1 as OriginalSize,
                Value.Item1.Item4.Item2 as Size)
            #21, #15 -> Bonsai.IO.CsvWriter => #22
              FileName=D:\data\Test\S20210506\R203405\Test_SphereClose_NewParams_S20210506_R203405.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=true
            -> Disable MemberSelector(Selector=SphereID) => #23
            #22 -> Disable MemberSelector(Selector=Azimuth) => #24
            #22 -> Disable MemberSelector(Selector=Theta) => #25
            #22 -> Disable MemberSelector(Selector=Radius) => #26
            #22 -> Disable MemberSelector(Selector=Frame) => #27
            #23, #24, #25, #26, #27 -> Disable Zip
            -> Disable Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item5 as Frame,
                Item1 as SphereID,
                Item2 as Azimuth,
                Item3 as Theta,
                Item4 as Radius
                )
            -> Disable ReplaySubject SphereParamsReplay(BufferSize=nil)

            Disable BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParams => #31
            Disable SubscribeSubject Frames => #32
            Disable SubscribeSubject SaveGeneralPrefix => #33
            Disable SubscribeSubject SaveDate => #34
            Disable ExternalizedMapping(Value(DisplayName="SaveFilename AllParams", Category=ParamLogger))
            -> Disable StringProperty(Value=SphereClose_AllParams) => #36
            Disable SubscribeSubject Metadata => #37
            Disable SubscribeSubject SaveTimestamp => #38
            #33, #34, #38, #36, #37 -> Disable Zip
            -> Disable Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> Disable PropertyMapping(FileName) => #41
            Disable SubscribeSubject StartTrigger => #42
            #32, #42 -> Disable WithLatestFrom
            -> Disable MemberSelector(Selector=Item1) => #44
            #31, #44 -> Disable WithLatestFrom
            -> Disable IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Disable Bonsai.Scripting.ExpressionTransform => #47
              Expression:
                new(
                Value.Item2.Index as Frame,
                Timestamp as HarpTime,
                Value.Item2.Value.ElapsedTime as FrameElapsedTime,
                Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Value.Item1.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Value.Item1.Item1.Item2.Item2/Math.PI*180) as Theta,
                Value.Item1.Item1.Item2.Item3 as Radius,
                Value.Item1.Item1.Item3.Item1 as X,
                Value.Item1.Item1.Item3.Item2 as Y,
                Value.Item1.Item1.Item3.Item3 as Z0,
                Value.Item1.Item1.Item3.Item4 as Z,
                Value.Item1.Item1.Item3.Item5 as MouseZ,
                Value.Item1.Item1.Item4.Item1 as OriginalSize,
                Value.Item1.Item1.Item4.Item2 as Size,
                Value.Item1.Item2 as Ambient)
            #47, #41 -> Disable Bonsai.IO.CsvWriter => #48
              FileName=D:\data\Test\S20210506\R202837\Test_SphereClose_AllParams_S20210506_R202837.csv
              Append=false
              Overwrite=true
              Suffix=Timestamp
              IncludeHeader=true
            Disable SubscribeSubject CloseLoopDuration => #49
            Disable SubscribeSubject LifeTime => #50
            Disable SubscribeSubject InitialDelaySphere => #51
            #51, #49, #50 -> Disable Zip
            -> Disable Add
            -> Disable PropertyMapping(DueTime)
            -> Disable Bonsai.Shaders.Timer(DueTime=PT29S) => #55
            #48, #55 -> Disable TakeUntil

    Disable ExternalizedMapping
      "SaveFilename NewParams"(DisplayName="Open NewParams", Category=ParamLogger)
      "SaveFilename AllParams"(DisplayName="Open AllParams", Category=ParamLogger)
    -> Disable GroupWorkflow SpheresOpen
        SubscribeSubject OriginalSize => #0
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime) => #2
        Disable SubscribeSubject StartTrigger => #3
        SubscribeSubject Azimuth
        -> Bonsai.Numerics.DegreeToRadian => #5
        SubscribeSubject Theta
        -> Bonsai.Numerics.DegreeToRadian => #7
        SubscribeSubject Radius => #8
        #5, #7, #8 -> Zip => #9
        #9, #3 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item1) => #11
        #11, #2 -> Bonsai.Shaders.Delay(DueTime=PT30S)
        -> ElementIndex => #13
        #13, #0 -> CombineLatest => #14
        SubscribeSubject CloseLoopDuration => #15
        SubscribeSubject LifeTime => #16
        #15, #16 -> Zip
        -> Add
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT24S) => #20
        SubscribeSubject EyeZ => #21
        #14, #21 -> WithLatestFrom
        -> CylinderCoords
        -> CreateObservable CreateSpheres
            WorkflowInput Source1
            -> BehaviorSubject ThisSphereParams
            -> Disable MulticastSubject SphereNewParamsOpen => #2
            SubscribeSubject Draw => #3
            SubscribeSubject LifeTime
            -> Divide(Operand=FloatProperty(Value=1E+07)) => #5
            SubscribeSubject LifeTime
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT4S) => #8
            Bonsai.Shaders.RenderFrame
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate => #11
            SubscribeSubject ThisSphereParams
            -> MemberSelector(Selector=Item1) => #13
            #13, #11, #5 -> CombineLatest
            -> CreateFading => #15
            #2, #15 -> CombineLatest
            -> Disable MulticastSubject SphereAllParamsOpen => #17
            #3, #17 -> CombineLatest
            -> Bonsai.Scripting.ExpressionTransform Rename
              Expression:
                new(
                Item1 as Draw,
                Item2.Item2 as Ambient,
                Item2.Item1.Item1 as SphereID,
                Item2.Item1.Item2.Item1 as Azimuth,
                Item2.Item1.Item2.Item2 as Elevation,
                Item2.Item1.Item2.Item3 as Depth,
                Item2.Item1.Item3.Item1 as X,
                Item2.Item1.Item3.Item2 as Y,
                Item2.Item1.Item3.Item3 as Z0,
                Item2.Item1.Item3.Item4 as Z,
                Item2.Item1.Item3.Item5 as MouseZ,
                Item2.Item1.Item4.Item2 as Size)
            -> InputMapping
              Selector=Draw
              TranslationX(Selector=X)
              TranslationY(Selector=Y)
              TranslationZ(Selector=Z)
              ScaleX(Selector=Size)
              ScaleY(Selector=Size)
              ScaleZ(Selector=Size)
              Ambient(Selector=Ambient)
            -> IncludeWorkflow => #21
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-196.961548
              TranslationY=-34.7296448
              TranslationZ=1432.70825
              ScaleX=8.7
              ScaleY=8.7
              ScaleZ=8.7
              MeshName=sphere
              Ambient(X=0.5030246, Y=0.5030246, Z=0.5030246)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=10
              RotationZ=0
              RotationY=0
              RotationX=0
            #21, #8 -> TakeUntil
            -> WorkflowOutput
        -> Merge => #25
        #25, #20 -> TakeUntil
        -> WorkflowOutput

        Disable ExternalizedMapping("SaveFilename NewParams"(Category=ParamLogger))
        -> Disable GroupWorkflow SphereParamsLoggerOpen
            BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParamsOpen => #0
            SubscribeSubject Frames => #1
            SubscribeSubject SaveGeneralPrefix => #2
            SubscribeSubject SaveDate => #3
            ExternalizedMapping(Value(DisplayName="SaveFilename NewParams", Category=ParamLogger))
            -> StringProperty(Value=SphereOpen_NewParams) => #5
            SubscribeSubject Metadata => #6
            SubscribeSubject SaveTimestamp => #7
            #2, #3, #7, #5, #6 -> Zip
            -> Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> PropertyMapping(FileName) => #10
            Disable SubscribeSubject StartTrigger => #11
            #1, #11 -> Disable WithLatestFrom
            -> Disable MemberSelector(Selector=Item1) => #13
            #0, #13 -> WithLatestFrom
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Bonsai.Scripting.ExpressionTransform => #16
              Expression:
                new(
                Value.Item2.Index as Frame,
                Timestamp as HarpTime,
                Value.Item2.Value.ElapsedTime as FrameElapsedTime,
                Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Value.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Value.Item1.Item2.Item2/Math.PI*180) as Theta,
                Value.Item1.Item2.Item3 as Radius,
                Value.Item1.Item3.Item1 as X,
                Value.Item1.Item3.Item2 as Y,
                Value.Item1.Item3.Item3 as Z0,
                Value.Item1.Item3.Item4 as Z,
                Value.Item1.Item3.Item5 as MouseZ,
                Value.Item1.Item4.Item1 as OriginalSize,
                Value.Item1.Item4.Item2 as Size)
            #16, #10 -> Bonsai.IO.CsvWriter
              FileName=D:\data\PZAH4.1c\S20210506\R195633\PZAH4.1c_SphereOpen_NewParams_S20210506_R195633.csv
              Append=false
              Overwrite=false
              Suffix=Timestamp
              IncludeHeader=true

            Disable BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParamsOpen => #18
            Disable SubscribeSubject Frames => #19
            Disable SubscribeSubject SaveGeneralPrefix => #20
            Disable SubscribeSubject SaveDate => #21
            Disable ExternalizedMapping(Value(DisplayName="SaveFilename AllParams", Category=ParamLogger))
            -> Disable StringProperty(Value=SphereOpen_AllParams) => #23
            Disable SubscribeSubject Metadata => #24
            Disable SubscribeSubject SaveTimestamp => #25
            #20, #21, #25, #23, #24 -> Disable Zip
            -> Disable Format(Format={0}\S{1}\R{2}\{4}_{3}_S{1}_R{2}.csv, Selector="Item1,Item2,Item3,Item4,Item5.Animal")
            -> Disable PropertyMapping(FileName) => #28
            Disable SubscribeSubject StartTrigger => #29
            #19, #29 -> Disable WithLatestFrom
            -> Disable MemberSelector(Selector=Item1) => #31
            #18, #31 -> Disable WithLatestFrom
            -> Disable IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> Disable Bonsai.Scripting.ExpressionTransform => #34
              Expression:
                new(
                Value.Item2.Index as Frame,
                Timestamp as HarpTime,
                Value.Item2.Value.ElapsedTime as FrameElapsedTime,
                Value.Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
                Value.Item1.Item1.Item1 as SphereID,
                Math.Round(Value.Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
                Math.Round(Value.Item1.Item1.Item2.Item2/Math.PI*180) as Theta,
                Value.Item1.Item1.Item2.Item3 as Radius,
                Value.Item1.Item1.Item3.Item1 as X,
                Value.Item1.Item1.Item3.Item2 as Y,
                Value.Item1.Item1.Item3.Item3 as Z0,
                Value.Item1.Item1.Item3.Item4 as Z,
                Value.Item1.Item1.Item3.Item5 as MouseZ,
                Value.Item1.Item1.Item4.Item1 as OriginalSize,
                Value.Item1.Item1.Item4.Item2 as Size,
                Value.Item1.Item2 as Ambient)
            #34, #28 -> Disable Bonsai.IO.CsvWriter
              FileName=D:\data\PZAH4.1c\S20210506\R195633\PZAH4.1c_SphereOpen_AllParams_S20210506_R195633.csv
              Append=false
              Overwrite=true
              Suffix=Timestamp
              IncludeHeader=true
Disable Bonsai.Windows.Input.KeyDown(Filter="Space NumPad0 Control Alt", SuppressRepetitions=true) => #23
#22, #23 -> Disable TakeUntil
