<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>40095643</p1:SerialNumber>
          <p1:ParameterFile>D:\code\Camera-settings\acA1440-220um_40095643_triggered_25msframes.pfs</p1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BaseName</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_LeftEyeCam.avi</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>LeftEyeFrame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>40095665</p1:SerialNumber>
          <p1:ParameterFile>D:\code\Camera-settings\acA1440-220um_40095643_triggered_25msframes.pfs</p1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BaseName</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_RightEyeCam.avi</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>RightEyeFrame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>40095669</p1:SerialNumber>
          <p1:ParameterFile>D:\code\Camera-settings\acA1440-220um_40095643_triggered_25msframes.pfs</p1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BaseName</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_FaceCam.avi</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>FaceFrame</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:PylonCapture">
            <p1:SerialNumber>40095643</p1:SerialNumber>
            <p1:ParameterFile>D:\code\Camera-settings\acA1440-220um_40095643_triggered_25msframes.pfs</p1:ParameterFile>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BaseName</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}_LeftBehavCam.avi</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>30</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PublishSubject">
          <Name>GlobalViewFrame</Name>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="26" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>