<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Silver</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>E:\vis-stim\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseMove" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>2000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LatestOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
0 as X,
0 as Y,
it-5 as EyeZ,
it+1 as TargetZ)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" Selector="X,Y,EyeZ" />
          <Property Name="Target" Selector="X,Y,TargetZ" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>-4.955</Z>
        </Eye>
        <Target>
          <X>0</X>
          <Y>0</Y>
          <Z>1.045</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.001</NearClip>
        <FarClip>100</FarClip>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\vis-stim\vis-stim-depth\Spheres\Files_inputs\TranslationY_multi_deg.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:DegreeToRadian" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\vis-stim\vis-stim-depth\Spheres\Files_inputs\TranslationZ_multi_radius.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\vis-stim\vis-stim-depth\Spheres\Files_inputs\TranslationX_multi_deg.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:DegreeToRadian" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
          <gl:Period>PT1S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Buffer">
          <rx:Count>5</rx:Count>
          <rx:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
It[0].Item1 as Azimuth,
It[0].Item2 as Elevation,
It[0].Item3 as Radius
)</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Radius*Math.Cos(it.Azimuth)*Math.Sin(Math.PI/2 - it.Elevation) as X,
it.Radius*Math.Cos(Math.PI/2 - it.Elevation) as Y,
it.Radius*Math.Sin(it.Azimuth)*Math.Sin(Math.PI/2 - it.Elevation) as Z
)

</scr:Expression>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="TranslationX" Selector="Item2.X" />
                <Property Name="TranslationY" Selector="Item2.Y" />
                <Property Name="TranslationZ" Selector="Item2.Z" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>1.35299027</TranslationX>
              <TranslationY>3.535534</TranslationY>
              <TranslationZ>3.26640749</TranslationZ>
              <ScaleX>0.1</ScaleX>
              <ScaleY>0.1</ScaleY>
              <ScaleZ>0.1</ScaleZ>
              <MeshName>sphere</MeshName>
              <Ambient>
                <X>1</X>
                <Y>1</Y>
                <Z>1</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT10S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="21" Label="Source2" />
      <Edge From="17" To="21" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source4" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>