<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>InitBonvision3D</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TestInitBonvision3D</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ShaderResources">
                <gl:Shaders />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:MeshResources">
                <gl:Meshes>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>sphere</gl:Name>
                    <gl:FileName>E:\vis-stim\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
                  </gl:MeshConfiguration>
                </gl:Meshes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PublishSubject">
                <Name>MouseZ</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>CalibrationFiles</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
              <Duration>100</Duration>
              <RangeBegin>0</RangeBegin>
              <RangeEnd>500</RangeEnd>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>MouseZClose</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CloseLoopDuration</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT20S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenLoopStartTime</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT25S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>MouseZOpenStart</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZClose</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZClose</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenLoopStartTime</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT25S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZOpenStart</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Rename1</scr:Name>
              <scr:Expression>new(
0 as X,
0 as Y,
it as EyeZ)</scr:Expression>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Eye</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Eye" Selector="X,Y,EyeZ" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetViewports</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateViewportState">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Width>1</gl:Width>
                      <gl:Height>1</gl:Height>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen1pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen2pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen3pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen4pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen1pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen2pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen3pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen4pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Eye" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
                    <Eye>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>176.083344</Z>
                    </Eye>
                    <NearClip>0.1</NearClip>
                    <FarClip>1000</FarClip>
                    <Light>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Light>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderCubemap">
                      <gl:RenderState />
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:FaceSize xsi:nil="true" />
                      <gl:InternalFormat>Rgb</gl:InternalFormat>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.00062900001648813486</X>
                      <Y>-1.5299999713897705</Y>
                      <Z>0.0082700001075863838</Z>
                    </Rotation>
                    <Translation>
                      <X>-27</X>
                      <Y>-0.11900000274181366</Y>
                      <Z>0.79100000858306885</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.0017999999690800905</X>
                      <Y>-0.47299998998641968</Y>
                      <Z>0.018699999898672104</Z>
                    </Rotation>
                    <Translation>
                      <X>-13.300000190734863</X>
                      <Y>0.29100000858306885</Y>
                      <Z>23.5</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.25</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.014499999582767487</X>
                      <Y>0.42399999499320984</Y>
                      <Z>0.008320000022649765</Z>
                    </Rotation>
                    <Translation>
                      <X>16.200000762939453</X>
                      <Y>0.51899999380111694</Y>
                      <Z>21.299999237060547</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.5</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.0082000000402331352</X>
                      <Y>1.5900000333786011</Y>
                      <Z>-0.0019099999917671084</Z>
                    </Rotation>
                    <Translation>
                      <X>29.5</X>
                      <Y>0.41800001263618469</Y>
                      <Z>-0.65100002288818359</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.75</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="19" Label="Source1" />
                  <Edge From="2" To="22" Label="Source2" />
                  <Edge From="3" To="31" Label="Source2" />
                  <Edge From="4" To="40" Label="Source2" />
                  <Edge From="5" To="49" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="25" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="34" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="43" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="52" Label="Source2" />
                  <Edge From="14" To="28" Label="Source2" />
                  <Edge From="15" To="37" Label="Source2" />
                  <Edge From="16" To="46" Label="Source2" />
                  <Edge From="17" To="55" Label="Source2" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="21" To="31" Label="Source1" />
                  <Edge From="21" To="40" Label="Source1" />
                  <Edge From="21" To="49" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="58" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="58" Label="Source2" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="58" Label="Source3" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                  <Edge From="54" To="55" Label="Source1" />
                  <Edge From="55" To="56" Label="Source1" />
                  <Edge From="56" To="57" Label="Source1" />
                  <Edge From="57" To="58" Label="Source4" />
                  <Edge From="58" To="59" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="34" Label="Source1" />
            <Edge From="27" To="30" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PhotodiodeQuad</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Ambient" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ScaleX" />
              <Property Name="ScaleY" />
              <Property Name="ScaleZ" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="PhotoquadX" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="PhotoquadY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-35</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="PhotoquadZ" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>SphericalCoordinates</scr:Name>
              <scr:Expression>new(
Item3 * Math.Cos(Item2) * Math.Cos(Item1) as X,
Item3 * Math.Sin(Item2) as Y,
Item3 * Math.Cos(Item2) * Math.Sin(Item1) as Z0
)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Z0</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Eye</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EyeZ</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TranslationZ" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>3.8487556</TranslationX>
              <TranslationY>-2.86788225</TranslationY>
              <TranslationZ>174.68251</TranslationZ>
              <ScaleX>0.5</ScaleX>
              <ScaleY>0.5</ScaleY>
              <ScaleZ>0.5</ScaleZ>
              <MeshName>Plane</MeshName>
              <Ambient>
                <X>1</X>
                <Y>1</Y>
                <Z>1</Z>
              </Ambient>
              <Diffuse>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Diffuse>
              <Specular>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <RotationZ>0</RotationZ>
              <RotationY>90</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="30" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="30" Label="Source2" />
            <Edge From="6" To="25" Label="Source1" />
            <Edge From="7" To="30" Label="Source6" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="16" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="17" To="22" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="30" Label="Source3" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="30" Label="Source4" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source5" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SpheresClose</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Size" Category="MiscParams" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.05</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>OriginalSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="InitialDelay" Category="Timings" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LifeTime" Category="Timings" />
              <Property Name="Ymin" Category="Positions" />
              <Property Name="Ymax" Category="Positions" />
              <Property Name="Ycount" Category="Positions" />
              <Property Name="DepthMin" Category="Positions" />
              <Property Name="DepthMax" Category="Positions" />
              <Property Name="DepthCount" Category="Positions" />
              <Property Name="SphereInterval" Category="Timings" />
              <Property Name="Xmin" Category="Positions" />
              <Property Name="XminLim" Category="Positions" />
              <Property Name="XminCount" Category="Positions" />
              <Property Name="XmaxLim" Category="Positions" />
              <Property Name="Xmax" Category="Positions" />
              <Property Name="XmaxCount" Category="Positions" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetParams</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LifeTime" Category="Timings" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>LifeTime</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Ymin" Category="Position" />
                    <Property Name="Ymax" Category="Position" />
                    <Property Name="Ycount" Category="Position" />
                    <Property Name="DepthMin" Category="Position" />
                    <Property Name="DepthMax" Category="Position" />
                    <Property Name="DepthCount" Category="Position" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Period" DisplayName="SphereInterval" Category="Timings" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                      <gl:Period>PT0.5S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Xmin" />
                    <Property Name="XminLim" />
                    <Property Name="XminCount" />
                    <Property Name="XmaxLim" />
                    <Property Name="Xmax" />
                    <Property Name="XmaxCount" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Xrange</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="RangeMin" DisplayName="Xmin" />
                          <Property Name="RangeMax" DisplayName="XminLim" />
                          <Property Name="Count" DisplayName="XminCount" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                          <RangeMin>70</RangeMin>
                          <RangeMax>60</RangeMax>
                          <Count>2</Count>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="RangeMin" DisplayName="XmaxLim" />
                          <Property Name="RangeMax" DisplayName="Xmax" />
                          <Property Name="Count" DisplayName="XmaxCount" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                          <RangeMin>110</RangeMin>
                          <RangeMax>120</RangeMax>
                          <Count>2</Count>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="CreateObservable">
                    <Name>YZrange</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="RangeMin" DisplayName="Ymin" />
                          <Property Name="RangeMax" DisplayName="Ymax" />
                          <Property Name="Count" DisplayName="Ycount" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                          <RangeMin>-20</RangeMin>
                          <RangeMax>20</RangeMax>
                          <Count>3</Count>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DepthMin" />
                          <Property Name="DepthMax" />
                          <Property Name="DepthCount" />
                        </Expression>
                        <Expression xsi:type="CreateObservable">
                          <Name>DepthRange</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="RangeMin" DisplayName="DepthMin" />
                                <Property Name="RangeMax" DisplayName="DepthMax" />
                                <Property Name="Count" DisplayName="DepthCount" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                                <RangeMin>1</RangeMin>
                                <RangeMax>2</RangeMax>
                                <Count>2</Count>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>LogSpace(10)</scr:Name>
                                <scr:Expression>Math.Pow(10,it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:CombineLatest" />
                              </Expression>
                              <Expression xsi:type="InputMapping">
                                <PropertyMappings>
                                  <Property Name="X" Selector="Item1.Item1" />
                                  <Property Name="Y" Selector="Item1.Item2" />
                                  <Property Name="Z" Selector="Item2" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:CreateVector3">
                                  <gl:X>120</gl:X>
                                  <gl:Y>20</gl:Y>
                                  <gl:Z>100</gl:Z>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="4" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Permutation" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
it.X as X,
it.Y as Y, 
it.Z as Depth
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CloseLoopDuration</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LifeTime</Name>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>-1E+07</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT10S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="ReplaySubject">
                    <Name>Xdeg</Name>
                    <BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="ReplaySubject">
                    <Name>Ydeg</Name>
                    <BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Depth</Selector>
                  </Expression>
                  <Expression xsi:type="ReplaySubject">
                    <Name>Depth</Name>
                    <BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="8" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="11" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="22" Label="Source1" />
                  <Edge From="15" To="18" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="22" To="26" Label="Source1" />
                  <Edge From="22" To="29" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="31" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="31" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source3" />
                  <Edge From="31" To="32" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SphericalCoordinates" />
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>CreateSpheres</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>ThisSphereParams</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SphereNewParams</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LifeTime</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LifeTime</Name>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1E+07</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT10S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeStep.ElapsedRealTime</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisSphereParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateFading" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SphereAllParams</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename</scr:Name>
                    <scr:Expression>new(
Item1 as Draw,
Item2.Item2 as Ambient,
Item2.Item1.Item1 as SphereID,
Item2.Item1.Item2.Item1 as Azimuth,
Item2.Item1.Item2.Item2 as Elevation,
Item2.Item1.Item2.Item3 as Depth,
Item2.Item1.Item3.Item1 as X, 
Item2.Item1.Item3.Item2 as Y, 
Item2.Item1.Item3.Item3 as Z0, 
Item2.Item1.Item3.Item4 as Z, 
Item2.Item1.Item3.Item5 as MouseZ,
Item2.Item1.Item4.Item2 as Size)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="TranslationX" Selector="X" />
                      <Property Name="TranslationY" Selector="Y" />
                      <Property Name="TranslationZ" Selector="Z" />
                      <Property Name="ScaleX" Selector="Size" />
                      <Property Name="ScaleY" Selector="Size" />
                      <Property Name="ScaleZ" Selector="Size" />
                      <Property Name="Ambient" Selector="Ambient" />
                    </PropertyMappings>
                    <Selector>Draw</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                    <TranslationX>4.99999952</TranslationX>
                    <TranslationY>0</TranslationY>
                    <TranslationZ>65.07692</TranslationZ>
                    <ScaleX>0.5</ScaleX>
                    <ScaleY>0.5</ScaleY>
                    <ScaleZ>0.5</ScaleZ>
                    <MeshName>sphere</MeshName>
                    <Ambient>
                      <X>0.5</X>
                      <Y>0.5</Y>
                      <Z>0.5</Z>
                    </Ambient>
                    <Diffuse>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Diffuse>
                    <Specular>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Specular>
                    <SpecularExponent>10</SpecularExponent>
                    <RotationZ>0</RotationZ>
                    <RotationY>0</RotationY>
                    <RotationX>0</RotationX>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="16" Label="Source1" />
                  <Edge From="3" To="18" Label="Source1" />
                  <Edge From="4" To="14" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="22" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="14" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="10" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="14" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SphereParamsLoggerClose</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Frames</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Tuple(sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single,sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single))">
              <Name>SphereNewParams</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Frames</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2.Index as Frame,
Item2.Value.ElapsedTime as FrameElapsedTime,
Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
Item1.Item1 as SphereID,
Math.Round(Item1.Item2.Item1/Math.PI*180) as Azimuth,
Math.Round(Item1.Item2.Item2/Math.PI*180) as Elevation,
Item1.Item2.Item3 as Depth,
Item1.Item3.Item1 as X, 
Item1.Item3.Item2 as Y, 
Item1.Item3.Item3 as Z0, 
Item1.Item3.Item4 as Z, 
Item1.Item3.Item5 as MouseZ,
Item1.Item4.Item1 as OriginalSize,
Item1.Item4.Item2 as Size)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>saved_csv\Spheres_NewParams.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SphereID</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Azimuth</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Elevation</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Depth</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Frame</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item5 as Frame,
Item1 as SphereID,
Item2 as Azimuth,
Item3 as Elevation,
Item4 as Depth
)</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>SphereParamsReplay</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Tuple(sys:Tuple(sys:Int32,sys:Tuple(sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single,sys:Single,sys:Single,sys:Single),sys:Tuple(sys:Single,sys:Single)),sys:Single)">
              <Name>SphereAllParams</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Frames</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2.Index as Frame,
Item2.Value.ElapsedTime as FrameElapsedTime,
Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
Item1.Item1.Item1 as SphereID,
Math.Round(Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
Math.Round(Item1.Item1.Item2.Item2/Math.PI*180) as Elevation,
Item1.Item1.Item2.Item3 as Depth,
Item1.Item1.Item3.Item1 as X, 
Item1.Item1.Item3.Item2 as Y, 
Item1.Item1.Item3.Item3 as Z0, 
Item1.Item1.Item3.Item4 as Z, 
Item1.Item1.Item3.Item5 as MouseZ,
Item1.Item1.Item4.Item1 as OriginalSize,
Item1.Item1.Item4.Item2 as Size,
Item1.Item2 as Ambient)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>saved_csv\Spheres_AllParams.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CloseLoopDuration</Name>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>P2314DT19H33M17.3982208S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="15" Label="Source2" />
            <Edge From="12" To="15" Label="Source3" />
            <Edge From="13" To="15" Label="Source4" />
            <Edge From="14" To="15" Label="Source5" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BasicSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CloseLoopDuration" Category="Timings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>CloseLoopDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitialDelayReplay" Category="Timings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>InitialDelayReplay</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="BehaviorSubject">
              <Name>OpenLoopStartTime</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SpheresOpen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Ydeg</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Depth</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CloseLoopDuration</Name>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1E+07</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>P2314DT19H33M17.3982208S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OriginalSize</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Xdeg</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenLoopStartTime</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT25S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SphericalCoordinates" />
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>CreateSpheres</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BehaviorSubject">
                    <Name>ThisSphereParams</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>SphereNewParams</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LifeTime</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LifeTime</Name>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="FloatProperty">
                      <Value>1E+07</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT10S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeStep.ElapsedRealTime</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisSphereParams</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateFading" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MulticastSubject">
                      <Name>SphereAllParams</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Rename</scr:Name>
                    <scr:Expression>new(
Item1 as Draw,
Item2.Item2 as Ambient,
Item2.Item1.Item1 as SphereID,
Item2.Item1.Item2.Item1 as Azimuth,
Item2.Item1.Item2.Item2 as Elevation,
Item2.Item1.Item2.Item3 as Depth,
Item2.Item1.Item3.Item1 as X, 
Item2.Item1.Item3.Item2 as Y, 
Item2.Item1.Item3.Item3 as Z0, 
Item2.Item1.Item3.Item4 as Z, 
Item2.Item1.Item3.Item5 as MouseZ,
Item2.Item1.Item4.Item2 as Size)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="TranslationX" Selector="X" />
                      <Property Name="TranslationY" Selector="Y" />
                      <Property Name="TranslationZ" Selector="Z" />
                      <Property Name="ScaleX" Selector="Size" />
                      <Property Name="ScaleY" Selector="Size" />
                      <Property Name="ScaleZ" Selector="Size" />
                      <Property Name="Ambient" Selector="Ambient" />
                    </PropertyMappings>
                    <Selector>Draw</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                    <TranslationX>3.213938</TranslationX>
                    <TranslationY>-3.4202013</TranslationY>
                    <TranslationZ>182.830215</TranslationZ>
                    <ScaleX>0.5</ScaleX>
                    <ScaleY>0.5</ScaleY>
                    <ScaleZ>0.5</ScaleZ>
                    <MeshName>sphere</MeshName>
                    <Ambient>
                      <X>0.332554638</X>
                      <Y>0.332554638</Y>
                      <Z>0.332554638</Z>
                    </Ambient>
                    <Diffuse>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Diffuse>
                    <Specular>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Specular>
                    <SpecularExponent>10</SpecularExponent>
                    <RotationZ>0</RotationZ>
                    <RotationY>0</RotationY>
                    <RotationX>0</RotationX>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="16" Label="Source1" />
                  <Edge From="3" To="18" Label="Source1" />
                  <Edge From="4" To="14" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="22" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="14" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="11" Label="Source2" />
            <Edge From="2" To="11" Label="Source3" />
            <Edge From="3" To="17" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="21" Label="Source2" />
            <Edge From="8" To="16" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>