<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>E:\vis-stim\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseMove" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>2000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LatestOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>MouseZ</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Name>Rename1</scr:Name>
          <scr:Expression>new(
0 as X,
0 as Y,
it as EyeZ,
it+1 as TargetZ)</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="Eye" Selector="X,Y,EyeZ" />
            <Property Name="Target" Selector="X,Y,TargetZ" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <Target>
          <X>0</X>
          <Y>0</Y>
          <Z>5.395</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.001</NearClip>
        <FarClip>100</FarClip>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
        <TranslationX>-1</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>3</TranslationZ>
        <ScaleX>0.3</ScaleX>
        <ScaleY>0.3</ScaleY>
        <ScaleZ>0.3</ScaleZ>
        <MeshName>sphere</MeshName>
        <Ambient>
          <X>0.5</X>
          <Y>0.5</Y>
          <Z>0.5</Z>
        </Ambient>
        <Diffuse>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
        <TranslationX>1</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>5</TranslationZ>
        <ScaleX>0.5</ScaleX>
        <ScaleY>0.5</ScaleY>
        <ScaleZ>0.5</ScaleZ>
        <MeshName>sphere</MeshName>
        <Ambient>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>