<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Silver</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>E:\vis-stim\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseMove" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>2000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LatestOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>-7</Z>
        </Eye>
        <Target>
          <X>0</X>
          <Y>0</Y>
          <Z>-1</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.001</NearClip>
        <FarClip>100</FarClip>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\vis-stim\vis-stim-depth\Spheres\Files_inputs\TranslationX_multi_deg.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\vis-stim\vis-stim-depth\Spheres\Files_inputs\TranslationY_multi_deg.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\vis-stim\vis-stim-depth\Spheres\Files_inputs\TranslationZ_multi_radius.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Rename2</scr:Name>
        <scr:Expression>new(
It.Item1 as Azimuth,
It.Item2 as Elevation,
It.Item3 as Radius
)</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>SphericalTransform</scr:Name>
        <scr:Expression>new(
it.Radius*Math.Cos(it.Azimuth)*Math.Sin(Math.PI/2 - it.Elevation) as X,
it.Radius*Math.Cos(Math.PI/2 - it.Elevation) as Y,
Math.abs(it.Radius*Math.Sin(it.Azimuth)*Math.Sin(Math.PI/2 - it.Elevation)) as Z
)

</scr:Expression>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="TranslationX" Selector="Item2.X" />
                <Property Name="TranslationY" Selector="Item2.Y" />
                <Property Name="TranslationZ" Selector="Item2.Z" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>-2.6163342</TranslationX>
              <TranslationY>-4.25451756</TranslationY>
              <TranslationZ>0.232110068</TranslationZ>
              <ScaleX>0.1</ScaleX>
              <ScaleY>0.1</ScaleY>
              <ScaleZ>0.1</ScaleZ>
              <MeshName>sphere</MeshName>
              <Ambient>
                <X>1</X>
                <Y>1</Y>
                <Z>1</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="gl:Timer">
                  <gl:DueTime>PT4S</gl:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="14" To="15" Label="Source3" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>