<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>TestInitBonvision3D</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ShaderResources">
                <gl:Shaders />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:MeshResources">
                <gl:Meshes>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>sphere</gl:Name>
                    <gl:FileName>E:\vis-stim\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
                  </gl:MeshConfiguration>
                </gl:Meshes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PublishSubject">
                <Name>MouseZ</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>CalibrationFiles</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
              <Duration>100</Duration>
              <RangeBegin>0</RangeBegin>
              <RangeEnd>500</RangeEnd>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZ</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Name>Rename1</scr:Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PublishSubject">
                <Name>Eye</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetViewports</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateViewportState">
                      <gl:X>0</gl:X>
                      <gl:Y>0</gl:Y>
                      <gl:Width>1</gl:Width>
                      <gl:Height>1</gl:Height>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen1pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen2pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen3pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen4pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>GammaLut</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen1pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen2pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen3pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>Screen4pos</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Eye" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
                    <Eye>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Eye>
                    <NearClip>0.1</NearClip>
                    <FarClip>1000</FarClip>
                    <Light>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Light>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderCubemap">
                      <gl:RenderState />
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:FaceSize xsi:nil="true" />
                      <gl:InternalFormat>Rgb</gl:InternalFormat>
                      <gl:MinFilter>Linear</gl:MinFilter>
                      <gl:MagFilter>Linear</gl:MagFilter>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.00062900001648813486</X>
                      <Y>-1.5299999713897705</Y>
                      <Z>0.0082700001075863838</Z>
                    </Rotation>
                    <Translation>
                      <X>-27</X>
                      <Y>-0.11900000274181366</Y>
                      <Z>0.79100000858306885</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.0017999999690800905</X>
                      <Y>-0.47299998998641968</Y>
                      <Z>0.018699999898672104</Z>
                    </Rotation>
                    <Translation>
                      <X>-13.300000190734863</X>
                      <Y>0.29100000858306885</Y>
                      <Z>23.5</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.25</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.014499999582767487</X>
                      <Y>0.42399999499320984</Y>
                      <Z>0.008320000022649765</Z>
                    </Rotation>
                    <Translation>
                      <X>16.200000762939453</X>
                      <Y>0.51899999380111694</Y>
                      <Z>21.299999237060547</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.5</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>29.296875</Width>
                    <Height>52.0833321</Height>
                    <Rotation>
                      <X>0.0082000000402331352</X>
                      <Y>1.5900000333786011</Y>
                      <Z>-0.0019099999917671084</Z>
                    </Rotation>
                    <Translation>
                      <X>29.5</X>
                      <Y>0.41800001263618469</Y>
                      <Z>-0.65100002288818359</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>GammaCorrection</Name>
                      <Description>Renders the current scene to a texture and applies gamma correction as a post-processing effect.</Description>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="InputMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.75</X>
                    <Y>0</Y>
                    <Width>0.25</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="19" Label="Source1" />
                  <Edge From="2" To="22" Label="Source2" />
                  <Edge From="3" To="31" Label="Source2" />
                  <Edge From="4" To="40" Label="Source2" />
                  <Edge From="5" To="49" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="25" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="34" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="43" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="52" Label="Source2" />
                  <Edge From="14" To="28" Label="Source2" />
                  <Edge From="15" To="37" Label="Source2" />
                  <Edge From="16" To="46" Label="Source2" />
                  <Edge From="17" To="55" Label="Source2" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="21" To="31" Label="Source1" />
                  <Edge From="21" To="40" Label="Source1" />
                  <Edge From="21" To="49" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="58" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="58" Label="Source2" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="45" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="58" Label="Source3" />
                  <Edge From="49" To="50" Label="Source1" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                  <Edge From="54" To="55" Label="Source1" />
                  <Edge From="55" To="56" Label="Source1" />
                  <Edge From="56" To="57" Label="Source1" />
                  <Edge From="57" To="58" Label="Source4" />
                  <Edge From="58" To="59" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Spheres</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>SetParams</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MouseZ</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="BehaviorSubject">
                <Name>OriginalSize</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SelectMany">
                <Name>CreateSpheres</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SelectMany">
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              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>0</RangeMin>
              <RangeMax>20</RangeMax>
              <Count>5</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>-20</RangeMin>
              <RangeMax>0</RangeMax>
              <Count>5</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                    <RangeMin>0</RangeMin>
                    <RangeMax>1</RangeMax>
                    <Count>5</Count>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Variation">
                <num:Count>3</num:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>5</RangeMin>
              <RangeMax>3</RangeMax>
              <Count>2</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Variation">
                <num:Count>1</num:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Pos</Name>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>CreateSpheres</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="TranslationX" Selector="Item2.Value.Item1.Item1" />
                      <Property Name="TranslationY" Selector="Item2.Value.Item1.Item2" />
                      <Property Name="TranslationZ" Selector="Item2.Value.Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                    <TranslationX>0</TranslationX>
                    <TranslationY>0.75</TranslationY>
                    <TranslationZ>5</TranslationZ>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ScaleZ>1</ScaleZ>
                    <MeshName>sphere</MeshName>
                    <Ambient>
                      <X>1</X>
                      <Y>1</Y>
                      <Z>1</Z>
                    </Ambient>
                    <Diffuse>
                      <X>0.8</X>
                      <Y>0.8</Y>
                      <Z>0.8</Z>
                    </Diffuse>
                    <Specular>
                      <X>0.8</X>
                      <Y>0.8</Y>
                      <Z>0.8</Z>
                    </Specular>
                    <SpecularExponent>10</SpecularExponent>
                    <RotationZ>0</RotationZ>
                    <RotationY>0</RotationY>
                    <RotationX>0</RotationX>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowOutput" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Pos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2 as Frame,
Item1.Index as idx,
Item1.Value.Item1.Item1 as X,
Item1.Value.Item1.Item2 as Y,
Item1.Value.Item2 as Z
)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>saved_csv\snpos.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="10" Label="Source1" />
            <Edge From="2" To="13" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="12" Label="Source2" />
            <Edge From="7" To="17" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="36" Label="Source2" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="32" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="43" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>TestInitBonvision2D</Name>
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        </Builder>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>