WorkflowBuilder(Version=2.6.0)
GroupWorkflow InitBonvision3D
    ExternalizedMapping(WindowState, DisplayDevice, ClearColor)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Fixed
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=0
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=sphere, FileName=D:\code\vis-stim-depth\Spheres\Objects\sphere.obj)))
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources

    Disable Bonsai.Windows.Input.MouseMove
    -> Disable MemberSelector(Selector=Y)
    -> Disable Bonsai.Dsp.Rescale(Min=0, Max=2000, RangeMin=0, RangeMax=10, RescaleType=Linear)
    -> Disable Bonsai.Shaders.LatestOnUpdateFrame
    -> Disable PublishSubject MouseZ

    ExternalizedMapping(ScreenCalibFile(Category=Calibrations), GammaCalibFile(Category=Calibrations))
    -> GroupWorkflow CalibrationFiles
        ExternalizedMapping(FileName(DisplayName=ScreenCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\monitor_calibration.csv, ListSeparator=",", ScanPattern=%f, SkipRows=1)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression:
            new(
            it[0] as Screen1_params,
            it[1] as Screen2_params,
            it[2] as Screen3_params,
            it[3] as Screen4_params
            )
        -> MemberSelector(Selector=Screen1_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen1pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen2_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen2pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen3_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen3pos(BufferSize=nil)
        #3 -> MemberSelector(Selector=Screen4_params)
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Height,
            it[1] as Width,
            it[2] as RotationX,
            -it[3] as RotationY,
            it[4] as RotationZ,
            it[5] as TranslationX,
            it[6] as TranslationY,
            -it[7] as TranslationZ,
            it[8] as ViewportWidth,
            it[9] as ViewportX
            )
        -> ReplaySubject Screen4pos(BufferSize=nil)

        ExternalizedMapping(FileName(DisplayName=GammaCalibFile, Category=Calibration))
        -> Bonsai.IO.CsvReader(FileName=D:\code\vis-stim-depth\Calibrations\gamma_calibration.csv, ListSeparator="", ScanPattern=%s, SkipRows=0)
        -> ToArray
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            it[0] as Screen1_gammalut,
            it[1] as Screen2_gammalut,
            it[2] as Screen3_gammalut,
            it[3] as Screen4_gammalut
            )
        -> ReplaySubject GammaLut(BufferSize=nil)

    GroupWorkflow SetMouseZ
        SubscribeSubject "Mouse Distance" => #0
        Bonsai.Shaders.UpdateFrame => #1
        #1, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Disable IncludeWorkflow(Path=BonVision:Primitives.RangeAnimation.bonsai, Duration=100, RangeBegin=0, RangeEnd=500)
        -> PublishSubject MouseZ

        SubscribeSubject MouseZ
        -> ReplaySubject MouseZClose(BufferSize=nil) => #7
        SubscribeSubject CloseLoopDuration
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT3M20S) => #10
        #7, #10 -> TakeUntil

        SubscribeSubject MouseZ => #12
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT3M25S) => #15
        #12, #15 -> Sample
        -> BehaviorSubject MouseZOpenStart

    GroupWorkflow MouseDistance
        SubscribeSubject MouseZClose => #0
        SubscribeSubject MouseZClose => #1
        SubscribeSubject OpenLoopStartTime
        -> PropertyMapping(DueTime) => #3
        #1, #3 -> Bonsai.Shaders.Delay(DueTime=PT3M25S) => #4
        SubscribeSubject MouseZOpenStart => #5
        #4, #5 -> WithLatestFrom
        -> Add => #7
        #0, #7 -> Merge
        -> Bonsai.Scripting.ExpressionTransform Rename1
          Expression:
            new(
            0 as X,
            0 as Y,
            it as EyeZ)
        -> WorkflowOutput
    -> PublishSubject Eye
    -> PropertyMapping(Eye(Selector="X,Y,EyeZ"))
    -> GroupWorkflow SetViewports
        Bonsai.Shaders.RenderFrame
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
        Disable SubscribeSubject Screen1pos => #2
        Disable SubscribeSubject Screen2pos => #3
        Disable SubscribeSubject Screen3pos => #4
        Disable SubscribeSubject Screen4pos => #5
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen1_gammalut) => #7
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen2_gammalut) => #9
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen3_gammalut) => #11
        Disable SubscribeSubject GammaLut
        -> Disable MemberSelector(Selector=Screen4_gammalut) => #13
        Disable SubscribeSubject Screen1pos => #14
        Disable SubscribeSubject Screen2pos => #15
        Disable SubscribeSubject Screen3pos => #16
        Disable SubscribeSubject Screen4pos => #17
        ExternalizedMapping(Eye) => #18
        #1, #18 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
        -> PublishSubject Draw
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #21
        #21, #2 -> Disable CombineLatest
        -> Disable InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #24
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.00062900001648813486, Y=-1.5299999713897705, Z=0.0082700001075863838)
          Translation(X=-27, Y=-0.11900000274181366, Z=0.79100000858306885)
        #24, #7 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #27
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr01.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #27, #14 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.25, Height=1) => #30
        #21, #3 -> Disable CombineLatest
        -> Disable InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #33
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0017999999690800905, Y=-0.47299998998641968, Z=0.018699999898672104)
          Translation(X=-13.300000190734863, Y=0.29100000858306885, Z=23.5)
        #33, #9 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #36
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr02.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #36, #15 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.25, Y=0, Width=0.25, Height=1) => #39
        #21, #4 -> Disable CombineLatest
        -> Disable InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #42
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.014499999582767487, Y=0.42399999499320984, Z=0.008320000022649765)
          Translation(X=16.200000762939453, Y=0.51899999380111694, Z=21.299999237060547)
        #42, #11 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #45
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr03.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #45, #16 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.25, Height=1) => #48
        #21, #5 -> Disable CombineLatest
        -> Disable InputMapping
          Selector=Item1
          Width(Selector=Item2.Width)
          Height(Selector=Item2.Height)
          Rotation(Selector="Item2.RotationX,Item2.RotationY,Item2.RotationZ")
          Translation(Selector="Item2.TranslationX,Item2.TranslationY,Item2.TranslationZ")
        -> IncludeWorkflow => #51
          Path=BonVision:Environment.ViewWindow.bonsai
          Width=29.296875
          Height=52.0833321
          Rotation(X=0.0082000000402331352, Y=1.5900000333786011, Z=-0.0019099999917671084)
          Translation(X=29.5, Y=0.41800001263618469, Z=-0.65100002288818359)
        #51, #13 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, GammaLut(Selector=Item2))
        -> GroupWorkflow GammaCorrection(Description="Renders the current scene to a texture and applies gamma correction as a post-processing effect.") => #54
            WorkflowInput Source1
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #1
            ExternalizedProperty ClearColor(MemberName=ClearColor, Category=Misc) => #2
            #1, #2 -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgb
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=Gamma, TextureTarget=Texture2D) => #4
            ExternalizedProperty GammaLut(MemberName=Value)
            -> PropertySource<Bonsai.Shaders.LoadImage,System.String>(MemberName=FileName, Value=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp)
            -> InputMapping(FileName)
            -> Bonsai.Shaders.LoadImage => #8
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=ClampToEdge
              WrapT=ClampToEdge
              MinFilter=Linear
              MagFilter=Linear
              FileName=D:\code\vis-stim-depth\Calibrations\calibration210305\gammalut_gray_Scr04.bmp
              ColorType=Unchanged
              FlipMode=Vertical
            #4, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=Gamma, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=Gamma, MeshName=ViewportQuad)
            -> WorkflowOutput
        #54, #17 -> Disable CombineLatest
        -> Disable InputMapping(Selector=Item1, X(Selector=Item2.ViewportX), Width(Selector=Item2.ViewportWidth))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.75, Y=0, Width=0.25, Height=1) => #57
        #30, #39, #48, #57 -> Zip
        -> WorkflowOutput

GroupWorkflow BasicSettings
    ExternalizedMapping(Value(DisplayName=CloseLoopDuration, Category=Timings))
    -> FloatProperty(Value=200)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject CloseLoopDuration => #3
    ExternalizedMapping(Value(DisplayName=InitialDelayReplay, Category=Timings))
    -> FloatProperty(Value=5)
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> BehaviorSubject InitialDelayReplay => #7
    #3, #7 -> Zip
    -> Add
    -> BehaviorSubject OpenLoopStartTime

GroupWorkflow PhotodiodeQuad
    SubscribeSubject Draw => #0
    Bonsai.Shaders.UpdateFrame
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> Mod(Operand=IntProperty(Value=2))
    -> PublishSubject PhotoQuadAmbient
    -> PropertyMapping(Ambient) => #6
    Disable Bonsai.Shaders.UpdateFrame => #7
    ExternalizedMapping(ScaleX, ScaleY, ScaleZ) => #8
    ExternalizedMapping(Value(DisplayName=PhotoquadX))
    -> FloatProperty(Value=-25)
    -> Bonsai.Numerics.DegreeToRadian => #11
    ExternalizedMapping(Value(DisplayName=PhotoquadY))
    -> FloatProperty(Value=-37)
    -> Bonsai.Numerics.DegreeToRadian => #14
    ExternalizedMapping(Value(DisplayName=PhotoquadZ))
    -> FloatProperty(Value=5) => #16
    #11, #14, #16 -> Zip
    -> Bonsai.Scripting.ExpressionTransform SphericalCoordinates => #18
      Expression:
        new(
        Item3 * Math.Cos(Item2) * Math.Cos(Item1) as X,
        Item3 * Math.Sin(Item2) as Y,
        Item3 * Math.Cos(Item2) * Math.Sin(Item1) as Z0
        )
    -> MemberSelector(Selector=X)
    -> PropertyMapping(TranslationX) => #20
    #18 -> MemberSelector(Selector=Y)
    -> PropertyMapping(TranslationY) => #22
    #18 -> MemberSelector(Selector=Z0) => #23
    SubscribeSubject Eye
    -> MemberSelector(Selector=EyeZ) => #25
    #7, #25 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2) => #27
    #23, #27 -> CombineLatest
    -> Add
    -> PropertyMapping(TranslationZ) => #30
    #0, #6, #20, #22, #30, #8 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=3.61904788
      TranslationY=-3.00907516
      TranslationZ=-1.68758976
      ScaleX=0.5
      ScaleY=0.5
      ScaleZ=0.5
      MeshName=Plane
      Ambient(X=0, Y=0, Z=0)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=10
      RotationZ=0
      RotationY=90
      RotationX=0
    -> WorkflowOutput

    Disable GroupWorkflow PhotoQuadLogger
        SubscribeSubject photodiode => #0
        SubscribeSubject PhotoQuadAmbient => #1
        Bonsai.Shaders.UpdateFrame
        -> MemberSelector(Selector=TimeStep)
        -> ElementIndex => #4
        #0, #1, #4 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item3.Index as Frame,
            Item3.Value.ElapsedTime as ElapsedTime,
            Item3.Value.ElapsedRealTime as ElapsedRealTime,
            Item2 as PhotodiodeAmbient,
            Item1 as PhotodiodeSignal
            )
        -> Bonsai.IO.CsvWriter(FileName=saved_csv\PhotodiodeQuad.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
        -> WorkflowOutput

GroupWorkflow Floor
    ExternalizedMapping(Period(DisplayName=RegenerateInterval))
    -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT1S)
    -> ElementIndex
    -> MemberSelector(Selector=Index) => #3
    ExternalizedMapping(TextureName, Ambient, TranslationX, TranslationY, ScaleZ, RotationX, RotationY, RotationZ) => #4
    SubscribeSubject FloorLength
    -> PropertyMapping(Value)
    -> FloatProperty(Value=1000) => #7
    #3, #7 -> CombineLatest
    -> Multiply => #9
    #9, #4 -> CreateObservable
        WorkflowInput Source1 => #0
        SubscribeSubject Draw => #1
        SubscribeSubject FloorWidth
        -> PropertyMapping(ScaleX) => #3
        ExternalizedMapping(TextureName) => #4
        #1, #4 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #5
        #5, #0 -> CombineLatest
        -> InputMapping(Selector=Item1, TranslationZ(Selector=Item2)) => #7
        SubscribeSubject FloorLength
        -> PropertyMapping(ScaleY) => #9
        ExternalizedMapping(Ambient, TranslationX, TranslationY, ScaleZ, RotationZ, RotationY, RotationX) => #10
        #7, #3, #9, #10 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=3000
          ScaleX=2
          ScaleY=1000
          ScaleZ=0
          MeshName=Plane
          Ambient(X=0.5, Y=0.5, Z=0.5)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=-90
        -> WorkflowOutput
    -> Merge

    ExternalizedMapping(Value(DisplayName=FloorLength))
    -> FloatProperty(Value=1000)
    -> BehaviorSubject FloorLength

    ExternalizedMapping(Value(DisplayName=FloorWidth))
    -> FloatProperty(Value=2)
    -> BehaviorSubject FloorWidth

GroupWorkflow SpheresClose(Description="Depth is in log10 space.")
    SubscribeSubject MouseZ => #0
    ExternalizedMapping(Value(DisplayName=Size, Category=MiscParams))
    -> FloatProperty(Value=0.043)
    -> BehaviorSubject OriginalSize
    -> Take(Count=1) => #4
    ExternalizedMapping(DueTime(DisplayName=InitialDelay, Category=Timings)) => #5
    ExternalizedMapping
      LifeTime(Category=Timings)
      Ymin(Category=Positions)
      Ymax(Category=Positions)
      Ycount(Category=Positions)
      DepthMin(Category=Positions)
      DepthMax(Category=Positions)
      DepthCount(Category=Positions)
      SphereInterval(Category=Timings)
      Xmin(Category=Positions)
      XminLim(Category=Positions)
      XminCount(Category=Positions)
      XmaxLim(Category=Positions)
      Xmax(Category=Positions)
      XmaxCount(Category=Positions)
    -> GroupWorkflow SetParams
        ExternalizedMapping(Value(DisplayName=LifeTime, Category=Timings))
        -> FloatProperty(Value=4)
        -> BehaviorSubject LifeTime

        ExternalizedMapping => #3
          Ymin(Category=Position)
          Ymax(Category=Position)
          Ycount(Category=Position)
          DepthMin(Category=Position)
          DepthMax(Category=Position)
          DepthCount(Category=Position)
        ExternalizedMapping(Period(DisplayName=SphereInterval, Category=Timings))
        -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.5S) => #5
        ExternalizedMapping(Xmin, XminLim, XminCount, XmaxLim, Xmax, XmaxCount)
        -> GroupWorkflow Xrange => #7
            ExternalizedMapping(RangeMin(DisplayName=Xmin), RangeMax(DisplayName=XminLim), Count(DisplayName=XminCount))
            -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=60, RangeMax=70, Count=2) => #1
            ExternalizedMapping(RangeMin(DisplayName=XmaxLim), RangeMax(DisplayName=Xmax), Count(DisplayName=XmaxCount))
            -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=110, RangeMax=120, Count=2) => #3
            #1, #3 -> Concat
            -> WorkflowOutput
        #7, #3 -> CreateObservable YZrange
            WorkflowInput Source1 => #0
            ExternalizedMapping(RangeMin(DisplayName=Ymin), RangeMax(DisplayName=Ymax), Count(DisplayName=Ycount))
            -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=40, Count=3) => #2
            #0, #2 -> CombineLatest => #3
            ExternalizedMapping(DepthMin, DepthMax, DepthCount) => #4
            #3, #4 -> CreateObservable DepthRange
                WorkflowInput Source1 => #0
                ExternalizedMapping(RangeMin(DisplayName=DepthMin), RangeMax(DisplayName=DepthMax), Count(DisplayName=DepthCount))
                -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=1, RangeMax=2, Count=2)
                -> Bonsai.Scripting.ExpressionTransform "LogSpace(10)" => #3
                  Expression: Math.Pow(10,it)
                #0, #3 -> CombineLatest
                -> InputMapping(X(Selector=Item1.Item1), Y(Selector=Item1.Item2), Z(Selector=Item2))
                -> Bonsai.Shaders.CreateVector3(X=120, Y=40, Z=100)
                -> WorkflowOutput
            -> Concat
            -> WorkflowOutput
        -> Concat
        -> Bonsai.Numerics.Permutation => #10
        #10, #5 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Repeat
        -> Bonsai.Scripting.ExpressionTransform => #14
          Expression:
            new(
            it.X as X,
            it.Y as Y,
            it.Z as Depth
            )
        SubscribeSubject CloseLoopDuration => #15
        SubscribeSubject LifeTime
        -> Multiply(Operand=FloatProperty(Value=-1E+07)) => #17
        #15, #17 -> Zip
        -> Add
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT3M16S) => #21
        #14, #21 -> TakeUntil => #22
        -> MemberSelector(Selector=X)
        -> ReplaySubject Xdeg(BufferSize=nil)
        -> Bonsai.Numerics.DegreeToRadian => #25
        #22 -> MemberSelector(Selector=Y)
        -> ReplaySubject Ydeg(BufferSize=nil)
        -> Bonsai.Numerics.DegreeToRadian => #28
        #22 -> MemberSelector(Selector=Depth)
        -> ReplaySubject Depth(BufferSize=nil) => #30
        #25, #28, #30 -> Zip
        -> WorkflowOutput
    -> ElementIndex => #8
    #8, #4 -> CombineLatest => #9
    #9, #0 -> WithLatestFrom
    -> SphericalCoordinates
    -> CreateObservable CreateSpheres
        WorkflowInput Source1
        -> BehaviorSubject ThisSphereParams
        -> MulticastSubject SphereNewParams => #2
        SubscribeSubject Draw => #3
        SubscribeSubject LifeTime => #4
        SubscribeSubject LifeTime
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT4S) => #8
        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Accumulate => #11
        SubscribeSubject ThisSphereParams
        -> MemberSelector(Selector=Item1) => #13
        #13, #11, #4 -> CombineLatest
        -> CreateFading => #15
        #2, #15 -> CombineLatest
        -> MulticastSubject SphereAllParams => #17
        #3, #17 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform Rename
          Expression:
            new(
            Item1 as Draw,
            Item2.Item2 as Ambient,
            Item2.Item1.Item1 as SphereID,
            Item2.Item1.Item2.Item1 as Azimuth,
            Item2.Item1.Item2.Item2 as Elevation,
            Item2.Item1.Item2.Item3 as Depth,
            Item2.Item1.Item3.Item1 as X,
            Item2.Item1.Item3.Item2 as Y,
            Item2.Item1.Item3.Item3 as Z0,
            Item2.Item1.Item3.Item4 as Z,
            Item2.Item1.Item3.Item5 as MouseZ,
            Item2.Item1.Item4.Item2 as Size)
        -> InputMapping
          Selector=Draw
          TranslationX(Selector=X)
          TranslationY(Selector=Y)
          TranslationZ(Selector=Z)
          ScaleX(Selector=Size)
          ScaleY(Selector=Size)
          ScaleZ(Selector=Size)
          Ambient(Selector=Ambient)
        -> IncludeWorkflow => #21
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-26.2002621
          TranslationY=64.27876
          TranslationZ=71.9846344
          ScaleX=4.3
          ScaleY=4.3
          ScaleZ=4.3
          MeshName=sphere
          Ambient(X=0.8822967, Y=0.8822967, Z=0.8822967)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=0
        #21, #8 -> TakeUntil
        -> WorkflowOutput
    -> Merge => #13
    #13, #5 -> DelaySubscription(DueTime=PT5S)
    -> WorkflowOutput

GroupWorkflow SphereParamsLoggerClose
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep)
    -> Accumulate
    -> ElementIndex
    -> PublishSubject Frames

    BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParams => #5
    SubscribeSubject Frames => #6
    #5, #6 -> WithLatestFrom
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item2.Index as Frame,
        Item2.Value.ElapsedTime as FrameElapsedTime,
        Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
        Item1.Item1 as SphereID,
        Math.Round(Item1.Item2.Item1/Math.PI*180) as Azimuth,
        Math.Round(Item1.Item2.Item2/Math.PI*180) as Elevation,
        Item1.Item2.Item3 as Depth,
        Item1.Item3.Item1 as X,
        Item1.Item3.Item2 as Y,
        Item1.Item3.Item3 as Z0,
        Item1.Item3.Item4 as Z,
        Item1.Item3.Item5 as MouseZ,
        Item1.Item4.Item1 as OriginalSize,
        Item1.Item4.Item2 as Size)
    -> Bonsai.IO.CsvWriter(FileName=saved_csv\Spheres_NewParams_Close.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true) => #9
    -> MemberSelector(Selector=SphereID) => #10
    #9 -> MemberSelector(Selector=Azimuth) => #11
    #9 -> MemberSelector(Selector=Elevation) => #12
    #9 -> MemberSelector(Selector=Depth) => #13
    #9 -> MemberSelector(Selector=Frame) => #14
    #10, #11, #12, #13, #14 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item5 as Frame,
        Item1 as SphereID,
        Item2 as Azimuth,
        Item3 as Elevation,
        Item4 as Depth
        )
    -> ReplaySubject SphereParamsReplay(BufferSize=nil)

    BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParams => #18
    SubscribeSubject Frames => #19
    #18, #19 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item2.Index as Frame,
        Item2.Value.ElapsedTime as FrameElapsedTime,
        Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
        Item1.Item1.Item1 as SphereID,
        Math.Round(Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
        Math.Round(Item1.Item1.Item2.Item2/Math.PI*180) as Elevation,
        Item1.Item1.Item2.Item3 as Depth,
        Item1.Item1.Item3.Item1 as X,
        Item1.Item1.Item3.Item2 as Y,
        Item1.Item1.Item3.Item3 as Z0,
        Item1.Item1.Item3.Item4 as Z,
        Item1.Item1.Item3.Item5 as MouseZ,
        Item1.Item1.Item4.Item1 as OriginalSize,
        Item1.Item1.Item4.Item2 as Size,
        Item1.Item2 as Ambient)
    -> Bonsai.IO.CsvWriter(FileName=saved_csv\Spheres_AllParams_Close.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true) => #22
    SubscribeSubject CloseLoopDuration
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=P23148DT3H34M14.5128448S) => #26
    #22, #26 -> TakeUntil

GroupWorkflow SpheresOpen
    SubscribeSubject Ydeg
    -> Bonsai.Numerics.DegreeToRadian => #1
    SubscribeSubject Depth => #2
    SubscribeSubject MouseZ => #3
    SubscribeSubject CloseLoopDuration
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=P23148DT3H34M14.5128448S) => #7
    SubscribeSubject OriginalSize => #8
    SubscribeSubject Xdeg
    -> Bonsai.Numerics.DegreeToRadian => #10
    #10, #1, #2 -> Zip => #11
    SubscribeSubject OpenLoopStartTime
    -> PropertyMapping(DueTime) => #13
    #11, #13 -> Bonsai.Shaders.Delay(DueTime=PT3M25S)
    -> ElementIndex => #15
    #15, #8 -> CombineLatest => #16
    #16, #3 -> WithLatestFrom
    -> SphericalCoordinates
    -> CreateObservable CreateSpheres
        WorkflowInput Source1
        -> BehaviorSubject ThisSphereParams
        -> MulticastSubject SphereNewParamsOpen => #2
        SubscribeSubject Draw => #3
        SubscribeSubject LifeTime => #4
        SubscribeSubject LifeTime
        -> Multiply(Operand=FloatProperty(Value=1E+07))
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT10S) => #8
        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Accumulate => #11
        SubscribeSubject ThisSphereParams
        -> MemberSelector(Selector=Item1) => #13
        #13, #11, #4 -> CombineLatest
        -> CreateFading => #15
        #2, #15 -> CombineLatest
        -> MulticastSubject SphereAllParamsOpen => #17
        #3, #17 -> CombineLatest
        -> Bonsai.Scripting.ExpressionTransform Rename
          Expression:
            new(
            Item1 as Draw,
            Item2.Item2 as Ambient,
            Item2.Item1.Item1 as SphereID,
            Item2.Item1.Item2.Item1 as Azimuth,
            Item2.Item1.Item2.Item2 as Elevation,
            Item2.Item1.Item2.Item3 as Depth,
            Item2.Item1.Item3.Item1 as X,
            Item2.Item1.Item3.Item2 as Y,
            Item2.Item1.Item3.Item3 as Z0,
            Item2.Item1.Item3.Item4 as Z,
            Item2.Item1.Item3.Item5 as MouseZ,
            Item2.Item1.Item4.Item2 as Size)
        -> InputMapping
          Selector=Draw
          TranslationX(Selector=X)
          TranslationY(Selector=Y)
          TranslationZ(Selector=Z)
          ScaleX(Selector=Size)
          ScaleY(Selector=Size)
          ScaleZ(Selector=Size)
          Ambient(Selector=Ambient)
        -> IncludeWorkflow => #21
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-26.2002621
          TranslationY=64.27876
          TranslationZ=253.984634
          ScaleX=5
          ScaleY=5
          ScaleZ=5
          MeshName=sphere
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=0
        #21, #8 -> TakeUntil
        -> WorkflowOutput
    -> Merge => #20
    #20, #7 -> TakeUntil
    -> WorkflowOutput

GroupWorkflow SphereParamsLoggerOpen
    BehaviorSubject<System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single))> SphereNewParamsOpen => #0
    SubscribeSubject Frames => #1
    #0, #1 -> WithLatestFrom
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item2.Index as Frame,
        Item2.Value.ElapsedTime as FrameElapsedTime,
        Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
        Item1.Item1 as SphereID,
        Math.Round(Item1.Item2.Item1/Math.PI*180) as Azimuth,
        Math.Round(Item1.Item2.Item2/Math.PI*180) as Elevation,
        Item1.Item2.Item3 as Depth,
        Item1.Item3.Item1 as X,
        Item1.Item3.Item2 as Y,
        Item1.Item3.Item3 as Z0,
        Item1.Item3.Item4 as Z,
        Item1.Item3.Item5 as MouseZ,
        Item1.Item4.Item1 as OriginalSize,
        Item1.Item4.Item2 as Size)
    -> Bonsai.IO.CsvWriter(FileName=saved_csv\Spheres_NewParams_Open.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    BehaviorSubject<System.Tuple(System.Tuple(System.Int32,System.Tuple(System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single,System.Single,System.Single,System.Single),System.Tuple(System.Single,System.Single)),System.Single)> SphereAllParamsOpen => #5
    SubscribeSubject Frames => #6
    #5, #6 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item2.Index as Frame,
        Item2.Value.ElapsedTime as FrameElapsedTime,
        Item2.Value.ElapsedRealTime as FrameElapsedRealTime,
        Item1.Item1.Item1 as SphereID,
        Math.Round(Item1.Item1.Item2.Item1/Math.PI*180) as Azimuth,
        Math.Round(Item1.Item1.Item2.Item2/Math.PI*180) as Elevation,
        Item1.Item1.Item2.Item3 as Depth,
        Item1.Item1.Item3.Item1 as X,
        Item1.Item1.Item3.Item2 as Y,
        Item1.Item1.Item3.Item3 as Z0,
        Item1.Item1.Item3.Item4 as Z,
        Item1.Item1.Item3.Item5 as MouseZ,
        Item1.Item1.Item4.Item1 as OriginalSize,
        Item1.Item1.Item4.Item2 as Size,
        Item1.Item2 as Ambient)
    -> Bonsai.IO.CsvWriter(FileName=saved_csv\Spheres_AllParams_Open.csv, Append=false, Overwrite=true, Suffix=Timestamp, IncludeHeader=true) => #9
    SubscribeSubject CloseLoopDuration
    -> Multiply(Operand=FloatProperty(Value=1E+07))
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=P23148DT3H34M14.5128448S) => #13
    #9, #13 -> TakeUntil

GroupWorkflow harp_hardware
    IncludeWorkflow Command(Path=Bonsai.Harp:CommandSubject.bonsai)
    -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Disable, IgnoreErrors=false, PortName=COM3) => #1
    -> MemberSelector(Selector=MessageBytes) => #2
    ExternalizedMapping(Path(DisplayName=HarpSavePath, Category=Logging)) => #3
    #3, #2 -> Bonsai.Dsp.MatrixWriter(Path=harp_meassges.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #1 -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:MulticastTimestamp.bonsai)
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1)
    -> PublishSubject LickDetection
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterAnalogInput, Mask=Port2)
    -> MemberSelector(Selector=Value)
    -> BehaviorSubject photodiode
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
    -> GroupWorkflow CalculateDistance
        WorkflowInput Source1
        -> Skip(Count=1)
        -> Buffer(Count=2, Skip=1)
        -> Bonsai.Scripting.ExpressionTransform diffence
          Expression: it[0]-it[1]
        -> Bonsai.Scripting.ExpressionTransform CutArtefact
          Expression:
            new(
            (it > 60000)? (it-65536) : ((it<-60000)? (it+65536) : it) as step
            )
        -> MemberSelector(Selector=step)
        -> Accumulate
        -> WorkflowOutput
    -> BehaviorSubject "Mouse Distance"
    #1 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
    -> PublishSubject SIFrameTrigger

    PublishSubject<System.Boolean> Reward
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke2Valve)
    -> MulticastSubject Command

    IncludeWorkflow Timestamp(Path=Bonsai.Harp:TimestampSubject.bonsai)

    PublishSubject<System.Boolean> DO0
    -> Disable BooleanProperty(Value=false)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Digital0)
    -> MulticastSubject Command

Disable GroupWorkflow TestSphereSize
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=180, Count=37)
    -> Bonsai.Numerics.DegreeToRadian => #1
    FloatProperty(Value=0)
    -> Bonsai.Numerics.DegreeToRadian => #3
    FloatProperty(Value=3) => #4
    FloatProperty(Value=0.043) => #5
    #1, #3, #4, #5 -> CombineLatest
    -> SelectMany
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as Azi,
            Item2 as Ele,
            Item3 as Depth,
            Item4 as OriSize)
        -> Bonsai.Scripting.ExpressionTransform => #2
          Expression:
            new(
            Depth * Math.Cos(Ele) * Math.Cos(Azi) as X,
            Depth * Math.Sin(Ele) as Y,
            Depth * Math.Cos(Ele) * Math.Sin(Azi) as Z0,
            Depth * OriSize as Size
            )
        SubscribeSubject Draw => #3
        #2, #3 -> CombineLatest
        -> InputMapping
          Selector=Item2
          TranslationX(Selector=Item1.X)
          TranslationY(Selector=Item1.Y)
          TranslationZ(Selector=Item1.Z0)
          ScaleX(Selector=Item1.Size)
          ScaleY(Selector=Item1.Size)
          ScaleZ(Selector=Item1.Size)
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawModel.bonsai
          TranslationX=-3
          TranslationY=0
          TranslationZ=3.673819E-16
          ScaleX=0.129000008
          ScaleY=0.129000008
          ScaleZ=0.129000008
          MeshName=sphere
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=1, Y=1, Z=1)
          SpecularExponent=10
          RotationZ=0
          RotationY=0
          RotationX=0
        -> WorkflowOutput
    -> WorkflowOutput

GroupWorkflow FrameLogger
    Bonsai.Shaders.UpdateFrame
    -> Disable Bonsai.Shaders.RenderFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> ElementIndex
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        it.Value.Index as Frame,
        it.Value.Value as BonsaiElapsedTime, it.Timestamp as HarpTime)
    -> Bonsai.IO.CsvWriter(FileName=saved_csv\Spheres_framelog.csv, Delimiter=",", Append=true, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
    -> WorkflowOutput
