<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>0</RangeMin>
        <RangeMax>1</RangeMax>
        <Count>4</Count>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>0</RangeMin>
              <RangeMax>1</RangeMax>
              <Count>10</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT4S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
                <gl:Period>PT0.4S</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Params</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="Item1.Item1.Value.Item1" />
                <Property Name="LocationY" Selector="Item1.Item2.Item1" />
              </PropertyMappings>
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>1</LocationX>
              <LocationY>1</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="11" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedRealTime</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Tuple(rx:ElementIndex(sys:Tuple(sys:Double,sys:Int64)),sys:Tuple(sys:Double,sys:Int64))">
        <Name>Params</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item2 as Frames,
Item1.Item1.Index as Index,
Item1.Item1.Value.Item1 as X,
Item1.Item2.Item1 as Y
)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>E:\vis-stim\vis-stim-depth\Spheres\Bonsai\new-test\saved_csv\suibian.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>