<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DarkGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>E:\code\bonvision-examples\Yiran Bonsai stimulations\sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseMove" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>3000</dsp:Max>
          <dsp:RangeMin>-10</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>2000</dsp:Max>
          <dsp:RangeMin>-10</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="X" Selector="Item1" />
          <Property Name="Y" Selector="Item2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Z" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>-1.60666668</gl:X>
          <gl:Y>-7.21</gl:Y>
          <gl:Z>5</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>-1.60666668</X>
          <Y>-7.21</Y>
          <Z>5</Z>
        </Eye>
        <Target>
          <X>-0</X>
          <Y>-0</Y>
          <Z>-1</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>sphere</MeshName>
        <Ambient>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:MouseMove" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>X</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Rescale">
            <dsp:Min>0</dsp:Min>
            <dsp:Max>3000</dsp:Max>
            <dsp:RangeMin>-10</dsp:RangeMin>
            <dsp:RangeMax>10</dsp:RangeMax>
            <dsp:RescaleType>Linear</dsp:RescaleType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="X" Selector="it" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Y</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Rescale">
            <dsp:Min>0</dsp:Min>
            <dsp:Max>2000</dsp:Max>
            <dsp:RangeMin>-10</dsp:RangeMin>
            <dsp:RangeMax>10</dsp:RangeMax>
            <dsp:RescaleType>Linear</dsp:RescaleType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="Y" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:CreateVector3">
            <gl:X>0.446666658</gl:X>
            <gl:Y>-7.32</gl:Y>
            <gl:Z>1</gl:Z>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="Eye" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RenderFrame" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
          <Light>
            <X>1</X>
            <Y>1</Y>
            <Z>1</Z>
          </Light>
          <FieldOfView>90</FieldOfView>
          <Eye>
            <X>0.446666658</X>
            <Y>-7.32</Y>
            <Z>1</Z>
          </Eye>
          <Target>
            <X>-0</X>
            <Y>-0</Y>
            <Z>-1</Z>
          </Target>
          <Up>
            <X>0</X>
            <Y>1</Y>
            <Z>0</Z>
          </Up>
          <NearClip>0.1</NearClip>
          <FarClip>1000</FarClip>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
          <TranslationX>0</TranslationX>
          <TranslationY>0</TranslationY>
          <TranslationZ>0</TranslationZ>
          <ScaleX>1</ScaleX>
          <ScaleY>1</ScaleY>
          <ScaleZ>1</ScaleZ>
          <MeshName>sphere</MeshName>
          <Ambient>
            <X>1</X>
            <Y>1</Y>
            <Z>1</Z>
          </Ambient>
          <Diffuse>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Diffuse>
          <Specular>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Specular>
          <SpecularExponent>10</SpecularExponent>
          <RotationZ>0</RotationZ>
          <RotationY>0</RotationY>
          <RotationX>0</RotationX>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="25" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="28" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>