<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DarkGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>E:\code\vis-stim\Yiran\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT0S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>ResetQuadratureCounter</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:CommandSubject.bonsai">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:PortName>COM6</harp:PortName>
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>QuadratureCounter</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Buffer">
            <dsp:Count>10000</dsp:Count>
            <dsp:Skip xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>20000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>100</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LatestOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZsc</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZsc</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
0 as X,
0 as Y,
it as EyeZ,
it+1 as TargetZ)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" Selector="X,Y,EyeZ" />
          <Property Name="Target" Selector="X,Y,TargetZ" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>59.515</Z>
        </Eye>
        <Target>
          <X>0</X>
          <Y>0</Y>
          <Z>60.515</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.001</NearClip>
        <FarClip>100</FarClip>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
          <RangeMin>1</RangeMin>
          <RangeMax>5</RangeMax>
          <Count>5</Count>
        </Builder>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\code\vis-stim\Yiran\vis-stim-depth\Spheres\Files_inputs\TranslationX_multi.csv</io:FileName>
        <io:ListSeparator />
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\code\vis-stim\Yiran\vis-stim-depth\Spheres\Files_inputs\TranslationY_multi.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\code\vis-stim\Yiran\vis-stim-depth\Spheres\Files_inputs\TranslationZ_multi.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>E:\code\vis-stim\Yiran\vis-stim-depth\Spheres\Files_inputs\Ambient_values_multi.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>CreateSpheres</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowInput">
                <Name>Source2</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="AsyncSubject">
                <Name>parameters</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="gl:Timer">
                  <gl:DueTime>PT0S</gl:DueTime>
                  <gl:Period>PT0.01S</gl:Period>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>parameters</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>parameters</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:CombineLatest" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="Ambient" Selector="Item2.Item1" />
                  <Property Name="TranslationX" Selector="Item2.Item2.Item2" />
                  <Property Name="TranslationY" Selector="Item2.Item2.Item3" />
                  <Property Name="TranslationZ" Selector="Item2.Item2.Item4" />
                </PropertyMappings>
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                <TranslationX>5</TranslationX>
                <TranslationY>5</TranslationY>
                <TranslationZ>1</TranslationZ>
                <ScaleX>0.2</ScaleX>
                <ScaleY>0.2</ScaleY>
                <ScaleZ>0.2</ScaleZ>
                <MeshName>sphere</MeshName>
                <Ambient>
                  <X>0.664</X>
                  <Y>0.664</Y>
                  <Z>0.664</Z>
                </Ambient>
                <Diffuse>
                  <X>0</X>
                  <Y>0</Y>
                  <Z>0</Z>
                </Diffuse>
                <Specular>
                  <X>0</X>
                  <Y>0</Y>
                  <Z>0</Z>
                </Specular>
                <SpecularExponent>10</SpecularExponent>
                <RotationZ>0</RotationZ>
                <RotationY>0</RotationY>
                <RotationX>0</RotationX>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>parameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
                <gl:Period>PT0.01S</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>parameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>parameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item4</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZsc</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="BehaviorSubject">
              <Name>CreationZPos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1 as Ambient,
Item2.Item2 as X,
Item2.Item3 as Y,
Item3 as Z)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZsc</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CreationZPos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DelaySubscription">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="TranslationX" Selector="Item2.X" />
                <Property Name="TranslationY" Selector="Item2.Y" />
                <Property Name="TranslationZ" Selector="Item2.Z" />
                <Property Name="Ambient" Selector="Item2.Ambient" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>5</TranslationX>
              <TranslationY>5</TranslationY>
              <TranslationZ>59.98</TranslationZ>
              <ScaleX>0.2</ScaleX>
              <ScaleY>0.2</ScaleY>
              <ScaleZ>0.2</ScaleZ>
              <MeshName>sphere</MeshName>
              <Ambient>
                <X>0.6777143</X>
                <Y>0.6777143</Y>
                <Z>0.6777143</Z>
              </Ambient>
              <Diffuse>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Diffuse>
              <Specular>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="42" Label="Source1" />
            <Edge From="18" To="22" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="31" Label="Source1" />
            <Edge From="24" To="31" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source3" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="40" Label="Source1" />
            <Edge From="33" To="35" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT0S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:ToArray" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Length</Selector>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="20" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="27" Label="Source2" />
      <Edge From="24" To="27" Label="Source3" />
      <Edge From="25" To="27" Label="Source4" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>