<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DarkGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>E:\vis-stim\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedRealTime</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EventArgs.Time</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:MouseMove" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>2000</dsp:Max>
          <dsp:RangeMin>0</dsp:RangeMin>
          <dsp:RangeMax>10</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="DoubleProperty">
          <Value>-3</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Z" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Z>3.53</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>3.53</Z>
        </Eye>
        <Target>
          <X>0</X>
          <Y>0</Y>
          <Z>1</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT4S</gl:DueTime>
          <gl:Period>PT0S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZstart</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Workflow>
            <Nodes>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
                <RangeMin>10000000</RangeMin>
                <RangeMax>100000000</RangeMax>
                <Count>10</Count>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="num:VariationWithRepetition">
                  <num:Count>1</num:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="DueTime" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Draw</Name>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                <TranslationX>0</TranslationX>
                <TranslationY>0</TranslationY>
                <TranslationZ>0</TranslationZ>
                <ScaleX>1</ScaleX>
                <ScaleY>1</ScaleY>
                <ScaleZ>1</ScaleZ>
                <MeshName>sphere</MeshName>
                <Ambient>
                  <X>0.2</X>
                  <Y>0.2</Y>
                  <Z>0.2</Z>
                </Ambient>
                <Diffuse>
                  <X>0.8</X>
                  <Y>0.8</Y>
                  <Z>0.8</Z>
                </Diffuse>
                <Specular>
                  <X>0.8</X>
                  <Y>0.8</Y>
                  <Z>0.8</Z>
                </Specular>
                <SpecularExponent>10</SpecularExponent>
                <RotationZ>0</RotationZ>
                <RotationY>0</RotationY>
                <RotationX>0</RotationX>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:Timer">
                  <gl:DueTime>PT3S</gl:DueTime>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:TakeUntil" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:DelaySubscription">
                  <gl:DueTime>PT9S</gl:DueTime>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="7" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="6" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Repeat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Timestamp</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Second</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>TimeOfDay.TotalSeconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT4S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="TranslationZ" Selector="Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>5.75</TranslationZ>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ScaleZ>1</ScaleZ>
              <MeshName>sphere</MeshName>
              <Ambient>
                <X>0.2</X>
                <Y>0.2</Y>
                <Z>0.2</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DelaySubscription">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Second</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeOfDay.TotalSeconds</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="21" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>