<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DarkGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>sphere</gl:Name>
              <gl:FileName>sphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:PortName>COM6</harp:PortName>
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>QuadratureCounter</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Buffer">
            <dsp:Count>10000</dsp:Count>
            <dsp:Skip xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>20000</dsp:Max>
          <dsp:RangeMin>100</dsp:RangeMin>
          <dsp:RangeMax>0</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Z" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Z>32.925</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>32.925</Z>
        </Eye>
        <Target>
          <X>-0</X>
          <Y>-0</Y>
          <Z>-1</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
          <RangeMin>1</RangeMin>
          <RangeMax>5</RangeMax>
          <Count>5</Count>
        </Builder>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>TranslationX_multi.csv</io:FileName>
        <io:ListSeparator />
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>XPosSeq</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>TranslationY_multi.csv</io:FileName>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>YPosSeq</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MouseZ</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="DoubleProperty">
          <Value>5</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>ZPos</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Buffer">
            <dsp:Count>10</dsp:Count>
            <dsp:Skip xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Average" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Val0</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:RunningAverage">
            <dsp:Alpha>0</dsp:Alpha>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvReader">
          <io:FileName>TranslationZ_multi.csv</io:FileName>
          <io:ScanPattern>%f</io:ScanPattern>
          <io:SkipRows>0</io:SkipRows>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ReplaySubject">
          <Name>ZPosSeq</Name>
          <BufferSize xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>Ambient_values_multi.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>CreateTrials</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>XPosSeq</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>YPosSeq</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ZPos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>CreateSpheres</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DrawSphere</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Ambient" Selector="Item2.Item1" />
                            <Property Name="TranslationX" Selector="Item2.Item2" />
                            <Property Name="TranslationY" Selector="Item2.Item3" />
                            <Property Name="TranslationZ" Selector="Item2.Item4" />
                          </PropertyMappings>
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                          <TranslationX>5</TranslationX>
                          <TranslationY>5</TranslationY>
                          <TranslationZ>16.975</TranslationZ>
                          <ScaleX>0.2</ScaleX>
                          <ScaleY>0.2</ScaleY>
                          <ScaleZ>0.2</ScaleZ>
                          <MeshName>sphere</MeshName>
                          <Ambient>
                            <X>0.664</X>
                            <Y>0.664</Y>
                            <Z>0.664</Z>
                          </Ambient>
                          <Diffuse>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                          </Diffuse>
                          <Specular>
                            <X>0</X>
                            <Y>0</Y>
                            <Z>0</Z>
                          </Specular>
                          <SpecularExponent>10</SpecularExponent>
                          <RotationZ>0</RotationZ>
                          <RotationY>0</RotationY>
                          <RotationX>0</RotationX>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0.01S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.01S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowOutput" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Concat" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="3" To="5" Label="Source3" />
            <Edge From="4" To="5" Label="Source4" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>